---
API: 2
OpenSesame: 3.1.2
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start Attention_Network_Test
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend xpyriment
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "E:\\emma_toolbox\\Attention"
set disable_garbage_collection yes
set description "Default description"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set bidi no
set background "#ffffff"

define sequence Attention_Network_Test
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run version_history always
	run trigger_codes always
	run Start always
	run new_inline_script always
	run new_reset_feedback always
	run Resetvariables always
	run Checkbuttons_ANT always
	run Instructies_kinderen_ANT_oefen "[response_Start]='k'"
	run Instructies_volwassenen_ANT_oefen "[response_Start]='v'"
	run Resetvariables always
	run new_reset_feedback always
	run Oefenblok_ANT "[response_Instructie]!='t'"
	run Instructie_kinderen_ANT_blok1 "[response_Start]='k'"
	run Instructie_volwassenen_ANT_blok1 "[response_Start]='v'"
	run Resetvariables always
	run new_reset_feedback always
	run Blok1_ANT always
	run Instructie_kinderen_ANT_blok2 "[response_Start]='k'"
	run Instructie_volwassenen_ANT_blok2 "[response_Start]='v'"
	run Resetvariables_1 always
	run new_reset_feedback always
	run Blok2_ANT always
	run Instructie_kinderen_ANT_blok3 "[response_Start]='k'"
	run Instructie_volwassenen_ANT_blok3 "[response_Start]='v'"
	run Resetvariables_1 always
	run new_reset_feedback always
	run Blok3_ANT always
	run Instructie_kinderen_ANT_blok4 "[response_Start]='k'"
	run Instructie_volwassenen_ANT_blok4 "[response_Start]='v'"
	run Resetvariables_1 always
	run new_reset_feedback always
	run Blok4_ANT always
	run End always

define loop Blok1_ANT
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 36
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 cue_type cue
	setcycle 0 cue_pos -50
	setcycle 0 target_type congruent_left
	setcycle 0 target_pos -50
	setcycle 0 fixation_duration ""
	setcycle 0 cue_condition spatial
	setcycle 0 target_condition congruent
	setcycle 0 correct_response 5
	setcycle 0 block 3
	setcycle 0 count_block 1
	setcycle 0 count_total 1
	setcycle 1 cue_type cue
	setcycle 1 cue_pos 50
	setcycle 1 target_type congruent_right
	setcycle 1 target_pos 50
	setcycle 1 fixation_duration ""
	setcycle 1 cue_condition spatial
	setcycle 1 target_condition congruent
	setcycle 1 correct_response 6
	setcycle 1 block 3
	setcycle 1 count_block 2
	setcycle 1 count_total 2
	setcycle 2 cue_type cue
	setcycle 2 cue_pos 0
	setcycle 2 target_type incongruent_right
	setcycle 2 target_pos 50
	setcycle 2 fixation_duration ""
	setcycle 2 cue_condition cue
	setcycle 2 target_condition incongruent
	setcycle 2 correct_response 6
	setcycle 2 block 3
	setcycle 2 count_block 3
	setcycle 2 count_total 3
	setcycle 3 cue_type cue
	setcycle 3 cue_pos 0
	setcycle 3 target_type neutral_right
	setcycle 3 target_pos -50
	setcycle 3 fixation_duration ""
	setcycle 3 cue_condition cue
	setcycle 3 target_condition neutral
	setcycle 3 correct_response 6
	setcycle 3 block 3
	setcycle 3 count_block 4
	setcycle 3 count_total 4
	setcycle 4 cue_type cue
	setcycle 4 cue_pos 0
	setcycle 4 target_type congruent_right
	setcycle 4 target_pos 50
	setcycle 4 fixation_duration ""
	setcycle 4 cue_condition cue
	setcycle 4 target_condition congruent
	setcycle 4 correct_response 6
	setcycle 4 block 3
	setcycle 4 count_block 5
	setcycle 4 count_total 5
	setcycle 5 cue_type fixation
	setcycle 5 cue_pos 0
	setcycle 5 target_type congruent_right
	setcycle 5 target_pos -50
	setcycle 5 fixation_duration ""
	setcycle 5 cue_condition fixation
	setcycle 5 target_condition congruent
	setcycle 5 correct_response 6
	setcycle 5 block 3
	setcycle 5 count_block 6
	setcycle 5 count_total 6
	setcycle 6 cue_type fixation
	setcycle 6 cue_pos 0
	setcycle 6 target_type congruent_right
	setcycle 6 target_pos 50
	setcycle 6 fixation_duration ""
	setcycle 6 cue_condition fixation
	setcycle 6 target_condition congruent
	setcycle 6 correct_response 6
	setcycle 6 block 3
	setcycle 6 count_block 7
	setcycle 6 count_total 7
	setcycle 7 cue_type fixation
	setcycle 7 cue_pos 0
	setcycle 7 target_type incongruent_left
	setcycle 7 target_pos 50
	setcycle 7 fixation_duration ""
	setcycle 7 cue_condition fixation
	setcycle 7 target_condition incongruent
	setcycle 7 correct_response 5
	setcycle 7 block 3
	setcycle 7 count_block 8
	setcycle 7 count_total 8
	setcycle 8 cue_type cue
	setcycle 8 cue_pos 0
	setcycle 8 target_type neutral_right
	setcycle 8 target_pos 50
	setcycle 8 fixation_duration ""
	setcycle 8 cue_condition cue
	setcycle 8 target_condition neutral
	setcycle 8 correct_response 6
	setcycle 8 block 3
	setcycle 8 count_block 9
	setcycle 8 count_total 9
	setcycle 9 cue_type cue
	setcycle 9 cue_pos 0
	setcycle 9 target_type neutral_left
	setcycle 9 target_pos -50
	setcycle 9 fixation_duration ""
	setcycle 9 cue_condition cue
	setcycle 9 target_condition neutral
	setcycle 9 correct_response 5
	setcycle 9 block 3
	setcycle 9 count_block 10
	setcycle 9 count_total 10
	setcycle 10 cue_type cue
	setcycle 10 cue_pos 0
	setcycle 10 target_type congruent_right
	setcycle 10 target_pos -50
	setcycle 10 fixation_duration ""
	setcycle 10 cue_condition cue
	setcycle 10 target_condition congruent
	setcycle 10 correct_response 6
	setcycle 10 block 3
	setcycle 10 count_block 11
	setcycle 10 count_total 11
	setcycle 11 cue_type fixation
	setcycle 11 cue_pos 0
	setcycle 11 target_type incongruent_right
	setcycle 11 target_pos 50
	setcycle 11 fixation_duration ""
	setcycle 11 cue_condition fixation
	setcycle 11 target_condition incongruent
	setcycle 11 correct_response 6
	setcycle 11 block 3
	setcycle 11 count_block 12
	setcycle 11 count_total 12
	setcycle 12 cue_type cue
	setcycle 12 cue_pos 0
	setcycle 12 target_type congruent_left
	setcycle 12 target_pos 50
	setcycle 12 fixation_duration ""
	setcycle 12 cue_condition cue
	setcycle 12 target_condition congruent
	setcycle 12 correct_response 5
	setcycle 12 block 3
	setcycle 12 count_block 13
	setcycle 12 count_total 13
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	setcycle 14 cue_type fixation
	setcycle 14 cue_pos 0
	setcycle 14 target_type neutral_left
	setcycle 14 target_pos -50
	setcycle 14 fixation_duration ""
	setcycle 14 cue_condition fixation
	setcycle 14 target_condition neutral
	setcycle 14 correct_response 5
	setcycle 14 block 3
	setcycle 14 count_block 15
	setcycle 14 count_total 15
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	run Flanker_2

define loop Blok1_SRT
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 36
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 cue_type fixation
	setcycle 0 cue_pos 0
	setcycle 0 target_type simple
	setcycle 0 target_pos 0
	setcycle 0 fixation_duration ""
	setcycle 0 cue_condition simple
	setcycle 0 target_condition simple
	setcycle 0 correct_response 6
	setcycle 0 block 1
	setcycle 0 count_block 1
	setcycle 0 count_total 1
	setcycle 1 cue_type fixation
	setcycle 1 cue_pos 0
	setcycle 1 target_type simple
	setcycle 1 target_pos 0
	setcycle 1 fixation_duration ""
	setcycle 1 cue_condition simple
	setcycle 1 target_condition simple
	setcycle 1 correct_response 6
	setcycle 1 block 1
	setcycle 1 count_block 2
	setcycle 1 count_total 2
	setcycle 2 cue_type fixation
	setcycle 2 cue_pos 0
	setcycle 2 target_type simple
	setcycle 2 target_pos 0
	setcycle 2 fixation_duration ""
	setcycle 2 cue_condition simple
	setcycle 2 target_condition simple
	setcycle 2 correct_response 6
	setcycle 2 block 1
	setcycle 2 count_block 3
	setcycle 2 count_total 3
	setcycle 3 cue_type fixation
	setcycle 3 cue_pos 0
	setcycle 3 target_type simple
	setcycle 3 target_pos 0
	setcycle 3 fixation_duration ""
	setcycle 3 cue_condition simple
	setcycle 3 target_condition simple
	setcycle 3 correct_response 6
	setcycle 3 block 1
	setcycle 3 count_block 4
	setcycle 3 count_total 4
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	run SRT

define loop Blok2_ANT
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 36
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 cue_type fixation
	setcycle 0 cue_pos 0
	setcycle 0 target_type neutral_right
	setcycle 0 target_pos -50
	setcycle 0 fixation_duration ""
	setcycle 0 cue_condition fixation
	setcycle 0 target_condition neutral
	setcycle 0 correct_response 6
	setcycle 0 block 4
	setcycle 0 count_block 1
	setcycle 0 count_total 73
	setcycle 1 cue_type cue
	setcycle 1 cue_pos 50
	setcycle 1 target_type congruent_left
	setcycle 1 target_pos 50
	setcycle 1 fixation_duration ""
	setcycle 1 cue_condition spatial
	setcycle 1 target_condition congruent
	setcycle 1 correct_response 5
	setcycle 1 block 4
	setcycle 1 count_block 2
	setcycle 1 count_total 74
	setcycle 2 cue_type fixation
	setcycle 2 cue_pos 0
	setcycle 2 target_type incongruent_right
	setcycle 2 target_pos -50
	setcycle 2 fixation_duration ""
	setcycle 2 cue_condition fixation
	setcycle 2 target_condition incongruent
	setcycle 2 correct_response 6
	setcycle 2 block 4
	setcycle 2 count_block 3
	setcycle 2 count_total 75
	setcycle 3 cue_type cue
	setcycle 3 cue_pos -50
	setcycle 3 target_type incongruent_left
	setcycle 3 target_pos -50
	setcycle 3 fixation_duration ""
	setcycle 3 cue_condition spatial
	setcycle 3 target_condition incongruent
	setcycle 3 correct_response 5
	setcycle 3 block 4
	setcycle 3 count_block 4
	setcycle 3 count_total 76
	setcycle 4 cue_type cue
	setcycle 4 cue_pos 0
	setcycle 4 target_type incongruent_left
	setcycle 4 target_pos 50
	setcycle 4 fixation_duration ""
	setcycle 4 cue_condition cue
	setcycle 4 target_condition incongruent
	setcycle 4 correct_response 5
	setcycle 4 block 4
	setcycle 4 count_block 5
	setcycle 4 count_total 77
	setcycle 5 cue_type cue
	setcycle 5 cue_pos 0
	setcycle 5 target_type congruent_left
	setcycle 5 target_pos -50
	setcycle 5 fixation_duration ""
	setcycle 5 cue_condition cue
	setcycle 5 target_condition congruent
	setcycle 5 correct_response 5
	setcycle 5 block 4
	setcycle 5 count_block 6
	setcycle 5 count_total 78
	setcycle 6 cue_type fixation
	setcycle 6 cue_pos 0
	setcycle 6 target_type congruent_left
	setcycle 6 target_pos 50
	setcycle 6 fixation_duration ""
	setcycle 6 cue_condition fixation
	setcycle 6 target_condition congruent
	setcycle 6 correct_response 5
	setcycle 6 block 4
	setcycle 6 count_block 7
	setcycle 6 count_total 79
	setcycle 7 cue_type cue
	setcycle 7 cue_pos 0
	setcycle 7 target_type neutral_right
	setcycle 7 target_pos 50
	setcycle 7 fixation_duration ""
	setcycle 7 cue_condition cue
	setcycle 7 target_condition neutral
	setcycle 7 correct_response 6
	setcycle 7 block 4
	setcycle 7 count_block 8
	setcycle 7 count_total 80
	setcycle 8 cue_type cue
	setcycle 8 cue_pos 0
	setcycle 8 target_type incongruent_right
	setcycle 8 target_pos -50
	setcycle 8 fixation_duration ""
	setcycle 8 cue_condition cue
	setcycle 8 target_condition incongruent
	setcycle 8 correct_response 6
	setcycle 8 block 4
	setcycle 8 count_block 9
	setcycle 8 count_total 81
	setcycle 9 cue_type cue
	setcycle 9 cue_pos -50
	setcycle 9 target_type incongruent_right
	setcycle 9 target_pos -50
	setcycle 9 fixation_duration ""
	setcycle 9 cue_condition spatial
	setcycle 9 target_condition incongruent
	setcycle 9 correct_response 6
	setcycle 9 block 4
	setcycle 9 count_block 10
	setcycle 9 count_total 82
	setcycle 10 cue_type cue
	setcycle 10 cue_pos -50
	setcycle 10 target_type congruent_left
	setcycle 10 target_pos -50
	setcycle 10 fixation_duration ""
	setcycle 10 cue_condition spatial
	setcycle 10 target_condition congruent
	setcycle 10 correct_response 5
	setcycle 10 block 4
	setcycle 10 count_block 11
	setcycle 10 count_total 83
	setcycle 11 cue_type fixation
	setcycle 11 cue_pos 0
	setcycle 11 target_type neutral_right
	setcycle 11 target_pos 50
	setcycle 11 fixation_duration ""
	setcycle 11 cue_condition fixation
	setcycle 11 target_condition neutral
	setcycle 11 correct_response 6
	setcycle 11 block 4
	setcycle 11 count_block 12
	setcycle 11 count_total 84
	setcycle 12 cue_type fixation
	setcycle 12 cue_pos 0
	setcycle 12 target_type neutral_left
	setcycle 12 target_pos -50
	setcycle 12 fixation_duration ""
	setcycle 12 cue_condition fixation
	setcycle 12 target_condition neutral
	setcycle 12 correct_response 5
	setcycle 12 block 4
	setcycle 12 count_block 13
	setcycle 12 count_total 85
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	setcycle 18 cue_type cue
	setcycle 18 cue_pos 50
	setcycle 18 target_type congruent_right
	setcycle 18 target_pos 50
	setcycle 18 fixation_duration ""
	setcycle 18 cue_condition spatial
	setcycle 18 target_condition congruent
	setcycle 18 correct_response 6
	setcycle 18 block 4
	setcycle 18 count_block 19
	setcycle 18 count_total 91
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	run Flanker_2

define loop Blok2_SRT
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 36
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 cue_type fixation
	setcycle 0 cue_pos 0
	setcycle 0 target_type simple
	setcycle 0 target_pos 0
	setcycle 0 fixation_duration ""
	setcycle 0 cue_condition simple
	setcycle 0 target_condition simple
	setcycle 0 correct_response 6
	setcycle 0 block 2
	setcycle 0 count_block 1
	setcycle 0 count_total 37
	setcycle 1 cue_type fixation
	setcycle 1 cue_pos 0
	setcycle 1 target_type simple
	setcycle 1 target_pos 0
	setcycle 1 fixation_duration ""
	setcycle 1 cue_condition simple
	setcycle 1 target_condition simple
	setcycle 1 correct_response 6
	setcycle 1 block 2
	setcycle 1 count_block 2
	setcycle 1 count_total 38
	setcycle 2 cue_type fixation
	setcycle 2 cue_pos 0
	setcycle 2 target_type simple
	setcycle 2 target_pos 0
	setcycle 2 fixation_duration ""
	setcycle 2 cue_condition simple
	setcycle 2 target_condition simple
	setcycle 2 correct_response 6
	setcycle 2 block 2
	setcycle 2 count_block 3
	setcycle 2 count_total 39
	setcycle 3 cue_type fixation
	setcycle 3 cue_pos 0
	setcycle 3 target_type simple
	setcycle 3 target_pos 0
	setcycle 3 fixation_duration ""
	setcycle 3 cue_condition simple
	setcycle 3 target_condition simple
	setcycle 3 correct_response 6
	setcycle 3 block 2
	setcycle 3 count_block 4
	setcycle 3 count_total 40
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	run SRT

define loop Blok3_ANT
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 36
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 cue_type fixation
	setcycle 0 cue_pos 0
	setcycle 0 target_type neutral_right
	setcycle 0 target_pos -50
	setcycle 0 fixation_duration ""
	setcycle 0 cue_condition fixation
	setcycle 0 target_condition neutral
	setcycle 0 correct_response 6
	setcycle 0 block 5
	setcycle 0 count_block 1
	setcycle 0 count_total 73
	setcycle 1 cue_type cue
	setcycle 1 cue_pos 50
	setcycle 1 target_type congruent_left
	setcycle 1 target_pos 50
	setcycle 1 fixation_duration ""
	setcycle 1 cue_condition spatial
	setcycle 1 target_condition congruent
	setcycle 1 correct_response 5
	setcycle 1 block 5
	setcycle 1 count_block 2
	setcycle 1 count_total 74
	setcycle 2 cue_type fixation
	setcycle 2 cue_pos 0
	setcycle 2 target_type incongruent_right
	setcycle 2 target_pos -50
	setcycle 2 fixation_duration ""
	setcycle 2 cue_condition fixation
	setcycle 2 target_condition incongruent
	setcycle 2 correct_response 6
	setcycle 2 block 5
	setcycle 2 count_block 3
	setcycle 2 count_total 75
	setcycle 3 cue_type cue
	setcycle 3 cue_pos -50
	setcycle 3 target_type incongruent_left
	setcycle 3 target_pos -50
	setcycle 3 fixation_duration ""
	setcycle 3 cue_condition spatial
	setcycle 3 target_condition incongruent
	setcycle 3 correct_response 5
	setcycle 3 block 5
	setcycle 3 count_block 4
	setcycle 3 count_total 76
	setcycle 4 cue_type cue
	setcycle 4 cue_pos 0
	setcycle 4 target_type incongruent_left
	setcycle 4 target_pos 50
	setcycle 4 fixation_duration ""
	setcycle 4 cue_condition cue
	setcycle 4 target_condition incongruent
	setcycle 4 correct_response 5
	setcycle 4 block 5
	setcycle 4 count_block 5
	setcycle 4 count_total 77
	setcycle 5 cue_type cue
	setcycle 5 cue_pos 0
	setcycle 5 target_type congruent_left
	setcycle 5 target_pos -50
	setcycle 5 fixation_duration ""
	setcycle 5 cue_condition cue
	setcycle 5 target_condition congruent
	setcycle 5 correct_response 5
	setcycle 5 block 5
	setcycle 5 count_block 6
	setcycle 5 count_total 78
	setcycle 6 cue_type fixation
	setcycle 6 cue_pos 0
	setcycle 6 target_type congruent_left
	setcycle 6 target_pos 50
	setcycle 6 fixation_duration ""
	setcycle 6 cue_condition fixation
	setcycle 6 target_condition congruent
	setcycle 6 correct_response 5
	setcycle 6 block 5
	setcycle 6 count_block 7
	setcycle 6 count_total 79
	setcycle 7 cue_type cue
	setcycle 7 cue_pos 0
	setcycle 7 target_type neutral_right
	setcycle 7 target_pos 50
	setcycle 7 fixation_duration ""
	setcycle 7 cue_condition cue
	setcycle 7 target_condition neutral
	setcycle 7 correct_response 6
	setcycle 7 block 5
	setcycle 7 count_block 8
	setcycle 7 count_total 80
	setcycle 8 cue_type cue
	setcycle 8 cue_pos 0
	setcycle 8 target_type incongruent_right
	setcycle 8 target_pos -50
	setcycle 8 fixation_duration ""
	setcycle 8 cue_condition cue
	setcycle 8 target_condition incongruent
	setcycle 8 correct_response 6
	setcycle 8 block 5
	setcycle 8 count_block 9
	setcycle 8 count_total 81
	setcycle 9 cue_type cue
	setcycle 9 cue_pos -50
	setcycle 9 target_type incongruent_right
	setcycle 9 target_pos -50
	setcycle 9 fixation_duration ""
	setcycle 9 cue_condition spatial
	setcycle 9 target_condition incongruent
	setcycle 9 correct_response 6
	setcycle 9 block 5
	setcycle 9 count_block 10
	setcycle 9 count_total 82
	setcycle 10 cue_type cue
	setcycle 10 cue_pos -50
	setcycle 10 target_type congruent_left
	setcycle 10 target_pos -50
	setcycle 10 fixation_duration ""
	setcycle 10 cue_condition spatial
	setcycle 10 target_condition congruent
	setcycle 10 correct_response 5
	setcycle 10 block 5
	setcycle 10 count_block 11
	setcycle 10 count_total 83
	setcycle 11 cue_type fixation
	setcycle 11 cue_pos 0
	setcycle 11 target_type neutral_right
	setcycle 11 target_pos 50
	setcycle 11 fixation_duration ""
	setcycle 11 cue_condition fixation
	setcycle 11 target_condition neutral
	setcycle 11 correct_response 6
	setcycle 11 block 5
	setcycle 11 count_block 12
	setcycle 11 count_total 84
	setcycle 12 cue_type fixation
	setcycle 12 cue_pos 0
	setcycle 12 target_type neutral_left
	setcycle 12 target_pos -50
	setcycle 12 fixation_duration ""
	setcycle 12 cue_condition fixation
	setcycle 12 target_condition neutral
	setcycle 12 correct_response 5
	setcycle 12 block 5
	setcycle 12 count_block 13
	setcycle 12 count_total 85
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	setcycle 18 cue_type cue
	setcycle 18 cue_pos 50
	setcycle 18 target_type congruent_right
	setcycle 18 target_pos 50
	setcycle 18 fixation_duration ""
	setcycle 18 cue_condition spatial
	setcycle 18 target_condition congruent
	setcycle 18 correct_response 6
	setcycle 18 block 5
	setcycle 18 count_block 19
	setcycle 18 count_total 91
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	run Flanker_2

define loop Blok3_ANT_
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 72
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 cue_type fixation
	setcycle 0 cue_pos 0
	setcycle 0 target_type neutral_right
	setcycle 0 target_pos -50
	setcycle 0 fixation_duration ""
	setcycle 0 cue_condition fixation
	setcycle 0 target_condition neutral
	setcycle 0 correct_response 6
	setcycle 0 block ""
	setcycle 0 count_block 1
	setcycle 0 count_total 73
	setcycle 1 cue_type cue
	setcycle 1 cue_pos 50
	setcycle 1 target_type congruent_left
	setcycle 1 target_pos 50
	setcycle 1 fixation_duration ""
	setcycle 1 cue_condition spatial
	setcycle 1 target_condition congruent
	setcycle 1 correct_response 5
	setcycle 1 block ""
	setcycle 1 count_block 2
	setcycle 1 count_total 74
	setcycle 2 cue_type fixation
	setcycle 2 cue_pos 0
	setcycle 2 target_type incongruent_right
	setcycle 2 target_pos -50
	setcycle 2 fixation_duration ""
	setcycle 2 cue_condition fixation
	setcycle 2 target_condition incongruent
	setcycle 2 correct_response 6
	setcycle 2 block ""
	setcycle 2 count_block 3
	setcycle 2 count_total 75
	setcycle 3 cue_type cue
	setcycle 3 cue_pos -50
	setcycle 3 target_type incongruent_left
	setcycle 3 target_pos -50
	setcycle 3 fixation_duration ""
	setcycle 3 cue_condition spatial
	setcycle 3 target_condition incongruent
	setcycle 3 correct_response 5
	setcycle 3 block ""
	setcycle 3 count_block 4
	setcycle 3 count_total 76
	setcycle 4 cue_type cue
	setcycle 4 cue_pos 0
	setcycle 4 target_type incongruent_left
	setcycle 4 target_pos 50
	setcycle 4 fixation_duration ""
	setcycle 4 cue_condition cue
	setcycle 4 target_condition incongruent
	setcycle 4 correct_response 5
	setcycle 4 block ""
	setcycle 4 count_block 5
	setcycle 4 count_total 77
	setcycle 5 cue_type cue
	setcycle 5 cue_pos 0
	setcycle 5 target_type congruent_left
	setcycle 5 target_pos -50
	setcycle 5 fixation_duration ""
	setcycle 5 cue_condition cue
	setcycle 5 target_condition congruent
	setcycle 5 correct_response 5
	setcycle 5 block ""
	setcycle 5 count_block 6
	setcycle 5 count_total 78
	setcycle 6 cue_type fixation
	setcycle 6 cue_pos 0
	setcycle 6 target_type congruent_left
	setcycle 6 target_pos 50
	setcycle 6 fixation_duration ""
	setcycle 6 cue_condition fixation
	setcycle 6 target_condition congruent
	setcycle 6 correct_response 5
	setcycle 6 block ""
	setcycle 6 count_block 7
	setcycle 6 count_total 79
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	setcycle 8 cue_type cue
	setcycle 8 cue_pos 0
	setcycle 8 target_type incongruent_right
	setcycle 8 target_pos -50
	setcycle 8 fixation_duration ""
	setcycle 8 cue_condition cue
	setcycle 8 target_condition incongruent
	setcycle 8 correct_response 6
	setcycle 8 block ""
	setcycle 8 count_block 9
	setcycle 8 count_total 81
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	setcycle 11 cue_type fixation
	setcycle 11 cue_pos 0
	setcycle 11 target_type neutral_right
	setcycle 11 target_pos 50
	setcycle 11 fixation_duration ""
	setcycle 11 cue_condition fixation
	setcycle 11 target_condition neutral
	setcycle 11 correct_response 6
	setcycle 11 block ""
	setcycle 11 count_block 12
	setcycle 11 count_total 84
	setcycle 12 cue_type fixation
	setcycle 12 cue_pos 0
	setcycle 12 target_type neutral_left
	setcycle 12 target_pos -50
	setcycle 12 fixation_duration ""
	setcycle 12 cue_condition fixation
	setcycle 12 target_condition neutral
	setcycle 12 correct_response 5
	setcycle 12 block ""
	setcycle 12 count_block 13
	setcycle 12 count_total 85
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	setcycle 18 cue_type cue
	setcycle 18 cue_pos 50
	setcycle 18 target_type congruent_right
	setcycle 18 target_pos 50
	setcycle 18 fixation_duration ""
	setcycle 18 cue_condition spatial
	setcycle 18 target_condition congruent
	setcycle 18 correct_response 6
	setcycle 18 block ""
	setcycle 18 count_block 19
	setcycle 18 count_total 91
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	setcycle 36 cue_type cue
	setcycle 36 cue_pos 0
	setcycle 36 target_type congruent_left
	setcycle 36 target_pos -50
	setcycle 36 fixation_duration 245
	setcycle 36 cue_condition cue
	setcycle 36 target_condition congruent
	setcycle 36 correct_response 5
	setcycle 36 block block_3
	setcycle 36 count_block 37
	setcycle 36 count_total 181
	setcycle 37 cue_type cue
	setcycle 37 cue_pos 0
	setcycle 37 target_type incongruent_left
	setcycle 37 target_pos -50
	setcycle 37 fixation_duration 645
	setcycle 37 cue_condition cue
	setcycle 37 target_condition incongruent
	setcycle 37 correct_response 5
	setcycle 37 block block_3
	setcycle 37 count_block 38
	setcycle 37 count_total 182
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	setcycle 41 cue_type fixation
	setcycle 41 cue_pos 0
	setcycle 41 target_type congruent_left
	setcycle 41 target_pos -50
	setcycle 41 fixation_duration 495
	setcycle 41 cue_condition fixation
	setcycle 41 target_condition congruent
	setcycle 41 correct_response 5
	setcycle 41 block block_3
	setcycle 41 count_block 42
	setcycle 41 count_total 186
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	run Flanker_2

define loop Blok3_ANT__1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 37
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 cue_type fixation
	setcycle 0 cue_pos 0
	setcycle 0 target_type neutral_right
	setcycle 0 target_pos -50
	setcycle 0 fixation_duration ""
	setcycle 0 cue_condition fixation
	setcycle 0 target_condition neutral
	setcycle 0 correct_response 6
	setcycle 0 block ""
	setcycle 0 count_block 1
	setcycle 0 count_total 73
	setcycle 1 cue_type cue
	setcycle 1 cue_pos 50
	setcycle 1 target_type congruent_left
	setcycle 1 target_pos 50
	setcycle 1 fixation_duration ""
	setcycle 1 cue_condition spatial
	setcycle 1 target_condition congruent
	setcycle 1 correct_response 5
	setcycle 1 block ""
	setcycle 1 count_block 2
	setcycle 1 count_total 74
	setcycle 2 cue_type fixation
	setcycle 2 cue_pos 0
	setcycle 2 target_type incongruent_right
	setcycle 2 target_pos -50
	setcycle 2 fixation_duration ""
	setcycle 2 cue_condition fixation
	setcycle 2 target_condition incongruent
	setcycle 2 correct_response 6
	setcycle 2 block ""
	setcycle 2 count_block 3
	setcycle 2 count_total 75
	setcycle 3 cue_type cue
	setcycle 3 cue_pos -50
	setcycle 3 target_type incongruent_left
	setcycle 3 target_pos -50
	setcycle 3 fixation_duration ""
	setcycle 3 cue_condition spatial
	setcycle 3 target_condition incongruent
	setcycle 3 correct_response 5
	setcycle 3 block ""
	setcycle 3 count_block 4
	setcycle 3 count_total 76
	setcycle 4 cue_type cue
	setcycle 4 cue_pos 0
	setcycle 4 target_type incongruent_left
	setcycle 4 target_pos 50
	setcycle 4 fixation_duration ""
	setcycle 4 cue_condition cue
	setcycle 4 target_condition incongruent
	setcycle 4 correct_response 5
	setcycle 4 block ""
	setcycle 4 count_block 5
	setcycle 4 count_total 77
	setcycle 5 cue_type cue
	setcycle 5 cue_pos 0
	setcycle 5 target_type congruent_left
	setcycle 5 target_pos -50
	setcycle 5 fixation_duration ""
	setcycle 5 cue_condition cue
	setcycle 5 target_condition congruent
	setcycle 5 correct_response 5
	setcycle 5 block ""
	setcycle 5 count_block 6
	setcycle 5 count_total 78
	setcycle 6 cue_type fixation
	setcycle 6 cue_pos 0
	setcycle 6 target_type congruent_left
	setcycle 6 target_pos 50
	setcycle 6 fixation_duration ""
	setcycle 6 cue_condition fixation
	setcycle 6 target_condition congruent
	setcycle 6 correct_response 5
	setcycle 6 block ""
	setcycle 6 count_block 7
	setcycle 6 count_total 79
	setcycle 7 cue_type cue
	setcycle 7 cue_pos 0
	setcycle 7 target_type neutral_right
	setcycle 7 target_pos 50
	setcycle 7 fixation_duration ""
	setcycle 7 cue_condition cue
	setcycle 7 target_condition neutral
	setcycle 7 correct_response 6
	setcycle 7 block ""
	setcycle 7 count_block 8
	setcycle 7 count_total 80
	setcycle 8 cue_type cue
	setcycle 8 cue_pos 0
	setcycle 8 target_type incongruent_right
	setcycle 8 target_pos -50
	setcycle 8 fixation_duration ""
	setcycle 8 cue_condition cue
	setcycle 8 target_condition incongruent
	setcycle 8 correct_response 6
	setcycle 8 block ""
	setcycle 8 count_block 9
	setcycle 8 count_total 81
	setcycle 9 cue_type cue
	setcycle 9 cue_pos -50
	setcycle 9 target_type incongruent_right
	setcycle 9 target_pos -50
	setcycle 9 fixation_duration ""
	setcycle 9 cue_condition spatial
	setcycle 9 target_condition incongruent
	setcycle 9 correct_response 6
	setcycle 9 block ""
	setcycle 9 count_block 10
	setcycle 9 count_total 82
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	setcycle 11 cue_type fixation
	setcycle 11 cue_pos 0
	setcycle 11 target_type neutral_right
	setcycle 11 target_pos 50
	setcycle 11 fixation_duration ""
	setcycle 11 cue_condition fixation
	setcycle 11 target_condition neutral
	setcycle 11 correct_response 6
	setcycle 11 block ""
	setcycle 11 count_block 12
	setcycle 11 count_total 84
	setcycle 12 cue_type fixation
	setcycle 12 cue_pos 0
	setcycle 12 target_type neutral_left
	setcycle 12 target_pos -50
	setcycle 12 fixation_duration ""
	setcycle 12 cue_condition fixation
	setcycle 12 target_condition neutral
	setcycle 12 correct_response 5
	setcycle 12 block ""
	setcycle 12 count_block 13
	setcycle 12 count_total 85
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	setcycle 18 cue_type cue
	setcycle 18 cue_pos 50
	setcycle 18 target_type congruent_right
	setcycle 18 target_pos 50
	setcycle 18 fixation_duration ""
	setcycle 18 cue_condition spatial
	setcycle 18 target_condition congruent
	setcycle 18 correct_response 6
	setcycle 18 block ""
	setcycle 18 count_block 19
	setcycle 18 count_total 91
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	setcycle 36 cue_type ""
	setcycle 36 cue_pos ""
	setcycle 36 target_type ""
	setcycle 36 target_pos ""
	setcycle 36 fixation_duration ""
	setcycle 36 cue_condition ""
	setcycle 36 target_condition ""
	setcycle 36 correct_response ""
	setcycle 36 block ""
	setcycle 36 count_block ""
	setcycle 36 count_total ""
	run ""

define loop Blok4_ANT
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 36
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 cue_type fixation
	setcycle 0 cue_pos 0
	setcycle 0 target_type congruent_right
	setcycle 0 target_pos -50
	setcycle 0 fixation_duration ""
	setcycle 0 cue_condition fixation
	setcycle 0 target_condition congruent
	setcycle 0 correct_response 6
	setcycle 0 block 6
	setcycle 0 count_block 1
	setcycle 0 count_total 109
	setcycle 1 cue_type cue
	setcycle 1 cue_pos 0
	setcycle 1 target_type congruent_right
	setcycle 1 target_pos -50
	setcycle 1 fixation_duration ""
	setcycle 1 cue_condition cue
	setcycle 1 target_condition congruent
	setcycle 1 correct_response 6
	setcycle 1 block 6
	setcycle 1 count_block 2
	setcycle 1 count_total 110
	setcycle 2 cue_type cue
	setcycle 2 cue_pos 0
	setcycle 2 target_type incongruent_right
	setcycle 2 target_pos 50
	setcycle 2 fixation_duration ""
	setcycle 2 cue_condition cue
	setcycle 2 target_condition incongruent
	setcycle 2 correct_response 6
	setcycle 2 block 6
	setcycle 2 count_block 3
	setcycle 2 count_total 111
	setcycle 3 cue_type cue
	setcycle 3 cue_pos 0
	setcycle 3 target_type congruent_left
	setcycle 3 target_pos 50
	setcycle 3 fixation_duration ""
	setcycle 3 cue_condition cue
	setcycle 3 target_condition congruent
	setcycle 3 correct_response 5
	setcycle 3 block 6
	setcycle 3 count_block 4
	setcycle 3 count_total 112
	setcycle 4 cue_type fixation
	setcycle 4 cue_pos 0
	setcycle 4 target_type congruent_left
	setcycle 4 target_pos 50
	setcycle 4 fixation_duration ""
	setcycle 4 cue_condition fixation
	setcycle 4 target_condition congruent
	setcycle 4 correct_response 5
	setcycle 4 block 6
	setcycle 4 count_block 5
	setcycle 4 count_total 113
	setcycle 5 cue_type cue
	setcycle 5 cue_pos -50
	setcycle 5 target_type incongruent_left
	setcycle 5 target_pos -50
	setcycle 5 fixation_duration ""
	setcycle 5 cue_condition spatial
	setcycle 5 target_condition incongruent
	setcycle 5 correct_response 5
	setcycle 5 block 6
	setcycle 5 count_block 6
	setcycle 5 count_total 114
	setcycle 6 cue_type cue
	setcycle 6 cue_pos -50
	setcycle 6 target_type congruent_left
	setcycle 6 target_pos -50
	setcycle 6 fixation_duration ""
	setcycle 6 cue_condition spatial
	setcycle 6 target_condition congruent
	setcycle 6 correct_response 5
	setcycle 6 block 6
	setcycle 6 count_block 7
	setcycle 6 count_total 115
	setcycle 7 cue_type fixation
	setcycle 7 cue_pos 0
	setcycle 7 target_type incongruent_left
	setcycle 7 target_pos 50
	setcycle 7 fixation_duration ""
	setcycle 7 cue_condition fixation
	setcycle 7 target_condition incongruent
	setcycle 7 correct_response 5
	setcycle 7 block 6
	setcycle 7 count_block 8
	setcycle 7 count_total 116
	setcycle 8 cue_type fixation
	setcycle 8 cue_pos 0
	setcycle 8 target_type incongruent_right
	setcycle 8 target_pos -50
	setcycle 8 fixation_duration ""
	setcycle 8 cue_condition fixation
	setcycle 8 target_condition incongruent
	setcycle 8 correct_response 6
	setcycle 8 block 6
	setcycle 8 count_block 9
	setcycle 8 count_total 117
	setcycle 9 cue_type cue
	setcycle 9 cue_pos -50
	setcycle 9 target_type neutral_right
	setcycle 9 target_pos -50
	setcycle 9 fixation_duration ""
	setcycle 9 cue_condition spatial
	setcycle 9 target_condition neutral
	setcycle 9 correct_response 6
	setcycle 9 block 6
	setcycle 9 count_block 10
	setcycle 9 count_total 118
	setcycle 10 cue_type fixation
	setcycle 10 cue_pos 0
	setcycle 10 target_type incongruent_right
	setcycle 10 target_pos 50
	setcycle 10 fixation_duration ""
	setcycle 10 cue_condition fixation
	setcycle 10 target_condition incongruent
	setcycle 10 correct_response 6
	setcycle 10 block 6
	setcycle 10 count_block 11
	setcycle 10 count_total 119
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	setcycle 13 cue_type fixation
	setcycle 13 cue_pos 0
	setcycle 13 target_type congruent_left
	setcycle 13 target_pos -50
	setcycle 13 fixation_duration ""
	setcycle 13 cue_condition fixation
	setcycle 13 target_condition congruent
	setcycle 13 correct_response 5
	setcycle 13 block 6
	setcycle 13 count_block 14
	setcycle 13 count_total 122
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	setcycle 16 cue_type cue
	setcycle 16 cue_pos 50
	setcycle 16 target_type neutral_right
	setcycle 16 target_pos 50
	setcycle 16 fixation_duration ""
	setcycle 16 cue_condition spatial
	setcycle 16 target_condition neutral
	setcycle 16 correct_response 6
	setcycle 16 block 6
	setcycle 16 count_block 17
	setcycle 16 count_total 125
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	setcycle 23 cue_type cue
	setcycle 23 cue_pos 0
	setcycle 23 target_type neutral_left
	setcycle 23 target_pos -50
	setcycle 23 fixation_duration ""
	setcycle 23 cue_condition cue
	setcycle 23 target_condition neutral
	setcycle 23 correct_response 5
	setcycle 23 block 6
	setcycle 23 count_block 24
	setcycle 23 count_total 132
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	run Flanker_2

define sequence Button_Check_ANT
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Drukopderechterknop_1 always
	run new_srbox_3 always
	run new_feedback_2 "[correct]=0"

define sequence Button_Check_SRT
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Drukopderechterknop always
	run new_srbox always
	run new_feedback "[correct]=0"

define loop Checkbuttons_ANT
	set source_file ""
	set source table
	set repeat 9
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first no
	set break_if "[correct]=1"
	setcycle 0 empty_column ""
	run Button_Check_ANT

define loop Checkbuttons_SRT
	set source_file ""
	set source table
	set repeat 9
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first no
	set break_if "[correct]=1"
	setcycle 0 empty_column ""
	run Button_Check_SRT

define sketchpad Correct
	set duration 495
	set description "Displays stimuli"
	draw textline center=1 color="#00ff00" font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="GOED!<br /><br />Reactiesnelheid [response_time]" x=0 y=0 z_index=0

define sketchpad Drukopderechterknop
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Druk op de knop.<br />" x=0 y=320 z_index=0
	draw image center=1 file="button_check_SRT.png" scale=0.7 show_if=always x=0 y=-32 z_index=0

define sketchpad Drukopderechterknop_1
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Druk de rechter knop.<br />" x=0 y=320 z_index=0
	draw image center=1 file="button_check.png" scale=0.7 show_if=always x=0 y=-32 z_index=0

define sketchpad Einde
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="cockpit.jpg" scale=0.9 show_if=always x=0 y=-96 z_index=0
	draw textline center=1 color="#ffffff" font_bold=yes font_family=mono font_italic=no font_size=40 html=yes show_if=always text="EINDE!" x=0 y=-96 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Dr. Marsh Konigs & Prof. dr. Jaap Oosterlaan" x=1 y=-350 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="" x=416 y=320 z_index=0
	draw image center=1 file="child_pilot.png" scale=0.3 show_if=always x=-352 y=288 z_index=0
	draw image center=1 file="adult_pilot.jpg" scale=0.05 show_if=always x=384 y=288 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="EMMA CHILDREN's HOSPITAL<br />ACADEMIC MEDICAL CENTER<br />m.konigs@amc.nl" x=9 y=215 z_index=0
	draw image center=1 file="amc.png" scale=1 show_if=always x=0 y=320 z_index=0

define sketchpad End
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="cockpit.jpg" scale=0.9 show_if=always x=0 y=-64 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="" x=416 y=320 z_index=0
	draw image center=1 file="child_pilot.png" scale=0.3 show_if=always x=-352 y=288 z_index=0
	draw image center=1 file="adult_pilot.jpg" scale=0.05 show_if=always x=384 y=288 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Emma Children's Hospital<br />Academic Medical Center<br />m.konigs@amc.nl" x=9 y=215 z_index=0
	draw image center=1 file="amc.png" scale=1 show_if=always x=0 y=320 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Emma Toolbox<br /><i> Attention Network Test </i>" x=-8 y=-343 z_index=0

define sequence Flanker_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_inline_script_1_2 always
	run Incorrect "[correct_new_srbox_1]=0 and [response_new_srbox_1]!=None and [count_block] > 1"
	run Correct "[correct_new_srbox_1]=1 and [count_block] > 1"
	run NoResp "[response_new_srbox_1]=None  and [count_block] > 1"
	run fixation always
	run cue always
	run fixation_1 always
	run target always
	run new_srbox_1 always
	run new_inline_script_2_3 always
	run new_inline_script_1 "[count_block]=24"
	run new_feedback_1 "[count_block]=24"
	run new_logger always

define sequence Flanker_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_inline_script_2_2 always
	run trigger_trial_onset always
	run fixation_2 always
	run trigger_cue_onset always
	run cue_2 always
	run fixation_3 always
	run trigger_target_onset always
	run target_2 always
	run new_srbox_2 always
	run trigger_response_offset always
	run new_inline_script_2 always
	run new_inline_script_1 "[count_block]=36"
	run new_feedback_2_1 "[count_block]=36"
	run new_logger always

define sketchpad Incorrect
	set duration 495
	set description "Displays stimuli"
	draw textline center=1 color="#ff0000" font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="FOUT!<br /><br />Reactiesnelheid [response_time]" x=0 y=0 z_index=0

define sketchpad Instructie
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=serif font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="We gaan nu oefenen.<br /><br />Succes!" x=0 y=0 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Druk 'T' om het oefenen over te slaan." x=0 y=352 z_index=0

define sketchpad Instructie_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=serif font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Je bent piloot en bestuurt een vliegtuig. <br /><br />Als er zo een vliegtuig verschijnt, <br />druk dan op de knop waar het vliegtuig heen vliegt." x=0 y=32 z_index=0
	draw image center=1 file="pilot.png" scale=0.5 show_if=always x=0 y=-128 z_index=0
	draw image center=1 file="wheel.png" scale=0.8 show_if=always x=0 y=224 z_index=0

define sketchpad Instructie_10
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="We gaan nu oefenen.<br /><br />Succes!" x=0 y=0 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Druk 'T' om het oefenen over te slaan." x=0 y=320 z_index=0

define sketchpad Instructie_10_4
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=serif font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-352 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Soms verschijnt voor de vliegtuigen een propellor in het midden van het scherm.." x=0 y=128 z_index=0
	draw image center=1 file="pilot.png" scale=0.5 show_if=always x=0 y=-192 z_index=0
	draw image center=1 file="cue.png" scale=0.3 show_if=always x=0 y=0 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Je moet dan goed opletten want het vliegtuig verschijnt dan heel snel." x=0 y=192 z_index=0

define sketchpad Instructie_10_4_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=serif font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-352 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Soms verschijnt voor de vliegtuigen een propellor in het midden van het scherm..<br /><br />Je moet dan goed opletten want het vliegtuig verschijnt dan heel snel." x=32 y=288 z_index=0
	draw image center=1 file="airplanes.jpg" scale=0.5 show_if=always x=0 y=-32 z_index=0
	draw image center=1 file="cue.png" scale=0.3 show_if=always x=0 y=160 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="" x=0 y=192 z_index=0

define sketchpad Instructie_11
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=serif font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-352 z_index=0
	draw image center=1 file="example_central_cue.png" scale=0.8 show_if=always x=0 y=32 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Let goed op het vliegtuig komt eraan!" x=0 y=96 z_index=0

define sketchpad Instructie_11_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=serif font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-352 z_index=0
	draw image center=1 file="example_central_cue.png" scale=0.8 show_if=always x=0 y=32 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Let goed op het vliegtuig komt eraan!" x=0 y=96 z_index=0

define sketchpad Instructie_12
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=serif font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-352 z_index=0
	draw image center=1 file="example_spatialcue_top.png" scale=0.8 show_if=always x=0 y=32 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Let goed op het vliegtuig verschijnt boven het kruisje!" x=0 y=96 z_index=0

define sketchpad Instructie_12_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=serif font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-352 z_index=0
	draw image center=1 file="example_spatialcue_top.png" scale=0.8 show_if=always x=0 y=32 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Let goed op het vliegtuig verschijnt boven het kruisje!" x=0 y=96 z_index=0

define sketchpad Instructie_13
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=serif font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-352 z_index=0
	draw image center=1 file="example_spatialcue_down.png" scale=0.8 show_if=always x=0 y=32 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Let goed op het vliegtuig verschijnt onder het kruisje!" x=0 y=96 z_index=0

define sketchpad Instructie_13_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=serif font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-352 z_index=0
	draw image center=1 file="example_spatialcue_down.png" scale=0.8 show_if=always x=0 y=32 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Let goed op het vliegtuig verschijnt onder het kruisje!" x=0 y=96 z_index=0

define sketchpad Instructie_1_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Je bent piloot en bestuurt een vliegtuig. <br /><br />Als een vliegtuig verschijnt, <br />druk dan zo snel mogelijk op de knop!" x=0 y=32 z_index=0
	draw image center=1 file="pilot.png" scale=0.5 show_if=always x=0 y=-128 z_index=0
	draw image center=1 file="wheel.png" scale=0.8 show_if=always x=0 y=224 z_index=0

define sketchpad Instructie_1_1_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-352 z_index=0
	draw image center=1 file="airplane.jpg" scale=1 show_if=always x=0 y=-32 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Zo verschijnt er een vliegtuig in het midden van het scherm.<br /><br />Druk dan zo snel mogelijk op de knop.<br />Probeer geen fouten te maken!" x=0 y=320 z_index=-1

define sketchpad Instructie_1_1_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Goed gedaan!<br /><br />Nu is het oefenen voorbij en begint de test.<br /><br />Let goed op, <br />Druk zo snel mogelijk,<br />Maak zo weinig mogelijk foutjes" x=0 y=32 z_index=0
	draw image center=1 file="pilot.png" scale=0.5 show_if=always x=0 y=-128 z_index=0
	draw image center=1 file="wheel.png" scale=0.8 show_if=always x=0 y=224 z_index=0

define sketchpad Instructie_1_1_2_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-352 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Goed gedaan!<br /><br />Nu is het oefenen voorbij en begint de test.<br /><br />Let goed op, <br />Druk zo snel mogelijk,<br />Maak zo weinig mogelijk fouten." x=0 y=288 z_index=0
	draw image center=1 file="airplane.jpg" scale=0.8 show_if=always x=0 y=-64 z_index=0

define sketchpad Instructie_1_1_2_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Daar gaan we weer,<br />deel 2 begint nu.<br /><br />Let goed op, <br />Druk zo snel mogelijk,<br />Maak zo weinig mogelijk foutjes." x=0 y=32 z_index=0
	draw image center=1 file="pilot.png" scale=0.5 show_if=always x=0 y=-128 z_index=0
	draw image center=1 file="wheel.png" scale=0.8 show_if=always x=0 y=224 z_index=0

define sketchpad Instructie_1_1_2_2_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Goed gedaan!<br /><br />Nu heb je een korte pauze,<br /><br />probeer even te ontspannen!<br /><br />Zometeen gaan we dit nog een keer doen." x=0 y=32 z_index=0
	draw image center=1 file="pilot.png" scale=0.5 show_if=always x=0 y=-128 z_index=0
	draw image center=1 file="wheel.png" scale=0.8 show_if=always x=0 y=224 z_index=0

define sketchpad Instructie_1_1_2_2_1_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-352 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Goed gedaan!<br /><br />Nu heb je een korte pauze,<br />probeer even te ontspannen!<br /><br />Zometeen gaan we dit nog een keer doen." x=0 y=288 z_index=0
	draw image center=1 file="airplane.jpg" scale=0.8 show_if=always x=0 y=-64 z_index=0

define sketchpad Instructie_1_1_2_2_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-352 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Daar gaan we weer,<br />deel 2 begint nu.<br /><br />Let goed op, <br />Druk zo snel mogelijk,<br />Maak zo weinig mogelijk fouten." x=0 y=288 z_index=0
	draw image center=1 file="airplane.jpg" scale=0.8 show_if=always x=0 y=-64 z_index=0

define sketchpad Instructie_1_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=serif font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Als er zo een vliegtuig verschijnt..<br /><br />druk dan op de knop waar het vliegtuig heen vliegt." x=0 y=224 z_index=0
	draw image center=1 file="airplanes.jpg" scale=0.5 show_if=always x=0 y=-32 z_index=0

define sketchpad Instructie_1_3
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=serif font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Goed gedaan!<br /><br />Dat was het oefenen. Begrijp je hoe het werkt?<br /><br />" x=0 y=96 z_index=0
	draw image center=1 file="pilot.png" scale=0.5 show_if=always x=0 y=-128 z_index=0
	draw image center=1 file="wheel.png" scale=0.8 show_if=always x=0 y=288 z_index=0

define sketchpad Instructie_1_3_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=serif font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Goed gedaan!<br /><br />Dat was het oefenen. Is alles duidelijk?<br />" x=0 y=256 z_index=0
	draw image center=1 file="airplanes.jpg" scale=0.5 show_if=always x=0 y=-32 z_index=0

define sketchpad Instructie_1_3_1_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=serif font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Goed gedaan, dat was deel 1.<br /><br />Je hebt nu even pauze,<br />probeer heel even te ontspannen!<br /><br />We gaan zo weer verder.<br />" x=0 y=256 z_index=0
	draw image center=1 file="airplanes.jpg" scale=0.5 show_if=always x=0 y=-32 z_index=0

define sketchpad Instructie_1_3_1_1_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=serif font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Goed gedaan, dat was deel 2.<br /><br />Je hebt nu even pauze,<br />probeer heel even te ontspannen!<br /><br />Je bent nu op de helft.<br />" x=0 y=256 z_index=0
	draw image center=1 file="airplanes.jpg" scale=0.5 show_if=always x=0 y=-32 z_index=0

define sketchpad Instructie_1_3_1_1_1_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=serif font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Goed gedaan, dat was deel 3.<br /><br />Je hebt nu even pauze,<br />probeer heel even te ontspannen!<br /><br />Zo beginnen we aan het laatste deel!<br />" x=0 y=256 z_index=0
	draw image center=1 file="airplanes.jpg" scale=0.5 show_if=always x=0 y=-32 z_index=0

define sketchpad Instructie_1_3_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=serif font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Goed gedaan, dat was deel 1.<br /><br />Je hebt nu een korte pauze,<br />probeer even te ontspannen! <br /><br />We gaan zo weer verder.<br /><br />" x=0 y=96 z_index=0
	draw image center=1 file="pilot.png" scale=0.5 show_if=always x=0 y=-128 z_index=0
	draw image center=1 file="wheel.png" scale=0.8 show_if=always x=0 y=288 z_index=0

define sketchpad Instructie_1_3_2_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=serif font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Goed gedaan, dat was deel 2.<br /><br />Je hebt nu een korte pauze,<br />probeer even te ontspannen! <br /><br />Je bent nu op de helft!<br /><br />" x=0 y=96 z_index=0
	draw image center=1 file="pilot.png" scale=0.5 show_if=always x=0 y=-128 z_index=0
	draw image center=1 file="wheel.png" scale=0.8 show_if=always x=0 y=288 z_index=0

define sketchpad Instructie_1_3_2_1_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=serif font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Goed gedaan, dat was deel 3.<br /><br />Je hebt nu een korte pauze,<br />probeer even te ontspannen! <br /><br />Zo begint het laatste deel!<br /><br />" x=0 y=96 z_index=0
	draw image center=1 file="pilot.png" scale=0.5 show_if=always x=0 y=-128 z_index=0
	draw image center=1 file="wheel.png" scale=0.8 show_if=always x=0 y=288 z_index=0

define sketchpad Instructie_2
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="example_neutral_left.png" scale=0.8 show_if=always x=0 y=0 z_index=0

define sketchpad Instructie_2_1
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="example_SRT.png" scale=0.8 show_if=always x=0 y=0 z_index=0

define sketchpad Instructie_2_1_1
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="example_SRT.png" scale=0.8 show_if=always x=0 y=0 z_index=0

define sketchpad Instructie_2_2
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="example_neutral_left.png" scale=0.8 show_if=always x=0 y=0 z_index=0

define sketchpad Instructie_3
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="example_neutral_right.png" scale=0.8 show_if=always x=0 y=0 z_index=0

define sketchpad Instructie_3_2
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="example_neutral_right.png" scale=0.8 show_if=always x=0 y=0 z_index=0

define sketchpad Instructie_4
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=serif font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Soms zijn er meerdere vliegtuigen tegelijk.<br /><br />Let dan alleen op de middelste!" x=0 y=32 z_index=0
	draw image center=1 file="pilot.png" scale=0.5 show_if=always x=0 y=-128 z_index=0
	draw image center=1 file="wheel.png" scale=0.8 show_if=always x=0 y=192 z_index=0

define sketchpad Instructie_4_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Dat gebeurt straks achter elkaar door.<br /><br />Druk elke keer op de knop als je een vliegtuig ziet. <br /><br />Druk zo snel mogelijk, zonder foutjes te maken." x=32 y=32 z_index=0
	draw image center=1 file="pilot.png" scale=0.5 show_if=always x=0 y=-128 z_index=0
	draw image center=1 file="wheel.png" scale=0.8 show_if=always x=0 y=192 z_index=0

define sketchpad Instructie_4_1_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-352 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Dat gebeurt straks achter elkaar door.<br /><br />Druk elke keer op de knop als je een vliegtuig ziet. <br /><br />Druk zo snel mogelijk, zonder fouten te maken." x=0 y=288 z_index=0
	draw image center=1 file="airplane.jpg" scale=0.9 show_if=always x=0 y=-64 z_index=0

define sketchpad Instructie_4_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=serif font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Soms zijn er meerdere vliegtuigen tegelijk.<br /><br />Let dan alleen op de middelste!" x=0 y=224 z_index=0
	draw image center=1 file="airplanes.jpg" scale=0.5 show_if=always x=0 y=-32 z_index=0

define sketchpad Instructie_4_2_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Als er zo een vliegtuig verschijnt..<br /><br />druk dan op de knop waar het vliegtuig heen vliegt." x=0 y=224 z_index=0
	draw image center=1 file="airplanes.jpg" scale=0.5 show_if=always x=0 y=-32 z_index=0

define sketchpad Instructie_4_3
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=serif font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Het oefenen is voorbij, we gaan nu echt beginnen.<br /><br />We doen in totaal vier delen, nu begint de eerste.<br /><br />Let goed op, <br />Druk zo snel mogelijk,<br />Maak zo weinig mogelijk foutjes." x=0 y=96 z_index=0
	draw image center=1 file="pilot.png" scale=0.5 show_if=always x=0 y=-128 z_index=0
	draw image center=1 file="wheel.png" scale=0.8 show_if=always x=0 y=288 z_index=0

define sketchpad Instructie_4_3_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=serif font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Nu begint de test, deze bestaat uit vier delen.<br /><br />We starten met deel 1:<br /><br />Let goed op, <br />Druk zo snel mogelijk,<br />Maak zo weinig mogelijk fouten." x=0 y=256 z_index=0
	draw image center=1 file="airplanes.jpg" scale=0.5 show_if=always x=0 y=-32 z_index=0

define sketchpad Instructie_4_3_1_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=serif font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="We starten met deel 2:<br /><br />Let goed op, <br />Druk zo snel mogelijk,<br />Maak zo weinig mogelijk fouten." x=0 y=224 z_index=0
	draw image center=1 file="airplanes.jpg" scale=0.5 show_if=always x=0 y=-32 z_index=0

define sketchpad Instructie_4_3_1_1_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=serif font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="We starten met deel 3:<br /><br />Let goed op, <br />Druk zo snel mogelijk,<br />Maak zo weinig mogelijk fouten." x=0 y=224 z_index=0
	draw image center=1 file="airplanes.jpg" scale=0.5 show_if=always x=0 y=-32 z_index=0

define sketchpad Instructie_4_3_1_1_1_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=serif font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="We starten met deel 4, de laatste:<br /><br />Let goed op, <br />Druk zo snel mogelijk,<br />Maak zo weinig mogelijk fouten." x=0 y=224 z_index=0
	draw image center=1 file="airplanes.jpg" scale=0.5 show_if=always x=0 y=-32 z_index=0

define sketchpad Instructie_4_3_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=serif font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="We starten nu met deel 2:<br /><br />Let goed op, <br />Druk zo snel mogelijk,<br />Maak zo weinig mogelijk foutjes." x=0 y=64 z_index=0
	draw image center=1 file="pilot.png" scale=0.5 show_if=always x=0 y=-128 z_index=0
	draw image center=1 file="wheel.png" scale=0.8 show_if=always x=0 y=288 z_index=0

define sketchpad Instructie_4_3_2_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=serif font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="We starten nu met deel 3:<br /><br />Let goed op, <br />Druk zo snel mogelijk,<br />Maak zo weinig mogelijk foutjes." x=0 y=64 z_index=0
	draw image center=1 file="pilot.png" scale=0.5 show_if=always x=0 y=-128 z_index=0
	draw image center=1 file="wheel.png" scale=0.8 show_if=always x=0 y=288 z_index=0

define sketchpad Instructie_4_3_2_1_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=serif font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="We starten nu met deel 4, de laatste!<br /><br />Let goed op, <br />Druk zo snel mogelijk,<br />Maak zo weinig mogelijk foutjes." x=0 y=64 z_index=0
	draw image center=1 file="pilot.png" scale=0.5 show_if=always x=0 y=-128 z_index=0
	draw image center=1 file="wheel.png" scale=0.8 show_if=always x=0 y=288 z_index=0

define sketchpad Instructie_5
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="example_congruent_left.png" scale=0.8 show_if=always x=0 y=0 z_index=0

define sketchpad Instructie_5_2
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="example_congruent_left.png" scale=0.8 show_if=always x=0 y=0 z_index=0

define sketchpad Instructie_6
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="example_congruent_right.png" scale=0.8 show_if=always x=0 y=0 z_index=0

define sketchpad Instructie_6_2
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="example_congruent_right.png" scale=0.8 show_if=always x=0 y=0 z_index=0

define sketchpad Instructie_7
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=serif font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Let alleen op het middelste vliegtuig...<br /><br />Dus ook als de andere vliegtuigen de andere kant op wijzen!" x=0 y=32 z_index=0
	draw image center=1 file="pilot.png" scale=0.5 show_if=always x=0 y=-128 z_index=0
	draw image center=1 file="wheel.png" scale=0.8 show_if=always x=0 y=192 z_index=0

define sketchpad Instructie_7_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=serif font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Let alleen op het middelste vliegtuig...<br /><br />Dus ook als de andere vliegtuigen de andere kant op vliegen!" x=0 y=224 z_index=0
	draw image center=1 file="airplanes.jpg" scale=0.5 show_if=always x=0 y=-32 z_index=0

define sketchpad Instructie_8
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="example_incongruent_left.png" scale=0.8 show_if=always x=0 y=0 z_index=0

define sketchpad Instructie_8_2
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="example_incongruent_left.png" scale=0.8 show_if=always x=0 y=0 z_index=0

define sketchpad Instructie_9
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="example_incongruent_right.png" scale=0.8 show_if=always x=0 y=0 z_index=0

define sketchpad Instructie_9_2
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="example_incongruent_right.png" scale=0.8 show_if=always x=0 y=0 z_index=0

define loop Instructie_kinderen_ANT_blok1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 instruction_left 5
	setcycle 0 instruction_right 6
	run new_sequence_3

define loop Instructie_kinderen_ANT_blok2
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 instruction_left 5
	setcycle 0 instruction_right 6
	run new_sequence_3_2

define loop Instructie_kinderen_ANT_blok3
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 instruction_left 5
	setcycle 0 instruction_right 6
	run new_sequence_3_2_1

define loop Instructie_kinderen_ANT_blok4
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 instruction_left 5
	setcycle 0 instruction_right 6
	run new_sequence_3_2_1_2

define loop Instructie_volwassenen_ANT_blok1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 instruction_left 5
	setcycle 0 instruction_right 6
	run new_sequence_3_1

define loop Instructie_volwassenen_ANT_blok2
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 instruction_left 5
	setcycle 0 instruction_right 6
	run new_sequence_3_1_1

define loop Instructie_volwassenen_ANT_blok3
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 instruction_left 5
	setcycle 0 instruction_right 6
	run new_sequence_3_1_1_1

define loop Instructie_volwassenen_ANT_blok4
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 instruction_left 5
	setcycle 0 instruction_right 6
	run new_sequence_3_1_1_1_1

define loop Instructies_kinderen_ANT_oefen
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 instruction_left 5
	setcycle 0 instruction_right 6
	run new_sequence

define loop Instructies_kinderen_SRT_oefen
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 instruction_left 5
	setcycle 0 instruction_right 6
	run new_sequence_1

define loop Instructies_kinderen_SRT_test
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 instruction_left 5
	setcycle 0 instruction_right 6
	run new_sequence_1_2

define loop Instructies_volwassenen_ANT_oefen
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 instruction_left 5
	setcycle 0 instruction_right 6
	run new_sequence_2

define loop Instructies_volwassenen_SRT_oefen
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 instruction_left 5
	setcycle 0 instruction_right 6
	run new_sequence_1_1

define loop Instructies_volwassenen_SRT_test
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 instruction_left 5
	setcycle 0 instruction_right 6
	run new_sequence_1_2_1

define sketchpad NoResp
	set duration 495
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="TE LAAT!<br />" x=0 y=0 z_index=0

define loop Oefenblok_ANT
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 24
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 cue_type cue
	setcycle 0 cue_pos 0
	setcycle 0 target_type neutral_right
	setcycle 0 target_pos -50
	setcycle 0 fixation_duration ""
	setcycle 0 cue_condition cue
	setcycle 0 target_condition neutral
	setcycle 0 correct_response 6
	setcycle 0 block 0
	setcycle 0 count_block 1
	setcycle 0 count_total ""
	setcycle 1 cue_type cue
	setcycle 1 cue_pos 0
	setcycle 1 target_type neutral_right
	setcycle 1 target_pos 50
	setcycle 1 fixation_duration ""
	setcycle 1 cue_condition cue
	setcycle 1 target_condition neutral
	setcycle 1 correct_response 6
	setcycle 1 block 0
	setcycle 1 count_block 2
	setcycle 1 count_total ""
	setcycle 2 cue_type cue
	setcycle 2 cue_pos 50
	setcycle 2 target_type congruent_right
	setcycle 2 target_pos 50
	setcycle 2 fixation_duration ""
	setcycle 2 cue_condition spatial
	setcycle 2 target_condition congruent
	setcycle 2 correct_response 6
	setcycle 2 block 0
	setcycle 2 count_block 3
	setcycle 2 count_total ""
	setcycle 3 cue_type fixation
	setcycle 3 cue_pos 0
	setcycle 3 target_type incongruent_left
	setcycle 3 target_pos 50
	setcycle 3 fixation_duration ""
	setcycle 3 cue_condition fixation
	setcycle 3 target_condition incongruent
	setcycle 3 correct_response 5
	setcycle 3 block 0
	setcycle 3 count_block 4
	setcycle 3 count_total ""
	setcycle 4 cue_type fixation
	setcycle 4 cue_pos 0
	setcycle 4 target_type neutral_left
	setcycle 4 target_pos -50
	setcycle 4 fixation_duration ""
	setcycle 4 cue_condition fixation
	setcycle 4 target_condition neutral
	setcycle 4 correct_response 5
	setcycle 4 block 0
	setcycle 4 count_block 5
	setcycle 4 count_total ""
	setcycle 5 cue_type fixation
	setcycle 5 cue_pos 0
	setcycle 5 target_type congruent_left
	setcycle 5 target_pos 50
	setcycle 5 fixation_duration ""
	setcycle 5 cue_condition fixation
	setcycle 5 target_condition congruent
	setcycle 5 correct_response 5
	setcycle 5 block 0
	setcycle 5 count_block 6
	setcycle 5 count_total ""
	setcycle 6 cue_type cue
	setcycle 6 cue_pos -50
	setcycle 6 target_type neutral_right
	setcycle 6 target_pos -50
	setcycle 6 fixation_duration ""
	setcycle 6 cue_condition spatial
	setcycle 6 target_condition neutral
	setcycle 6 correct_response 6
	setcycle 6 block 0
	setcycle 6 count_block 7
	setcycle 6 count_total ""
	setcycle 7 cue_type cue
	setcycle 7 cue_pos 0
	setcycle 7 target_type congruent_right
	setcycle 7 target_pos -50
	setcycle 7 fixation_duration ""
	setcycle 7 cue_condition cue
	setcycle 7 target_condition congruent
	setcycle 7 correct_response 6
	setcycle 7 block 0
	setcycle 7 count_block 8
	setcycle 7 count_total ""
	setcycle 8 cue_type cue
	setcycle 8 cue_pos -50
	setcycle 8 target_type congruent_right
	setcycle 8 target_pos -50
	setcycle 8 fixation_duration ""
	setcycle 8 cue_condition spatial
	setcycle 8 target_condition congruent
	setcycle 8 correct_response 6
	setcycle 8 block 0
	setcycle 8 count_block 9
	setcycle 8 count_total ""
	setcycle 9 cue_type fixation
	setcycle 9 cue_pos 0
	setcycle 9 target_type congruent_right
	setcycle 9 target_pos 50
	setcycle 9 fixation_duration ""
	setcycle 9 cue_condition fixation
	setcycle 9 target_condition congruent
	setcycle 9 correct_response 6
	setcycle 9 block 0
	setcycle 9 count_block 10
	setcycle 9 count_total ""
	setcycle 10 cue_type cue
	setcycle 10 cue_pos 0
	setcycle 10 target_type neutral_left
	setcycle 10 target_pos 50
	setcycle 10 fixation_duration ""
	setcycle 10 cue_condition cue
	setcycle 10 target_condition neutral
	setcycle 10 correct_response 5
	setcycle 10 block 0
	setcycle 10 count_block 11
	setcycle 10 count_total ""
	setcycle 11 cue_type fixation
	setcycle 11 cue_pos 0
	setcycle 11 target_type incongruent_right
	setcycle 11 target_pos 50
	setcycle 11 fixation_duration ""
	setcycle 11 cue_condition fixation
	setcycle 11 target_condition incongruent
	setcycle 11 correct_response 6
	setcycle 11 block 0
	setcycle 11 count_block 12
	setcycle 11 count_total ""
	setcycle 12 cue_type cue
	setcycle 12 cue_pos 0
	setcycle 12 target_type congruent_right
	setcycle 12 target_pos 50
	setcycle 12 fixation_duration ""
	setcycle 12 cue_condition cue
	setcycle 12 target_condition congruent
	setcycle 12 correct_response 6
	setcycle 12 block 0
	setcycle 12 count_block 13
	setcycle 12 count_total ""
	setcycle 13 cue_type fixation
	setcycle 13 cue_pos 0
	setcycle 13 target_type congruent_left
	setcycle 13 target_pos -50
	setcycle 13 fixation_duration ""
	setcycle 13 cue_condition fixation
	setcycle 13 target_condition congruent
	setcycle 13 correct_response 5
	setcycle 13 block 0
	setcycle 13 count_block 14
	setcycle 13 count_total ""
	setcycle 14 cue_type cue
	setcycle 14 cue_pos -50
	setcycle 14 target_type incongruent_right
	setcycle 14 target_pos -50
	setcycle 14 fixation_duration ""
	setcycle 14 cue_condition spatial
	setcycle 14 target_condition incongruent
	setcycle 14 correct_response 6
	setcycle 14 block 0
	setcycle 14 count_block 15
	setcycle 14 count_total ""
	setcycle 15 cue_type fixation
	setcycle 15 cue_pos 0
	setcycle 15 target_type neutral_left
	setcycle 15 target_pos 50
	setcycle 15 fixation_duration ""
	setcycle 15 cue_condition fixation
	setcycle 15 target_condition neutral
	setcycle 15 correct_response 5
	setcycle 15 block 0
	setcycle 15 count_block 16
	setcycle 15 count_total ""
	setcycle 16 cue_type cue
	setcycle 16 cue_pos -50
	setcycle 16 target_type incongruent_left
	setcycle 16 target_pos -50
	setcycle 16 fixation_duration ""
	setcycle 16 cue_condition spatial
	setcycle 16 target_condition incongruent
	setcycle 16 correct_response 5
	setcycle 16 block 0
	setcycle 16 count_block 17
	setcycle 16 count_total ""
	setcycle 17 cue_type cue
	setcycle 17 cue_pos 0
	setcycle 17 target_type neutral_left
	setcycle 17 target_pos -50
	setcycle 17 fixation_duration ""
	setcycle 17 cue_condition cue
	setcycle 17 target_condition neutral
	setcycle 17 correct_response 5
	setcycle 17 block 0
	setcycle 17 count_block 18
	setcycle 17 count_total ""
	setcycle 18 cue_type cue
	setcycle 18 cue_pos 0
	setcycle 18 target_type incongruent_right
	setcycle 18 target_pos -50
	setcycle 18 fixation_duration ""
	setcycle 18 cue_condition cue
	setcycle 18 target_condition incongruent
	setcycle 18 correct_response 6
	setcycle 18 block 0
	setcycle 18 count_block 19
	setcycle 18 count_total ""
	setcycle 19 cue_type fixation
	setcycle 19 cue_pos 0
	setcycle 19 target_type congruent_right
	setcycle 19 target_pos -50
	setcycle 19 fixation_duration ""
	setcycle 19 cue_condition fixation
	setcycle 19 target_condition congruent
	setcycle 19 correct_response 6
	setcycle 19 block 0
	setcycle 19 count_block 20
	setcycle 19 count_total ""
	setcycle 20 cue_type cue
	setcycle 20 cue_pos -50
	setcycle 20 target_type neutral_left
	setcycle 20 target_pos -50
	setcycle 20 fixation_duration ""
	setcycle 20 cue_condition spatial
	setcycle 20 target_condition neutral
	setcycle 20 correct_response 5
	setcycle 20 block 0
	setcycle 20 count_block 21
	setcycle 20 count_total ""
	setcycle 21 cue_type cue
	setcycle 21 cue_pos 0
	setcycle 21 target_type congruent_left
	setcycle 21 target_pos 50
	setcycle 21 fixation_duration ""
	setcycle 21 cue_condition cue
	setcycle 21 target_condition congruent
	setcycle 21 correct_response 5
	setcycle 21 block 0
	setcycle 21 count_block 22
	setcycle 21 count_total ""
	setcycle 22 cue_type cue
	setcycle 22 cue_pos 50
	setcycle 22 target_type congruent_left
	setcycle 22 target_pos 50
	setcycle 22 fixation_duration ""
	setcycle 22 cue_condition spatial
	setcycle 22 target_condition congruent
	setcycle 22 correct_response 5
	setcycle 22 block 0
	setcycle 22 count_block 23
	setcycle 22 count_total ""
	setcycle 23 cue_type cue
	setcycle 23 cue_pos 0
	setcycle 23 target_type incongruent_left
	setcycle 23 target_pos -50
	setcycle 23 fixation_duration ""
	setcycle 23 cue_condition cue
	setcycle 23 target_condition incongruent
	setcycle 23 correct_response 5
	setcycle 23 block 0
	setcycle 23 count_block 24
	setcycle 23 count_total ""
	run Flanker_1

define loop Oefenblok_SRT
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 cue_type fixation
	setcycle 0 cue_pos 0
	setcycle 0 target_type simple
	setcycle 0 target_pos 0
	setcycle 0 fixation_duration ""
	setcycle 0 cue_condition simple
	setcycle 0 target_condition simple
	setcycle 0 correct_response 6
	setcycle 0 block 0
	setcycle 0 count_block 1
	setcycle 0 count_total ""
	setcycle 1 cue_type fixation
	setcycle 1 cue_pos 0
	setcycle 1 target_type simple
	setcycle 1 target_pos 0
	setcycle 1 fixation_duration ""
	setcycle 1 cue_condition simple
	setcycle 1 target_condition simple
	setcycle 1 correct_response 6
	setcycle 1 block 0
	setcycle 1 count_block 2
	setcycle 1 count_total ""
	setcycle 2 cue_type fixation
	setcycle 2 cue_pos 0
	setcycle 2 target_type simple
	setcycle 2 target_pos 0
	setcycle 2 fixation_duration ""
	setcycle 2 cue_condition simple
	setcycle 2 target_condition simple
	setcycle 2 correct_response 6
	setcycle 2 block 0
	setcycle 2 count_block 3
	setcycle 2 count_total ""
	setcycle 3 cue_type fixation
	setcycle 3 cue_pos 0
	setcycle 3 target_type simple
	setcycle 3 target_pos 0
	setcycle 3 fixation_duration ""
	setcycle 3 cue_condition simple
	setcycle 3 target_condition simple
	setcycle 3 correct_response 6
	setcycle 3 block 0
	setcycle 3 count_block 4
	setcycle 3 count_total ""
	setcycle 4 cue_type fixation
	setcycle 4 cue_pos 0
	setcycle 4 target_type simple
	setcycle 4 target_pos 0
	setcycle 4 fixation_duration ""
	setcycle 4 cue_condition simple
	setcycle 4 target_condition simple
	setcycle 4 correct_response 6
	setcycle 4 block 0
	setcycle 4 count_block 5
	setcycle 4 count_total ""
	setcycle 5 cue_type fixation
	setcycle 5 cue_pos 0
	setcycle 5 target_type simple
	setcycle 5 target_pos 0
	setcycle 5 fixation_duration ""
	setcycle 5 cue_condition simple
	setcycle 5 target_condition simple
	setcycle 5 correct_response 6
	setcycle 5 block 0
	setcycle 5 count_block 6
	setcycle 5 count_total ""
	setcycle 6 cue_type fixation
	setcycle 6 cue_pos 0
	setcycle 6 target_type simple
	setcycle 6 target_pos 0
	setcycle 6 fixation_duration ""
	setcycle 6 cue_condition simple
	setcycle 6 target_condition simple
	setcycle 6 correct_response 6
	setcycle 6 block 0
	setcycle 6 count_block 7
	setcycle 6 count_total ""
	setcycle 7 cue_type fixation
	setcycle 7 cue_pos 0
	setcycle 7 target_type simple
	setcycle 7 target_pos 0
	setcycle 7 fixation_duration ""
	setcycle 7 cue_condition simple
	setcycle 7 target_condition simple
	setcycle 7 correct_response 6
	setcycle 7 block 0
	setcycle 7 count_block 8
	setcycle 7 count_total ""
	setcycle 8 cue_type fixation
	setcycle 8 cue_pos 0
	setcycle 8 target_type simple
	setcycle 8 target_pos 0
	setcycle 8 fixation_duration ""
	setcycle 8 cue_condition simple
	setcycle 8 target_condition simple
	setcycle 8 correct_response 6
	setcycle 8 block 0
	setcycle 8 count_block 9
	setcycle 8 count_total ""
	setcycle 9 cue_type fixation
	setcycle 9 cue_pos 0
	setcycle 9 target_type simple
	setcycle 9 target_pos 0
	setcycle 9 fixation_duration ""
	setcycle 9 cue_condition simple
	setcycle 9 target_condition simple
	setcycle 9 correct_response 6
	setcycle 9 block 0
	setcycle 9 count_block 10
	setcycle 9 count_total ""
	run SRT_Oefen

define loop Pauze_kinderen_SRT_test
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 instruction_left 5
	setcycle 0 instruction_right 6
	run new_sequence_1_2_2

define loop Pauze_volwassenen_SRT_test
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 instruction_left 5
	setcycle 0 instruction_right 6
	run new_sequence_1_2_2_1

define inline_script Resetvariables
	set description "Executes Python code"
	set _run ""
	___prepare__
	
	#exp.set("response_time_new_mouse_response_1", 1695)
	var.response_time_new_srbox_1 = u'1695'
	
	var.response_new_srbox_1 = u'3'
	
	#exp.set("correct_new_mouse_response_1", 0)
	var.correct_new_srbox_1 = u'0'
	
	
	#Create per condition counter, correct_counter, response_counter and rt_sum
	#  to calculate avg_rt and acc later
	
	var.simple_counter = 0
	var.simple_correct_counter = 0
	var.simple_response_counter = 0
	var.simple_rt_sum = 0
	var.simple_MRT = 0
	var.simple_acc = 0
	
	var.fixation_counter = 0
	var.fixation_correct_counter = 0
	var.fixation_response_counter = 0
	var.fixation_rt_sum = 0
	var.nocue_MRT = 0
	var.nocue_acc = 0
	
	var.cue_counter = 0
	var.cue_correct_counter = 0
	var.cue_response_counter = 0
	var.cue_rt_sum = 0
	var.centralcue_MRT = 0
	var.centralcue_acc = 0
	
	var.spatial_counter = 0
	var.spatial_correct_counter = 0
	var.spatial_response_counter = 0
	var.spatial_rt_sum = 0
	var.spatialcue_MRT = 0
	var.spatialcue_acc = 0
	
	var.congruent_counter = 0
	var.congruent_correct_counter = 0
	var.congruent_response_counter = 0
	var.congruent_rt_sum = 0
	var.congruent_MRT = 0
	var.congruent_acc = 0
	
	var.incongruent_counter = 0
	var.incongruent_correct_counter = 0
	var.incongruent_response_counter = 0
	var.incongruent_rt_sum = 0
	var.incongruent_MRT = 0
	var.incongruent_acc = 0
	
	var.neutral_counter = 0
	var.neutral_correct_counter = 0
	var.neutral_response_counter = 0
	var.neutral_rt_sum = 0
	var.neutral_MRT = 0
	var.neutral_acc = 0
	
	var.alerting_MRT = 0 
	var.alerting_acc = 0
	var.orienting_MRT = 0
	var.orienting_acc = 0
	var.executive_MRT = 0
	var.executive_acc = 0
	
	var.count_block=0
	__end__

define inline_script Resetvariables_1
	set description "Executes Python code"
	set _run ""
	___prepare__
	#exp.set("response_time_new_mouse_response_2", 1695)
	#var.response_time_new_srbox_2 = u'1695'
	var.response_new_srbox_2e = u'3'
	#exp.set("correct_new_mouse_response_2", 0)
	#var.correct_new_srbox_2 = u'0'
	
	#exp.set("response_time_new_mouse_response_2", 1695)
	var.response_time_new_srbox_2 = u'1695'
	
	#exp.set("correct_new_mouse_response_2", 0)
	var.correct_new_srbox_2 = u'0'
	
	var.fixation_counter = 0
	var.fixation_correct_counter = 0
	var.fixation_response_counter = 0
	var.fixation_rt_sum = 0
	var.nocue_MRT = 0
	var.nocue_acc = 0
	
	var.cue_counter = 0
	var.cue_correct_counter = 0
	var.cue_response_counter = 0
	var.cue_rt_sum = 0
	var.centralcue_MRT = 0
	var.centralcue_acc = 0
	
	var.spatial_counter = 0
	var.spatial_correct_counter = 0
	var.spatial_response_counter = 0
	var.spatial_rt_sum = 0
	var.spatialcue_MRT = 0
	var.spatialcue_acc = 0
	
	var.congruent_counter = 0
	var.congruent_correct_counter = 0
	var.congruent_response_counter = 0
	var.congruent_rt_sum = 0
	var.congruent_MRT = 0
	var.congruent_acc = 0
	
	var.incongruent_counter = 0
	var.incongruent_correct_counter = 0
	var.incongruent_response_counter = 0
	var.incongruent_rt_sum = 0
	var.incongruent_MRT = 0
	var.incongruent_acc = 0
	
	var.neutral_counter = 0
	var.neutral_correct_counter = 0
	var.neutral_response_counter = 0
	var.neutral_rt_sum = 0
	var.neutral_MRT = 0
	var.neutral_acc = 0
	
	var.alerting_MRT = 0 
	var.alerting_acc = 0
	var.orienting_MRT = 0
	var.orienting_acc = 0
	var.executive_MRT = 0
	var.executive_acc = 0
	
	var.count_block = 0
	__end__

define sequence SRT
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_inline_script_2_2 always
	run trigger_trial_onset_1 always
	run fixation_2 always
	run trigger_cue_onset_1 always
	run cue_2 always
	run fixation_3 always
	run trigger_target_onset_1 always
	run target_2 always
	run new_srbox_2 always
	run trigger_response_offset_1 always
	run new_inline_script_2_3_2 always
	run new_feedback_1_3 "[count_block]=36"
	run new_logger always

define sequence SRT_Oefen
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_inline_script_2_2 always
	run Incorrect "[correct_new_srbox_1]=0 and [response_new_srbox_1]!=None and [count_block] > 1"
	run Correct "[correct_new_srbox_1]=1 and [count_block] > 1"
	run NoResp "[response_new_srbox_1]=None  and [count_block]>1"
	run fixation always
	run cue always
	run fixation_1 always
	run target always
	run new_srbox_1 always
	run new_inline_script_2_3_2_1 always
	run new_feedback_1_3 "[count_block]=10"
	run new_logger always

define sketchpad Start
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="cockpit.jpg" scale=0.9 show_if=always x=0 y=-64 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="" x=416 y=320 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Kinderen kies 'k'" x=-352 y=192 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Volwassenen kies 'v'" x=367 y=193 z_index=0
	draw image center=1 file="child_pilot.png" scale=0.3 show_if=always x=-352 y=288 z_index=0
	draw image center=1 file="adult_pilot.jpg" scale=0.05 show_if=always x=384 y=288 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Emma Children's Hospital<br />Academic Medical Center<br />m.konigs@amc.nl" x=9 y=215 z_index=0
	draw image center=1 file="amc.png" scale=1 show_if=always x=0 y=320 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Emma Toolbox<br /><i> Attention Network Test </i>" x=-8 y=-343 z_index=0

define sketchpad cue
	set duration 145
	set description "Displays stimuli"
	draw image center=1 file="fixation.png" scale=0.14 show_if=always x=0 y=0 z_index=2
	draw image center=1 file="[cue_type].png" scale=0.14 show_if=always x=0 y="[cue_pos]" z_index=1

define sketchpad cue_2
	set duration 145
	set description "Displays stimuli"
	draw image center=1 file="[cue_type].png" scale=0.14 show_if=always x=0 y="[cue_pos]" z_index=1
	draw image center=1 file="fixation.png" scale=0.14 show_if=always x=0 y=0 z_index=0

define sketchpad fixation
	set duration "[my_duration]"
	set description "Displays stimuli"
	draw image center=1 file="fixation.png" scale=0.14 show_if=always x=0 y=0 z_index=0

define sketchpad fixation_1
	set duration 445
	set description "Displays stimuli"
	draw image center=1 file="fixation.png" scale=0.14 show_if=always x=0 y=0 z_index=0

define sketchpad fixation_2
	set duration "[my_duration]"
	set description "Displays stimuli"
	draw image center=1 file="fixation.png" scale=0.14 show_if=always x=0 y=0 z_index=0

define sketchpad fixation_3
	set duration 445
	set description "Displays stimuli"
	draw image center=1 file="fixation.png" scale=0.14 show_if=always x=0 y=0 z_index=0

define feedback new_feedback
	set reset_variables yes
	set duration 1000
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Draai de knoppen om!" x=32 y=288 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="" x=-704 y=-256 z_index=0
	draw image center=1 file="switch_buttons.png" scale=0.7 show_if=always x=32 y=-32 z_index=0

define feedback new_feedback_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="Dit is jouw prestatie in het afgelopen blok.<br /><br />Reactiesnelheid [avg_rt] ms<br />Accuratesse [accuracy] %<br /><br />neutral MRT [neutral_MRT] ms<br />neutral ACC [neutral_acc] %<br /><br />ALERTING<br />RT [alerting_MRT] ms<br />ACC [alerting_acc] %<br /><br />ORIENTING<br />RT [orienting_MRT] ms<br />ACC [orienting_acc] %<br /><br />EXECUTIVE<br />RT [executive_MRT] ms<br />ACC [executive_acc] %" x=32 y=32 z_index=0

define feedback new_feedback_1_3
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Dit is jouw prestatie in het afgelopen blok.<br /><br />Reactiesnelheid [simple_MRT] ms<br />Accuratesse [simple_acc] %<br />" x=32 y=32 z_index=0

define feedback new_feedback_2
	set reset_variables yes
	set duration 1000
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Draai de knoppen om!" x=32 y=288 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="" x=-704 y=-256 z_index=0
	draw image center=1 file="switch_buttons.png" scale=0.7 show_if=always x=32 y=-32 z_index=0

define feedback new_feedback_2_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="Dit is jouw prestatie in het afgelopen deel.<br /><br />Reactiesnelheid [avg_rt] ms<br />Accuratesse [accuracy] %<br /><br />neutral MRT [neutral_MRT] ms<br />neutral ACC [neutral_acc] %<br /><br />ALERTING<br />RT [alerting_MRT] ms<br />ACC [alerting_acc] %<br /><br />ORIENTING<br />RT [orienting_MRT] ms<br />ACC [orienting_acc] %<br /><br />EXECUTIVE<br />RT [executive_MRT] ms<br />ACC [executive_acc] %" x=32 y=32 z_index=0

define inline_script new_inline_script
	set description "Executes Python code"
	___run__
	import random
	#import serial
	#exp.trigger = serial.Serial('COM4')
	#exp.cleanup_functions.append(exp.trigger.close)
	__end__
	set _prepare ""

define inline_script new_inline_script_1
	set description "Executes Python code"
	___run__
	
	# attention networks
	var.alerting_MRT = var.centralcue_MRT - var.nocue_MRT
	var.alerting_acc = var.centralcue_acc - var.nocue_acc
	var.orienting_MRT = var.spatialcue_MRT - var.centralcue_MRT
	var.orienting_acc = var.spatialcue_acc - var.centralcue_acc
	var.executive_MRT = var.incongruent_MRT - var.congruent_MRT
	var.executive_acc = var.incongruent_acc - var.congruent_acc
	__end__
	set _prepare ""

define inline_script new_inline_script_1_2
	set description "Executes Python code"
	set _run ""
	___prepare__
	max = 1695.
	
	var.fixation_duration=random.randint(250,750)
	
	#dur = max - self.get("response_time_new_mouse_response_1")
	dur = max - var.response_time_new_srbox_1
	
	#fix = dur + self.get("fixation_duration")
	fix = dur + var.fixation_duration
	
	#exp.set("my_duration", fix)
	var.my_duration = fix
	__end__

define inline_script new_inline_script_2
	set description "Executes Python code"
	___run__
	# -------------- no cue -----------------------
	
	if var.cue_condition == 'fixation':
		var.fixation_counter += 1
		if var.correct_new_srbox_2 == 1:
			var.fixation_correct_counter +=1
			var.fixation_rt_sum += var.response_time_new_srbox_2
		if var.response_new_srbox_2 != 'None':
			var.fixation_response_counter += 1
	
	
	if var.fixation_correct_counter != 0:
		var.nocue_MRT = str(var.fixation_rt_sum/var.fixation_correct_counter)
	
		
	if var.fixation_correct_counter != 0:
		var.nocue_acc = str(var.fixation_correct_counter/float(var.fixation_counter)*100)
	
		
	
	# -------------- central cue ------------------
	
	if var.cue_condition == 'cue':
		var.cue_counter += 1
		if var.correct_new_srbox_2 == 1:
			var.cue_correct_counter +=1
			var.cue_rt_sum += var.response_time_new_srbox_2
		if var.response_new_srbox_2 != 'None':
			var.cue_response_counter += 1
	
	if var.cue_correct_counter != 0:
		var.centralcue_MRT = str(var.cue_rt_sum/var.cue_correct_counter)
		
		
	if var.cue_correct_counter != 0:
		var.centralcue_acc = str(var.cue_correct_counter/float(var.cue_counter)*100)
		
		
	
	# -------------- spatial cue ------------------
	
	if var.cue_condition == 'spatial':
		var.spatial_counter += 1
		if var.correct_new_srbox_2 == 1:
			var.spatial_correct_counter +=1
			var.spatial_rt_sum += var.response_time_new_srbox_2
		if var.response_new_srbox_2 != 'None':
			var.spatial_response_counter += 1
	
	
	if var.spatial_correct_counter != 0:
		var.spatialcue_MRT = str(var.spatial_rt_sum/var.spatial_correct_counter)
		
		
	if var.spatial_correct_counter != 0:
		var.spatialcue_acc = str(var.spatial_correct_counter/float(var.spatial_counter)*100)
		
		
	
	# -------------- neutral target ------------------
	
	if var.target_condition == 'neutral':
		var.neutral_counter += 1
		if var.correct_new_srbox_2 == 1:
			var.neutral_correct_counter +=1
			var.neutral_rt_sum += var.response_time_new_srbox_2
		if var.response_new_srbox_2 != 'None':
			var.neutral_response_counter += 1
	
	
	if var.neutral_correct_counter != 0:
		var.neutral_MRT = str(var.neutral_rt_sum/var.neutral_correct_counter)
		
		
	if var.neutral_correct_counter != 0:
		var.neutral_acc = str(var.neutral_correct_counter/float(var.neutral_counter)*100)
		
		
	
	# -------------- congruent target ------------------
	
	if var.target_condition == 'congruent':
		var.congruent_counter += 1
		if var.correct_new_srbox_2 == 1:
			var.congruent_correct_counter +=1
			var.congruent_rt_sum += var.response_time_new_srbox_2
		if var.response_new_srbox_2 != 'None':
			var.congruent_response_counter += 1
	
	
	if var.congruent_correct_counter != 0:
		var.congruent_MRT = str(var.congruent_rt_sum/var.congruent_correct_counter)
	
		
	if var.congruent_correct_counter != 0:
		var.congruent_acc = str(var.congruent_correct_counter/float(var.congruent_counter)*100)
	
		
	
	# -------------- incongruent target ------------------
	
	if var.target_condition == 'incongruent':
		var.incongruent_counter += 1
		if var.correct_new_srbox_2 == 1:
			var.incongruent_correct_counter +=1
			var.incongruent_rt_sum += var.response_time_new_srbox_2
		if var.response_new_srbox_2 != 'None':
			var.incongruent_response_counter += 1
	
	
	if var.incongruent_correct_counter != 0:
		var.incongruent_MRT = str(var.incongruent_rt_sum/var.incongruent_correct_counter)
		
		
	if var.incongruent_correct_counter != 0:
		var.incongruent_acc = str(var.incongruent_correct_counter/float(var.incongruent_counter)*100)
	__end__
	set _prepare ""

define inline_script new_inline_script_2_2
	set description "Executes Python code"
	set _run ""
	___prepare__
	max = 1695.
	
	#exp.trigger.write(chr(0))
	#cue_value=0
	#target_value=0
	#trial_value=0
	
	var.fixation_duration=random.randint(250,750)
	
	#dur = max - self.get("response_time_new_mouse_response_1")
	dur = max - var.response_time_new_srbox_2
	
	#fix = dur + self.get("fixation_duration")
	fix = dur + var.fixation_duration
	
	#exp.set("my_duration", fix)
	var.my_duration = fix
	__end__

define inline_script new_inline_script_2_3
	set description "Executes Python code"
	___run__
	# -------------- no cue -----------------------
	
	if var.cue_condition == 'fixation':
		var.fixation_counter += 1
		if var.correct_new_srbox_1 == 1:
			var.fixation_correct_counter +=1
			var.fixation_rt_sum += var.response_time_new_srbox_1
		if var.response_new_srbox_1 != 'None':
			var.fixation_response_counter += 1
	
	
	if var.fixation_correct_counter != 0:
		var.nocue_MRT = str(var.fixation_rt_sum/var.fixation_correct_counter)
	
		
	if var.fixation_correct_counter != 0:
		var.nocue_acc = str(var.fixation_correct_counter/float(var.fixation_counter)*100)
	
		
	
	# -------------- central cue ------------------
	
	if var.cue_condition == 'cue':
		var.cue_counter += 1
		if var.correct_new_srbox_1 == 1:
			var.cue_correct_counter +=1
			var.cue_rt_sum += var.response_time_new_srbox_1
		if var.response_new_srbox_1 != 'None':
			var.cue_response_counter += 1
	
	if var.cue_correct_counter != 0:
		var.centralcue_MRT = str(var.cue_rt_sum/var.cue_correct_counter)
		
		
	if var.cue_correct_counter != 0:
		var.centralcue_acc = str(var.cue_correct_counter/float(var.cue_counter)*100)
		
		
	
	# -------------- spatial cue ------------------
	
	if var.cue_condition == 'spatial':
		var.spatial_counter += 1
		if var.correct_new_srbox_1 == 1:
			var.spatial_correct_counter +=1
			var.spatial_rt_sum += var.response_time_new_srbox_1
		if var.response_new_srbox_1 != 'None':
			var.spatial_response_counter += 1
	
	
	if var.spatial_correct_counter != 0:
		var.spatialcue_MRT = str(var.spatial_rt_sum/var.spatial_correct_counter)
		
		
	if var.spatial_correct_counter != 0:
		var.spatialcue_acc = str(var.spatial_correct_counter/float(var.spatial_counter)*100)
		
		
	
	# -------------- neutral target ------------------
	
	if var.target_condition == 'neutral':
		var.neutral_counter += 1
		if var.correct_new_srbox_1 == 1:
			var.neutral_correct_counter +=1
			var.neutral_rt_sum += var.response_time_new_srbox_1
		if var.response_new_srbox_1 != 'None':
			var.neutral_response_counter += 1
	
	
	if var.neutral_correct_counter != 0:
		var.neutral_MRT = str(var.neutral_rt_sum/var.neutral_correct_counter)
		
		
	if var.neutral_correct_counter != 0:
		var.neutral_acc = str(var.neutral_correct_counter/float(var.neutral_counter)*100)
		
		
	
	# -------------- congruent target ------------------
	
	if var.target_condition == 'congruent':
		var.congruent_counter += 1
		if var.correct_new_srbox_1 == 1:
			var.congruent_correct_counter +=1
			var.congruent_rt_sum += var.response_time_new_srbox_1
		if var.response_new_srbox_1 != 'None':
			var.congruent_response_counter += 1
	
	
	if var.congruent_correct_counter != 0:
		var.congruent_MRT = str(var.congruent_rt_sum/var.congruent_correct_counter)
	
		
	if var.congruent_correct_counter != 0:
		var.congruent_acc = str(var.congruent_correct_counter/float(var.congruent_counter)*100)
	
		
	
	# -------------- incongruent target ------------------
	
	if var.target_condition == 'incongruent':
		var.incongruent_counter += 1
		if var.correct_new_srbox_1 == 1:
			var.incongruent_correct_counter +=1
			var.incongruent_rt_sum += var.response_time_new_srbox_1
		if var.response_new_srbox_1 != 'None':
			var.incongruent_response_counter += 1
	
	
	if var.incongruent_correct_counter != 0:
		var.incongruent_MRT = str(var.incongruent_rt_sum/var.incongruent_correct_counter)
		
		
	if var.incongruent_correct_counter != 0:
		var.incongruent_acc = str(var.incongruent_correct_counter/float(var.incongruent_counter)*100)
	__end__
	set _prepare ""

define inline_script new_inline_script_2_3_2
	set description "Executes Python code"
	___run__
	# -------------- simple -----------------------
	
	if var.target_condition == 'simple':
		var.simple_counter += 1
		if var.correct_new_srbox_2 == 1:
			var.simple_correct_counter +=1
			var.simple_rt_sum += var.response_time_new_srbox_2
		if var.response_new_srbox_2 != 'None':
			var.simple_response_counter += 1
	
	
	if var.simple_correct_counter != 0:
		var.simple_MRT = str(var.simple_rt_sum/var.simple_correct_counter)
	
		
	if var.simple_correct_counter != 0:
		var.simple_acc = str(var.simple_correct_counter/float(var.simple_counter)*100)
	__end__
	set _prepare ""

define inline_script new_inline_script_2_3_2_1
	set description "Executes Python code"
	___run__
	# -------------- simple -----------------------
	
	if var.target_condition == 'simple':
		var.simple_counter += 1
		if var.correct_new_srbox_1 == 1:
			var.simple_correct_counter +=1
			var.simple_rt_sum += var.response_time_new_srbox_1
		if var.response_new_srbox_1 != 'None':
			var.simple_response_counter += 1
	
	
	if var.simple_correct_counter != 0:
		var.simple_MRT = str(var.simple_rt_sum/var.simple_correct_counter)
	
		
	if var.simple_correct_counter != 0:
		var.simple_acc = str(var.simple_correct_counter/float(var.simple_counter)*100)
	__end__
	set _prepare ""

define logger new_logger
	set description "Logs experimental data"
	set auto_log yes

define loop new_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 37
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	setcycle 1 empty_column ""
	setcycle 2 empty_column ""
	setcycle 3 empty_column ""
	setcycle 4 empty_column ""
	setcycle 5 empty_column ""
	setcycle 6 empty_column ""
	setcycle 7 empty_column ""
	setcycle 8 empty_column ""
	setcycle 9 empty_column ""
	setcycle 10 empty_column ""
	setcycle 11 empty_column ""
	setcycle 12 empty_column ""
	setcycle 13 empty_column ""
	setcycle 14 empty_column ""
	setcycle 15 empty_column ""
	setcycle 16 empty_column ""
	setcycle 17 empty_column ""
	setcycle 18 empty_column ""
	setcycle 19 empty_column ""
	setcycle 20 empty_column ""
	setcycle 21 empty_column ""
	setcycle 22 empty_column ""
	setcycle 23 empty_column ""
	setcycle 24 empty_column ""
	setcycle 25 empty_column ""
	setcycle 26 empty_column ""
	setcycle 27 empty_column ""
	setcycle 28 empty_column ""
	setcycle 29 empty_column ""
	setcycle 30 empty_column ""
	setcycle 31 empty_column ""
	setcycle 32 empty_column ""
	setcycle 33 empty_column ""
	setcycle 34 empty_column ""
	setcycle 35 empty_column ""
	setcycle 36 empty_column ""
	run ""

define loop new_loop_1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 37
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 cue_type fixation
	setcycle 0 cue_pos 0
	setcycle 0 target_type neutral_right
	setcycle 0 target_pos -50
	setcycle 0 fixation_duration ""
	setcycle 0 cue_condition fixation
	setcycle 0 target_condition neutral
	setcycle 0 correct_response 6
	setcycle 0 block ""
	setcycle 0 count_block 1
	setcycle 0 count_total 73
	setcycle 1 cue_type cue
	setcycle 1 cue_pos 50
	setcycle 1 target_type congruent_left
	setcycle 1 target_pos 50
	setcycle 1 fixation_duration ""
	setcycle 1 cue_condition spatial
	setcycle 1 target_condition congruent
	setcycle 1 correct_response 5
	setcycle 1 block ""
	setcycle 1 count_block 2
	setcycle 1 count_total 74
	setcycle 2 cue_type fixation
	setcycle 2 cue_pos 0
	setcycle 2 target_type incongruent_right
	setcycle 2 target_pos -50
	setcycle 2 fixation_duration ""
	setcycle 2 cue_condition fixation
	setcycle 2 target_condition incongruent
	setcycle 2 correct_response 6
	setcycle 2 block ""
	setcycle 2 count_block 3
	setcycle 2 count_total 75
	setcycle 3 cue_type cue
	setcycle 3 cue_pos -50
	setcycle 3 target_type incongruent_left
	setcycle 3 target_pos -50
	setcycle 3 fixation_duration ""
	setcycle 3 cue_condition spatial
	setcycle 3 target_condition incongruent
	setcycle 3 correct_response 5
	setcycle 3 block ""
	setcycle 3 count_block 4
	setcycle 3 count_total 76
	setcycle 4 cue_type cue
	setcycle 4 cue_pos 0
	setcycle 4 target_type incongruent_left
	setcycle 4 target_pos 50
	setcycle 4 fixation_duration ""
	setcycle 4 cue_condition cue
	setcycle 4 target_condition incongruent
	setcycle 4 correct_response 5
	setcycle 4 block ""
	setcycle 4 count_block 5
	setcycle 4 count_total 77
	setcycle 5 cue_type cue
	setcycle 5 cue_pos 0
	setcycle 5 target_type congruent_left
	setcycle 5 target_pos -50
	setcycle 5 fixation_duration ""
	setcycle 5 cue_condition cue
	setcycle 5 target_condition congruent
	setcycle 5 correct_response 5
	setcycle 5 block ""
	setcycle 5 count_block 6
	setcycle 5 count_total 78
	setcycle 6 cue_type fixation
	setcycle 6 cue_pos 0
	setcycle 6 target_type congruent_left
	setcycle 6 target_pos 50
	setcycle 6 fixation_duration ""
	setcycle 6 cue_condition fixation
	setcycle 6 target_condition congruent
	setcycle 6 correct_response 5
	setcycle 6 block ""
	setcycle 6 count_block 7
	setcycle 6 count_total 79
	setcycle 7 cue_type cue
	setcycle 7 cue_pos 0
	setcycle 7 target_type neutral_right
	setcycle 7 target_pos 50
	setcycle 7 fixation_duration ""
	setcycle 7 cue_condition cue
	setcycle 7 target_condition neutral
	setcycle 7 correct_response 6
	setcycle 7 block ""
	setcycle 7 count_block 8
	setcycle 7 count_total 80
	setcycle 8 cue_type cue
	setcycle 8 cue_pos 0
	setcycle 8 target_type incongruent_right
	setcycle 8 target_pos -50
	setcycle 8 fixation_duration ""
	setcycle 8 cue_condition cue
	setcycle 8 target_condition incongruent
	setcycle 8 correct_response 6
	setcycle 8 block ""
	setcycle 8 count_block 9
	setcycle 8 count_total 81
	setcycle 9 cue_type cue
	setcycle 9 cue_pos -50
	setcycle 9 target_type incongruent_right
	setcycle 9 target_pos -50
	setcycle 9 fixation_duration ""
	setcycle 9 cue_condition spatial
	setcycle 9 target_condition incongruent
	setcycle 9 correct_response 6
	setcycle 9 block ""
	setcycle 9 count_block 10
	setcycle 9 count_total 82
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	setcycle 11 cue_type fixation
	setcycle 11 cue_pos 0
	setcycle 11 target_type neutral_right
	setcycle 11 target_pos 50
	setcycle 11 fixation_duration ""
	setcycle 11 cue_condition fixation
	setcycle 11 target_condition neutral
	setcycle 11 correct_response 6
	setcycle 11 block ""
	setcycle 11 count_block 12
	setcycle 11 count_total 84
	setcycle 12 cue_type fixation
	setcycle 12 cue_pos 0
	setcycle 12 target_type neutral_left
	setcycle 12 target_pos -50
	setcycle 12 fixation_duration ""
	setcycle 12 cue_condition fixation
	setcycle 12 target_condition neutral
	setcycle 12 correct_response 5
	setcycle 12 block ""
	setcycle 12 count_block 13
	setcycle 12 count_total 85
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	setcycle 18 cue_type cue
	setcycle 18 cue_pos 50
	setcycle 18 target_type congruent_right
	setcycle 18 target_pos 50
	setcycle 18 fixation_duration ""
	setcycle 18 cue_condition spatial
	setcycle 18 target_condition congruent
	setcycle 18 correct_response 6
	setcycle 18 block ""
	setcycle 18 count_block 19
	setcycle 18 count_total 91
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	setcycle 36 cue_type ""
	setcycle 36 cue_pos ""
	setcycle 36 target_type ""
	setcycle 36 target_pos ""
	setcycle 36 fixation_duration ""
	setcycle 36 cue_condition ""
	setcycle 36 target_condition ""
	setcycle 36 correct_response ""
	setcycle 36 block ""
	setcycle 36 count_block ""
	setcycle 36 count_total ""
	run ""

define reset_feedback new_reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define sequence new_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructie_1 always
	run Instructie_2 always
	run Instructie_3 always
	run Instructie_4 always
	run Instructie_5 always
	run Instructie_6 always
	run Instructie_7 always
	run Instructie_8 always
	run Instructie_9 always
	run Instructie_10_4 always
	run Instructie_11 always
	run Instructie_12 always
	run Instructie_13 always
	run Instructie always

define sequence new_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructie_1_1 always
	run Instructie_2_1 always
	run Instructie_4_1 always
	run Instructie_10 always

define sequence new_sequence_1_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructie_1_1_1 always
	run Instructie_2_1_1 always
	run Instructie_4_1_1 always
	run Instructie_10 always

define sequence new_sequence_1_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructie_1_1_2 always

define sequence new_sequence_1_2_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructie_1_1_2_1 always

define sequence new_sequence_1_2_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructie_1_1_2_2_1 always
	run Instructie_1_1_2_2 always

define sequence new_sequence_1_2_2_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructie_1_1_2_2_1_1 always
	run Instructie_1_1_2_2_2 always

define sequence new_sequence_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructie_1_2 always
	run Instructie_2_2 always
	run Instructie_3_2 always
	run Instructie_4_2 always
	run Instructie_5_2 always
	run Instructie_6_2 always
	run Instructie_7_2 always
	run Instructie_8_2 always
	run Instructie_9_2 always
	run Instructie_10_4_2 always
	run Instructie_11_1 always
	run Instructie_12_1 always
	run Instructie_13_1 always
	run Instructie always

define sequence new_sequence_3
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructie_1_3 always
	run Instructie_4_3 always

define sequence new_sequence_3_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructie_1_3_1 always
	run Instructie_4_3_1 always

define sequence new_sequence_3_1_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructie_1_3_1_1 always
	run Instructie_4_3_1_1 always

define sequence new_sequence_3_1_1_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructie_1_3_1_1_1 always
	run Instructie_4_3_1_1_1 always

define sequence new_sequence_3_1_1_1_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructie_1_3_1_1_1_1 always
	run Instructie_4_3_1_1_1_1 always

define sequence new_sequence_3_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructie_1_3_2 always
	run Instructie_4_3_2 always

define sequence new_sequence_3_2_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructie_1_3_2_1 always
	run Instructie_4_3_2_1 always

define sequence new_sequence_3_2_1_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructie_1_3_2_1_2 always
	run Instructie_4_3_2_1_2 always

define srbox new_srbox
	set timeout infinite
	set require_state_change yes
	set lights ""
	set dev autodetect
	set correct_response 6
	set _dummy no

define srbox new_srbox_1
	set timeout 1695
	set require_state_change yes
	set lights ""
	set dev autodetect
	set correct_response "[correct_response]"
	set _dummy no

define srbox new_srbox_2
	set timeout 1695
	set require_state_change yes
	set lights ""
	set dev autodetect
	set correct_response "[correct_response]"
	set _dummy no

define srbox new_srbox_3
	set timeout infinite
	set require_state_change yes
	set lights ""
	set dev COM4
	set correct_response 6
	set _dummy no

define sketchpad target
	set timeout 1695
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="fixation.png" scale=0.14 show_if=always x=0 y=0 z_index=1
	draw image center=1 file="[target_type].png" scale=0.3 show_if=always x=0 y="[target_pos]" z_index=0

define sketchpad target_2
	set timeout 1695
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="fixation.png" scale=0.14 show_if=always x=0 y=0 z_index=1
	draw image center=1 file="[target_type].png" scale=0.3 show_if=always x=0 y="[target_pos]" z_index=0

define notepad trigger_codes
	__note__
	
	4 = trial onset in simple trials
	5 = cue onset in simple trials
	6 = target onset in simple trials
	7 = correct response offset in simple trials
	8 = omisssion in simple trials
	
	9 = trial onset in ANT trials
	10 = cue onset in no cue trials
	20 = cue onset in central cue trials
	30 = cue onset in spatial cue trials
	
	1 = target onset in neutral target trials
	2 = target onset in congruent target trials
	3 = target onset in incongruent target trials
	
	11 = correct response offset in no cue & neutral trials
	12 = correct response offset in no cue & congruent trials
	13 = correct response offset in no cue & incongruent trials
	
	21 = correct response offset in central cue & neutral trials
	22 = correct response offset in central cue & congruent trials
	23 = correct response offset in central cue & incongruent trials
	
	31 = correct response offset in spatial cue & neutral trials
	32 = correct response offset in spatial cue & congruent trials
	33 = correct response offset in spatial cue & incongruent trials
	
	61 = incorrect response offset in no cue & neutral trials
	62 = incorrect response offset in no cue & congruent trials
	63 = incorrect response offset in no cue & incongruent trials
	
	71 = incorrect response offset in central cue & neutral trials
	72 = incorrect response offset in central cue & congruent trials
	73 = incorrect response offset in central cue & incongruent trials
	
	81 = incorrect response offset in spatial cue & neutral trials
	82 = incorrect response offset in spatial cue & congruent trials
	83 = incorrect response offset in spatial cue & incongruent trials
	
	99 = omission 
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define inline_script trigger_cue_onset
	set description "Executes Python code"
	___run__
	
	
	#if var.cue_condition == 'fixation':
	#	cue_value = 10
	#elif var.cue_condition == 'cue':
	#	cue_value = 20
	#elif var.cue_condition == 'spatial':
	#	cue_value = 30
	#
	#exp.trigger.write(chr(cue_value))
	__end__
	set _prepare ""

define inline_script trigger_cue_onset_1
	set description "Executes Python code"
	___run__
	exp.trigger.write(chr(5))
	__end__
	set _prepare ""

define inline_script trigger_response_offset
	set description "Executes Python code"
	___run__
	#trial_value=cue_value+target_value
	
	#if var.correct_new_srbox_2 == 1:
	#	trial_value = trial_value + 0
	
	#if (var.correct_new_srbox_2 == 0) and (var.response_new_srbox_2 != 'None'):
	#	trial_value = trial_value + 50
	
	#if (var.correct_new_srbox_2 == 0) and (var.response_new_srbox_2 == 'None'):
	#	trial_value = 99
	
	#var.trial_value=trial_value
	
	#exp.trigger.write(chr(trial_value))
	__end__
	set _prepare ""

define inline_script trigger_response_offset_1
	set description "Executes Python code"
	___run__
	if var.correct_new_srbox_2 == 1:
		simple_value = 7
	if var.response_new_srbox_2 == 'None':
		simple_value = 8
	
	exp.trigger.write(chr(simple_value))
	__end__
	set _prepare ""

define inline_script trigger_target_onset
	set description "Executes Python code"
	___run__
	#if var.target_condition == 'neutral':
	#	target_value = 1
	#elif var.target_condition == 'congruent':
	#	target_value = 2
	#elif var.target_condition == 'incongruent':
	#	target_value = 3
	#
	#exp.trigger.write(chr(target_value))
	__end__
	set _prepare ""

define inline_script trigger_target_onset_1
	set description "Executes Python code"
	set _run "exp.trigger.write(chr(6))"
	set _prepare ""

define inline_script trigger_trial_onset
	set description "Executes Python code"
	set _run "#exp.trigger.write(chr(9))"
	set _prepare ""

define inline_script trigger_trial_onset_1
	set description "Executes Python code"
	set _run "exp.trigger.write(chr(4))"
	set _prepare ""

define notepad version_history
	__note__
	EMMA TOOLBOX
	Attention Network Test - EEG
	Marsh Konigs
	____________________________________________________________________________
	
	v 1.0 (May 2017)
	Merged the child and addult version of the ANT into one paradigm with a choice option at the start.
	Added a simple reaction time task to provide the possibility of ex-Gaussian analysis.
	
	v 1.1 (August 2017)
	Added serial port triggers for EEG experiments.
	
	v 1.2 (September 2017)
	Elaborated serial port triggers for EEG experiments for trial onset, cue onset, target onset, response offset and registration of correct responses, incorrect responses and omissions.
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

