---
API: 2
OpenSesame: 3.1.9
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start FlankerTestScreening
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set pygame_doublebuf no
set mouse_backend xpyriment
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground "#000000"
set font_underline no
set font_size 18
set font_italic no
set font_family serif
set font_bold no
set expyriment_opengl no
set experiment_path "C:/Users/emmaneuroscience/Documents/emma_toolbox/Tests/Attention"
set disable_garbage_collection yes
set description "Default description"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set bidi no
set background "#ffffff"

define inline_script Aandoening_anders
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="van welke aandoening(en) heeft u een diagnose? \n Vul in en druk daarna op ENTER")
	text_input = widgets.text_input(form, var='aandoening_anders', return_accepts=True, stub="Typ hier")
	
	# Set form
	
	form.set_widget(label, (0,1))
	form.set_widget(text_input, (0,2))
	form._exec()
	
	if self.get('aandoening_anders') == '':
		items['Aandoening_anders'].run()
	__end__
	set _prepare ""

define inline_script Aandoeningen
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Bent u gediagnosticeerd met een aandoening?", center=True)
	checkbox1 = widgets.checkbox(form, text='Nee', group='aandoeningen', var='aandoeningen')
	checkbox2 = widgets.checkbox(form, text='Ja, dyslexie', group='aandoeningen', var='aandoeningen')
	checkbox3 = widgets.checkbox(form, text='Ja, ADHD', group='aandoeningen', var='aandoeningen')
	checkbox4 = widgets.checkbox(form, text='Ja, andere aandoening: ', group='aandoeningen', var='aandoeningen')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label, (0,1), colspan=4)
	form.set_widget(checkbox1, (0,2))
	form.set_widget(checkbox2, (0,3))
	form.set_widget(checkbox3, (0,4))
	form.set_widget(checkbox4, (0,5), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('aandoeningen') == "no":
		items['Aandoeningen'].run()
	
	var.aandoening_anders=" "
	__end__
	set _prepare ""

define inline_script Balans
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate heeft u normaal gesproken last van balansproblemen of duizeligheid?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate heeft u last van balansproblemen of duizeligheid?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='balans')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('balans') == None:
		items['Balans'].run()
	__end__
	set _prepare ""

define loop Blok1
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 72
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 cue_type cue
	setcycle 0 cue_pos 0
	setcycle 0 target_type congruent_left
	setcycle 0 target_pos -50
	setcycle 0 fixation_duration 250
	setcycle 0 cue_condition cue
	setcycle 0 target_condition congruent
	setcycle 0 correct_response 5
	setcycle 0 block 1
	setcycle 0 count_block 1
	setcycle 0 count_total 1
	setcycle 1 cue_type cue
	setcycle 1 cue_pos 50
	setcycle 1 target_type neutral_right
	setcycle 1 target_pos 50
	setcycle 1 fixation_duration 250
	setcycle 1 cue_condition spatial
	setcycle 1 target_condition neutral
	setcycle 1 correct_response 6
	setcycle 1 block 1
	setcycle 1 count_block 2
	setcycle 1 count_total 2
	setcycle 2 cue_type cue
	setcycle 2 cue_pos 0
	setcycle 2 target_type congruent_right
	setcycle 2 target_pos 50
	setcycle 2 fixation_duration 250
	setcycle 2 cue_condition cue
	setcycle 2 target_condition congruent
	setcycle 2 correct_response 6
	setcycle 2 block 1
	setcycle 2 count_block 3
	setcycle 2 count_total 3
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	setcycle 4 cue_type fixation
	setcycle 4 cue_pos 0
	setcycle 4 target_type congruent_left
	setcycle 4 target_pos -50
	setcycle 4 fixation_duration 250
	setcycle 4 cue_condition fixation
	setcycle 4 target_condition congruent
	setcycle 4 correct_response 5
	setcycle 4 block 1
	setcycle 4 count_block 5
	setcycle 4 count_total 5
	setcycle 5 cue_type cue
	setcycle 5 cue_pos 50
	setcycle 5 target_type incongruent_left
	setcycle 5 target_pos 50
	setcycle 5 fixation_duration 250
	setcycle 5 cue_condition spatial
	setcycle 5 target_condition incongruent
	setcycle 5 correct_response 5
	setcycle 5 block 1
	setcycle 5 count_block 6
	setcycle 5 count_total 6
	setcycle 6 cue_type cue
	setcycle 6 cue_pos -50
	setcycle 6 target_type congruent_right
	setcycle 6 target_pos -50
	setcycle 6 fixation_duration 250
	setcycle 6 cue_condition spatial
	setcycle 6 target_condition congruent
	setcycle 6 correct_response 6
	setcycle 6 block 1
	setcycle 6 count_block 7
	setcycle 6 count_total 7
	setcycle 7 cue_type fixation
	setcycle 7 cue_pos 0
	setcycle 7 target_type incongruent_right
	setcycle 7 target_pos 50
	setcycle 7 fixation_duration 250
	setcycle 7 cue_condition fixation
	setcycle 7 target_condition incongruent
	setcycle 7 correct_response 6
	setcycle 7 block 1
	setcycle 7 count_block 8
	setcycle 7 count_total 8
	setcycle 8 cue_type fixation
	setcycle 8 cue_pos 0
	setcycle 8 target_type congruent_right
	setcycle 8 target_pos 50
	setcycle 8 fixation_duration 250
	setcycle 8 cue_condition fixation
	setcycle 8 target_condition congruent
	setcycle 8 correct_response 6
	setcycle 8 block 1
	setcycle 8 count_block 9
	setcycle 8 count_total 9
	setcycle 9 cue_type cue
	setcycle 9 cue_pos 50
	setcycle 9 target_type congruent_right
	setcycle 9 target_pos 50
	setcycle 9 fixation_duration 250
	setcycle 9 cue_condition spatial
	setcycle 9 target_condition congruent
	setcycle 9 correct_response 6
	setcycle 9 block 1
	setcycle 9 count_block 10
	setcycle 9 count_total 10
	setcycle 10 cue_type cue
	setcycle 10 cue_pos 0
	setcycle 10 target_type incongruent_right
	setcycle 10 target_pos 50
	setcycle 10 fixation_duration 250
	setcycle 10 cue_condition cue
	setcycle 10 target_condition incongruent
	setcycle 10 correct_response 6
	setcycle 10 block 1
	setcycle 10 count_block 11
	setcycle 10 count_total 11
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	setcycle 13 cue_type cue
	setcycle 13 cue_pos 0
	setcycle 13 target_type neutral_left
	setcycle 13 target_pos -50
	setcycle 13 fixation_duration 250
	setcycle 13 cue_condition cue
	setcycle 13 target_condition neutral
	setcycle 13 correct_response 5
	setcycle 13 block 1
	setcycle 13 count_block 14
	setcycle 13 count_total 14
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	setcycle 18 cue_type cue
	setcycle 18 cue_pos -50
	setcycle 18 target_type neutral_right
	setcycle 18 target_pos -50
	setcycle 18 fixation_duration 250
	setcycle 18 cue_condition spatial
	setcycle 18 target_condition neutral
	setcycle 18 correct_response 6
	setcycle 18 block 1
	setcycle 18 count_block 19
	setcycle 18 count_total 19
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	setcycle 20 cue_type cue
	setcycle 20 cue_pos 0
	setcycle 20 target_type incongruent_left
	setcycle 20 target_pos -50
	setcycle 20 fixation_duration 250
	setcycle 20 cue_condition cue
	setcycle 20 target_condition incongruent
	setcycle 20 correct_response 5
	setcycle 20 block 1
	setcycle 20 count_block 21
	setcycle 20 count_total 21
	setcycle 21 cue_type cue
	setcycle 21 cue_pos -50
	setcycle 21 target_type neutral_left
	setcycle 21 target_pos -50
	setcycle 21 fixation_duration 250
	setcycle 21 cue_condition spatial
	setcycle 21 target_condition neutral
	setcycle 21 correct_response 5
	setcycle 21 block 1
	setcycle 21 count_block 22
	setcycle 21 count_total 22
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	run Flanker_1

define loop Blok2
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 72
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 cue_type cue
	setcycle 0 cue_pos 0
	setcycle 0 target_type neutral_right
	setcycle 0 target_pos 50
	setcycle 0 fixation_duration 250
	setcycle 0 cue_condition cue
	setcycle 0 target_condition neutral
	setcycle 0 correct_response 6
	setcycle 0 block 2
	setcycle 0 count_block 1
	setcycle 0 count_total 73
	setcycle 1 cue_type fixation
	setcycle 1 cue_pos 0
	setcycle 1 target_type neutral_right
	setcycle 1 target_pos 50
	setcycle 1 fixation_duration 250
	setcycle 1 cue_condition fixation
	setcycle 1 target_condition neutral
	setcycle 1 correct_response 6
	setcycle 1 block 2
	setcycle 1 count_block 2
	setcycle 1 count_total 74
	setcycle 2 cue_type cue
	setcycle 2 cue_pos 0
	setcycle 2 target_type congruent_left
	setcycle 2 target_pos -50
	setcycle 2 fixation_duration 250
	setcycle 2 cue_condition cue
	setcycle 2 target_condition congruent
	setcycle 2 correct_response 5
	setcycle 2 block 2
	setcycle 2 count_block 3
	setcycle 2 count_total 75
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	setcycle 4 cue_type cue
	setcycle 4 cue_pos 50
	setcycle 4 target_type incongruent_right
	setcycle 4 target_pos 50
	setcycle 4 fixation_duration 250
	setcycle 4 cue_condition spatial
	setcycle 4 target_condition incongruent
	setcycle 4 correct_response 6
	setcycle 4 block 2
	setcycle 4 count_block 5
	setcycle 4 count_total 77
	setcycle 5 cue_type fixation
	setcycle 5 cue_pos 0
	setcycle 5 target_type congruent_left
	setcycle 5 target_pos -50
	setcycle 5 fixation_duration 250
	setcycle 5 cue_condition fixation
	setcycle 5 target_condition congruent
	setcycle 5 correct_response 5
	setcycle 5 block 2
	setcycle 5 count_block 6
	setcycle 5 count_total 78
	setcycle 6 cue_type fixation
	setcycle 6 cue_pos 0
	setcycle 6 target_type incongruent_right
	setcycle 6 target_pos 50
	setcycle 6 fixation_duration 250
	setcycle 6 cue_condition fixation
	setcycle 6 target_condition incongruent
	setcycle 6 correct_response 6
	setcycle 6 block 2
	setcycle 6 count_block 7
	setcycle 6 count_total 79
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	setcycle 8 cue_type cue
	setcycle 8 cue_pos 0
	setcycle 8 target_type incongruent_right
	setcycle 8 target_pos 50
	setcycle 8 fixation_duration 250
	setcycle 8 cue_condition cue
	setcycle 8 target_condition incongruent
	setcycle 8 correct_response 6
	setcycle 8 block 2
	setcycle 8 count_block 9
	setcycle 8 count_total 81
	setcycle 9 cue_type fixation
	setcycle 9 cue_pos 0
	setcycle 9 target_type congruent_right
	setcycle 9 target_pos 50
	setcycle 9 fixation_duration 250
	setcycle 9 cue_condition fixation
	setcycle 9 target_condition congruent
	setcycle 9 correct_response 6
	setcycle 9 block 2
	setcycle 9 count_block 10
	setcycle 9 count_total 82
	setcycle 10 cue_type fixation
	setcycle 10 cue_pos 0
	setcycle 10 target_type incongruent_left
	setcycle 10 target_pos -50
	setcycle 10 fixation_duration 250
	setcycle 10 cue_condition fixation
	setcycle 10 target_condition incongruent
	setcycle 10 correct_response 5
	setcycle 10 block 2
	setcycle 10 count_block 11
	setcycle 10 count_total 83
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	setcycle 12 cue_type cue
	setcycle 12 cue_pos -50
	setcycle 12 target_type neutral_right
	setcycle 12 target_pos -50
	setcycle 12 fixation_duration 250
	setcycle 12 cue_condition spatial
	setcycle 12 target_condition neutral
	setcycle 12 correct_response 6
	setcycle 12 block 2
	setcycle 12 count_block 13
	setcycle 12 count_total 85
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	setcycle 16 cue_type cue
	setcycle 16 cue_pos 0
	setcycle 16 target_type incongruent_left
	setcycle 16 target_pos -50
	setcycle 16 fixation_duration 250
	setcycle 16 cue_condition cue
	setcycle 16 target_condition incongruent
	setcycle 16 correct_response 5
	setcycle 16 block 2
	setcycle 16 count_block 17
	setcycle 16 count_total 89
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	setcycle 18 cue_type cue
	setcycle 18 cue_pos 0
	setcycle 18 target_type congruent_right
	setcycle 18 target_pos 50
	setcycle 18 fixation_duration 250
	setcycle 18 cue_condition cue
	setcycle 18 target_condition congruent
	setcycle 18 correct_response 6
	setcycle 18 block 2
	setcycle 18 count_block 19
	setcycle 18 count_total 91
	setcycle 19 cue_type fixation
	setcycle 19 cue_pos 0
	setcycle 19 target_type neutral_left
	setcycle 19 target_pos -50
	setcycle 19 fixation_duration 250
	setcycle 19 cue_condition fixation
	setcycle 19 target_condition neutral
	setcycle 19 correct_response 5
	setcycle 19 block 2
	setcycle 19 count_block 20
	setcycle 19 count_total 92
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	setcycle 29 cue_type cue
	setcycle 29 cue_pos 50
	setcycle 29 target_type congruent_left
	setcycle 29 target_pos 50
	setcycle 29 fixation_duration 250
	setcycle 29 cue_condition spatial
	setcycle 29 target_condition congruent
	setcycle 29 correct_response 5
	setcycle 29 block 2
	setcycle 29 count_block 30
	setcycle 29 count_total 102
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	run Flanker_2

define loop Blok3
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 72
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 cue_type cue
	setcycle 0 cue_pos 0
	setcycle 0 target_type incongruent_right
	setcycle 0 target_pos 50
	setcycle 0 fixation_duration 250
	setcycle 0 cue_condition cue
	setcycle 0 target_condition incongruent
	setcycle 0 correct_response 6
	setcycle 0 block 3
	setcycle 0 count_block 1
	setcycle 0 count_total 145
	setcycle 1 cue_type cue
	setcycle 1 cue_pos 50
	setcycle 1 target_type congruent_right
	setcycle 1 target_pos 50
	setcycle 1 fixation_duration 250
	setcycle 1 cue_condition spatial
	setcycle 1 target_condition congruent
	setcycle 1 correct_response 6
	setcycle 1 block 3
	setcycle 1 count_block 2
	setcycle 1 count_total 146
	setcycle 2 cue_type fixation
	setcycle 2 cue_pos 0
	setcycle 2 target_type congruent_right
	setcycle 2 target_pos 50
	setcycle 2 fixation_duration 250
	setcycle 2 cue_condition fixation
	setcycle 2 target_condition congruent
	setcycle 2 correct_response 6
	setcycle 2 block 3
	setcycle 2 count_block 3
	setcycle 2 count_total 147
	setcycle 3 cue_type cue
	setcycle 3 cue_pos -50
	setcycle 3 target_type incongruent_left
	setcycle 3 target_pos -50
	setcycle 3 fixation_duration 250
	setcycle 3 cue_condition spatial
	setcycle 3 target_condition incongruent
	setcycle 3 correct_response 5
	setcycle 3 block 3
	setcycle 3 count_block 4
	setcycle 3 count_total 148
	setcycle 4 cue_type cue
	setcycle 4 cue_pos 0
	setcycle 4 target_type congruent_right
	setcycle 4 target_pos 50
	setcycle 4 fixation_duration 250
	setcycle 4 cue_condition cue
	setcycle 4 target_condition congruent
	setcycle 4 correct_response 6
	setcycle 4 block 3
	setcycle 4 count_block 5
	setcycle 4 count_total 149
	setcycle 5 cue_type fixation
	setcycle 5 cue_pos 0
	setcycle 5 target_type incongruent_left
	setcycle 5 target_pos -50
	setcycle 5 fixation_duration 250
	setcycle 5 cue_condition fixation
	setcycle 5 target_condition incongruent
	setcycle 5 correct_response 5
	setcycle 5 block 3
	setcycle 5 count_block 6
	setcycle 5 count_total 150
	setcycle 6 cue_type cue
	setcycle 6 cue_pos 50
	setcycle 6 target_type neutral_right
	setcycle 6 target_pos 50
	setcycle 6 fixation_duration 250
	setcycle 6 cue_condition spatial
	setcycle 6 target_condition neutral
	setcycle 6 correct_response 6
	setcycle 6 block 3
	setcycle 6 count_block 7
	setcycle 6 count_total 151
	setcycle 7 cue_type cue
	setcycle 7 cue_pos -50
	setcycle 7 target_type neutral_left
	setcycle 7 target_pos -50
	setcycle 7 fixation_duration 250
	setcycle 7 cue_condition spatial
	setcycle 7 target_condition neutral
	setcycle 7 correct_response 5
	setcycle 7 block 3
	setcycle 7 count_block 8
	setcycle 7 count_total 152
	setcycle 8 cue_type cue
	setcycle 8 cue_pos 50
	setcycle 8 target_type incongruent_right
	setcycle 8 target_pos 50
	setcycle 8 fixation_duration 250
	setcycle 8 cue_condition spatial
	setcycle 8 target_condition incongruent
	setcycle 8 correct_response 6
	setcycle 8 block 3
	setcycle 8 count_block 9
	setcycle 8 count_total 153
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	setcycle 10 cue_type cue
	setcycle 10 cue_pos 0
	setcycle 10 target_type neutral_left
	setcycle 10 target_pos -50
	setcycle 10 fixation_duration 250
	setcycle 10 cue_condition cue
	setcycle 10 target_condition neutral
	setcycle 10 correct_response 5
	setcycle 10 block 3
	setcycle 10 count_block 11
	setcycle 10 count_total 155
	setcycle 11 cue_type cue
	setcycle 11 cue_pos 0
	setcycle 11 target_type incongruent_left
	setcycle 11 target_pos -50
	setcycle 11 fixation_duration 250
	setcycle 11 cue_condition cue
	setcycle 11 target_condition incongruent
	setcycle 11 correct_response 5
	setcycle 11 block 3
	setcycle 11 count_block 12
	setcycle 11 count_total 156
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	setcycle 16 cue_type cue
	setcycle 16 cue_pos -50
	setcycle 16 target_type congruent_right
	setcycle 16 target_pos -50
	setcycle 16 fixation_duration 250
	setcycle 16 cue_condition spatial
	setcycle 16 target_condition congruent
	setcycle 16 correct_response 6
	setcycle 16 block 3
	setcycle 16 count_block 17
	setcycle 16 count_total 161
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	setcycle 18 cue_type cue
	setcycle 18 cue_pos -50
	setcycle 18 target_type congruent_left
	setcycle 18 target_pos -50
	setcycle 18 fixation_duration 250
	setcycle 18 cue_condition spatial
	setcycle 18 target_condition congruent
	setcycle 18 correct_response 5
	setcycle 18 block 3
	setcycle 18 count_block 19
	setcycle 18 count_total 163
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	setcycle 33 cue_type cue
	setcycle 33 cue_pos 50
	setcycle 33 target_type neutral_left
	setcycle 33 target_pos 50
	setcycle 33 fixation_duration 250
	setcycle 33 cue_condition spatial
	setcycle 33 target_condition neutral
	setcycle 33 correct_response 5
	setcycle 33 block 3
	setcycle 33 count_block 34
	setcycle 33 count_total 178
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	run Flanker_3

define inline_script Braken
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate heeft u normaal gesproken last van braken?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate heeft u last van braken?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='braken')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('braken') == None:
		items['Braken'].run()
	__end__
	set _prepare ""

define inline_script Bril_Lenzen
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Draagt u een bril of contactlenzen?", center=True)
	checkbox1 = widgets.checkbox(form, text='Ja', group='bril_lenzen', var='bril_lenzen')
	checkbox2 = widgets.checkbox(form, text='Nee', group='bril_lenzen', var='bril_lenzen')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label, (0,1), colspan=4)
	form.set_widget(checkbox1, (0,2))
	form.set_widget(checkbox2, (0,3))
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('bril_lenzen') == "no":
		items['Bril_Lenzen'].run()
	__end__
	set _prepare ""

define inline_script Concentratie
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate heeft u normaal gesproken moeite met concentratie?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate heeft u moeite met concentratie?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='concentratie')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('concentratie') == None:
		items['Concentratie'].run()
	__end__
	set _prepare ""

define sketchpad Correct
	set duration 495
	set description "Displays stimuli"
	draw textline center=1 color="#00ff00" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="CORRECT<br /><br />Reactiesnelheid [response_time]" x=0 y=0 z_index=0

define inline_script Dieet
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Volgt u een speciaal dieet?", center=True)
	checkbox1 = widgets.checkbox(form, text='Ja ', group='dieet', var='dieet')
	checkbox2 = widgets.checkbox(form, text='Nee', group='dieet', var='dieet')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label, (0,1), colspan=4)
	form.set_widget(checkbox1, (0,2))
	form.set_widget(checkbox2, (0,3))
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('dieet') == "no":
		items['Dieet'].run()
	
	var.wat_voor_dieet=" "
	__end__
	set _prepare ""

define inline_script Disconnect_SMI
	set description "Executes Python code"
	___run__
	# ---------------------------------------------
	#---- stop recording and disconnect from iViewX
	# ---------------------------------------------
	
	
	res = iViewXAPI.iV_Disconnect()
	
	f21.close()
	f22.close()
	__end__
	set _prepare ""

define inline_script Droevigheid
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate heeft u normaal gesproken last van droevigheid?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate heeft u last van droevigheid?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='droevigheid')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('droevigheid') == None:
		items['Droevigheid'].run()
	__end__
	set _prepare ""

define inline_script Druk_op_hoofd
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate heeft u normaal gesproken last van druk op het hoofd?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate heeft u last van druk op het hoofd?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='druk_op_hoofd')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('druk_op_hoofd') == None:
		items['Druk_op_hoofd'].run()
	__end__
	set _prepare ""

define sketchpad Drukopderechterknop
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="Druk op de rechterknop.<br />" x=0 y=0 z_index=0

define inline_script Emotioneel
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate bent u momenteel meer emotioneel dan normaal?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate bent u meer emotioneel dan normaal?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='emotioneel')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('emotioneel') == None:
		items['Emotioneel'].run()
	__end__
	set _prepare ""

define sketchpad End
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="" x=416 y=320 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Academic Medical Center<br />Emma Children's Hospital<br />Pediatric Neuroscience Group<br />m.konigs@amc.nl<br /><br />Unauthorized use of the Emma Toolbox is not allowed." x=9 y=183 z_index=0
	draw image center=1 file="amc.png" scale=1 show_if=always x=0 y=320 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Emma Toolbox<br /><i> Attention </i>" x=5 y=-316 z_index=0
	draw image center=1 file="ET.png" scale=1 show_if=always x=0 y=-64 z_index=0
	draw image center=1 file="KNVB.png" scale=0.3 show_if=always x=416 y=-288 z_index=0

define sequence FlankerTestScreening
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Start_ always
	run Toggle_Eyetracker always
	run Inst_calibration "[eyetracker]==1"
	run Prepare_SMI "[eyetracker]==1"
	run Stream_SMI "[eyetracker]==1"
	run Validate_SMI "[eyetracker]==1"
	run Pause_SMI "[eyetracker]==1"
	run new_loop always
	run Meting always
	run Informatie1 "[meting] != \"SGH poli\""
	run Informatie2 "[meting] != \"SGH poli\""
	run Toestemmingsformulier "[meting] != \"SGH poli\""
	run Naam always
	run Geboortedatum always
	run Geslacht always
	run Geboorteland_vader "[meting]=\"Baseline\""
	run Geboorteland_moeder "[meting]=\"Baseline\""
	run Opleiding "[meting]=\"Baseline\""
	run new_sequence_4 "[meting]=\"Baseline\""
	run Kleurenblind "[meting]=\"Baseline\""
	run Bril_Lenzen "[meting]=\"Baseline\""
	run Zicht "[meting]=\"Baseline\""
	run Gehoor "[meting]=\"Baseline\""
	run Handig "[meting]=\"Baseline\""
	run Slaap "[meting]=\"Baseline\""
	run Medicijnen "[meting] != \"SGH poli\""
	run new_sequence_3_1 "[meting] != \"SGH poli\""
	run Aandoeningen "[meting]=\"Baseline\""
	run new_sequence_2 "[meting]=\"Baseline\""
	run Hersenschudding "[meting] != \"SGH poli\""
	run new_sequence_1 "[meting] != \"SGH poli\""
	run Sport "[meting]=\"Baseline\""
	run new_sequence_1_1 "[meting]=\"Baseline\""
	run Positie "[meting]=\"Baseline\" and [sport]== \"Voetbal\""
	run SYMPTOMENCHECKLIST_baseline "[meting]=\"Baseline\""
	run SYMPTOMENCHECKLIST_nameting "[meting]=\"Nameting kort\" or [meting]=\"Nameting lang\""
	run Hoofdpijn "[meting] != \"SGH poli\""
	run Druk_op_hoofd "[meting] != \"SGH poli\""
	run Balans "[meting] != \"SGH poli\""
	run Nekpijn "[meting] != \"SGH poli\""
	run Misselijkheid "[meting] != \"SGH poli\""
	run Braken "[meting] != \"SGH poli\""
	run Zichtproblemen "[meting] != \"SGH poli\""
	run Gehoorproblemen "[meting] != \"SGH poli\""
	run Niet_goed_voelen "[meting] != \"SGH poli\""
	run Wazig_voelen "[meting] != \"SGH poli\""
	run Verward_voelen "[meting] != \"SGH poli\""
	run Gevoel_langzaam "[meting] != \"SGH poli\""
	run Gevoel_mistig "[meting] != \"SGH poli\""
	run Slaperigheid "[meting] != \"SGH poli\""
	run Vermoeidheid "[meting] != \"SGH poli\""
	run Emotioneel "[meting] != \"SGH poli\""
	run Geirriteerd "[meting] != \"SGH poli\""
	run Concentratie "[meting] != \"SGH poli\""
	run Onthouden "[meting] != \"SGH poli\""
	run Droevigheid "[meting] != \"SGH poli\""
	run Nerveus_bang "[meting] != \"SGH poli\""
	run Slaapproblemen "[meting] != \"SGH poli\""
	run Meer_slapen "[meting] != \"SGH poli\""
	run Gevoeligheid_licht "[meting] != \"SGH poli\""
	run Gevoeligheid_geluid "[meting] != \"SGH poli\""
	run Instructie always
	run new_reset_feedback "[response_Instructie]!='t'"
	run Reset_1 "[response_Instructie]!='t'"
	run Stream_SMI "[eyetracker]==1"
	run Oefenblok "[response_Instructie]!='t'"
	run Pause_SMI "[eyetracker]==1"
	run StartTest1_baseline "[meting]=\"Baseline\" or [meting]=\"Nameting lang\"  or [meting] = \"SGH poli\""
	run StartTest1_nameting "[meting]=\"Nameting kort\""
	run Reset_2 always
	run new_reset_feedback always
	run Stream_SMI "[eyetracker]==1"
	run Blok1 always
	run Pause_SMI "[eyetracker]==1"
	run new_sketchpad_1 "[meting]=\"Baseline\" or [meting]=\"Nameting lang\"  or [meting] = \"SGH poli\""
	run new_sketchpad_2 "[meting]=\"Baseline\" or [meting]=\"Nameting lang\"  or [meting] = \"SGH poli\""
	run new_sketchpad_1_2 "[meting]=\"Nameting kort\""
	run Reset_2 always
	run new_reset_feedback always
	run Stream_SMI "[eyetracker]==1"
	run Blok2 "[meting]=\"Baseline\" or [meting]=\"Nameting lang\"  or [meting] = \"SGH poli\""
	run Pause_SMI "[eyetracker]==1"
	run new_sketchpad_1_1 "[meting]=\"Baseline\" or [meting]=\"Nameting lang\"  or [meting] = \"SGH poli\""
	run new_sketchpad_2_1 "[meting]=\"Baseline\" or [meting]=\"Nameting lang\" or [meting] = \"SGH poli\""
	run Reset_2 "[meting]=\"Baseline\" or [meting]=\"Nameting lang\"  or [meting] = \"SGH poli\""
	run new_reset_feedback "[meting]=\"Baseline\" or [meting]=\"Nameting lang\""
	run Stream_SMI "[eyetracker]==1"
	run Blok3 "[meting]=\"Baseline\" or [meting]=\"Nameting lang\"  or [meting] = \"SGH poli\""
	run Disconnect_SMI "[eyetracker]==1"
	run create_backup always
	run End always

define sequence Flanker_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run settings always
	run write_trigger_start_1 "[eyetracker]==1"
	run fixation_2 always
	run cue_2 always
	run fixation_3 always
	run target_2 always
	run new_srbox_2 always
	run write_trigger_end_2 "[eyetracker]==1"
	run calculate always
	run calculate_block_1 "[meting] != \"SGH poli\""
	run feedback_1 "[count_block]=72"
	run new_logger always
	run SMI_track_check "[eyetracker]==1"

define sequence Flanker_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run settings always
	run write_trigger_start_2 "[eyetracker]==1"
	run fixation_2 always
	run cue_2 always
	run fixation_3 always
	run target_2 always
	run new_srbox_2 always
	run write_trigger_end_2 "[eyetracker]==1"
	run calculate always
	run calculate_block_2 "[meting] != \"SGH poli\""
	run feedback_2 "[count_block]=72"
	run new_logger always
	run SMI_track_check "[eyetracker]==1"

define sequence Flanker_3
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run settings always
	run write_trigger_start_3 "[eyetracker]==1"
	run fixation_2 always
	run cue_2 always
	run fixation_3 always
	run target_2 always
	run new_srbox_2 always
	run write_trigger_end_3 "[eyetracker]==1"
	run calculate always
	run calculate_block_3 "[meting] != \"SGH poli\""
	run feedback_3 "[count_block]=72"
	run new_logger always
	run SMI_track_check "[eyetracker]==1"

define sequence Flanker_practice
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run write_start_prac "[eyetracker]==1"
	run Incorrect "[correct_new_srbox_1]=0 and [response_new_srbox_1]!=None and [count_cue] > 0"
	run Correct "[correct_new_srbox_1]=1 and [count_cue] > 0"
	run NoResp "[response_new_srbox_1]=None  and [count_cue]>0"
	run fixation always
	run cue always
	run fixation_1 always
	run target always
	run new_srbox_1 always
	run write_end_prac "[eyetracker]==1"
	run calculate_prac always
	run calculate_prac_fb "[meting] != \"SGH poli\""
	run feedback_prac "[count_block]=24"
	run new_logger always
	run SMI_track_check "[eyetracker]==1"

define inline_script Geboortedatum
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Wat is uw geboortedatum? Vul in als ..-..-.... (bijv. 31-12-2000)\n Druk daarna op ENTER")
	text_input = widgets.text_input(form, var='geboortedatum', return_accepts=True, stub="Typ hier")
	
	# Set form
	
	form.set_widget(label, (0,1))
	form.set_widget(text_input, (0,2))
	form._exec()
	
	if self.get('geboortedatum') == '':
		items['Geboortedatum'].run()
	__end__
	set _prepare ""

define inline_script Geboorteland_moeder
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="In welk land is uw moeder geboren? \n Vul in en druk daarna op ENTER  \n \n Indien onbekend, vul dan '?' in")
	text_input = widgets.text_input(form, var='geboorteland_moeder', return_accepts=True, stub="Typ hier")
	
	# Set form
	form.set_widget(label, (0,1))
	form.set_widget(text_input, (0,2))
	form._exec()
	
	if self.get('geboorteland_moeder') == '':
		items['Geboorteland_moeder'].run()
	__end__
	set _prepare ""

define inline_script Geboorteland_vader
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="In welk land is uw vader geboren? \n Vul in en druk daarna op ENTER \n \n Indien onbekend, vul dan '?' in")
	text_input = widgets.text_input(form, var='geboorteland_vader', return_accepts=True, stub="Typ hier")
	
	# Set form
	
	form.set_widget(label, (0,1))
	form.set_widget(text_input, (0,2))
	form._exec()
	
	if self.get('geboorteland_vader') == '':
		items['Geboorteland_vader'].run()
	__end__
	set _prepare ""

define inline_script Gehoor
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Heeft u problemen met uw gehoor?", center=True)
	checkbox1 = widgets.checkbox(form, text='Ja', group='gehoor', var='gehoor')
	checkbox2 = widgets.checkbox(form, text='Nee', group='gehoor', var='gehoor')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label, (0,1), colspan=4)
	form.set_widget(checkbox1, (0,2))
	form.set_widget(checkbox2, (0,3))
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('gehoor') == "no":
		items['Gehoor'].run()
	__end__
	set _prepare ""

define inline_script Gehoorproblemen
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate heeft u normaal gesproken last van gehoorproblemen (zoem in het hoofd)?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate heeft u last van gehoorproblemen (zoem in het hoofd)?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='gehoorproblemen')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('gehoorproblemen') == None:
		items['Gehoorproblemen'].run()
	__end__
	set _prepare ""

define inline_script Geirriteerd
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate voelt u zich normaal gesproken geirriteerd?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate voelt u zich geirriteerd?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='geirriteerd')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('geirriteerd') == None:
		items['Geirriteerd'].run()
	__end__
	set _prepare ""

define inline_script Geslacht
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Wat is uw sexe?", center=True)
	checkbox1 = widgets.checkbox(form, text='Man', group='geslacht', var='geslacht')
	checkbox2 = widgets.checkbox(form, text='Vrouw', group='geslacht', var='geslacht')
	checkbox3 = widgets.checkbox(form, text='Anders', group='geslacht', var='geslacht')
	button = widgets.button(form, text='Volgende', frame=True, center=True)		
	
	# Set form
	
	form.set_widget(label, (0,1), colspan=4)
	form.set_widget(checkbox1, (0,2))
	form.set_widget(checkbox2, (0,3))
	form.set_widget(checkbox3, (0,4))
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
		
	if self.get('geslacht') == "no":
		items['Geslacht'].run()
	__end__
	set _prepare ""

define inline_script Gevoel_langzaam
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate heeft u normaal gesproken het gevoel langzaam te zijn?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate heeft u het gevoel langzaam te zijn?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='gevoel_langzaam')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('gevoel_langzaam') == None:
		items['Gevoel_langzaam'].run()
	__end__
	set _prepare ""

define inline_script Gevoel_mistig
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate heeft u normaal gesproken het gevoel dat het 'mistig' is om u heen?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate heeft u het gevoel dat het 'mistig' is om u heen?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='gevoel_mistig')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('gevoel_mistig') == None:
		items['Gevoel_mistig'].run()
	__end__
	set _prepare ""

define inline_script Gevoeligheid_geluid
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate heeft u normaal gesproken last van gevoeligheid voor geluid?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate heeft u last van gevoeligheid voor geluid?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='gevoeligheid_geluid')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('gevoeligheid_geluid') == None:
		items['Gevoeligheid_geluid'].run()
	__end__
	set _prepare ""

define inline_script Gevoeligheid_licht
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate heeft u normaal gesproken last van gevoeligheid voor licht?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate heeft u last van gevoeligheid voor licht?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='gevoeligheid_licht')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('gevoeligheid_licht') == None:
		items['Gevoeligheid_licht'].run()
	__end__
	set _prepare ""

define inline_script Handig
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Bent u links- of rechtshandig?", center=True)
	checkbox1 = widgets.checkbox(form, text='Linkshandig', group='handig', var='handig')
	checkbox2 = widgets.checkbox(form, text='Rechtshandig', group='handig', var='handig')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label, (0,1), colspan=4)
	form.set_widget(checkbox1, (0,2))
	form.set_widget(checkbox2, (0,3))
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('handig') == "no":
		items['Handig'].run()
	__end__
	set _prepare ""

define inline_script Hersenschudding
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Heeft u wel eens een hersenschudding gehad?", center=True)
	checkbox1 = widgets.checkbox(form, text='Ja: ', group='hersenschudding', var='hersenschudding')
	checkbox2 = widgets.checkbox(form, text='Nee', group='hersenschudding', var='hersenschudding')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label, (0,1), colspan=4)
	form.set_widget(checkbox1, (0,2))
	form.set_widget(checkbox2, (0,3))
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('hersenschudding') == "no":
		items['Hersenschudding'].run()
	
	var.wanneer_hersenschudding=" "
	__end__
	set _prepare ""

define inline_script Hoevaak_middelen
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Welke geestverruimende middelen gebruikt u? \n Hoeveel gebruikt u per week? (bijv. alcohol, 10 glazen per week) \n Vul in en druk daarna op ENTER")
	text_input = widgets.text_input(form, var='hoevaak_middelen', return_accepts=True, stub="Typ hier")
	
	# Set form
	
	form.set_widget(label, (0,1))
	form.set_widget(text_input, (0,2))
	form._exec()
	
	if self.get('hoevaak_middelen') == '':
		items['Hoevaak_middelen'].run()
	__end__
	set _prepare ""

define inline_script Hoofdpijn
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate heeft u normaal gesproken last van hoofdpijn?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate heeft u last van hoofdpijn?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='hoofdpijn')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('hoofdpijn') == None:
		items['Hoofdpijn'].run()
	__end__
	set _prepare ""

define inline_script Huisarts_naam
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Wat is de naam van uw huisarts? \n Vul in en druk daarna op ENTER")
	text_input = widgets.text_input(form, var='huisarts_naam', return_accepts=True, stub="Typ hier")
	
	# Set form
	
	form.set_widget(label, (0,1))
	form.set_widget(text_input, (0,2))
	form._exec()
	
	if self.get('huisarts_naam') == '':
		items['Huisarts_naam'].run()
	__end__
	set _prepare ""

define inline_script Huisarts_plaats
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="In welke plaats is uw huisarts gevestigd? \n Vul in en druk daarna op ENTER")
	text_input = widgets.text_input(form, var='huisarts_plaats', return_accepts=True, stub="Typ hier")
	
	# Set form
	
	form.set_widget(label, (0,1))
	form.set_widget(text_input, (0,2))
	form._exec()
	
	if self.get('huisarts_plaats') == '':
		items['Huisarts_plaats'].run()
	__end__
	set _prepare ""

define sketchpad Incorrect
	set duration 495
	set description "Displays stimuli"
	draw textline center=1 color="#ff0000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="INCORRECT<br /><br />Reactiesnelheid [response_time]" x=0 y=0 z_index=0

define form_text_display Informatie1
	set timeout infinite
	set spacing 10
	set rows "1;1;1;1;1;1;1;1"
	set only_render no
	set ok_text Volgende
	set margins "50;50;50;50"
	set form_title "<span size=24>Informatie over het onderzoek</span>"
	__form_text__
	Deze screening is een onderdeel van de medische begeleiding in het kader van hersenschuddingen, uitgevoerd door de KNVB. Als onderdeel van onze richtlijnen meten we ook cognitieve functies, zoals reactiesnelheid en concentratie. Deze meting wordt periodiek uitgevoerd (baseline) en herhaald als er (vermoedelijk) sprake is van een hersenschudding. 
	
	<i>Onderzoek </i>
	In samenwerking met het Amsterdam UMC hebben we een onderzoek opgezet. Met dit onderzoek proberen we beter te begrijpen wat voetbaltalent precies is. Ook willen we de methoden die we gebruiken verbeteren, zodat de testen bijvoorbeeld minder lang duren.  
	__end__
	set description "A simple text display form"
	set cols "1;1;1;1"
	set _theme gray
	widget 0 0 1 1 image path="VU-University-Amsterdam-logo.png"
	widget 3 0 1 1 image path="ylDkzz-i.png"
	widget 0 1 4 1 label text="[form_title]"
	widget 0 2 4 5 label text="[form_text]"
	widget 0 7 4 1 button text="[ok_text]"


define form_text_display Informatie2
	set timeout infinite
	set spacing 10
	set rows "1;1;1;1;1;1;1;1"
	set only_render no
	set ok_text Volgende
	set margins "50;50;50;50"
	set form_title "<span size=24>Informatie over het onderzoek</span>"
	__form_text__
	<i>Uw gegevens</i> 
	
	Voor dit onderzoek willen we graag uw gegevens gebruiken. We gebruiken daarvoor niet uw naam, maar alleen de getallen voor het onderzoek. Uw keuze en de resultaten hebben géén invloed op selectiebeleid. Met de resultaten van het onderzoek proberen we de medische begeleiding en de KNVB opleiding te verbeteren. 
	
	
	<i>Meedoen? </i>
	
	Als u toestemming geeft dat we uw gegevens gebruiken, vul dan het formulier in dat naast de computer ligt. Als u niet wil dat we uw gegevens gebruiken, vul dan het formulier niet in. Als u het formulier hebt ingevuld, en u heeft daar later spijt van, kunt u dit altijd laten weten. We zullen uw gegevens dan niet gebruiken.  
	
	
	Vragen? Voor vragen kunt u altijd contact opnemen met dr. Marsh Königs (m.konigs@amsterdamumc.nl). 
	__end__
	set description "A simple text display form"
	set cols "1;1;1;1"
	set _theme gray
	widget 0 0 1 1 image path="VU-University-Amsterdam-logo.png"
	widget 3 0 1 1 image path="ylDkzz-i.png"
	widget 0 1 4 1 label text="[form_title]"
	widget 0 2 4 5 label text="[form_text]"
	widget 0 7 4 1 button text="[ok_text]"


define sketchpad Inst_calibration
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="<u> Instructie </u><br /><br />In het volgende scherm zie je een rode stip. Soms staat de stip stil, en soms beweegt hij.<br /><br />Volg de rode stip met je ogen en blijf er naar kijken." x=0 y=-32 z_index=0

define sketchpad Instructie
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="<u> Instructie </u><br /><br />> Zo meteen zie je een kruisje in het midden van het scherm.<br />Daarna verschijnt er een rij symbolen. De middelste is altijd een pijl. <br /><br /><br />> Wijst de pijl naar rechts, dan druk je op de rechterknop. <br />Wijst de pijl naar links, dan druk je op je linkerknop. <br /><br /><br />> Soms staan er andere pijlen naast de middelste pijl.<br />Deze wijzen soms dezelfde kant op als de middelste pijl<br /> en soms wijzen ze de andere kant op. <br />Let alleen op de middelste pijl. <br /><br /><br />> Soms verschijnt er eerst een sterretje in het midden. <br />De pijlen komen dan vlak daarna.<br /><br /><br />> Soms verschijnt het sterretje aan de bovenkant of onderkant van het midden. <br />Dat is dan ook de plek waar de pijlen komen.<br /><br /><br />> Blijf altijd naar het kruisje in het midden kijken.<br /><br /><br /><br />Druk op een knop om de oefening te starten.<br />Druk op T om oefenen over te slaan." x=-160 y=0 z_index=0
	draw image center=1 file="congruent_right.png" scale=0.3 show_if=always x=350 y=-50 z_index=0
	draw image center=1 file="incongruent_right.png" scale=0.3 show_if=always x=350 y=50 z_index=0
	draw image center=1 file="fixation.png" scale=0.04 show_if=always x=350 y=0 z_index=0

define inline_script Kleurenblind
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Bent u kleurenblind?", center=True)
	checkbox1 = widgets.checkbox(form, text='Ja',  group='kleurenblind', var='kleurenblind')
	checkbox2 = widgets.checkbox(form, text='Nee', group='kleurenblind', var='kleurenblind')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label, (0,1), colspan=4)
	form.set_widget(checkbox1, (0,2))
	form.set_widget(checkbox2, (0,3))
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('kleurenblind') == "no":
		items['Kleurenblind'].run()
	__end__
	set _prepare ""

define inline_script Medicijnen
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Gebruikt u medicijnen?", center=True)
	checkbox1 = widgets.checkbox(form, text='Ja ', group='medicijnen', var='medicijnen')
	checkbox2 = widgets.checkbox(form, text='Nee', group='medicijnen', var='medicijnen')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label, (0,1), colspan=4)
	form.set_widget(checkbox1, (0,2))
	form.set_widget(checkbox2, (0,3))
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('medicijnen') == "no":
		items['Medicijnen'].run()
	
	var.welke_medicijnen=" "
	__end__
	set _prepare ""

define inline_script Meer_slapen
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate slaapt u momenteel meer dan normaal?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate slaapt u meer dan normaal?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='meer_slapen')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('meer_slapen') == None:
		items['Meer_slapen'].run()
	__end__
	set _prepare ""

define inline_script Meting
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	image1 = widgets.image(form, path=pool['amc.png'])
	image2 = widgets.image(form, path=pool['ylDkzz-i.png'])
	label= widgets.label(form, text="Welke meting wilt u vandaag uitvoeren?", center=True)
	checkbox1 = widgets.checkbox(form, text='Baseline', group='meting', var='meting')
	checkbox2 = widgets.checkbox(form, text='Nameting kort', group='meting', var='meting')
	checkbox3 = widgets.checkbox(form, text='Nameting lang', group='meting', var='meting')
	checkbox4 = widgets.checkbox(form, text='SGH poli', group='meting', var='meting')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(image1, (0,0))
	form.set_widget(image2, (3,0))
	form.set_widget(label, (0,1), colspan=4)
	form.set_widget(checkbox1, (0,2))
	form.set_widget(checkbox2, (0,3))
	form.set_widget(checkbox3, (0,4))
	form.set_widget(checkbox4, (0,5))
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
		
	if self.get('meting') == "no":
		items['Meting'].run()
	__end__
	set _prepare ""

define inline_script Middelen
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Gebruikt u geestverruimende middelen?", center=True)
	checkbox1 = widgets.checkbox(form, text='Ja ', group='middelen', var='middelen')
	checkbox2 = widgets.checkbox(form, text='Nee', group='middelen', var='middelen')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label, (0,1), colspan=4)
	form.set_widget(checkbox1, (0,2))
	form.set_widget(checkbox2, (0,3))
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('middelen') == "no":
		items['Middelen'].run()
	
	var.hoevaak_middelen=" "
	__end__
	set _prepare ""

define inline_script Misselijkheid
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate heeft u normaal gesproken last van misselijkheid?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate heeft u last van misselijkheid?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='misselijkheid')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('misselijkheid') == None:
		items['Misselijkheid'].run()
	__end__
	set _prepare ""

define inline_script Naam
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Vul uw voor- en achternaam in. \n Druk daarna op ENTER")
	text_input = widgets.text_input(form, var='naam', return_accepts=True, stub="Typ hier")
	
	# Set form
	
	form.set_widget(label, (0,1))
	form.set_widget(text_input, (0,2))
	form._exec()
	
	if self.get('naam') == '':
		items['Naam'].run()
	__end__
	set _prepare ""

define inline_script Nekpijn
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate heeft u normaal gesproken last van nekpijn?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate heeft u last van nekpijn?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='nekpijn')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('nekpijn') == None:
		items['Nekpijn'].run()
	__end__
	set _prepare ""

define inline_script Nerveus_bang
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate heeft u normaal gesproken last van nerveus of bang zijn?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate heeft u last van nerveus of bang zijn?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='nerveus_bang')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('nerveus_bang') == None:
		items['Nerveus_bang'].run()
	__end__
	set _prepare ""

define inline_script Niet_goed_voelen
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate voelt u zich normaal gesproken niet helemaal goed?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate voelt u zich niet helemaal goed?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='niet_goed_voelen')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('niet_goed_voelen') == None:
		items['Niet_goed_voelen'].run()
	__end__
	set _prepare ""

define sketchpad NoResp
	set duration 495
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="NO RESPONSE<br /><br />Reactiesnelheid [response_time]" x=0 y=0 z_index=0

define loop Oefenblok
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 24
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 cue_type fixation
	setcycle 0 cue_pos 0
	setcycle 0 target_type incongruent_right
	setcycle 0 target_pos 50
	setcycle 0 fixation_duration 250
	setcycle 0 cue_condition fixation
	setcycle 0 target_condition incongruent
	setcycle 0 correct_response 6
	setcycle 0 block practice
	setcycle 0 count_block 1
	setcycle 1 cue_type cue
	setcycle 1 cue_pos 0
	setcycle 1 target_type congruent_right
	setcycle 1 target_pos 50
	setcycle 1 fixation_duration 750
	setcycle 1 cue_condition cue
	setcycle 1 target_condition congruent
	setcycle 1 correct_response 6
	setcycle 1 block practice
	setcycle 1 count_block 2
	setcycle 2 cue_type fixation
	setcycle 2 cue_pos 0
	setcycle 2 target_type congruent_right
	setcycle 2 target_pos 50
	setcycle 2 fixation_duration 250
	setcycle 2 cue_condition fixation
	setcycle 2 target_condition congruent
	setcycle 2 correct_response 6
	setcycle 2 block practice
	setcycle 2 count_block 3
	setcycle 3 cue_type cue
	setcycle 3 cue_pos 0
	setcycle 3 target_type incongruent_left
	setcycle 3 target_pos -50
	setcycle 3 fixation_duration 250
	setcycle 3 cue_condition cue
	setcycle 3 target_condition incongruent
	setcycle 3 correct_response 5
	setcycle 3 block practice
	setcycle 3 count_block 4
	setcycle 4 cue_type cue
	setcycle 4 cue_pos 0
	setcycle 4 target_type neutral_right
	setcycle 4 target_pos 50
	setcycle 4 fixation_duration 500
	setcycle 4 cue_condition cue
	setcycle 4 target_condition neutral
	setcycle 4 correct_response 6
	setcycle 4 block practice
	setcycle 4 count_block 5
	setcycle 5 cue_type cue
	setcycle 5 cue_pos 0
	setcycle 5 target_type congruent_right
	setcycle 5 target_pos 50
	setcycle 5 fixation_duration 500
	setcycle 5 cue_condition cue
	setcycle 5 target_condition congruent
	setcycle 5 correct_response 6
	setcycle 5 block practice
	setcycle 5 count_block 6
	setcycle 6 cue_type cue
	setcycle 6 cue_pos 0
	setcycle 6 target_type incongruent_left
	setcycle 6 target_pos -50
	setcycle 6 fixation_duration 750
	setcycle 6 cue_condition cue
	setcycle 6 target_condition incongruent
	setcycle 6 correct_response 5
	setcycle 6 block practice
	setcycle 6 count_block 7
	setcycle 7 cue_type cue
	setcycle 7 cue_pos 50
	setcycle 7 target_type neutral_right
	setcycle 7 target_pos 50
	setcycle 7 fixation_duration 250
	setcycle 7 cue_condition spatial
	setcycle 7 target_condition neutral
	setcycle 7 correct_response 6
	setcycle 7 block practice
	setcycle 7 count_block 8
	setcycle 8 cue_type cue
	setcycle 8 cue_pos 50
	setcycle 8 target_type congruent_right
	setcycle 8 target_pos 50
	setcycle 8 fixation_duration 250
	setcycle 8 cue_condition spatial
	setcycle 8 target_condition congruent
	setcycle 8 correct_response 6
	setcycle 8 block practice
	setcycle 8 count_block 9
	setcycle 9 cue_type fixation
	setcycle 9 cue_pos 0
	setcycle 9 target_type congruent_right
	setcycle 9 target_pos 50
	setcycle 9 fixation_duration 750
	setcycle 9 cue_condition fixation
	setcycle 9 target_condition congruent
	setcycle 9 correct_response 6
	setcycle 9 block practice
	setcycle 9 count_block 10
	setcycle 10 cue_type cue
	setcycle 10 cue_pos 0
	setcycle 10 target_type incongruent_left
	setcycle 10 target_pos -50
	setcycle 10 fixation_duration 750
	setcycle 10 cue_condition cue
	setcycle 10 target_condition incongruent
	setcycle 10 correct_response 5
	setcycle 10 block practice
	setcycle 10 count_block 11
	setcycle 11 cue_type fixation
	setcycle 11 cue_pos 0
	setcycle 11 target_type neutral_left
	setcycle 11 target_pos -50
	setcycle 11 fixation_duration 750
	setcycle 11 cue_condition fixation
	setcycle 11 target_condition neutral
	setcycle 11 correct_response 5
	setcycle 11 block practice
	setcycle 11 count_block 12
	setcycle 12 cue_type cue
	setcycle 12 cue_pos 50
	setcycle 12 target_type congruent_right
	setcycle 12 target_pos 50
	setcycle 12 fixation_duration 750
	setcycle 12 cue_condition spatial
	setcycle 12 target_condition congruent
	setcycle 12 correct_response 6
	setcycle 12 block practice
	setcycle 12 count_block 13
	setcycle 13 cue_type cue
	setcycle 13 cue_pos 50
	setcycle 13 target_type congruent_left
	setcycle 13 target_pos 50
	setcycle 13 fixation_duration 250
	setcycle 13 cue_condition spatial
	setcycle 13 target_condition congruent
	setcycle 13 correct_response 5
	setcycle 13 block practice
	setcycle 13 count_block 14
	setcycle 14 cue_type cue
	setcycle 14 cue_pos -50
	setcycle 14 target_type congruent_left
	setcycle 14 target_pos -50
	setcycle 14 fixation_duration 250
	setcycle 14 cue_condition spatial
	setcycle 14 target_condition congruent
	setcycle 14 correct_response 5
	setcycle 14 block practice
	setcycle 14 count_block 15
	setcycle 15 cue_type cue
	setcycle 15 cue_pos 50
	setcycle 15 target_type neutral_right
	setcycle 15 target_pos 50
	setcycle 15 fixation_duration 500
	setcycle 15 cue_condition spatial
	setcycle 15 target_condition neutral
	setcycle 15 correct_response 6
	setcycle 15 block practice
	setcycle 15 count_block 16
	setcycle 16 cue_type fixation
	setcycle 16 cue_pos 0
	setcycle 16 target_type incongruent_right
	setcycle 16 target_pos 50
	setcycle 16 fixation_duration 750
	setcycle 16 cue_condition fixation
	setcycle 16 target_condition incongruent
	setcycle 16 correct_response 6
	setcycle 16 block practice
	setcycle 16 count_block 17
	setcycle 17 cue_type cue
	setcycle 17 cue_pos -50
	setcycle 17 target_type congruent_right
	setcycle 17 target_pos -50
	setcycle 17 fixation_duration 750
	setcycle 17 cue_condition spatial
	setcycle 17 target_condition congruent
	setcycle 17 correct_response 6
	setcycle 17 block practice
	setcycle 17 count_block 18
	setcycle 18 cue_type cue
	setcycle 18 cue_pos 50
	setcycle 18 target_type incongruent_left
	setcycle 18 target_pos 50
	setcycle 18 fixation_duration 750
	setcycle 18 cue_condition spatial
	setcycle 18 target_condition incongruent
	setcycle 18 correct_response 5
	setcycle 18 block practice
	setcycle 18 count_block 19
	setcycle 19 cue_type fixation
	setcycle 19 cue_pos 0
	setcycle 19 target_type incongruent_right
	setcycle 19 target_pos 50
	setcycle 19 fixation_duration 250
	setcycle 19 cue_condition fixation
	setcycle 19 target_condition incongruent
	setcycle 19 correct_response 6
	setcycle 19 block practice
	setcycle 19 count_block 20
	setcycle 20 cue_type cue
	setcycle 20 cue_pos 0
	setcycle 20 target_type incongruent_right
	setcycle 20 target_pos 50
	setcycle 20 fixation_duration 250
	setcycle 20 cue_condition cue
	setcycle 20 target_condition incongruent
	setcycle 20 correct_response 6
	setcycle 20 block practice
	setcycle 20 count_block 21
	setcycle 21 cue_type fixation
	setcycle 21 cue_pos 0
	setcycle 21 target_type incongruent_right
	setcycle 21 target_pos 50
	setcycle 21 fixation_duration 250
	setcycle 21 cue_condition fixation
	setcycle 21 target_condition incongruent
	setcycle 21 correct_response 6
	setcycle 21 block practice
	setcycle 21 count_block 22
	setcycle 22 cue_type cue
	setcycle 22 cue_pos 0
	setcycle 22 target_type neutral_left
	setcycle 22 target_pos -50
	setcycle 22 fixation_duration 750
	setcycle 22 cue_condition cue
	setcycle 22 target_condition neutral
	setcycle 22 correct_response 5
	setcycle 22 block practice
	setcycle 22 count_block 23
	setcycle 23 cue_type cue
	setcycle 23 cue_pos -50
	setcycle 23 target_type congruent_left
	setcycle 23 target_pos -50
	setcycle 23 fixation_duration 750
	setcycle 23 cue_condition spatial
	setcycle 23 target_condition congruent
	setcycle 23 correct_response 5
	setcycle 23 block practice
	setcycle 23 count_block 24
	run Flanker_practice

define inline_script Onthouden
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate heeft u normaal gesproken moeite met onthouden?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate heeft u moeite met onthouden?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='onthouden')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('onthouden') == None:
		items['Onthouden'].run()
	__end__
	set _prepare ""

define inline_script Opleiding
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Wat is uw hoogste opleiding?", center=True)
	checkbox1 = widgets.checkbox(form, text='Basisonderwijs', group='opleiding', var='opleiding')
	checkbox2 = widgets.checkbox(form, text='MAVO', group='opleiding', var='opleiding')
	checkbox3 = widgets.checkbox(form, text='VMBO', group='opleiding', var='opleiding')
	checkbox4 = widgets.checkbox(form, text='HAVO', group='opleiding', var='opleiding')
	checkbox5 = widgets.checkbox(form, text='VWO', group='opleiding', var='opleiding')
	checkbox6 = widgets.checkbox(form, text='MBO', group='opleiding', var='opleiding')
	checkbox7 = widgets.checkbox(form, text='HBO', group='opleiding', var='opleiding')
	checkbox8 = widgets.checkbox(form, text='Universiteit', group='opleiding', var='opleiding')
	checkbox9 = widgets.checkbox(form, text='Anders: ', group='opleiding', var='opleiding')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label, (0,1), colspan=4)
	form.set_widget(checkbox1, (0,2), colspan=2)
	form.set_widget(checkbox2, (0,3), colspan=2)
	form.set_widget(checkbox3, (0,4), colspan=2)
	form.set_widget(checkbox4, (0,5), colspan=2)
	form.set_widget(checkbox5, (0,6), colspan=2)
	form.set_widget(checkbox6, (2,2), colspan=2)
	form.set_widget(checkbox7, (2,3), colspan=2)
	form.set_widget(checkbox8, (2,4), colspan=2)
	form.set_widget(checkbox9, (2,5), colspan=2)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('opleiding') == "no":
		items['Opleiding'].run()
	
	var.opleiding_anders=" "
	__end__
	set _prepare ""

define inline_script Opleiding_anders
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Wat is uw hoogste opleiding? \n Vul in en druk daarna op ENTER")
	text_input = widgets.text_input(form, var='opleiding_anders', return_accepts=True, stub="Typ hier")
	
	# Set form
	
	form.set_widget(label, (0,1))
	form.set_widget(text_input, (0,2))
	form._exec()
	
	if self.get('opleiding_anders') == '':
		items['Opleiding_anders'].run()
	__end__
	set _prepare ""

define inline_script Pause_SMI
	set description "Executes Python code"
	___run__
	res = iViewXAPI.iV_SetSampleCallback(smp_func)
	sampleCB = False
	res = iViewXAPI.iV_SetEventCallback(event_func)
	eventCB = False
	__end__
	set _prepare ""

define inline_script Positie
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Op welke positie speelt u (het meest)?", center=True)
	checkbox1 = widgets.checkbox(form, text='Verdediging', group='positie', var='positie')
	checkbox2 = widgets.checkbox(form, text='Middenveld', group='positie', var='positie')
	checkbox3 = widgets.checkbox(form, text='Aanval', group='positie', var='positie')
	checkbox4 = widgets.checkbox(form, text='Keeper', group='positie', var='positie')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label, (0,1), colspan=4)
	form.set_widget(checkbox1, (0,2))
	form.set_widget(checkbox2, (0,3))
	form.set_widget(checkbox3, (0,4))
	form.set_widget(checkbox4, (0,5))
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('positie') == "no":
		items['Positie'].run()
	__end__
	set _prepare ""

define inline_script Prepare_SMI
	set description "Executes Python code"
	___run__
	
	#!/usr/bin/env python
	# -*- coding: utf-8 -*-
	from iViewXAPI import  *            #iViewX library
	from iViewXAPIReturnCodes import * 
	
	# ---------------------------------------------
	#---- connect to iViewX
	# ---------------------------------------------
	
	res = iViewXAPI.iV_SetLogger(c_int(1), c_char_p("iViewXSDK_Python_SimpleExperiment.txt"))
	res = iViewXAPI.iV_Connect(c_char_p('127.0.0.1'), c_int(4444), c_char_p('127.0.0.1'), c_int(5555))
	if res != 1:
		HandleError(res)
		exit(0)
	
	f21=open(exp.experiment_path + "/../../../emma_toolbox_data/Raw/Attention/eyetracker/gazedata_" + str(exp.get("subject_nr")) + ".txt", "w+")
	f22=open(exp.experiment_path + "/../../../emma_toolbox_data/Raw/Attention/eyetracker/eventdata_" + str(exp.get("subject_nr")) + ".txt", "w+")
	f21.write("This file contains eyetracker data for: " + str(exp.get("experiment_file")) + "\n")
	
	f21.write("subject: " + str(exp.get("subject_nr")) + "\n")
	f21.write("Open Sesame Version: " + str(exp.get("opensesame_codename")) + "\n")
	f21.write("Resolution: " + str(exp.get("width")) + " x " + str(exp.get("height")) + "\n")
	
	res = iViewXAPI.iV_GetSystemInfo(byref(systemData))
	f21.write( "iV_GetSystemInfo: " + str(res) + "\n" )
	f21.write( "Samplerate: " + str(systemData.samplerate) + "\n" )
	f21.write( "iViewX Version: " + str(systemData.iV_MajorVersion) + "." + str(systemData.iV_MinorVersion) + "." + str(systemData.iV_Buildnumber) + "\n" )
	f21.write( "iViewX API Version: " + str(systemData.API_MajorVersion) + "." + str(systemData.API_MinorVersion) + "." + str(systemData.API_Buildnumber) + "\n")
	
	
	# ---------------------------------------------
	#---- configure and start calibration
	# ---------------------------------------------
	
	calibrationData = CCalibration(5, 2, 0, 0, 1, 250, 220, 2, 20, b"")
	
	res = iViewXAPI.iV_SetupCalibration(byref(calibrationData))
	f21.write( "iV_SetupCalibration " + str(res) + "\n") 
	res = iViewXAPI.iV_Calibrate()
	f21.write( "iV_Calibrate " + str(res) + "\n")
	
	
	# ---------------------------------------------
	#---- define the callback functions
	# ---------------------------------------------
	var.distance_n=0
	var.distance=0
	def SampleCallback(sample):
		f21.write( " Gaze Data - IviewTimestamp " + str(sample.timestamp) + " OpenSesameTimeStamp " + str(clock.time())
	 + " GazeLeft " + str(sample.leftEye.gazeX) + " " + str(sample.leftEye.gazeY) + " GazeRight " + str(sample.rightEye.gazeX) + " " + str(sample.rightEye.gazeY) + " DistanceRight " + str(sample.rightEye.eyePositionZ) + " DiameterLeft " + str(sample.leftEye.diam) + " DiamaterRight " + str(sample.rightEye.diam) + "\n")
		var.rightEye_Distance = sample.rightEye.eyePositionZ
		var.leftEye_Distance = sample.leftEye.eyePositionZ
		return 0 
	
	
	
	def EventCallback(event):
		f22.write( " Event: Data - startTime " + str(event.startTime) + " endTime " + str(event.endTime) + " Gaze " + str(event.positionX) + " " + str(event.positionY) + "\n")
		return 0
	
	
	CMPFUNC = WINFUNCTYPE(c_int, CSample)
	smp_func = CMPFUNC(SampleCallback)
	sampleCB = False
	
	CMPFUNC = WINFUNCTYPE(c_int, CEvent)
	event_func = CMPFUNC(EventCallback)
	eventCB = False
	__end__
	set _prepare ""

define inline_script Reset_1
	set description "Executes Python code"
	set _run ""
	___prepare__
	import random
	
	#exp.set("response_time_new_mouse_response_1", 1695)
	var.response_time_new_srbox_1 = u'1695'
	
	var.response_new_srbox_1 = u'3'
	
	#exp.set("correct_new_mouse_response_1", 0)
	var.correct_new_srbox_1 = u'0'
	
	
	#Create per condition counter, correct_counter, response_counter and rt_sum
	#  to calculate avg_rt and acc later
	var.fixation_counter = 0
	var.fixation_correct_counter = 0
	var.fixation_response_counter = 0
	var.fixation_rt_sum = 0
	var.nocue_MRT = 0
	var.nocue_acc = 0
	
	var.cue_counter = 0
	var.cue_correct_counter = 0
	var.cue_response_counter = 0
	var.cue_rt_sum = 0
	var.centralcue_MRT = 0
	var.centralcue_acc = 0
	
	var.spatial_counter = 0
	var.spatial_correct_counter = 0
	var.spatial_response_counter = 0
	var.spatial_rt_sum = 0
	var.spatialcue_MRT = 0
	var.spatialcue_acc = 0
	
	var.congruent_counter = 0
	var.congruent_correct_counter = 0
	var.congruent_response_counter = 0
	var.congruent_rt_sum = 0
	var.congruent_MRT = 0
	var.congruent_acc = 0
	
	var.incongruent_counter = 0
	var.incongruent_correct_counter = 0
	var.incongruent_response_counter = 0
	var.incongruent_rt_sum = 0
	var.incongruent_MRT = 0
	var.incongruent_acc = 0
	
	var.neutral_counter = 0
	var.neutral_correct_counter = 0
	var.neutral_response_counter = 0
	var.neutral_rt_sum = 0
	var.neutral_MRT = 0
	var.neutral_acc = 0
	
	var.alerting_MRT = 0 
	var.alerting_acc = 0
	var.orienting_MRT = 0
	var.orienting_acc = 0
	var.executive_MRT = 0
	var.executive_acc = 0
	__end__

define inline_script Reset_2
	set description "Executes Python code"
	set _run ""
	___prepare__
	import random
	
	#exp.set("response_time_new_mouse_response_2", 1695)
	#var.response_time_new_srbox_2 = u'1695'
	var.response_new_srbox_2e = u'3'
	#exp.set("correct_new_mouse_response_2", 0)
	#var.correct_new_srbox_2 = u'0'
	
	#exp.set("response_time_new_mouse_response_2", 1695)
	var.response_time_new_srbox_2 = u'1695'
	
	#exp.set("correct_new_mouse_response_2", 0)
	var.correct_new_srbox_2 = u'0'
	
	var.fixation_counter = 0
	var.fixation_correct_counter = 0
	var.fixation_response_counter = 0
	var.fixation_rt_sum = 0
	var.nocue_MRT = 0
	var.nocue_acc = 0
	
	var.cue_counter = 0
	var.cue_correct_counter = 0
	var.cue_response_counter = 0
	var.cue_rt_sum = 0
	var.centralcue_MRT = 0
	var.centralcue_acc = 0
	
	var.spatial_counter = 0
	var.spatial_correct_counter = 0
	var.spatial_response_counter = 0
	var.spatial_rt_sum = 0
	var.spatialcue_MRT = 0
	var.spatialcue_acc = 0
	
	var.congruent_counter = 0
	var.congruent_correct_counter = 0
	var.congruent_response_counter = 0
	var.congruent_rt_sum = 0
	var.congruent_MRT = 0
	var.congruent_acc = 0
	
	var.incongruent_counter = 0
	var.incongruent_correct_counter = 0
	var.incongruent_response_counter = 0
	var.incongruent_rt_sum = 0
	var.incongruent_MRT = 0
	var.incongruent_acc = 0
	
	var.neutral_counter = 0
	var.neutral_correct_counter = 0
	var.neutral_response_counter = 0
	var.neutral_rt_sum = 0
	var.neutral_MRT = 0
	var.neutral_acc = 0
	
	var.alerting_MRT = 0 
	var.alerting_acc = 0
	var.orienting_MRT = 0
	var.orienting_acc = 0
	var.executive_MRT = 0
	var.executive_acc = 0
	__end__

define inline_script SMI_track_check
	set description "Executes Python code"
	___run__
	var.Distance_check = float(var.leftEye_Distance*var.rightEye_Distance)
	while(var.Distance_check == 0.0):
		my_canvas=canvas(color='red')
		my_canvas.text('Herpositioneer voor Eyetracker!')
		my_canvas.show()
		var.Distance_check = float(var.leftEye_Distance*var.rightEye_Distance)
	__end__
	set _prepare ""

define form_text_display SYMPTOMENCHECKLIST_baseline
	set timeout infinite
	set spacing 10
	set rows "1;1;1;1;1;1;1;1"
	set only_render no
	set ok_text Begin
	set margins "50;50;50;50"
	set form_title "<span size=24>Symptomen checklist</span>"
	set form_text "Bij de volgende vragen kunt u aangeven in hoeverre u normaal gesproken last heeft van bepaalde symptomen. U kunt hierbij gebruik maken van de score 0 t/m 6, waarbij 0 staat voor helemaal geen klachten, en 6 staat voor zeer veel klachten. "
	set description "A simple text display form"
	set cols "1;1;1;1"
	set _theme gray
	widget 0 1 4 1 label text="[form_title]"
	widget 0 2 4 4 label center=no text="[form_text]"
	widget 0 7 4 1 button text="[ok_text]"


define form_text_display SYMPTOMENCHECKLIST_nameting
	set timeout infinite
	set spacing 10
	set rows "1;1;1;1;1;1;1;1"
	set only_render no
	set ok_text Begin
	set margins "50;50;50;50"
	set form_title "<span size=24>Symptomen checklist</span>"
	set form_text "Bij de volgende vragen kunt u aangeven in hoeverre u de afgelopen week last heeft gehad van bepaalde symptomen. U kunt hierbij gebruik maken van de score 0 t/m 6, waarbij 0 staat voor helemaal geen klachten, en 6 staat voor zeer veel klachten. "
	set description "A simple text display form"
	set cols "1;1;1;1"
	set _theme gray
	widget 0 1 4 1 label text="[form_title]"
	widget 0 2 4 4 label center=no text="[form_text]"
	widget 0 7 4 1 button text="[ok_text]"


define inline_script Slaap
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Heeft u last of last gehad van slaapstoornissen?", center=True)
	checkbox1 = widgets.checkbox(form, text='Ja', group='slaap', var='slaap')
	checkbox2 = widgets.checkbox(form, text='Nee', group='slaap', var='slaap')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label, (0,1), colspan=4)
	form.set_widget(checkbox1, (0,2))
	form.set_widget(checkbox2, (0,3))
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('slaap') == "no":
		items['Slaap'].run()
	__end__
	set _prepare ""

define inline_script Slaapproblemen
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate heeft u normaal gesproken last van slaapproblemen?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate heeft u last van slaapproblemen?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='slaapproblemen')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('slaapproblemen') == None:
		items['Slaapproblemen'].run()
	__end__
	set _prepare ""

define inline_script Slaperigheid
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate heeft u normaal gesproken last van slaperigheid?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate heeft u last van slaperigheid?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='slaperigheid')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('slaperigheid') == None:
		items['Slaperigheid'].run()
	__end__
	set _prepare ""

define inline_script Sport
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Welke sport beoefent u?", center=True)
	checkbox1 = widgets.checkbox(form, text='Voetbal', group='sport', var='sport')
	checkbox2 = widgets.checkbox(form, text='Zaalvoetbal', group='sport', var='sport')
	checkbox3 = widgets.checkbox(form, text='Wielrennen', group='sport', var='sport')
	checkbox4 = widgets.checkbox(form, text='Basketbal', group='sport', var='sport')
	checkbox5 = widgets.checkbox(form, text='Anders', group='sport', var='sport')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label, (0,1), colspan=4)
	form.set_widget(checkbox1, (0,2))
	form.set_widget(checkbox2, (0,3))
	form.set_widget(checkbox3, (0,4))
	form.set_widget(checkbox4, (0,5))
	form.set_widget(checkbox5, (0,6))
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('sport') == "no":
		items['sport'].run()
	__end__
	set _prepare ""

define sketchpad Start
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="" x=416 y=320 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Academic Medical Center<br />Emma Children's Hospital<br />Pediatric Neuroscience Group<br />m.konigs@amc.nl<br /><br />Unauthorized use of the Emma Toolbox is not allowed." x=9 y=183 z_index=0
	draw image center=1 file="amc.png" scale=1 show_if=always x=0 y=320 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Emma Toolbox<br /><i> Attention </i>" x=5 y=-316 z_index=0
	draw image center=1 file="ET.png" scale=1 show_if=always x=0 y=-64 z_index=0

define sketchpad StartTest1_baseline
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="Dat was de oefening.<br /><br /><br /><br />Nu begint de echte test. Dit zijn drie blokken.  <br /><br />Probeer zo snel mogelijk te reageren zonder fouten te maken!<br />" x=0 y=0 z_index=0

define sketchpad StartTest1_nameting
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="Dat was de oefening.<br /><br /><br /><br />Nu begint de echte test. Dit is één blok.  <br /><br />Probeer zo snel mogelijk te reageren zonder fouten te maken!<br />" x=0 y=0 z_index=0

define sketchpad Start_
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="" x=416 y=320 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Academic Medical Center<br />Emma Children's Hospital<br />Pediatric Neuroscience Group<br />m.konigs@amc.nl<br /><br />Unauthorized use of the Emma Toolbox is not allowed." x=9 y=183 z_index=0
	draw image center=1 file="amc.png" scale=1 show_if=always x=0 y=320 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Emma Toolbox<br /><i> Attention </i>" x=5 y=-316 z_index=0
	draw image center=1 file="ET.png" scale=1 show_if=always x=0 y=-64 z_index=0
	draw image center=1 file="KNVB.png" scale=0.3 show_if=always x=416 y=-288 z_index=0

define inline_script Stream_SMI
	set description "Executes Python code"
	___run__
	# ---------------------------------------------
	#---- start DataStreaming
	# ---------------------------------------------
	#command = 0
	
	#while (command != 'q'):
	#	command = raw_input("waiting for input - press 's' and 'Enter' to start DataStreaming \n\
	#				  - press 'q' and 'Enter' to quit DataStreaming \n")
		
	#	if (command == 's'):
	res = iViewXAPI.iV_SetSampleCallback(smp_func)
	sampleCB = True
	res = iViewXAPI.iV_SetEventCallback(event_func)
	eventCB = True
	__end__
	set _prepare ""

define inline_script Toestemmingsformulier
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	image1 = widgets.image(form, path=pool['amc.png'])
	image2 = widgets.image(form, path=pool['ylDkzz-i.png'])
	label= widgets.label(form, text="<span size=24>Toestemmingsformulier</span> \n\n\n Naast de computer ligt een toestemmingsformulier. Lees dit formulier door, en vul uw gegevens in om toestemming te geven dat uw gegevens gebruikt mogen worden.")
	checkbox1 = widgets.checkbox(form, text='Ik heb het toestemmingsformulier ingevuld', var="akkoord", checked=False)
	checkbox2 = widgets.checkbox(form, text='Ik heb het toestemmingsformulier niet ingevuld', var="akkoord", checked=False)
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(image1, (0,0))
	form.set_widget(image2, (3,0))
	form.set_widget(label, (0,2), colspan=4)
	form.set_widget(checkbox1, (0,4), colspan=4)
	form.set_widget(checkbox2, (0,5), colspan=4)
	form.set_widget(button, (0,6), colspan=4)
	form._exec()
	
	if self.get("akkoord") == "no":
		items['Toestemmingsformulier'].run()
	__end__
	set _prepare ""

define inline_script Toggle_Eyetracker
	set description "Executes Python code"
	___run__
	
	#set eyetracker_switch.txt to 0 to toggle eyetracker off
	#set eyetracker_switch.txt to 1 to toggle eyetracker on
	
	with open(exp.experiment_path + "/../../../emma_toolbox_data/Settings/eyetracker_switch.txt", 'r') as myfile:
			var.eyetracker=myfile.read().replace('\n', '')
	 
	var.extra_vars=0
	__end__
	set _prepare ""

define inline_script Validate_SMI
	set description "Executes Python code"
	___run__
	
	f21.write( "validation starts now" + "\n")
	
	res = iViewXAPI.iV_Validate()
	f21.write( "iV_Validate " + str(res) + "\n")
	
	res = iViewXAPI.iV_GetAccuracy(byref(accuracyData), 0)
	f21.write( "iV_GetAccuracy " + str(res) + "\n")
	f21.write( "deviationXLeft " + str(accuracyData.deviationLX) + " deviationYLeft " + str(accuracyData.deviationLY) + "\n")
	f21.write( "deviationXRight " + str(accuracyData.deviationRX) + " deviationYRight " + str(accuracyData.deviationRY) + "\n")
	
	f21.write( "validation ends now" + "\n")
	__end__
	set _prepare ""

define inline_script Vermoeidheid
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate heeft u normaal gesproken last van vermoeidheid of het hebben van weinig energie?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate heeft u last van vermoeidheid of het hebben van weinig energie?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='vermoeidheid')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('vermoeidheid') == None:
		items['Vermoeidheid'].run()
	__end__
	set _prepare ""

define inline_script Verward_voelen
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate voelt u zich normaal gesproken verward?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate voelt u zich verward?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='verward_voelen')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('verward_voelen') == None:
		items['Verward_voelen'].run()
	__end__
	set _prepare ""

define inline_script Wanneer_hersenschudding
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Wanneer heeft u een hersenschudding gehad? \n Vul in als 'jaar, maand', bijvoorbeeld: 2010, maart \n Wanneer u dit niet precies weet, maak dan een inschatting \n Druk daarna op ENTER")
	text_input = widgets.text_input(form, var='wanneer_hersenschudding', return_accepts=True, stub="Typ hier")
	
	# Set form
	
	form.set_widget(label, (0,1))
	form.set_widget(text_input, (0,2))
	form._exec()
	
	if self.get('wanneer_hersenschudding') == '':
		items['Wanneer_hersenschudding'].run()
	__end__
	set _prepare ""

define inline_script Wat_voor_dieet
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Wat voor dieet volgt u? \n Vul in en druk daarna op ENTER")
	text_input = widgets.text_input(form, var='wat_voor_dieet', return_accepts=True, stub="Typ hier")
	
	# Set form
	
	form.set_widget(label, (0,1))
	form.set_widget(text_input, (0,2))
	form._exec()
	
	if self.get('wat_voor_dieet') == '':
		items['Wat_voor_dieet'].run()
	__end__
	set _prepare ""

define inline_script Wazig_voelen
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate voelt u zich normaal gesproken wazig?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate voelt u zich wazig?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='wazig_voelen')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('wazig_voelen') == None:
		items['Wazig_voelen'].run()
	__end__
	set _prepare ""

define sketchpad Welcome
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Emma Toolbox<br /><i> Attention Network Test KNVB </i>" x=0 y=0 z_index=0

define inline_script Welke_medicijnen
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Welke medicijnen gebruikt u? \n In welke dosering? (bijv. paracetamol, 1x per dag) \n Vul in en druk daarna op ENTER")
	text_input = widgets.text_input(form, var='welke_medicijnen', return_accepts=True, stub="Typ hier")
	
	# Set form
	
	form.set_widget(label, (0,1))
	form.set_widget(text_input, (0,2))
	form._exec()
	
	if self.get('welke_medicijnen') == '':
		items['Welke_medicijnen'].run()
	__end__
	set _prepare ""

define inline_script Welke_sport
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Welke sport beoefent u? \n Vul in en druk op ENTER")
	text_input = widgets.text_input(form, var='welke_sport', return_accepts=True, stub="Typ hier")
	
	# Set form
	
	form.set_widget(label, (0,1))
	form.set_widget(text_input, (0,2))
	form._exec()
	
	if self.get('welke_sport') == '':
		items['welke_sport'].run()
	__end__
	set _prepare ""

define inline_script Welke_sport_1
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Welke sport beoefent u? \n Vul in en druk op ENTER")
	text_input = widgets.text_input(form, var='welke_sport', return_accepts=True, stub="Typ hier")
	
	# Set form
	
	form.set_widget(label, (0,1))
	form.set_widget(text_input, (0,2))
	form._exec()
	
	if self.get('welke_sport') == '':
		items['welke_sport'].run()
	__end__
	set _prepare ""

define inline_script Woonplaats
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Wat is uw woonplaats? \n Vul in en druk daarna op ENTER")
	text_input = widgets.text_input(form, var='woonplaats', return_accepts=True, stub="Typ hier")
	
	# Set form
	
	form.set_widget(label, (0,1))
	form.set_widget(text_input, (0,2))
	form._exec()
	
	if self.get('woonplaats') == '':
		items['Woonplaats'].run()
	__end__
	set _prepare ""

define inline_script Zicht
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Heeft u problemen met uw zicht?", center=True)
	checkbox1 = widgets.checkbox(form, text='Ja', group='zicht',var='zicht')
	checkbox2 = widgets.checkbox(form, text='Nee', group='zicht', var='zicht')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label, (0,1), colspan=4)
	form.set_widget(checkbox1, (0,2))
	form.set_widget(checkbox2, (0,3))
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('zicht') == "no":
		items['Zicht'].run()
	__end__
	set _prepare ""

define inline_script Zichtproblemen
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate heeft u normaal gesproken last van zicht problemen?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate heeft u last van zicht problemen?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='zichtproblemen')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('zichtproblemen') == None:
		items['Zichtproblemen'].run()
	__end__
	set _prepare ""

define inline_script calculate
	set description "Executes Python code"
	___run__
	
	
	
	# -------------- no cue -----------------------
	
	if var.cue_condition == 'fixation':
		var.fixation_counter += 1
		if var.correct_new_srbox_2 == 1:
			var.fixation_correct_counter +=1
			var.fixation_rt_sum += var.response_time_new_srbox_2
		if var.response_new_srbox_2 != 'None':
			var.fixation_response_counter += 1
	
	
	if var.fixation_correct_counter != 0:
		var.nocue_MRT = str(var.fixation_rt_sum/var.fixation_correct_counter)
	
		
	if var.fixation_correct_counter != 0:
		var.nocue_acc = str(var.fixation_correct_counter/float(var.fixation_counter)*100)
	
		
	
	# -------------- central cue ------------------
	
	if var.cue_condition == 'cue':
		var.cue_counter += 1
		if var.correct_new_srbox_2 == 1:
			var.cue_correct_counter +=1
			var.cue_rt_sum += var.response_time_new_srbox_2
		if var.response_new_srbox_2 != 'None':
			var.cue_response_counter += 1
	
	if var.cue_correct_counter != 0:
		var.centralcue_MRT = str(var.cue_rt_sum/var.cue_correct_counter)
		
		
	if var.cue_correct_counter != 0:
		var.centralcue_acc = str(var.cue_correct_counter/float(var.cue_counter)*100)
		
		
	
	# -------------- spatial cue ------------------
	
	if var.cue_condition == 'spatial':
		var.spatial_counter += 1
		if var.correct_new_srbox_2 == 1:
			var.spatial_correct_counter +=1
			var.spatial_rt_sum += var.response_time_new_srbox_2
		if var.response_new_srbox_2 != 'None':
			var.spatial_response_counter += 1
	
	
	if var.spatial_correct_counter != 0:
		var.spatialcue_MRT = str(var.spatial_rt_sum/var.spatial_correct_counter)
		
		
	if var.spatial_correct_counter != 0:
		var.spatialcue_acc = str(var.spatial_correct_counter/float(var.spatial_counter)*100)
		
		
	
	# -------------- neutral target ------------------
	
	if var.target_condition == 'neutral':
		var.neutral_counter += 1
		if var.correct_new_srbox_2 == 1:
			var.neutral_correct_counter +=1
			var.neutral_rt_sum += var.response_time_new_srbox_2
		if var.response_new_srbox_2 != 'None':
			var.neutral_response_counter += 1
	
	
	if var.neutral_correct_counter != 0:
		var.neutral_MRT = str(var.neutral_rt_sum/var.neutral_correct_counter)
		
		
	if var.neutral_correct_counter != 0:
		var.neutral_acc = str(var.neutral_correct_counter/float(var.neutral_counter)*100)
		
		
	
	# -------------- congruent target ------------------
	
	if var.target_condition == 'congruent':
		var.congruent_counter += 1
		if var.correct_new_srbox_2 == 1:
			var.congruent_correct_counter +=1
			var.congruent_rt_sum += var.response_time_new_srbox_2
		if var.response_new_srbox_2 != 'None':
			var.congruent_response_counter += 1
	
	
	if var.congruent_correct_counter != 0:
		var.congruent_MRT = str(var.congruent_rt_sum/var.congruent_correct_counter)
	
		
	if var.congruent_correct_counter != 0:
		var.congruent_acc = str(var.congruent_correct_counter/float(var.congruent_counter)*100)
	
		
	
	# -------------- incongruent target ------------------
	
	if var.target_condition == 'incongruent':
		var.incongruent_counter += 1
		if var.correct_new_srbox_2 == 1:
			var.incongruent_correct_counter +=1
			var.incongruent_rt_sum += var.response_time_new_srbox_2
		if var.response_new_srbox_2 != 'None':
			var.incongruent_response_counter += 1
	
	
	if var.incongruent_correct_counter != 0:
		var.incongruent_MRT = str(var.incongruent_rt_sum/var.incongruent_correct_counter)
		
		
	if var.incongruent_correct_counter != 0:
		var.incongruent_acc = str(var.incongruent_correct_counter/float(var.incongruent_counter)*100)
		
	# attention networks
	var.alerting_MRT = var.centralcue_MRT - var.nocue_MRT
	var.alerting_acc = var.centralcue_acc - var.nocue_acc
	var.orienting_MRT = var.spatialcue_MRT - var.centralcue_MRT
	var.orienting_acc = var.spatialcue_acc - var.centralcue_acc
	var.executive_MRT = var.incongruent_MRT - var.congruent_MRT
	var.executive_acc = var.incongruent_acc - var.congruent_acc
	__end__
	set _prepare ""

define inline_script calculate_block_1
	set description "Executes Python code"
	___run__
	# Neutral trails
	var.neutral_MRT_1 = var.neutral_MRT 
	var.neutral_acc_1 = var.neutral_acc
	
	# attention networks
	var.alerting_MRT_1 = var.centralcue_MRT - var.nocue_MRT
	var.alerting_acc_1 = var.centralcue_acc - var.nocue_acc
	var.orienting_MRT_1 = var.spatialcue_MRT - var.centralcue_MRT
	var.orienting_acc_1 = var.spatialcue_acc - var.centralcue_acc
	var.executive_MRT_1 = var.incongruent_MRT - var.congruent_MRT
	var.executive_acc_1 = var.incongruent_acc - var.congruent_acc
	
	
	var.alerting_acc_mean_1 = (var.centralcue_acc + var.nocue_acc)/2
	var.orienting_acc_mean_1 = (var.spatialcue_acc + var.centralcue_acc)/2
	var.executive_acc_mean_1 = (var.incongruent_acc + var.congruent_acc)/2
	__end__
	set _prepare ""

define inline_script calculate_block_2
	set description "Executes Python code"
	___run__
	
	# Neutral trails
	var.neutral_MRT_2 = var.neutral_MRT 
	var.neutral_acc_2 = var.neutral_acc
	
	# attention networks
	var.alerting_MRT_2 = var.centralcue_MRT - var.nocue_MRT
	var.alerting_acc_2 = var.centralcue_acc - var.nocue_acc
	var.orienting_MRT_2 = var.spatialcue_MRT - var.centralcue_MRT
	var.orienting_acc_2 = var.spatialcue_acc - var.centralcue_acc
	var.executive_MRT_2 = var.incongruent_MRT - var.congruent_MRT
	var.executive_acc_2 = var.incongruent_acc - var.congruent_acc
	
	
	var.alerting_acc_mean_2 = (var.centralcue_acc + var.nocue_acc)/2
	var.orienting_acc_mean_2 = (var.spatialcue_acc + var.centralcue_acc)/2
	var.executive_acc_mean_2 = (var.incongruent_acc + var.congruent_acc)/2
	# write to KLINISCH RAPPORT
	__end__
	set _prepare ""

define inline_script calculate_block_3
	set description "Executes Python code"
	___run__
	
	# Neutral trails
	var.neutral_MRT_3 = var.neutral_MRT 
	var.neutral_acc_3 = var.neutral_acc
	
	# attention networks
	var.alerting_MRT_3 = var.centralcue_MRT - var.nocue_MRT
	var.alerting_acc_3 = var.centralcue_acc - var.nocue_acc
	var.orienting_MRT_3 = var.spatialcue_MRT - var.centralcue_MRT
	var.orienting_acc_3 = var.spatialcue_acc - var.centralcue_acc
	var.executive_MRT_3 = var.incongruent_MRT - var.congruent_MRT
	var.executive_acc_3 = var.incongruent_acc - var.congruent_acc
	
	var.alerting_acc_mean_3 = (var.centralcue_acc + var.nocue_acc)/2
	var.orienting_acc_mean_3 = (var.spatialcue_acc + var.centralcue_acc)/2
	var.executive_acc_mean_3 = (var.incongruent_acc + var.congruent_acc)/2
	
	# write to KLINISCH RAPPORT
	
	#fp6 = expanduser("~") + "/Desktop/Flanker_2016/Klinisch_Rapport/" + str(exp.get("naam")) + "/Flanker_scores_Blok_3_" + str(exp.get("naam")) + "_" + str(time.strftime("%d_%m_%Y")) + ".txt"
	__end__
	set _prepare ""

define inline_script calculate_prac
	set description "Executes Python code"
	___run__
	# -------------- no cue -----------------------
	
	if var.cue_condition == 'fixation':
		var.fixation_counter += 1
		if var.correct_new_srbox_1 == 1:
			var.fixation_correct_counter +=1
			var.fixation_rt_sum += var.response_time_new_srbox_1
		if var.response_new_srbox_1 != 'None':
			var.fixation_response_counter += 1
	
	
	if var.fixation_correct_counter != 0:
		var.nocue_MRT = str(var.fixation_rt_sum/var.fixation_correct_counter)
	
		
	if var.fixation_correct_counter != 0:
		var.nocue_acc = str(var.fixation_correct_counter/float(var.fixation_counter)*100)
	
		
	
	# -------------- central cue ------------------
	
	if var.cue_condition == 'cue':
		var.cue_counter += 1
		if var.correct_new_srbox_1 == 1:
			var.cue_correct_counter +=1
			var.cue_rt_sum += var.response_time_new_srbox_1
		if var.response_new_srbox_1 != 'None':
			var.cue_response_counter += 1
	
	if var.cue_correct_counter != 0:
		var.centralcue_MRT = str(var.cue_rt_sum/var.cue_correct_counter)
		
		
	if var.cue_correct_counter != 0:
		var.centralcue_acc = str(var.cue_correct_counter/float(var.cue_counter)*100)
		
		
	
	# -------------- spatial cue ------------------
	
	if var.cue_condition == 'spatial':
		var.spatial_counter += 1
		if var.correct_new_srbox_1 == 1:
			var.spatial_correct_counter +=1
			var.spatial_rt_sum += var.response_time_new_srbox_1
		if var.response_new_srbox_1 != 'None':
			var.spatial_response_counter += 1
	
	
	if var.spatial_correct_counter != 0:
		var.spatialcue_MRT = str(var.spatial_rt_sum/var.spatial_correct_counter)
		
		
	if var.spatial_correct_counter != 0:
		var.spatialcue_acc = str(var.spatial_correct_counter/float(var.spatial_counter)*100)
		
		
	
	# -------------- neutral target ------------------
	
	if var.target_condition == 'neutral':
		var.neutral_counter += 1
		if var.correct_new_srbox_1 == 1:
			var.neutral_correct_counter +=1
			var.neutral_rt_sum += var.response_time_new_srbox_1
		if var.response_new_srbox_1 != 'None':
			var.neutral_response_counter += 1
	
	
	if var.neutral_correct_counter != 0:
		var.neutral_MRT = str(var.neutral_rt_sum/var.neutral_correct_counter)
		
		
	if var.neutral_correct_counter != 0:
		var.neutral_acc = str(var.neutral_correct_counter/float(var.neutral_counter)*100)
		
		
	
	# -------------- congruent target ------------------
	
	if var.target_condition == 'congruent':
		var.congruent_counter += 1
		if var.correct_new_srbox_1 == 1:
			var.congruent_correct_counter +=1
			var.congruent_rt_sum += var.response_time_new_srbox_1
		if var.response_new_srbox_1 != 'None':
			var.congruent_response_counter += 1
	
	
	if var.congruent_correct_counter != 0:
		var.congruent_MRT = str(var.congruent_rt_sum/var.congruent_correct_counter)
	
		
	if var.congruent_correct_counter != 0:
		var.congruent_acc = str(var.congruent_correct_counter/float(var.congruent_counter)*100)
	
		
	
	# -------------- incongruent target ------------------
	
	if var.target_condition == 'incongruent':
		var.incongruent_counter += 1
		if var.correct_new_srbox_1 == 1:
			var.incongruent_correct_counter +=1
			var.incongruent_rt_sum += var.response_time_new_srbox_1
		if var.response_new_srbox_1 != 'None':
			var.incongruent_response_counter += 1
	
	
	if var.incongruent_correct_counter != 0:
		var.incongruent_MRT = str(var.incongruent_rt_sum/var.incongruent_correct_counter)
		
		
	if var.incongruent_correct_counter != 0:
		var.incongruent_acc = str(var.incongruent_correct_counter/float(var.incongruent_counter)*100)
	
	
	# attention networks
	var.alerting_MRT = var.centralcue_MRT - var.nocue_MRT
	var.alerting_acc = var.centralcue_acc - var.nocue_acc
	var.orienting_MRT = var.spatialcue_MRT - var.centralcue_MRT
	var.orienting_acc = var.spatialcue_acc - var.centralcue_acc
	var.executive_MRT = var.incongruent_MRT - var.congruent_MRT
	var.executive_acc = var.incongruent_acc - var.congruent_acc
	__end__
	set _prepare ""

define inline_script calculate_prac_fb
	set description "Executes Python code"
	___run__
	
	# write to KLINISCH RAPPORT
	
	var.alerting_MRT = var.centralcue_MRT - var.nocue_MRT
	var.alerting_acc = var.centralcue_acc - var.nocue_acc
	var.orienting_MRT = var.spatialcue_MRT - var.centralcue_MRT
	var.orienting_acc = var.spatialcue_acc - var.centralcue_acc
	var.executive_MRT = var.incongruent_MRT - var.congruent_MRT
	var.executive_acc = var.incongruent_acc - var.congruent_acc
	__end__
	set _prepare ""

define inline_script create_backup
	set description "Executes Python code"
	___run__
	import shutil
	
	shutil.copyfile(var.logfile, var.logfile + str('_backup'))
	__end__
	set _prepare ""

define sketchpad cue
	set duration 95
	set description "Displays stimuli"
	draw image center=1 file="fixation.png" scale=0.04 show_if=always x=0 y=0 z_index=1
	draw image center=1 file="[cue_type].png" scale=0.04 show_if=always x=0 y="[cue_pos]" z_index=0

define sketchpad cue_2
	set duration 95
	set description "Displays stimuli"
	draw image center=1 file="fixation.png" scale=0.04 show_if=always x=0 y=0 z_index=1
	draw image center=1 file="[cue_type].png" scale=0.04 show_if=always x=0 y="[cue_pos]" z_index=0

define feedback feedback_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Dit is jouw prestatie in het afgelopen blok.<br /><br />Reactiesnelheid [avg_rt] ms<br />Accuratesse [accuracy] %<br /><br />neutral MRT [neutral_MRT] ms<br />neutral ACC [neutral_acc] %<br /><br />ALERTING<br />RT [alerting_MRT] ms<br />ACC [alerting_acc] %<br /><br />ORIENTING<br />RT [orienting_MRT] ms<br />ACC [orienting_acc] %<br /><br />EXECUTIVE<br />RT [executive_MRT] ms<br />ACC [executive_acc] %" x=32 y=32 z_index=0

define feedback feedback_2
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Dit is jouw prestatie in het afgelopen blok.<br /><br />Reactiesnelheid [avg_rt] ms<br />Accuratesse [accuracy] %<br /><br />neutral MRT [neutral_MRT] ms<br />neutral ACC [neutral_acc] %<br /><br />ALERTING<br />RT [alerting_MRT] ms<br />ACC [alerting_acc] %<br /><br />ORIENTING<br />RT [orienting_MRT] ms<br />ACC [orienting_acc] %<br /><br />EXECUTIVE<br />RT [executive_MRT] ms<br />ACC [executive_acc] %" x=32 y=32 z_index=0

define feedback feedback_3
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Dit is jouw prestatie in het afgelopen blok.<br /><br />Reactiesnelheid [avg_rt] ms<br />Accuratesse [accuracy] %<br /><br />neutral MRT [neutral_MRT] ms<br />neutral ACC [neutral_acc] %<br /><br />ALERTING<br />RT [alerting_MRT] ms<br />ACC [alerting_acc] %<br /><br />ORIENTING<br />RT [orienting_MRT] ms<br />ACC [orienting_acc] %<br /><br />EXECUTIVE<br />RT [executive_MRT] ms<br />ACC [executive_acc] %" x=32 y=32 z_index=0

define feedback feedback_prac
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Dit is jouw prestatie in het afgelopen blok.<br /><br />Reactiesnelheid [avg_rt] ms<br />Accuratesse [accuracy] %<br /><br />neutral MRT [neutral_MRT] ms<br />neutral ACC [neutral_acc] %<br /><br />ALERTING<br />RT [alerting_MRT] ms<br />ACC [alerting_acc] %<br /><br />ORIENTING<br />RT [orienting_MRT] ms<br />ACC [orienting_acc] %<br /><br />EXECUTIVE<br />RT [executive_MRT] ms<br />ACC [executive_acc] %" x=32 y=32 z_index=0

define sketchpad fixation
	set duration "[my_duration]"
	set description "Displays stimuli"
	draw image center=1 file="fixation.png" scale=0.04 show_if=always x=0 y=0 z_index=0

define sketchpad fixation_1
	set duration 395
	set description "Displays stimuli"
	draw image center=1 file="fixation.png" scale=0.04 show_if=always x=0 y=0 z_index=0

define sketchpad fixation_2
	set duration "[my_duration]"
	set description "Displays stimuli"
	draw image center=1 file="fixation.png" scale=0.04 show_if=always x=0 y=0 z_index=0

define sketchpad fixation_3
	set duration 395
	set description "Displays stimuli"
	draw image center=1 file="fixation.png" scale=0.04 show_if=always x=0 y=0 z_index=0

define feedback new_feedback
	set reset_variables yes
	set duration 1000
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Draai de knoppen om!" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="" x=-704 y=-256 z_index=0

define logger new_logger
	set description "Logs experimental data"
	set auto_log yes

define loop new_loop
	set source_file ""
	set source table
	set repeat 9
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first no
	set break_if "[correct]=1"
	setcycle 0 empty_column ""
	run new_sequence_5

define reset_feedback new_reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define sequence new_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Wanneer_hersenschudding "[hersenschudding]=\"Ja: \""

define sequence new_sequence_1_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Welke_sport "[sport]=\"Anders\""

define sequence new_sequence_1_1_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Welke_sport_1 "[hersenschudding]=\"Ja: \""

define sequence new_sequence_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Aandoening_anders "[aandoeningen]=\"Ja, andere aandoening: \""

define sequence new_sequence_3
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Hoevaak_middelen "[middelen]=\"Ja \""

define sequence new_sequence_3_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Welke_medicijnen "[medicijnen]=\"Ja \""

define sequence new_sequence_3_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Wat_voor_dieet "[dieet]=\"Ja \""

define sequence new_sequence_4
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Opleiding_anders "[opleiding]=\"Anders: \""

define sequence new_sequence_5
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Drukopderechterknop always
	run new_srbox always
	run new_feedback "[correct]=0"

define sketchpad new_sketchpad_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="Dat was blok 1. <br /><br /><br />Nu volgt een korte pauze van ongeveer 20 seconden.<br />" x=0 y=0 z_index=0

define sketchpad new_sketchpad_1_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="Dat was blok 2. <br /><br /><br />Nu volgt een korte pauze van ongeveer 20 seconden.<br />" x=0 y=0 z_index=0

define sketchpad new_sketchpad_1_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="Dat was blok 1. <br /><br />U bent nu bij het einde van de meting.<br />" x=0 y=0 z_index=0

define sketchpad new_sketchpad_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="Druk op een knop om te beginnen met blok 2/3." x=0 y=0 z_index=0

define sketchpad new_sketchpad_2_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="Druk op een knop om te beginnen met blok 3/3." x=0 y=0 z_index=0

define srbox new_srbox
	set timeout infinite
	set require_state_change yes
	set lights ""
	set dev COM3
	set correct_response 6
	set _dummy no

define srbox new_srbox_1
	set timeout 1695
	set require_state_change yes
	set lights ""
	set dev COM3
	set correct_response "[correct_response]"
	set _dummy no

define srbox new_srbox_2
	set timeout 1695
	set require_state_change yes
	set lights ""
	set dev COM3
	set correct_response "[correct_response]"
	set _dummy no

define inline_script settings
	set description "Executes Python code"
	set _run ""
	___prepare__
	max = 1695.
	
	var.fixation_duration=random.randint(250,750)
	
	#dur = max - self.get("response_time_new_mouse_response_1")
	dur = max - var.response_time_new_srbox_2
	
	#fix = dur + self.get("fixation_duration")
	fix = dur + var.fixation_duration
	
	#exp.set("my_duration", fix)
	var.my_duration = fix
	
	# set cursor off
	my_mouse = mouse()
	my_mouse.show_cursor(show=False)
	__end__

define sketchpad target
	set timeout 1695
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="fixation.png" scale=0.04 show_if=always x=0 y=0 z_index=1
	draw image center=1 file="[target_type].png" scale=0.3 show_if=always x=0 y="[target_pos]" z_index=0

define sketchpad target_2
	set timeout 1695
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="fixation.png" scale=0.04 show_if=always x=0 y=0 z_index=1
	draw image center=1 file="[target_type].png" scale=0.3 show_if=always x=0 y="[target_pos]" z_index=0

define inline_script write_end_prac
	set description "Executes Python code"
	___run__
	f21.write( " End Practice Trial " + str(var.count_Flanker_practice) + " @ TimeStamp " + str(clock.time()) + " \n")
	__end__
	___prepare__
	max = 1695.
	
	#dur = max - self.get("response_time_new_mouse_response_1")
	dur = max - var.response_time_new_srbox_1
	
	#fix = dur + self.get("fixation_duration")
	fix = dur + var.fixation_duration
	
	#exp.set("my_duration", fix)
	var.my_duration = fix
	
	# set cursor off
	my_mouse = mouse()
	my_mouse.show_cursor(show=False)
	__end__

define inline_script write_start_prac
	set description "Executes Python code"
	___run__
	f21.write( " Start Practice Trial " + str(var.count_Flanker_practice) + " @ TimeStamp " + str(clock.time()) + " \n")
	__end__
	___prepare__
	max = 1695.
	
	#dur = max - self.get("response_time_new_mouse_response_1")
	dur = max - var.response_time_new_srbox_1
	
	#fix = dur + self.get("fixation_duration")
	fix = dur + var.fixation_duration
	
	#exp.set("my_duration", fix)
	var.my_duration = fix
	
	# set cursor off
	my_mouse = mouse()
	my_mouse.show_cursor(show=False)
	__end__

define inline_script write_trigger_end_2
	set description "Executes Python code"
	___run__
	f21.write( " End Test Trial " + str(var.count_Flanker_1) + " @ TimeStamp " + str(clock.time()) + "\n")
	__end__
	set _prepare ""

define inline_script write_trigger_end_3
	set description "Executes Python code"
	___run__
	f21.write( " End Test Trial " + str(var.count_Flanker_3) + " @ TimeStamp " + str(clock.time()) + "\n")
	__end__
	set _prepare ""

define inline_script write_trigger_start_1
	set description "Executes Python code"
	___run__
	f21.write( " Start Test Trial " + str(var.count_Flanker_1) + " @ TimeStamp " + str(clock.time()) + "\n")
	__end__
	set _prepare ""

define inline_script write_trigger_start_2
	set description "Executes Python code"
	___run__
	f21.write( " Start Test Trial " + str(var.count_Flanker_1) + " @ TimeStamp " + str(clock.time()) + "\n")
	__end__
	set _prepare ""

define inline_script write_trigger_start_3
	set description "Executes Python code"
	___run__
	f21.write( " Start Test Trial " + str(var.count_Flanker_3) + " @ TimeStamp " + str(clock.time()) + "\n")
	__end__
	set _prepare ""

