---
API: 2
OpenSesame: 3.1.9
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start Attention_Network_Test
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend xpyriment
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 18
set font_italic no
set font_family serif
set font_bold no
set experiment_path "C:/Users/emmaneuroscience/Documents/emma_toolbox/Tests/Attention"
set disable_garbage_collection yes
set description "Default description"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set bidi no
set background "#ffffff"

define inline_script ADHD
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	
	# Create a form
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Heeft u een diagnose voor ADD of ADHD?", center=True)
	checkbox1 = widgets.checkbox(form, text='Ja', group='adhd', var='adhd')
	checkbox2 = widgets.checkbox(form, text='Nee', group='adhd', var='adhd')
	button = widgets.button(form, text='Volgende', frame=True, center=True)		
	
	# Set form
	form.set_widget(label, (0,1), colspan=4)
	form.set_widget(checkbox1, (0,2))
	form.set_widget(checkbox2, (0,3))
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
		
	if self.get('adhd') == "no":
		items['ADHD'].run()
	__end__
	set _prepare ""

define inline_script Aandoening_anders
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Welke andere aandoening heeft u? \n Vul in en druk daarna op ENTER")
	text_input = widgets.text_input(form, var='aandoening_anders', return_accepts=True, stub="Typ hier")
	
	# Set form
	
	form.set_widget(label, (0,1))
	form.set_widget(text_input, (0,2))
	form._exec()
	
	if self.get('aandoening_anders') == '':
		items['Aandoening_anders'].run()
	__end__
	set _prepare ""

define inline_script Aandoeningen
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Heeft u dyslexie, ADHD of een andere aandoening?", center=True)
	checkbox1 = widgets.checkbox(form, text='Nee', group='aandoeningen', var='aandoeningen')
	checkbox2 = widgets.checkbox(form, text='Ja, dyslexie', group='aandoeningen', var='aandoeningen')
	checkbox3 = widgets.checkbox(form, text='Ja, ADHD', group='aandoeningen', var='aandoeningen')
	checkbox4 = widgets.checkbox(form, text='Ja, andere aandoening: ', group='aandoeningen', var='aandoeningen')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label, (0,1), colspan=4)
	form.set_widget(checkbox1, (0,2))
	form.set_widget(checkbox2, (0,3))
	form.set_widget(checkbox3, (0,4))
	form.set_widget(checkbox4, (0,5), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('aandoeningen') == "no":
		items['Aandoeningen'].run()
	
	var.aandoening_anders=" "
	__end__
	set _prepare ""

define sequence Attention_Network_Test
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run version_history always
	run trigger_codes always
	run Start_ always
	run Start always
	run settings_1 always
	run init_EEG "[enable_EEG]==1"
	run Checkbuttons_SRT_1 always
	run Meting "[center]==\"Ajax\""
	run Naam "[meting]!=\"Regulier\""
	run Geboortedatum "[meting]!=\"Regulier\""
	run Geslacht "[meting]!=\"Regulier\""
	run Handig "[meting]==\"Baseline\""
	run Opleiding "[meting]==\"Baseline\""
	run new_sequence_4_1 "[meting]==\"Baseline\""
	run Positie "[meting]==\"Baseline\""
	run Hoofdletsel "[meting]==\"Baseline\""
	run Migraine "[meting]==\"Baseline\""
	run Leerstoornis "[meting]==\"Baseline\""
	run ADHD "[meting]==\"Baseline\""
	run Psych "[meting]==\"Baseline\""
	run Medicijnen "[meting]==\"Baseline\""
	run new_sequence_3_1_2 "[meting]==\"Baseline\""
	run SYMPTOMENCHECKLIST_baseline "[meting]==\"Baseline\""
	run SYMPTOMENCHECKLIST_nameting "[meting]==\"Nameting\" or [meting]==\"Monitoring\""
	run Hoofdpijn "[center]==\"Ajax\""
	run Druk_op_hoofd "[center]==\"Ajax\""
	run Nekpijn "[center]==\"Ajax\""
	run Misselijkheid "[center]==\"Ajax\""
	run Duizeligheid "[center]==\"Ajax\""
	run Zichtproblemen "[center]==\"Ajax\""
	run Balans "[center]==\"Ajax\""
	run Gevoeligheid_licht "[center]==\"Ajax\""
	run Gevoeligheid_geluid "[center]==\"Ajax\""
	run Gevoel_langzaam "[center]==\"Ajax\""
	run Gevoel_mistig "[center]==\"Ajax\""
	run Niet_goed_voelen "[center]==\"Ajax\""
	run Concentratie "[center]==\"Ajax\""
	run Onthouden "[center]==\"Ajax\""
	run Vermoeidheid "[center]==\"Ajax\""
	run Verward_voelen "[center]==\"Ajax\""
	run Wazig_voelen "[center]==\"Ajax\""
	run Emotioneel "[center]==\"Ajax\""
	run Geirriteerd "[center]==\"Ajax\""
	run Droevigheid "[center]==\"Ajax\""
	run Nerveus_bang "[center]==\"Ajax\""
	run Slaapproblemen "[center]==\"Ajax\""
	run Fysiek_act "[meting]==\"Nameting\" or [meting]==\"Monitoring\""
	run Mentaal_act "[meting]==\"Nameting\" or [meting]==\"Monitoring\""
	run Normaliteit "[meting]==\"Nameting\" or [meting]==\"Monitoring\""
	run Unshow_mouse always
	run Resetvariables always
	run Resetvariables_2 always
	run new_reset_feedback_1 always
	run Checkbuttons_ANT always
	run Instructies_kinderen_ANT_oefen "[response_Start]='k'"
	run Instructies_volwassenen_ANT_oefen_1 "[response_Start]='v'"
	run Resetvariables always
	run new_reset_feedback always
	run Oefenblok_ANT "[response_Instructie]!='t'"
	run Instructie_kinderen_ANT_blok1 "[response_Start]='k'"
	run Instructie_volwassenen_ANT_blok1 "[response_Start]='v'"
	run Resetvariables always
	run new_reset_feedback always
	run Blok1_ANT always
	run Instructie_kinderen_ANT_blok2 "[response_Start]='k'"
	run Instructie_volwassenen_ANT_blok2 "[response_Start]='v'"
	run Resetvariables_1 always
	run new_reset_feedback always
	run Blok2_ANT always
	run Instructie_kinderen_ANT_blok3 "[response_Start]='k'"
	run Instructie_volwassenen_ANT_blok3 "[response_Start]='v'"
	run Resetvariables_1 always
	run new_reset_feedback always
	run Blok3_ANT always
	run Instructie_kinderen_ANT_blok4 "[response_Start]='k'"
	run Instructie_volwassenen_ANT_blok4 "[response_Start]='v'"
	run Resetvariables_1 always
	run new_reset_feedback always
	run Blok4_ANT always
	run create_backup always
	run End_ always

define inline_script Balans
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate heeft u normaal gesproken last problemen met ... \n balans (balance problems)?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate heeft u last van problemen met ... \n balans (blurred vision)?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='balans')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('balans') == None:
		items['Balans'].run()
	__end__
	set _prepare ""

define loop Blok1_ANT
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 36
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 cue_type cue
	setcycle 0 cue_pos -50
	setcycle 0 target_type congruent_left
	setcycle 0 target_pos -50
	setcycle 0 fixation_duration ""
	setcycle 0 cue_condition spatial
	setcycle 0 target_condition congruent
	setcycle 0 correct_response 5
	setcycle 0 block 3
	setcycle 0 count_block 1
	setcycle 0 count_total 1
	setcycle 1 cue_type cue
	setcycle 1 cue_pos 50
	setcycle 1 target_type congruent_right
	setcycle 1 target_pos 50
	setcycle 1 fixation_duration ""
	setcycle 1 cue_condition spatial
	setcycle 1 target_condition congruent
	setcycle 1 correct_response 6
	setcycle 1 block 3
	setcycle 1 count_block 2
	setcycle 1 count_total 2
	setcycle 2 cue_type cue
	setcycle 2 cue_pos 0
	setcycle 2 target_type incongruent_right
	setcycle 2 target_pos 50
	setcycle 2 fixation_duration ""
	setcycle 2 cue_condition cue
	setcycle 2 target_condition incongruent
	setcycle 2 correct_response 6
	setcycle 2 block 3
	setcycle 2 count_block 3
	setcycle 2 count_total 3
	setcycle 3 cue_type cue
	setcycle 3 cue_pos 0
	setcycle 3 target_type neutral_right
	setcycle 3 target_pos -50
	setcycle 3 fixation_duration ""
	setcycle 3 cue_condition cue
	setcycle 3 target_condition neutral
	setcycle 3 correct_response 6
	setcycle 3 block 3
	setcycle 3 count_block 4
	setcycle 3 count_total 4
	setcycle 4 cue_type cue
	setcycle 4 cue_pos 0
	setcycle 4 target_type congruent_right
	setcycle 4 target_pos 50
	setcycle 4 fixation_duration ""
	setcycle 4 cue_condition cue
	setcycle 4 target_condition congruent
	setcycle 4 correct_response 6
	setcycle 4 block 3
	setcycle 4 count_block 5
	setcycle 4 count_total 5
	setcycle 5 cue_type fixation
	setcycle 5 cue_pos 0
	setcycle 5 target_type congruent_right
	setcycle 5 target_pos -50
	setcycle 5 fixation_duration ""
	setcycle 5 cue_condition fixation
	setcycle 5 target_condition congruent
	setcycle 5 correct_response 6
	setcycle 5 block 3
	setcycle 5 count_block 6
	setcycle 5 count_total 6
	setcycle 6 cue_type fixation
	setcycle 6 cue_pos 0
	setcycle 6 target_type congruent_right
	setcycle 6 target_pos 50
	setcycle 6 fixation_duration ""
	setcycle 6 cue_condition fixation
	setcycle 6 target_condition congruent
	setcycle 6 correct_response 6
	setcycle 6 block 3
	setcycle 6 count_block 7
	setcycle 6 count_total 7
	setcycle 7 cue_type fixation
	setcycle 7 cue_pos 0
	setcycle 7 target_type incongruent_left
	setcycle 7 target_pos 50
	setcycle 7 fixation_duration ""
	setcycle 7 cue_condition fixation
	setcycle 7 target_condition incongruent
	setcycle 7 correct_response 5
	setcycle 7 block 3
	setcycle 7 count_block 8
	setcycle 7 count_total 8
	setcycle 8 cue_type cue
	setcycle 8 cue_pos 0
	setcycle 8 target_type neutral_right
	setcycle 8 target_pos 50
	setcycle 8 fixation_duration ""
	setcycle 8 cue_condition cue
	setcycle 8 target_condition neutral
	setcycle 8 correct_response 6
	setcycle 8 block 3
	setcycle 8 count_block 9
	setcycle 8 count_total 9
	setcycle 9 cue_type cue
	setcycle 9 cue_pos 0
	setcycle 9 target_type neutral_left
	setcycle 9 target_pos -50
	setcycle 9 fixation_duration ""
	setcycle 9 cue_condition cue
	setcycle 9 target_condition neutral
	setcycle 9 correct_response 5
	setcycle 9 block 3
	setcycle 9 count_block 10
	setcycle 9 count_total 10
	setcycle 10 cue_type cue
	setcycle 10 cue_pos 0
	setcycle 10 target_type congruent_right
	setcycle 10 target_pos -50
	setcycle 10 fixation_duration ""
	setcycle 10 cue_condition cue
	setcycle 10 target_condition congruent
	setcycle 10 correct_response 6
	setcycle 10 block 3
	setcycle 10 count_block 11
	setcycle 10 count_total 11
	setcycle 11 cue_type fixation
	setcycle 11 cue_pos 0
	setcycle 11 target_type incongruent_right
	setcycle 11 target_pos 50
	setcycle 11 fixation_duration ""
	setcycle 11 cue_condition fixation
	setcycle 11 target_condition incongruent
	setcycle 11 correct_response 6
	setcycle 11 block 3
	setcycle 11 count_block 12
	setcycle 11 count_total 12
	setcycle 12 cue_type cue
	setcycle 12 cue_pos 0
	setcycle 12 target_type congruent_left
	setcycle 12 target_pos 50
	setcycle 12 fixation_duration ""
	setcycle 12 cue_condition cue
	setcycle 12 target_condition congruent
	setcycle 12 correct_response 5
	setcycle 12 block 3
	setcycle 12 count_block 13
	setcycle 12 count_total 13
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	setcycle 14 cue_type fixation
	setcycle 14 cue_pos 0
	setcycle 14 target_type neutral_left
	setcycle 14 target_pos -50
	setcycle 14 fixation_duration ""
	setcycle 14 cue_condition fixation
	setcycle 14 target_condition neutral
	setcycle 14 correct_response 5
	setcycle 14 block 3
	setcycle 14 count_block 15
	setcycle 14 count_total 15
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	run Flanker_2

define loop Blok1_SRT
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 36
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 cue_type fixation
	setcycle 0 cue_pos 0
	setcycle 0 target_type simple
	setcycle 0 target_pos 0
	setcycle 0 fixation_duration ""
	setcycle 0 cue_condition simple
	setcycle 0 target_condition simple
	setcycle 0 correct_response 6
	setcycle 0 block 1
	setcycle 0 count_block 1
	setcycle 0 count_total 1
	setcycle 1 cue_type fixation
	setcycle 1 cue_pos 0
	setcycle 1 target_type simple
	setcycle 1 target_pos 0
	setcycle 1 fixation_duration ""
	setcycle 1 cue_condition simple
	setcycle 1 target_condition simple
	setcycle 1 correct_response 6
	setcycle 1 block 1
	setcycle 1 count_block 2
	setcycle 1 count_total 2
	setcycle 2 cue_type fixation
	setcycle 2 cue_pos 0
	setcycle 2 target_type simple
	setcycle 2 target_pos 0
	setcycle 2 fixation_duration ""
	setcycle 2 cue_condition simple
	setcycle 2 target_condition simple
	setcycle 2 correct_response 6
	setcycle 2 block 1
	setcycle 2 count_block 3
	setcycle 2 count_total 3
	setcycle 3 cue_type fixation
	setcycle 3 cue_pos 0
	setcycle 3 target_type simple
	setcycle 3 target_pos 0
	setcycle 3 fixation_duration ""
	setcycle 3 cue_condition simple
	setcycle 3 target_condition simple
	setcycle 3 correct_response 6
	setcycle 3 block 1
	setcycle 3 count_block 4
	setcycle 3 count_total 4
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	run SRT

define loop Blok1_SRT_1
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 36
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 cue_type fixation
	setcycle 0 cue_pos 0
	setcycle 0 target_type simple
	setcycle 0 target_pos 0
	setcycle 0 fixation_duration ""
	setcycle 0 cue_condition simple
	setcycle 0 target_condition simple
	setcycle 0 correct_response 6
	setcycle 0 block 1
	setcycle 0 count_block 1
	setcycle 0 count_total 1
	setcycle 1 cue_type fixation
	setcycle 1 cue_pos 0
	setcycle 1 target_type simple
	setcycle 1 target_pos 0
	setcycle 1 fixation_duration ""
	setcycle 1 cue_condition simple
	setcycle 1 target_condition simple
	setcycle 1 correct_response 6
	setcycle 1 block 1
	setcycle 1 count_block 2
	setcycle 1 count_total 2
	setcycle 2 cue_type fixation
	setcycle 2 cue_pos 0
	setcycle 2 target_type simple
	setcycle 2 target_pos 0
	setcycle 2 fixation_duration ""
	setcycle 2 cue_condition simple
	setcycle 2 target_condition simple
	setcycle 2 correct_response 6
	setcycle 2 block 1
	setcycle 2 count_block 3
	setcycle 2 count_total 3
	setcycle 3 cue_type fixation
	setcycle 3 cue_pos 0
	setcycle 3 target_type simple
	setcycle 3 target_pos 0
	setcycle 3 fixation_duration ""
	setcycle 3 cue_condition simple
	setcycle 3 target_condition simple
	setcycle 3 correct_response 6
	setcycle 3 block 1
	setcycle 3 count_block 4
	setcycle 3 count_total 4
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	run SRT_1

define loop Blok2_ANT
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 36
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 cue_type fixation
	setcycle 0 cue_pos 0
	setcycle 0 target_type neutral_right
	setcycle 0 target_pos -50
	setcycle 0 fixation_duration ""
	setcycle 0 cue_condition fixation
	setcycle 0 target_condition neutral
	setcycle 0 correct_response 6
	setcycle 0 block 4
	setcycle 0 count_block 1
	setcycle 0 count_total 73
	setcycle 1 cue_type cue
	setcycle 1 cue_pos 50
	setcycle 1 target_type congruent_left
	setcycle 1 target_pos 50
	setcycle 1 fixation_duration ""
	setcycle 1 cue_condition spatial
	setcycle 1 target_condition congruent
	setcycle 1 correct_response 5
	setcycle 1 block 4
	setcycle 1 count_block 2
	setcycle 1 count_total 74
	setcycle 2 cue_type fixation
	setcycle 2 cue_pos 0
	setcycle 2 target_type incongruent_right
	setcycle 2 target_pos -50
	setcycle 2 fixation_duration ""
	setcycle 2 cue_condition fixation
	setcycle 2 target_condition incongruent
	setcycle 2 correct_response 6
	setcycle 2 block 4
	setcycle 2 count_block 3
	setcycle 2 count_total 75
	setcycle 3 cue_type cue
	setcycle 3 cue_pos -50
	setcycle 3 target_type incongruent_left
	setcycle 3 target_pos -50
	setcycle 3 fixation_duration ""
	setcycle 3 cue_condition spatial
	setcycle 3 target_condition incongruent
	setcycle 3 correct_response 5
	setcycle 3 block 4
	setcycle 3 count_block 4
	setcycle 3 count_total 76
	setcycle 4 cue_type cue
	setcycle 4 cue_pos 0
	setcycle 4 target_type incongruent_left
	setcycle 4 target_pos 50
	setcycle 4 fixation_duration ""
	setcycle 4 cue_condition cue
	setcycle 4 target_condition incongruent
	setcycle 4 correct_response 5
	setcycle 4 block 4
	setcycle 4 count_block 5
	setcycle 4 count_total 77
	setcycle 5 cue_type cue
	setcycle 5 cue_pos 0
	setcycle 5 target_type congruent_left
	setcycle 5 target_pos -50
	setcycle 5 fixation_duration ""
	setcycle 5 cue_condition cue
	setcycle 5 target_condition congruent
	setcycle 5 correct_response 5
	setcycle 5 block 4
	setcycle 5 count_block 6
	setcycle 5 count_total 78
	setcycle 6 cue_type fixation
	setcycle 6 cue_pos 0
	setcycle 6 target_type congruent_left
	setcycle 6 target_pos 50
	setcycle 6 fixation_duration ""
	setcycle 6 cue_condition fixation
	setcycle 6 target_condition congruent
	setcycle 6 correct_response 5
	setcycle 6 block 4
	setcycle 6 count_block 7
	setcycle 6 count_total 79
	setcycle 7 cue_type cue
	setcycle 7 cue_pos 0
	setcycle 7 target_type neutral_right
	setcycle 7 target_pos 50
	setcycle 7 fixation_duration ""
	setcycle 7 cue_condition cue
	setcycle 7 target_condition neutral
	setcycle 7 correct_response 6
	setcycle 7 block 4
	setcycle 7 count_block 8
	setcycle 7 count_total 80
	setcycle 8 cue_type cue
	setcycle 8 cue_pos 0
	setcycle 8 target_type incongruent_right
	setcycle 8 target_pos -50
	setcycle 8 fixation_duration ""
	setcycle 8 cue_condition cue
	setcycle 8 target_condition incongruent
	setcycle 8 correct_response 6
	setcycle 8 block 4
	setcycle 8 count_block 9
	setcycle 8 count_total 81
	setcycle 9 cue_type cue
	setcycle 9 cue_pos -50
	setcycle 9 target_type incongruent_right
	setcycle 9 target_pos -50
	setcycle 9 fixation_duration ""
	setcycle 9 cue_condition spatial
	setcycle 9 target_condition incongruent
	setcycle 9 correct_response 6
	setcycle 9 block 4
	setcycle 9 count_block 10
	setcycle 9 count_total 82
	setcycle 10 cue_type cue
	setcycle 10 cue_pos -50
	setcycle 10 target_type congruent_left
	setcycle 10 target_pos -50
	setcycle 10 fixation_duration ""
	setcycle 10 cue_condition spatial
	setcycle 10 target_condition congruent
	setcycle 10 correct_response 5
	setcycle 10 block 4
	setcycle 10 count_block 11
	setcycle 10 count_total 83
	setcycle 11 cue_type fixation
	setcycle 11 cue_pos 0
	setcycle 11 target_type neutral_right
	setcycle 11 target_pos 50
	setcycle 11 fixation_duration ""
	setcycle 11 cue_condition fixation
	setcycle 11 target_condition neutral
	setcycle 11 correct_response 6
	setcycle 11 block 4
	setcycle 11 count_block 12
	setcycle 11 count_total 84
	setcycle 12 cue_type fixation
	setcycle 12 cue_pos 0
	setcycle 12 target_type neutral_left
	setcycle 12 target_pos -50
	setcycle 12 fixation_duration ""
	setcycle 12 cue_condition fixation
	setcycle 12 target_condition neutral
	setcycle 12 correct_response 5
	setcycle 12 block 4
	setcycle 12 count_block 13
	setcycle 12 count_total 85
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	setcycle 18 cue_type cue
	setcycle 18 cue_pos 50
	setcycle 18 target_type congruent_right
	setcycle 18 target_pos 50
	setcycle 18 fixation_duration ""
	setcycle 18 cue_condition spatial
	setcycle 18 target_condition congruent
	setcycle 18 correct_response 6
	setcycle 18 block 4
	setcycle 18 count_block 19
	setcycle 18 count_total 91
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	run Flanker_2

define loop Blok2_SRT
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 36
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 cue_type fixation
	setcycle 0 cue_pos 0
	setcycle 0 target_type simple
	setcycle 0 target_pos 0
	setcycle 0 fixation_duration ""
	setcycle 0 cue_condition simple
	setcycle 0 target_condition simple
	setcycle 0 correct_response 6
	setcycle 0 block 2
	setcycle 0 count_block 1
	setcycle 0 count_total 37
	setcycle 1 cue_type fixation
	setcycle 1 cue_pos 0
	setcycle 1 target_type simple
	setcycle 1 target_pos 0
	setcycle 1 fixation_duration ""
	setcycle 1 cue_condition simple
	setcycle 1 target_condition simple
	setcycle 1 correct_response 6
	setcycle 1 block 2
	setcycle 1 count_block 2
	setcycle 1 count_total 38
	setcycle 2 cue_type fixation
	setcycle 2 cue_pos 0
	setcycle 2 target_type simple
	setcycle 2 target_pos 0
	setcycle 2 fixation_duration ""
	setcycle 2 cue_condition simple
	setcycle 2 target_condition simple
	setcycle 2 correct_response 6
	setcycle 2 block 2
	setcycle 2 count_block 3
	setcycle 2 count_total 39
	setcycle 3 cue_type fixation
	setcycle 3 cue_pos 0
	setcycle 3 target_type simple
	setcycle 3 target_pos 0
	setcycle 3 fixation_duration ""
	setcycle 3 cue_condition simple
	setcycle 3 target_condition simple
	setcycle 3 correct_response 6
	setcycle 3 block 2
	setcycle 3 count_block 4
	setcycle 3 count_total 40
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	run SRT

define loop Blok2_SRT_1
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 36
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 cue_type fixation
	setcycle 0 cue_pos 0
	setcycle 0 target_type simple
	setcycle 0 target_pos 0
	setcycle 0 fixation_duration ""
	setcycle 0 cue_condition simple
	setcycle 0 target_condition simple
	setcycle 0 correct_response 6
	setcycle 0 block 2
	setcycle 0 count_block 1
	setcycle 0 count_total 37
	setcycle 1 cue_type fixation
	setcycle 1 cue_pos 0
	setcycle 1 target_type simple
	setcycle 1 target_pos 0
	setcycle 1 fixation_duration ""
	setcycle 1 cue_condition simple
	setcycle 1 target_condition simple
	setcycle 1 correct_response 6
	setcycle 1 block 2
	setcycle 1 count_block 2
	setcycle 1 count_total 38
	setcycle 2 cue_type fixation
	setcycle 2 cue_pos 0
	setcycle 2 target_type simple
	setcycle 2 target_pos 0
	setcycle 2 fixation_duration ""
	setcycle 2 cue_condition simple
	setcycle 2 target_condition simple
	setcycle 2 correct_response 6
	setcycle 2 block 2
	setcycle 2 count_block 3
	setcycle 2 count_total 39
	setcycle 3 cue_type fixation
	setcycle 3 cue_pos 0
	setcycle 3 target_type simple
	setcycle 3 target_pos 0
	setcycle 3 fixation_duration ""
	setcycle 3 cue_condition simple
	setcycle 3 target_condition simple
	setcycle 3 correct_response 6
	setcycle 3 block 2
	setcycle 3 count_block 4
	setcycle 3 count_total 40
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	run SRT_1

define loop Blok3_ANT
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 36
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 cue_type fixation
	setcycle 0 cue_pos 0
	setcycle 0 target_type neutral_right
	setcycle 0 target_pos -50
	setcycle 0 fixation_duration ""
	setcycle 0 cue_condition fixation
	setcycle 0 target_condition neutral
	setcycle 0 correct_response 6
	setcycle 0 block 5
	setcycle 0 count_block 1
	setcycle 0 count_total 73
	setcycle 1 cue_type cue
	setcycle 1 cue_pos 50
	setcycle 1 target_type congruent_left
	setcycle 1 target_pos 50
	setcycle 1 fixation_duration ""
	setcycle 1 cue_condition spatial
	setcycle 1 target_condition congruent
	setcycle 1 correct_response 5
	setcycle 1 block 5
	setcycle 1 count_block 2
	setcycle 1 count_total 74
	setcycle 2 cue_type fixation
	setcycle 2 cue_pos 0
	setcycle 2 target_type incongruent_right
	setcycle 2 target_pos -50
	setcycle 2 fixation_duration ""
	setcycle 2 cue_condition fixation
	setcycle 2 target_condition incongruent
	setcycle 2 correct_response 6
	setcycle 2 block 5
	setcycle 2 count_block 3
	setcycle 2 count_total 75
	setcycle 3 cue_type cue
	setcycle 3 cue_pos -50
	setcycle 3 target_type incongruent_left
	setcycle 3 target_pos -50
	setcycle 3 fixation_duration ""
	setcycle 3 cue_condition spatial
	setcycle 3 target_condition incongruent
	setcycle 3 correct_response 5
	setcycle 3 block 5
	setcycle 3 count_block 4
	setcycle 3 count_total 76
	setcycle 4 cue_type cue
	setcycle 4 cue_pos 0
	setcycle 4 target_type incongruent_left
	setcycle 4 target_pos 50
	setcycle 4 fixation_duration ""
	setcycle 4 cue_condition cue
	setcycle 4 target_condition incongruent
	setcycle 4 correct_response 5
	setcycle 4 block 5
	setcycle 4 count_block 5
	setcycle 4 count_total 77
	setcycle 5 cue_type cue
	setcycle 5 cue_pos 0
	setcycle 5 target_type congruent_left
	setcycle 5 target_pos -50
	setcycle 5 fixation_duration ""
	setcycle 5 cue_condition cue
	setcycle 5 target_condition congruent
	setcycle 5 correct_response 5
	setcycle 5 block 5
	setcycle 5 count_block 6
	setcycle 5 count_total 78
	setcycle 6 cue_type fixation
	setcycle 6 cue_pos 0
	setcycle 6 target_type congruent_left
	setcycle 6 target_pos 50
	setcycle 6 fixation_duration ""
	setcycle 6 cue_condition fixation
	setcycle 6 target_condition congruent
	setcycle 6 correct_response 5
	setcycle 6 block 5
	setcycle 6 count_block 7
	setcycle 6 count_total 79
	setcycle 7 cue_type cue
	setcycle 7 cue_pos 0
	setcycle 7 target_type neutral_right
	setcycle 7 target_pos 50
	setcycle 7 fixation_duration ""
	setcycle 7 cue_condition cue
	setcycle 7 target_condition neutral
	setcycle 7 correct_response 6
	setcycle 7 block 5
	setcycle 7 count_block 8
	setcycle 7 count_total 80
	setcycle 8 cue_type cue
	setcycle 8 cue_pos 0
	setcycle 8 target_type incongruent_right
	setcycle 8 target_pos -50
	setcycle 8 fixation_duration ""
	setcycle 8 cue_condition cue
	setcycle 8 target_condition incongruent
	setcycle 8 correct_response 6
	setcycle 8 block 5
	setcycle 8 count_block 9
	setcycle 8 count_total 81
	setcycle 9 cue_type cue
	setcycle 9 cue_pos -50
	setcycle 9 target_type incongruent_right
	setcycle 9 target_pos -50
	setcycle 9 fixation_duration ""
	setcycle 9 cue_condition spatial
	setcycle 9 target_condition incongruent
	setcycle 9 correct_response 6
	setcycle 9 block 5
	setcycle 9 count_block 10
	setcycle 9 count_total 82
	setcycle 10 cue_type cue
	setcycle 10 cue_pos -50
	setcycle 10 target_type congruent_left
	setcycle 10 target_pos -50
	setcycle 10 fixation_duration ""
	setcycle 10 cue_condition spatial
	setcycle 10 target_condition congruent
	setcycle 10 correct_response 5
	setcycle 10 block 5
	setcycle 10 count_block 11
	setcycle 10 count_total 83
	setcycle 11 cue_type fixation
	setcycle 11 cue_pos 0
	setcycle 11 target_type neutral_right
	setcycle 11 target_pos 50
	setcycle 11 fixation_duration ""
	setcycle 11 cue_condition fixation
	setcycle 11 target_condition neutral
	setcycle 11 correct_response 6
	setcycle 11 block 5
	setcycle 11 count_block 12
	setcycle 11 count_total 84
	setcycle 12 cue_type fixation
	setcycle 12 cue_pos 0
	setcycle 12 target_type neutral_left
	setcycle 12 target_pos -50
	setcycle 12 fixation_duration ""
	setcycle 12 cue_condition fixation
	setcycle 12 target_condition neutral
	setcycle 12 correct_response 5
	setcycle 12 block 5
	setcycle 12 count_block 13
	setcycle 12 count_total 85
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	setcycle 18 cue_type cue
	setcycle 18 cue_pos 50
	setcycle 18 target_type congruent_right
	setcycle 18 target_pos 50
	setcycle 18 fixation_duration ""
	setcycle 18 cue_condition spatial
	setcycle 18 target_condition congruent
	setcycle 18 correct_response 6
	setcycle 18 block 5
	setcycle 18 count_block 19
	setcycle 18 count_total 91
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	run Flanker_2

define loop Blok3_ANT_
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 72
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 cue_type fixation
	setcycle 0 cue_pos 0
	setcycle 0 target_type neutral_right
	setcycle 0 target_pos -50
	setcycle 0 fixation_duration ""
	setcycle 0 cue_condition fixation
	setcycle 0 target_condition neutral
	setcycle 0 correct_response 6
	setcycle 0 block ""
	setcycle 0 count_block 1
	setcycle 0 count_total 73
	setcycle 1 cue_type cue
	setcycle 1 cue_pos 50
	setcycle 1 target_type congruent_left
	setcycle 1 target_pos 50
	setcycle 1 fixation_duration ""
	setcycle 1 cue_condition spatial
	setcycle 1 target_condition congruent
	setcycle 1 correct_response 5
	setcycle 1 block ""
	setcycle 1 count_block 2
	setcycle 1 count_total 74
	setcycle 2 cue_type fixation
	setcycle 2 cue_pos 0
	setcycle 2 target_type incongruent_right
	setcycle 2 target_pos -50
	setcycle 2 fixation_duration ""
	setcycle 2 cue_condition fixation
	setcycle 2 target_condition incongruent
	setcycle 2 correct_response 6
	setcycle 2 block ""
	setcycle 2 count_block 3
	setcycle 2 count_total 75
	setcycle 3 cue_type cue
	setcycle 3 cue_pos -50
	setcycle 3 target_type incongruent_left
	setcycle 3 target_pos -50
	setcycle 3 fixation_duration ""
	setcycle 3 cue_condition spatial
	setcycle 3 target_condition incongruent
	setcycle 3 correct_response 5
	setcycle 3 block ""
	setcycle 3 count_block 4
	setcycle 3 count_total 76
	setcycle 4 cue_type cue
	setcycle 4 cue_pos 0
	setcycle 4 target_type incongruent_left
	setcycle 4 target_pos 50
	setcycle 4 fixation_duration ""
	setcycle 4 cue_condition cue
	setcycle 4 target_condition incongruent
	setcycle 4 correct_response 5
	setcycle 4 block ""
	setcycle 4 count_block 5
	setcycle 4 count_total 77
	setcycle 5 cue_type cue
	setcycle 5 cue_pos 0
	setcycle 5 target_type congruent_left
	setcycle 5 target_pos -50
	setcycle 5 fixation_duration ""
	setcycle 5 cue_condition cue
	setcycle 5 target_condition congruent
	setcycle 5 correct_response 5
	setcycle 5 block ""
	setcycle 5 count_block 6
	setcycle 5 count_total 78
	setcycle 6 cue_type fixation
	setcycle 6 cue_pos 0
	setcycle 6 target_type congruent_left
	setcycle 6 target_pos 50
	setcycle 6 fixation_duration ""
	setcycle 6 cue_condition fixation
	setcycle 6 target_condition congruent
	setcycle 6 correct_response 5
	setcycle 6 block ""
	setcycle 6 count_block 7
	setcycle 6 count_total 79
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	setcycle 8 cue_type cue
	setcycle 8 cue_pos 0
	setcycle 8 target_type incongruent_right
	setcycle 8 target_pos -50
	setcycle 8 fixation_duration ""
	setcycle 8 cue_condition cue
	setcycle 8 target_condition incongruent
	setcycle 8 correct_response 6
	setcycle 8 block ""
	setcycle 8 count_block 9
	setcycle 8 count_total 81
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	setcycle 11 cue_type fixation
	setcycle 11 cue_pos 0
	setcycle 11 target_type neutral_right
	setcycle 11 target_pos 50
	setcycle 11 fixation_duration ""
	setcycle 11 cue_condition fixation
	setcycle 11 target_condition neutral
	setcycle 11 correct_response 6
	setcycle 11 block ""
	setcycle 11 count_block 12
	setcycle 11 count_total 84
	setcycle 12 cue_type fixation
	setcycle 12 cue_pos 0
	setcycle 12 target_type neutral_left
	setcycle 12 target_pos -50
	setcycle 12 fixation_duration ""
	setcycle 12 cue_condition fixation
	setcycle 12 target_condition neutral
	setcycle 12 correct_response 5
	setcycle 12 block ""
	setcycle 12 count_block 13
	setcycle 12 count_total 85
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	setcycle 18 cue_type cue
	setcycle 18 cue_pos 50
	setcycle 18 target_type congruent_right
	setcycle 18 target_pos 50
	setcycle 18 fixation_duration ""
	setcycle 18 cue_condition spatial
	setcycle 18 target_condition congruent
	setcycle 18 correct_response 6
	setcycle 18 block ""
	setcycle 18 count_block 19
	setcycle 18 count_total 91
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	setcycle 36 cue_type cue
	setcycle 36 cue_pos 0
	setcycle 36 target_type congruent_left
	setcycle 36 target_pos -50
	setcycle 36 fixation_duration 245
	setcycle 36 cue_condition cue
	setcycle 36 target_condition congruent
	setcycle 36 correct_response 5
	setcycle 36 block block_3
	setcycle 36 count_block 37
	setcycle 36 count_total 181
	setcycle 37 cue_type cue
	setcycle 37 cue_pos 0
	setcycle 37 target_type incongruent_left
	setcycle 37 target_pos -50
	setcycle 37 fixation_duration 645
	setcycle 37 cue_condition cue
	setcycle 37 target_condition incongruent
	setcycle 37 correct_response 5
	setcycle 37 block block_3
	setcycle 37 count_block 38
	setcycle 37 count_total 182
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	setcycle 41 cue_type fixation
	setcycle 41 cue_pos 0
	setcycle 41 target_type congruent_left
	setcycle 41 target_pos -50
	setcycle 41 fixation_duration 495
	setcycle 41 cue_condition fixation
	setcycle 41 target_condition congruent
	setcycle 41 correct_response 5
	setcycle 41 block block_3
	setcycle 41 count_block 42
	setcycle 41 count_total 186
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	run Flanker_2

define loop Blok3_ANT__1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 37
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 cue_type fixation
	setcycle 0 cue_pos 0
	setcycle 0 target_type neutral_right
	setcycle 0 target_pos -50
	setcycle 0 fixation_duration ""
	setcycle 0 cue_condition fixation
	setcycle 0 target_condition neutral
	setcycle 0 correct_response 6
	setcycle 0 block ""
	setcycle 0 count_block 1
	setcycle 0 count_total 73
	setcycle 1 cue_type cue
	setcycle 1 cue_pos 50
	setcycle 1 target_type congruent_left
	setcycle 1 target_pos 50
	setcycle 1 fixation_duration ""
	setcycle 1 cue_condition spatial
	setcycle 1 target_condition congruent
	setcycle 1 correct_response 5
	setcycle 1 block ""
	setcycle 1 count_block 2
	setcycle 1 count_total 74
	setcycle 2 cue_type fixation
	setcycle 2 cue_pos 0
	setcycle 2 target_type incongruent_right
	setcycle 2 target_pos -50
	setcycle 2 fixation_duration ""
	setcycle 2 cue_condition fixation
	setcycle 2 target_condition incongruent
	setcycle 2 correct_response 6
	setcycle 2 block ""
	setcycle 2 count_block 3
	setcycle 2 count_total 75
	setcycle 3 cue_type cue
	setcycle 3 cue_pos -50
	setcycle 3 target_type incongruent_left
	setcycle 3 target_pos -50
	setcycle 3 fixation_duration ""
	setcycle 3 cue_condition spatial
	setcycle 3 target_condition incongruent
	setcycle 3 correct_response 5
	setcycle 3 block ""
	setcycle 3 count_block 4
	setcycle 3 count_total 76
	setcycle 4 cue_type cue
	setcycle 4 cue_pos 0
	setcycle 4 target_type incongruent_left
	setcycle 4 target_pos 50
	setcycle 4 fixation_duration ""
	setcycle 4 cue_condition cue
	setcycle 4 target_condition incongruent
	setcycle 4 correct_response 5
	setcycle 4 block ""
	setcycle 4 count_block 5
	setcycle 4 count_total 77
	setcycle 5 cue_type cue
	setcycle 5 cue_pos 0
	setcycle 5 target_type congruent_left
	setcycle 5 target_pos -50
	setcycle 5 fixation_duration ""
	setcycle 5 cue_condition cue
	setcycle 5 target_condition congruent
	setcycle 5 correct_response 5
	setcycle 5 block ""
	setcycle 5 count_block 6
	setcycle 5 count_total 78
	setcycle 6 cue_type fixation
	setcycle 6 cue_pos 0
	setcycle 6 target_type congruent_left
	setcycle 6 target_pos 50
	setcycle 6 fixation_duration ""
	setcycle 6 cue_condition fixation
	setcycle 6 target_condition congruent
	setcycle 6 correct_response 5
	setcycle 6 block ""
	setcycle 6 count_block 7
	setcycle 6 count_total 79
	setcycle 7 cue_type cue
	setcycle 7 cue_pos 0
	setcycle 7 target_type neutral_right
	setcycle 7 target_pos 50
	setcycle 7 fixation_duration ""
	setcycle 7 cue_condition cue
	setcycle 7 target_condition neutral
	setcycle 7 correct_response 6
	setcycle 7 block ""
	setcycle 7 count_block 8
	setcycle 7 count_total 80
	setcycle 8 cue_type cue
	setcycle 8 cue_pos 0
	setcycle 8 target_type incongruent_right
	setcycle 8 target_pos -50
	setcycle 8 fixation_duration ""
	setcycle 8 cue_condition cue
	setcycle 8 target_condition incongruent
	setcycle 8 correct_response 6
	setcycle 8 block ""
	setcycle 8 count_block 9
	setcycle 8 count_total 81
	setcycle 9 cue_type cue
	setcycle 9 cue_pos -50
	setcycle 9 target_type incongruent_right
	setcycle 9 target_pos -50
	setcycle 9 fixation_duration ""
	setcycle 9 cue_condition spatial
	setcycle 9 target_condition incongruent
	setcycle 9 correct_response 6
	setcycle 9 block ""
	setcycle 9 count_block 10
	setcycle 9 count_total 82
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	setcycle 11 cue_type fixation
	setcycle 11 cue_pos 0
	setcycle 11 target_type neutral_right
	setcycle 11 target_pos 50
	setcycle 11 fixation_duration ""
	setcycle 11 cue_condition fixation
	setcycle 11 target_condition neutral
	setcycle 11 correct_response 6
	setcycle 11 block ""
	setcycle 11 count_block 12
	setcycle 11 count_total 84
	setcycle 12 cue_type fixation
	setcycle 12 cue_pos 0
	setcycle 12 target_type neutral_left
	setcycle 12 target_pos -50
	setcycle 12 fixation_duration ""
	setcycle 12 cue_condition fixation
	setcycle 12 target_condition neutral
	setcycle 12 correct_response 5
	setcycle 12 block ""
	setcycle 12 count_block 13
	setcycle 12 count_total 85
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	setcycle 18 cue_type cue
	setcycle 18 cue_pos 50
	setcycle 18 target_type congruent_right
	setcycle 18 target_pos 50
	setcycle 18 fixation_duration ""
	setcycle 18 cue_condition spatial
	setcycle 18 target_condition congruent
	setcycle 18 correct_response 6
	setcycle 18 block ""
	setcycle 18 count_block 19
	setcycle 18 count_total 91
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	setcycle 36 cue_type ""
	setcycle 36 cue_pos ""
	setcycle 36 target_type ""
	setcycle 36 target_pos ""
	setcycle 36 fixation_duration ""
	setcycle 36 cue_condition ""
	setcycle 36 target_condition ""
	setcycle 36 correct_response ""
	setcycle 36 block ""
	setcycle 36 count_block ""
	setcycle 36 count_total ""
	run ""

define loop Blok4_ANT
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 36
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 cue_type fixation
	setcycle 0 cue_pos 0
	setcycle 0 target_type congruent_right
	setcycle 0 target_pos -50
	setcycle 0 fixation_duration ""
	setcycle 0 cue_condition fixation
	setcycle 0 target_condition congruent
	setcycle 0 correct_response 6
	setcycle 0 block 6
	setcycle 0 count_block 1
	setcycle 0 count_total 109
	setcycle 1 cue_type cue
	setcycle 1 cue_pos 0
	setcycle 1 target_type congruent_right
	setcycle 1 target_pos -50
	setcycle 1 fixation_duration ""
	setcycle 1 cue_condition cue
	setcycle 1 target_condition congruent
	setcycle 1 correct_response 6
	setcycle 1 block 6
	setcycle 1 count_block 2
	setcycle 1 count_total 110
	setcycle 2 cue_type cue
	setcycle 2 cue_pos 0
	setcycle 2 target_type incongruent_right
	setcycle 2 target_pos 50
	setcycle 2 fixation_duration ""
	setcycle 2 cue_condition cue
	setcycle 2 target_condition incongruent
	setcycle 2 correct_response 6
	setcycle 2 block 6
	setcycle 2 count_block 3
	setcycle 2 count_total 111
	setcycle 3 cue_type cue
	setcycle 3 cue_pos 0
	setcycle 3 target_type congruent_left
	setcycle 3 target_pos 50
	setcycle 3 fixation_duration ""
	setcycle 3 cue_condition cue
	setcycle 3 target_condition congruent
	setcycle 3 correct_response 5
	setcycle 3 block 6
	setcycle 3 count_block 4
	setcycle 3 count_total 112
	setcycle 4 cue_type fixation
	setcycle 4 cue_pos 0
	setcycle 4 target_type congruent_left
	setcycle 4 target_pos 50
	setcycle 4 fixation_duration ""
	setcycle 4 cue_condition fixation
	setcycle 4 target_condition congruent
	setcycle 4 correct_response 5
	setcycle 4 block 6
	setcycle 4 count_block 5
	setcycle 4 count_total 113
	setcycle 5 cue_type cue
	setcycle 5 cue_pos -50
	setcycle 5 target_type incongruent_left
	setcycle 5 target_pos -50
	setcycle 5 fixation_duration ""
	setcycle 5 cue_condition spatial
	setcycle 5 target_condition incongruent
	setcycle 5 correct_response 5
	setcycle 5 block 6
	setcycle 5 count_block 6
	setcycle 5 count_total 114
	setcycle 6 cue_type cue
	setcycle 6 cue_pos -50
	setcycle 6 target_type congruent_left
	setcycle 6 target_pos -50
	setcycle 6 fixation_duration ""
	setcycle 6 cue_condition spatial
	setcycle 6 target_condition congruent
	setcycle 6 correct_response 5
	setcycle 6 block 6
	setcycle 6 count_block 7
	setcycle 6 count_total 115
	setcycle 7 cue_type fixation
	setcycle 7 cue_pos 0
	setcycle 7 target_type incongruent_left
	setcycle 7 target_pos 50
	setcycle 7 fixation_duration ""
	setcycle 7 cue_condition fixation
	setcycle 7 target_condition incongruent
	setcycle 7 correct_response 5
	setcycle 7 block 6
	setcycle 7 count_block 8
	setcycle 7 count_total 116
	setcycle 8 cue_type fixation
	setcycle 8 cue_pos 0
	setcycle 8 target_type incongruent_right
	setcycle 8 target_pos -50
	setcycle 8 fixation_duration ""
	setcycle 8 cue_condition fixation
	setcycle 8 target_condition incongruent
	setcycle 8 correct_response 6
	setcycle 8 block 6
	setcycle 8 count_block 9
	setcycle 8 count_total 117
	setcycle 9 cue_type cue
	setcycle 9 cue_pos -50
	setcycle 9 target_type neutral_right
	setcycle 9 target_pos -50
	setcycle 9 fixation_duration ""
	setcycle 9 cue_condition spatial
	setcycle 9 target_condition neutral
	setcycle 9 correct_response 6
	setcycle 9 block 6
	setcycle 9 count_block 10
	setcycle 9 count_total 118
	setcycle 10 cue_type fixation
	setcycle 10 cue_pos 0
	setcycle 10 target_type incongruent_right
	setcycle 10 target_pos 50
	setcycle 10 fixation_duration ""
	setcycle 10 cue_condition fixation
	setcycle 10 target_condition incongruent
	setcycle 10 correct_response 6
	setcycle 10 block 6
	setcycle 10 count_block 11
	setcycle 10 count_total 119
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	setcycle 13 cue_type fixation
	setcycle 13 cue_pos 0
	setcycle 13 target_type congruent_left
	setcycle 13 target_pos -50
	setcycle 13 fixation_duration ""
	setcycle 13 cue_condition fixation
	setcycle 13 target_condition congruent
	setcycle 13 correct_response 5
	setcycle 13 block 6
	setcycle 13 count_block 14
	setcycle 13 count_total 122
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	setcycle 16 cue_type cue
	setcycle 16 cue_pos 50
	setcycle 16 target_type neutral_right
	setcycle 16 target_pos 50
	setcycle 16 fixation_duration ""
	setcycle 16 cue_condition spatial
	setcycle 16 target_condition neutral
	setcycle 16 correct_response 6
	setcycle 16 block 6
	setcycle 16 count_block 17
	setcycle 16 count_total 125
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	setcycle 23 cue_type cue
	setcycle 23 cue_pos 0
	setcycle 23 target_type neutral_left
	setcycle 23 target_pos -50
	setcycle 23 fixation_duration ""
	setcycle 23 cue_condition cue
	setcycle 23 target_condition neutral
	setcycle 23 correct_response 5
	setcycle 23 block 6
	setcycle 23 count_block 24
	setcycle 23 count_total 132
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	run Flanker_2

define inline_script Braken
	set description "Executes Python code"
	set _run ""
	set _prepare ""

define inline_script Bril_Lenzen
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Draagt u een bril of contactlenzen?", center=True)
	checkbox1 = widgets.checkbox(form, text='Ja', group='bril_lenzen', var='bril_lenzen')
	checkbox2 = widgets.checkbox(form, text='Nee', group='bril_lenzen', var='bril_lenzen')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label, (0,1), colspan=4)
	form.set_widget(checkbox1, (0,2))
	form.set_widget(checkbox2, (0,3))
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('bril_lenzen') == "no":
		items['Bril_Lenzen'].run()
	__end__
	set _prepare ""

define sequence Button_Check_ANT
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Drukopderechterknop_1 always
	run new_srbox_3 always
	run new_feedback_2 "[correct]=0"

define sequence Button_Check_SRT
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Drukopderechterknop always
	run new_srbox always
	run new_feedback "[correct]=0"

define sequence Button_Check_SRT_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Drukopderechterknop_2 always
	run new_srbox_4 always
	run new_feedback_3 "[correct]=0"

define loop Checkbuttons_ANT
	set source_file ""
	set source table
	set repeat 9
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first no
	set break_if "[correct]=1"
	setcycle 0 empty_column ""
	run Button_Check_ANT

define loop Checkbuttons_SRT
	set source_file ""
	set source table
	set repeat 9
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first no
	set break_if "[correct]=1"
	setcycle 0 empty_column ""
	run Button_Check_SRT

define loop Checkbuttons_SRT_1
	set source_file ""
	set source table
	set repeat 9
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first no
	set break_if "[correct]=1"
	setcycle 0 empty_column ""
	run Button_Check_SRT_1

define inline_script Concentratie
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate heeft u normaal gesproken moeite met ... \n concentratie (difficulty concentrating)?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate heeft u moeite met ... \n concentratie (difficulty concentrating)?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='concentratie')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('concentratie') == None:
		items['Concentratie'].run()
	__end__
	set _prepare ""

define sketchpad Correct
	set duration 495
	set description "Displays stimuli"
	draw textline center=1 color="#00ff00" font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="GOED!<br /><br />Reactiesnelheid [response_time]" x=0 y=0 z_index=0

define sketchpad Correct_1
	set duration 495
	set description "Displays stimuli"
	draw textline center=1 color="#00ff00" font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="GOED!<br /><br />Reactiesnelheid [response_time]" x=0 y=0 z_index=0

define inline_script Dieet
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Volgt u een speciaal dieet?", center=True)
	checkbox1 = widgets.checkbox(form, text='Ja ', group='dieet', var='dieet')
	checkbox2 = widgets.checkbox(form, text='Nee', group='dieet', var='dieet')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label, (0,1), colspan=4)
	form.set_widget(checkbox1, (0,2))
	form.set_widget(checkbox2, (0,3))
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('dieet') == "no":
		items['Dieet'].run()
	
	var.wat_voor_dieet=" "
	__end__
	set _prepare ""

define inline_script Droevigheid
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate heeft u normaal gesproken last van ... \n droevigheid (saddness)?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate heeft u last van ... \n droevigheid? (saddness)?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='droevigheid')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('droevigheid') == None:
		items['Droevigheid'].run()
	__end__
	set _prepare ""

define inline_script Druk_op_hoofd
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate heeft u normaal gesproken last van ... \n druk op het hoofd (pressure in head)?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate heeft u last van ... \n druk op het hoofd (pressure in head)?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='druk_op_hoofd')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('druk_op_hoofd') == None:
		items['Druk_op_hoofd'].run()
	__end__
	set _prepare ""

define sketchpad Drukopderechterknop
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Druk op de knop.<br />" x=0 y=320 z_index=0
	draw image center=1 file="button_check_SRT.png" scale=0.7 show_if=always x=0 y=-32 z_index=0

define sketchpad Drukopderechterknop_1
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="Druk de rechterknop.<br />" x=0 y=320 z_index=0
	draw image center=1 file="button_check.png" scale=0.7 show_if=always x=0 y=-32 z_index=0

define sketchpad Drukopderechterknop_2
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="Druk op de knop.<br />" x=0 y=320 z_index=0
	draw image center=1 file="button_check_SRT.png" scale=0.7 show_if=always x=0 y=-32 z_index=0

define inline_script Duizeligheid
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate heeft u normaal gesproken last van ... \n duizeligheid (dizzyness)?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate heeft u last van ... \n duizeligheid (dizzyness)?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='duizeligheid')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('duizeligheid') == None:
		items['Duizeligheid'].run()
	__end__
	set _prepare ""

define sketchpad Einde
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="cockpit.jpg" scale=0.9 show_if=always x=0 y=-96 z_index=0
	draw textline center=1 color="#ffffff" font_bold=yes font_family=mono font_italic=no font_size=40 html=yes show_if=always text="EINDE!" x=0 y=-96 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Dr. Marsh Konigs & Prof. dr. Jaap Oosterlaan" x=1 y=-350 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="" x=416 y=320 z_index=0
	draw image center=1 file="child_pilot.png" scale=0.3 show_if=always x=-352 y=288 z_index=0
	draw image center=1 file="adult_pilot.jpg" scale=0.05 show_if=always x=384 y=288 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="EMMA CHILDREN's HOSPITAL<br />ACADEMIC MEDICAL CENTER<br />m.konigs@amc.nl" x=9 y=215 z_index=0
	draw image center=1 file="amc.png" scale=1 show_if=always x=0 y=320 z_index=0

define inline_script Emotioneel
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate kan u normaal gesproken ... \n emotioneel zijn (more emotional)?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate bent u ... \n meer emotioneel dan normaal (more emotional)?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='emotioneel')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('emotioneel') == None:
		items['Emotioneel'].run()
	__end__
	set _prepare ""

define sketchpad End
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="cockpit.jpg" scale=0.9 show_if=always x=0 y=-64 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="" x=416 y=320 z_index=0
	draw image center=1 file="child_pilot.png" scale=0.3 show_if=always x=-352 y=288 z_index=0
	draw image center=1 file="adult_pilot.jpg" scale=0.05 show_if=always x=384 y=288 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Emma Children's Hospital<br />Academic Medical Center<br />m.konigs@amc.nl" x=9 y=215 z_index=0
	draw image center=1 file="amc.png" scale=1 show_if=always x=0 y=320 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Emma Toolbox<br /><i> Attention Network Test </i>" x=-8 y=-343 z_index=0

define sketchpad End_
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="" x=416 y=320 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Academic Medical Center<br />Emma Children's Hospital<br />Pediatric Neuroscience Group<br />m.konigs@amc.nl<br /><br />Unauthorized use of the Emma Toolbox is not allowed." x=9 y=183 z_index=0
	draw image center=1 file="amc.png" scale=1 show_if=always x=0 y=320 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="<b> Emma Toolbox </b><br /><i> Attention </i>" x=5 y=-316 z_index=0
	draw image center=1 file="ET.png" scale=1 show_if=always x=0 y=-64 z_index=0

define sequence Flanker_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_inline_script_1_2 always
	run Incorrect "[correct_new_srbox_1]=0 and [response_new_srbox_1]!=None and [count_block] > 1"
	run Correct "[correct_new_srbox_1]=1 and [count_block] > 1"
	run NoResp "[response_new_srbox_1]=None  and [count_block] > 1"
	run fixation always
	run cue always
	run fixation_1 always
	run target always
	run new_srbox_1 always
	run new_inline_script_2_3 always
	run new_feedback_1 "[count_block]=24 and [center]!=\"Ajax\""
	run new_logger always
	run new_inline_script_1 "[count_block]=24"

define sequence Flanker_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run resest_trigger "[enable_EEG]==1"
	run new_inline_script_2_2 always
	run trigger_trial_onset "[enable_EEG]==1"
	run fixation_2 always
	run trigger_cue_onset "[enable_EEG]==1"
	run cue_2 always
	run fixation_3 always
	run trigger_target_onset "[enable_EEG]==1"
	run target_2 always
	run new_srbox_2 always
	run trigger_response_offset "[enable_EEG]==1"
	run new_inline_script_2 always
	run new_inline_script_1 "[count_block]=36"
	run new_feedback_2_1 "[count_block]=36 and [center]!=\"Ajax\""
	run new_logger always

define inline_script Fysiek_act
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Worden uw klachten erger tijdens fysieke activiteit? \n Do your symptoms worsen during physical activity?", center=True)
	checkbox1 = widgets.checkbox(form, text='Ja', group='erger_fys_act', var='erger_fys_act')
	checkbox2 = widgets.checkbox(form, text='Nee', group='erger_fys_act', var='erger_fys_act')
	button = widgets.button(form, text='Volgende', frame=True, center=True)		
	
	# Set form
	
	form.set_widget(label, (0,1), colspan=4)
	form.set_widget(checkbox1, (0,2))
	form.set_widget(checkbox2, (0,3))
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
		
	if self.get('erger_fys_act') == "no":
		items['Erger_fys_act'].run()
	__end__
	set _prepare ""

define inline_script Geboortedatum
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Wat is uw geboortedatum? Vul in als ..-..-.... (bijv. 01-01-2000)\n Druk daarna op ENTER")
	text_input = widgets.text_input(form, var='geboortedatum', return_accepts=True, stub="Typ hier")
	
	# Set form
	
	form.set_widget(label, (0,1))
	form.set_widget(text_input, (0,2))
	form._exec()
	
	if self.get('geboortedatum') == '':
		items['Geboortedatum'].run()
	__end__
	set _prepare ""

define inline_script Gehoor
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Heeft u gehoorstoornissen?", center=True)
	checkbox1 = widgets.checkbox(form, text='Ja', group='gehoor', var='gehoor')
	checkbox2 = widgets.checkbox(form, text='Nee', group='gehoor', var='gehoor')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label, (0,1), colspan=4)
	form.set_widget(checkbox1, (0,2))
	form.set_widget(checkbox2, (0,3))
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('gehoor') == "no":
		items['Gehoor'].run()
	__end__
	set _prepare ""

define inline_script Gehoorproblemen
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate heeft u normaal gesproken last van gehoorproblemen (zoem in het hoofd)?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate heeft u last van gehoorproblemen (zoem in het hoofd)?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='gehoorproblemen')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('gehoorproblemen') == None:
		items['Gehoorproblemen'].run()
	__end__
	set _prepare ""

define inline_script Geirriteerd
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate voelt u zich normaal gesproken ... \n geirriteerd (irritability)?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate voelt u zich ... \n geirriteerd (irritability)?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='geirriteerd')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('geirriteerd') == None:
		items['Geirriteerd'].run()
	__end__
	set _prepare ""

define inline_script Geslacht
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Wat is uw geslacht?", center=True)
	checkbox1 = widgets.checkbox(form, text='Man', group='geslacht', var='geslacht')
	checkbox2 = widgets.checkbox(form, text='Vrouw', group='geslacht', var='geslacht')
	checkbox3 = widgets.checkbox(form, text='Anders', group='geslacht', var='geslacht')
	button = widgets.button(form, text='Volgende', frame=True, center=True)		
	
	# Set form
	
	form.set_widget(label, (0,1), colspan=4)
	form.set_widget(checkbox1, (0,2))
	form.set_widget(checkbox2, (0,3))
	form.set_widget(checkbox3, (0,4))
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
		
	if self.get('geslacht') == "no":
		items['Geslacht'].run()
	__end__
	set _prepare ""

define inline_script Gevoel_langzaam
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate heeft u normaal gesproken het gevoel ... \n langzaam te zijn (feeling slowed down)?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate heeft u het gevoel ... \n langzaam te zijn (feeling slowed down)?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='gevoel_langzaam')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('gevoel_langzaam') == None:
		items['Gevoel_langzaam'].run()
	__end__
	set _prepare ""

define inline_script Gevoel_mistig
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate heeft u normaal gesproken het gevoel dat ... \n het 'mistig' is om u heen ('feeling like in a fog')?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate heeft u het gevoel dat ... \n het 'mistig' is om u heen ('feeling like in a fog')?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='gevoel_mistig')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('gevoel_mistig') == None:
		items['Gevoel_mistig'].run()
	__end__
	set _prepare ""

define inline_script Gevoeligheid_geluid
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate heeft u normaal gesproken last van gevoeligheid voor ... \n geluid (sensitivity to noise)?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate heeft u last van gevoeligheid voor ... \n geluid (sensitivity to noise)?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='gevoeligheid_geluid')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('gevoeligheid_geluid') == None:
		items['Gevoeligheid_geluid'].run()
	__end__
	set _prepare ""

define inline_script Gevoeligheid_licht
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate heeft u normaal gesproken last van gevoeligheid voor ... \n licht (sensitivity to light)?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate heeft u last van gevoeligheid voor ... \n licht (sensitivity to light)?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='gevoeligheid_licht')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('gevoeligheid_licht') == None:
		items['Gevoeligheid_licht'].run()
	__end__
	set _prepare ""

define inline_script Handig
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Bent u links- of rechtshandig?", center=True)
	checkbox1 = widgets.checkbox(form, text='Linkshandig', group='handig', var='handig')
	checkbox2 = widgets.checkbox(form, text='Rechtshandig', group='handig', var='handig')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label, (0,1), colspan=4)
	form.set_widget(checkbox1, (0,2))
	form.set_widget(checkbox2, (0,3))
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('handig') == "no":
		items['Handig'].run()
	__end__
	set _prepare ""

define inline_script Hoofdletsel
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	
	# Create a form
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Bent u ooit opgenomen in het ziekenhuis voor hoofdletsel?", center=True)
	checkbox1 = widgets.checkbox(form, text='Ja', group='hoofdletsel', var='hoofdletsel')
	checkbox2 = widgets.checkbox(form, text='Nee', group='hoofdletsel', var='hoofdletsel')
	button = widgets.button(form, text='Volgende', frame=True, center=True)		
	
	# Set form
	form.set_widget(label, (0,1), colspan=4)
	form.set_widget(checkbox1, (0,2))
	form.set_widget(checkbox2, (0,3))
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
		
	if self.get('hoofdletsel') == "no":
		items['Hoofdletsel'].run()
	__end__
	set _prepare ""

define inline_script Hoofdpijn
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate heeft u normaal gesproken last van ... \n hoofdpijn (headache)?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate heeft u last van ... \n hoofdpijn (headache)?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='hoofdpijn')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('hoofdpijn') == None:
		items['Hoofdpijn'].run()
	__end__
	set _prepare ""

define sketchpad Incorrect
	set duration 495
	set description "Displays stimuli"
	draw textline center=1 color="#ff0000" font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="FOUT!<br /><br />Reactiesnelheid [response_time]" x=0 y=0 z_index=0

define sketchpad Incorrect_1
	set duration 495
	set description "Displays stimuli"
	draw textline center=1 color="#ff0000" font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="FOUT!<br /><br />Reactiesnelheid [response_time]" x=0 y=0 z_index=0

define sketchpad Instructie
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie" x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Is alles duidelijk? <br /><br />We gaan nu oefenen. Succes!" x=0 y=0 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="*'t'" x=448 y=352 z_index=0

define sketchpad Instructie_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie Oefenfase - Aandachtsprocessen" x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="" x=0 y=96 z_index=0
	draw image center=1 file="pilot.png" scale=0.5 show_if=always x=0 y=-96 z_index=0
	draw image center=1 file="wheel.png" scale=0.8 show_if=always x=0 y=64 z_index=0

define sketchpad Instructie_10
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="We gaan nu oefenen.<br /><br />Succes!" x=0 y=0 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Druk 'T' om het oefenen over te slaan." x=0 y=320 z_index=0

define sketchpad Instructie_10_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie </u>" x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<i> Dat gaan we nu oefenen, succes! </i>" x=0 y=0 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="Druk 'T' om het oefenen over te slaan." x=0 y=320 z_index=0

define sketchpad Instructie_10_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> <b> Instructie" x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<i> Dat gaan we nu oefenen, succes!" x=0 y=0 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="Druk 'T' om het oefenen over te slaan." x=0 y=320 z_index=0

define sketchpad Instructie_10_4
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie" x=0 y=-352 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Soms verschijnt vlak voordat de viegtuigen verschijnen deze propellor in het midden van het scherm." x=0 y=128 z_index=0
	draw image center=1 file="pilot.png" scale=0.5 show_if=always x=0 y=-192 z_index=0
	draw image center=1 file="cue.png" scale=0.3 show_if=always x=0 y=0 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Je moet dan goed opletten want het vliegtuig verschijnt dan heel snel." x=0 y=192 z_index=0

define sketchpad Instructie_10_4_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie" x=0 y=-352 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Soms verschijnt voor de vliegtuigen een propellor in het midden van het scherm." x=0 y=256 z_index=0
	draw image center=1 file="airplanes.jpg" scale=0.5 show_if=always x=0 y=-96 z_index=0
	draw image center=1 file="cue.png" scale=0.3 show_if=always x=0 y=128 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="“Je moet dan goed opletten want het vliegtuig verschijnt dan heel snel.”" x=0 y=320 z_index=0

define sketchpad Instructie_10_4_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=serif font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-352 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Soms verschijnt voor de vliegtuigen een propellor in het midden van het scherm..<br /><br />Je moet dan goed opletten want het vliegtuig verschijnt dan heel snel." x=32 y=288 z_index=0
	draw image center=1 file="airplanes.jpg" scale=0.5 show_if=always x=0 y=-32 z_index=0
	draw image center=1 file="cue.png" scale=0.3 show_if=always x=0 y=160 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="" x=0 y=192 z_index=0

define sketchpad Instructie_11
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie" x=0 y=-352 z_index=0
	draw image center=1 file="example_central_cue.png" scale=0.75 show_if=always x=0 y=0 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Als je dit ziet, verschijnt het vliegtuig vlak erna, let dan extra goed op!" x=0 y=352 z_index=0

define sketchpad Instructie_11_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=serif font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-352 z_index=0
	draw image center=1 file="example_central_cue.png" scale=0.8 show_if=always x=0 y=32 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Let goed op het vliegtuig komt eraan!" x=0 y=96 z_index=0

define sketchpad Instructie_11_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie" x=0 y=-352 z_index=0
	draw image center=1 file="example_central_cue.png" scale=0.75 show_if=always x=0 y=0 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Als je dit ziet verschijnt het vliegtuig vlak erna, let dan extra goed op!" x=0 y=352 z_index=0

define sketchpad Instructie_12
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie" x=0 y=-352 z_index=0
	draw image center=1 file="example_spatialcue_top.png" scale=0.75 show_if=always x=0 y=0 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Soms verschijnt de propellor boven of onder in het scherm.<br />Let dan goed op want het vliegtuig verschijnt dan ook op die plek." x=0 y=64 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Als je dit ziet verschijnt het vliegtuig dus vlak daarna boven het kruisje." x=0 y=352 z_index=0

define sketchpad Instructie_12_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=serif font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-352 z_index=0
	draw image center=1 file="example_spatialcue_top.png" scale=0.8 show_if=always x=0 y=32 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Let goed op het vliegtuig verschijnt boven het kruisje!" x=0 y=96 z_index=0

define sketchpad Instructie_12_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie" x=0 y=-352 z_index=0
	draw image center=1 file="example_spatialcue_top.png" scale=0.75 show_if=always x=0 y=0 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Soms verschijnt de propellor boven of onder in het scherm.<br />Let dan goed op want het vliegtuig verschijnt dan ook op die plek." x=0 y=64 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="“Als je dit ziet verschijnt het vliegtuig dus vlak daarna boven het kruisje.”" x=0 y=352 z_index=0

define sketchpad Instructie_13
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie" x=0 y=-352 z_index=0
	draw image center=1 file="example_spatialcue_down.png" scale=0.75 show_if=always x=0 y=0 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Als je dit ziet verschijnt het vliegtuig onder het kruisje.  Let daar dan goed op!" x=0 y=352 z_index=0

define sketchpad Instructie_13_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=serif font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-352 z_index=0
	draw image center=1 file="example_spatialcue_down.png" scale=0.8 show_if=always x=0 y=32 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Let goed op het vliegtuig verschijnt onder het kruisje!" x=0 y=96 z_index=0

define sketchpad Instructie_13_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie" x=0 y=-352 z_index=0
	draw image center=1 file="example_spatialcue_down.png" scale=0.75 show_if=always x=0 y=0 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Als je dit ziet verschijnt het vliegtuig onder het kruisje.  Let daar dan goed op!" x=0 y=352 z_index=0

define sketchpad Instructie_14
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie" x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Is alles duidelijk? <br /><br />We gaan nu oefenen. Succes!" x=0 y=0 z_index=0

define sketchpad Instructie_1_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Je bent piloot en bestuurt een vliegtuig. <br /><br />Als een vliegtuig verschijnt, <br />druk dan zo snel mogelijk op de knop!" x=0 y=32 z_index=0
	draw image center=1 file="pilot.png" scale=0.5 show_if=always x=0 y=-128 z_index=0
	draw image center=1 file="wheel.png" scale=0.8 show_if=always x=0 y=224 z_index=0

define sketchpad Instructie_1_1_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-352 z_index=0
	draw image center=1 file="airplane.jpg" scale=1 show_if=always x=0 y=-32 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Zo verschijnt er een vliegtuig in het midden van het scherm.<br /><br />Druk dan zo snel mogelijk op de knop.<br />Probeer geen fouten te maken!" x=0 y=320 z_index=-1

define sketchpad Instructie_1_1_1_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie Oefenfase - Basale Informatieverwerking <u>" x=0 y=-352 z_index=0
	draw image center=1 file="airplane.jpg" scale=0.85 show_if=always x=0 y=-40 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="<i> Zo verschijnt er een vliegtuig in het midden van het scherm.<br /><br />Als een vliegtuig verschijnt, druk dan zo snel mogelijk op de knop.<br /><br />Druk steeds met je wijsvinger.<br /><br />Probeer geen fouten te maken!" x=0 y=288 z_index=-1

define sketchpad Instructie_1_1_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Goed gedaan!<br /><br />Nu is het oefenen voorbij en begint de test.<br /><br />Let goed op, <br />Druk zo snel mogelijk,<br />Maak zo weinig mogelijk foutjes" x=0 y=32 z_index=0
	draw image center=1 file="pilot.png" scale=0.5 show_if=always x=0 y=-128 z_index=0
	draw image center=1 file="wheel.png" scale=0.8 show_if=always x=0 y=224 z_index=0

define sketchpad Instructie_1_1_2_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-352 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Goed gedaan!<br /><br />Nu is het oefenen voorbij en begint de test.<br /><br />Let goed op, <br />Druk zo snel mogelijk,<br />Maak zo weinig mogelijk fouten." x=0 y=288 z_index=0
	draw image center=1 file="airplane.jpg" scale=0.8 show_if=always x=0 y=-64 z_index=0

define sketchpad Instructie_1_1_2_1_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie - Testfase Basale Informatieverwerking" x=0 y=-352 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<i> Nu is het oefenen voorbij en begint de test.<br /><br />Let goed op<br />Druk zo snel als je kunt<br />Maak zo weinig mogelijk fouten." x=0 y=288 z_index=0
	draw image center=1 file="airplane.jpg" scale=0.8 show_if=always x=0 y=-64 z_index=0

define sketchpad Instructie_1_1_2_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Daar gaan we weer,<br />deel 2 begint nu.<br /><br />Let goed op, <br />Druk zo snel mogelijk,<br />Maak zo weinig mogelijk foutjes." x=0 y=32 z_index=0
	draw image center=1 file="pilot.png" scale=0.5 show_if=always x=0 y=-128 z_index=0
	draw image center=1 file="wheel.png" scale=0.8 show_if=always x=0 y=224 z_index=0

define sketchpad Instructie_1_1_2_2_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Goed gedaan!<br /><br />Nu heb je een korte pauze,<br /><br />probeer even te ontspannen!<br /><br />Zometeen gaan we dit nog een keer doen." x=0 y=32 z_index=0
	draw image center=1 file="pilot.png" scale=0.5 show_if=always x=0 y=-128 z_index=0
	draw image center=1 file="wheel.png" scale=0.8 show_if=always x=0 y=224 z_index=0

define sketchpad Instructie_1_1_2_2_1_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-352 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Goed gedaan!<br /><br />Nu heb je een korte pauze,<br />probeer even te ontspannen!<br /><br />Zometeen gaan we dit nog een keer doen." x=0 y=288 z_index=0
	draw image center=1 file="airplane.jpg" scale=0.8 show_if=always x=0 y=-64 z_index=0

define sketchpad Instructie_1_1_2_2_1_1_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie" x=0 y=-352 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Nu heb je een korte pauze, probeer even te ontspannen.<br /><br />Dit gaan we nog één keer doen." x=0 y=288 z_index=0
	draw image center=1 file="airplane.jpg" scale=0.8 show_if=always x=0 y=-64 z_index=0

define sketchpad Instructie_1_1_2_2_1_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=serif font_italic=no font_size=24 html=yes show_if=always text="<u. Instructie" x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Nu heb je een korte pauze, probeer even te ontspannen.<br /><br />Dit gaan we nog één keer doen." x=0 y=64 z_index=0
	draw image center=1 file="pilot.png" scale=0.5 show_if=always x=0 y=-128 z_index=0
	draw image center=1 file="wheel.png" scale=0.8 show_if=always x=0 y=224 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie " x=0 y=-256 z_index=0

define sketchpad Instructie_1_1_2_2_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-352 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Daar gaan we weer,<br />deel 2 begint nu.<br /><br />Let goed op, <br />Druk zo snel mogelijk,<br />Maak zo weinig mogelijk fouten." x=0 y=288 z_index=0
	draw image center=1 file="airplane.jpg" scale=0.8 show_if=always x=0 y=-64 z_index=0

define sketchpad Instructie_1_1_2_2_2_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie" x=0 y=-352 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Daar gaan we weer.<br /><br />Let goed op<br />Druk zo snel als je kunt<br />Maak zo weinig mogelijk fouten." x=0 y=288 z_index=0
	draw image center=1 file="airplane.jpg" scale=0.8 show_if=always x=0 y=-64 z_index=0

define sketchpad Instructie_1_1_2_2_3
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie" x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Daar gaan we weer.<br /><br />Let goed op<br />Druk zo snel als je kunt<br />Maak zo weinig mogelijk fouten." x=0 y=64 z_index=0
	draw image center=1 file="pilot.png" scale=0.5 show_if=always x=0 y=-128 z_index=0
	draw image center=1 file="wheel.png" scale=0.8 show_if=always x=0 y=224 z_index=0

define sketchpad Instructie_1_1_2_3
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie - Testfase Basale Informatieverwerking </u>" x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<i> Nu is het oefenen voorbij en gaan we echt beginnen.<br /><br />Let goed op<br />Druk zo snel als je kunt<br />Maak zo weinig mogelijk fouten." x=0 y=64 z_index=0
	draw image center=1 file="pilot.png" scale=0.5 show_if=always x=0 y=-128 z_index=0
	draw image center=1 file="wheel.png" scale=0.8 show_if=always x=0 y=256 z_index=0

define sketchpad Instructie_1_1_3
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie Oefenfase - Basale Informatieverwerking <u>" x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<i> Zo verschijnt er een vliegtuig in het midden van het scherm.<br /><br />Als een vliegtuig verschijnt, druk dan zo snel mogelijk op de knop.<br /><br />Druk steeds met je wijsvinger [wijs aan]. <br />Probeer geen fouten te maken!" x=0 y=96 z_index=0
	draw image center=1 file="pilot.png" scale=0.5 show_if=always x=0 y=-96 z_index=0
	draw image center=1 file="wheel.png" scale=0.8 show_if=always x=0 y=288 z_index=0

define sketchpad Instructie_1_1_3_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie Oefenfase - Aandachtsprocessen <u>" x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<i> Zo verschijnt er een vliegtuig in het midden van het scherm.<br /><br />Als een vliegtuig verschijnt, druk dan zo snel mogelijk op aan de kant waar het vliegtuig heen vliegt." x=0 y=96 z_index=0
	draw image center=1 file="pilot.png" scale=0.5 show_if=always x=0 y=-96 z_index=0
	draw image center=1 file="wheel.png" scale=0.8 show_if=always x=0 y=288 z_index=0

define sketchpad Instructie_1_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=serif font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Als er zo een vliegtuig verschijnt..<br /><br />druk dan op de knop waar het vliegtuig heen vliegt." x=0 y=224 z_index=0
	draw image center=1 file="airplanes.jpg" scale=0.5 show_if=always x=0 y=-32 z_index=0

define sketchpad Instructie_1_3
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie" x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Dat was het oefenen. Begrijp je hoe het werkt?<br /><br />" x=0 y=64 z_index=0
	draw image center=1 file="pilot.png" scale=0.5 show_if=always x=0 y=-128 z_index=0
	draw image center=1 file="wheel.png" scale=0.8 show_if=always x=0 y=192 z_index=0

define sketchpad Instructie_1_3_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie" x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Dat was het oefenen. Is alles duidelijk?<br />" x=0 y=224 z_index=0
	draw image center=1 file="airplanes.jpg" scale=0.5 show_if=always x=0 y=-32 z_index=0

define sketchpad Instructie_1_3_1_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie" x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Dat was deel 1.<br /><br />Je hebt nu een korte pauze, probeer even te ontspannen.<br /><br />We gaan zo weer verder.<br />" x=0 y=224 z_index=0
	draw image center=1 file="airplanes.jpg" scale=0.5 show_if=always x=0 y=-32 z_index=0

define sketchpad Instructie_1_3_1_1_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text=Instructie x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Dat was deel 2, je bent nu op de helft.<br /><br />Je hebt nu een korte pauze, probeer even te ontspannen.<br /><br />We gaan zo weer verder!" x=0 y=224 z_index=0
	draw image center=1 file="airplanes.jpg" scale=0.5 show_if=always x=0 y=-32 z_index=0

define sketchpad Instructie_1_3_1_1_1_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie" x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Dat was deel 3.<br /><br />Je hebt nu een korte pauze, probeer even te ontspannen.<br /><br />We gaan zo beginnen met het laatste deel!" x=0 y=224 z_index=0
	draw image center=1 file="airplanes.jpg" scale=0.5 show_if=always x=0 y=-32 z_index=0

define sketchpad Instructie_1_3_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie" x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Dat was deel 1.<br /><br />Je hebt nu een korte pauze, probeer even te ontspannen.<br /><br />We gaan zo weer verder. <br />" x=0 y=64 z_index=0
	draw image center=1 file="pilot.png" scale=0.5 show_if=always x=0 y=-128 z_index=0
	draw image center=1 file="wheel.png" scale=0.8 show_if=always x=0 y=224 z_index=0

define sketchpad Instructie_1_3_2_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie" x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Dat was deel 2, je bent nu op de helft.<br /><br />Je hebt nu een korte pauze, probeer even te ontspannen.<br /><br />We gaan zo weer verder!" x=0 y=64 z_index=0
	draw image center=1 file="pilot.png" scale=0.5 show_if=always x=0 y=-128 z_index=0
	draw image center=1 file="wheel.png" scale=0.8 show_if=always x=0 y=256 z_index=0

define sketchpad Instructie_1_3_2_1_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie" x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Dat was deel 3.<br /><br />Je hebt nu een korte pauze, probeer even te ontspannen.<br /><br />We gaan zo beginnen met het laatste deel! <br />" x=0 y=64 z_index=0
	draw image center=1 file="pilot.png" scale=0.5 show_if=always x=0 y=-128 z_index=0
	draw image center=1 file="wheel.png" scale=0.8 show_if=always x=0 y=224 z_index=0

define sketchpad Instructie_1_4
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie" x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Zo verschijnt er weer telkens een vliegtuig op het scherm, <br />maar nu vliegt dat naar links [wijs aan] of naar rechts [wijs aan].<br /><br />Jij drukt dan op de knop aan de kant waar het vliegtuig heen vliegt." x=0 y=64 z_index=0
	draw image center=1 file="pilot.png" scale=0.5 show_if=always x=0 y=-128 z_index=0
	draw image center=1 file="wheel.png" scale=0.8 show_if=always x=0 y=256 z_index=0

define sketchpad Instructie_1_4_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie" x=0 y=-352 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="<br />Zometeen verschijnt er steeds een vliegtuig. <br /><br />Druk dan op de knop aan de kant waar het vliegtuig heen vliegt.<br />" x=0 y=224 z_index=0
	draw image center=1 file="airplanes.jpg" scale=0.5 show_if=always x=0 y=0 z_index=0

define sketchpad Instructie_1_5
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie Oefenfase - Aandachtsprocessen" x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Dat was het eerste onderdeel. Nu gaan er een paar dingen veranderen." x=32 y=224 z_index=0
	draw image center=1 file="airplanes.jpg" scale=0.5 show_if=always x=0 y=0 z_index=0

define sketchpad Instructie_2
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="example_neutral_left.png" scale=0.8 show_if=always x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Kijk, zo vliegt hij naar deze kant [wijs aan], dus druk jij op deze knop [wijs aan]." x=0 y=352 z_index=0

define sketchpad Instructie_2_1
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="example_SRT.png" scale=0.8 show_if=always x=0 y=0 z_index=0

define sketchpad Instructie_2_1_1
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="example_SRT.png" scale=0.8 show_if=always x=0 y=0 z_index=0

define sketchpad Instructie_2_1_1_1
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="example_SRT.png" scale=0.75 show_if=always x=0 y=-32 z_index=0
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<i> Kijk, zo ziet het er uit.<br />Dit vliegtuig verschijnt straks plotseling in het scherm, en dan druk je zo snel als je kan op de knop." x=0 y=320 z_index=0

define sketchpad Instructie_2_1_2
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="example_SRT.png" scale=0.75 show_if=always x=-32 y=-64 z_index=0
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<i> Kijk, zo ziet het er uit.<br /><br />Dit vliegtuig verschijnt straks plotseling in het scherm, <br />dan druk je zo snel als je kan op de knop. </i>" x=-32 y=320 z_index=0

define sketchpad Instructie_2_2
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="example_neutral_left.png" scale=0.8 show_if=always x=0 y=0 z_index=0

define sketchpad Instructie_2_3
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="example_neutral_left.png" scale=0.75 show_if=always x=0 y=-32 z_index=0
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Kijk, zo vliegt hij naar links [wijs aan], dus druk jij op de linkerknop [wijs aan]." x=0 y=320 z_index=0

define sketchpad Instructie_3
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="example_neutral_right.png" scale=0.8 show_if=always x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Kijk, zo vliegt hij naar deze kant [wijs aan], dus druk jij op deze knop [wijs aan]." x=0 y=352 z_index=0

define sketchpad Instructie_3_1
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="example_neutral_right.png" scale=0.75 show_if=always x=0 y=-32 z_index=0
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Kijk, zo vliegt hij naar rechts [wijs aan], dus druk jij op de rechterknop [wijs aan]." x=0 y=320 z_index=0

define sketchpad Instructie_3_2
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="example_neutral_right.png" scale=0.8 show_if=always x=0 y=0 z_index=0

define sketchpad Instructie_4
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie" x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Soms zijn er meerdere vliegtuigen tegelijk te zien.<br /><br />Let dan alleen op de middelste!" x=0 y=32 z_index=0
	draw image center=1 file="pilot.png" scale=0.5 show_if=always x=0 y=-128 z_index=0
	draw image center=1 file="wheel.png" scale=0.8 show_if=always x=0 y=192 z_index=0

define sketchpad Instructie_4_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Dat gebeurt straks achter elkaar door.<br /><br />Druk elke keer op de knop als je een vliegtuig ziet. <br /><br />Druk zo snel mogelijk, zonder foutjes te maken." x=32 y=32 z_index=0
	draw image center=1 file="pilot.png" scale=0.5 show_if=always x=0 y=-128 z_index=0
	draw image center=1 file="wheel.png" scale=0.8 show_if=always x=0 y=192 z_index=0

define sketchpad Instructie_4_1_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-352 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Dat gebeurt straks achter elkaar door.<br /><br />Druk elke keer op de knop als je een vliegtuig ziet. <br /><br />Druk zo snel mogelijk, zonder fouten te maken." x=0 y=288 z_index=0
	draw image center=1 file="airplane.jpg" scale=0.9 show_if=always x=0 y=-64 z_index=0

define sketchpad Instructie_4_1_1_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie" x=0 y=-352 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<i> Dat gebeurt straks achter elkaar door.<br /><br />Druk elke keer op de knop als je een vliegtuig ziet verschijnen.<br /><br />Druk zo snel mogelijk, zonder fouten te maken." x=0 y=288 z_index=0
	draw image center=1 file="airplane.jpg" scale=0.9 show_if=always x=0 y=-64 z_index=0

define sketchpad Instructie_4_1_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie </u>" x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<i> Dat gebeurt straks achter elkaar door.<br /><br />Druk elke keer op de knop als je een vliegtuig ziet verschijnen.<br /><br />Druk zo snel mogelijk zonder fouten te maken. </i>" x=0 y=64 z_index=0
	draw image center=1 file="pilot.png" scale=0.5 show_if=always x=0 y=-128 z_index=0
	draw image center=1 file="wheel.png" scale=0.8 show_if=always x=0 y=224 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="" x=0 y=320 z_index=0

define sketchpad Instructie_4_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=serif font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Soms zijn er meerdere vliegtuigen tegelijk.<br /><br />Let dan alleen op de middelste!" x=0 y=224 z_index=0
	draw image center=1 file="airplanes.jpg" scale=0.5 show_if=always x=0 y=-32 z_index=0

define sketchpad Instructie_4_2_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="Als er zo een vliegtuig verschijnt..<br /><br />druk dan op de knop waar het vliegtuig heen vliegt." x=0 y=224 z_index=0
	draw image center=1 file="airplanes.jpg" scale=0.5 show_if=always x=0 y=-32 z_index=0

define sketchpad Instructie_4_3
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie" x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Nu begint de taak, deze bestaat uit vier delen.<br /><br />We starten met deel 1:<br /><br />Let goed op.<br />Druk zo snel mogelijk.<br />Maak zo weinig mogelijk fouten." x=0 y=64 z_index=0
	draw image center=1 file="pilot.png" scale=0.5 show_if=always x=0 y=-128 z_index=0
	draw image center=1 file="wheel.png" scale=0.8 show_if=always x=0 y=256 z_index=0

define sketchpad Instructie_4_3_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie" x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Nu begint de test.<br /><br />We doen in totaal vier delen, nu begint deel 1.<br /><br />Let goed op.<br />Druk zo snel mogelijk.<br />Maak zo weinig mogelijk fouten." x=0 y=224 z_index=0
	draw image center=1 file="airplanes.jpg" scale=0.5 show_if=always x=0 y=-32 z_index=0

define sketchpad Instructie_4_3_1_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie" x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="We starten nu met deel 2.<br /><br />Let goed op.<br />Druk zo snel mogelijk.<br />Maak zo weinig mogelijk fouten." x=0 y=224 z_index=0
	draw image center=1 file="airplanes.jpg" scale=0.5 show_if=always x=0 y=-32 z_index=0

define sketchpad Instructie_4_3_1_1_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text=Instructie x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="We starten nu met deel 3.<br /><br />Let goed op.<br />Druk zo snel mogelijk.<br />Maak zo weinig mogelijk fouten." x=0 y=224 z_index=0
	draw image center=1 file="airplanes.jpg" scale=0.5 show_if=always x=0 y=-32 z_index=0

define sketchpad Instructie_4_3_1_1_1_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie" x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="We starten nu met deel 4, de laatste.<br /><br />Let goed op.<br />Druk zo snel mogelijk.<br />Maak zo weinig mogelijk fouten." x=0 y=224 z_index=0
	draw image center=1 file="airplanes.jpg" scale=0.5 show_if=always x=0 y=-32 z_index=0

define sketchpad Instructie_4_3_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie" x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="We starten nu met deel 2.<br /><br />Let goed op.<br />Druk zo snel mogelijk.<br />Maak zo weinig mogelijk fouten." x=0 y=64 z_index=0
	draw image center=1 file="pilot.png" scale=0.5 show_if=always x=0 y=-128 z_index=0
	draw image center=1 file="wheel.png" scale=0.8 show_if=always x=0 y=256 z_index=0

define sketchpad Instructie_4_3_2_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie" x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="We starten nu met deel 3.<br /><br />Let goed op.<br />Druk zo snel mogelijk.<br />Maak zo weinig mogelijk fouten." x=0 y=64 z_index=0
	draw image center=1 file="pilot.png" scale=0.5 show_if=always x=0 y=-128 z_index=0
	draw image center=1 file="wheel.png" scale=0.8 show_if=always x=0 y=256 z_index=0

define sketchpad Instructie_4_3_2_1_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie" x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="We starten nu met deel 4, de laatste.<br /><br />Let goed op.<br />Druk zo snel mogelijk.<br />Maak zo weinig mogelijk fouten." x=0 y=64 z_index=0
	draw image center=1 file="pilot.png" scale=0.5 show_if=always x=0 y=-128 z_index=0
	draw image center=1 file="wheel.png" scale=0.8 show_if=always x=0 y=224 z_index=0

define sketchpad Instructie_4_4
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie" x=0 y=-320 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="“Soms zijn er meerdere vliegtuigen tegelijk te zien.”<br /><br />“Let dan alleen op de middelste!”" x=0 y=256 z_index=0
	draw image center=1 file="airplanes.jpg" scale=0.5 show_if=always x=0 y=0 z_index=0

define sketchpad Instructie_5
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="example_congruent_left.png" scale=0.75 show_if=always x=0 y=-64 z_index=0
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Kijk, nu is het makkelijk want alle vliegtuigen vliegen nu dezelfde kant op.<br /><br />Het middelste vliegtuig vliegt naar deze kant [wijs aan], dus jij drukt op deze knop [wijs aan]." x=0 y=320 z_index=0

define sketchpad Instructie_5_1
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="example_congruent_left.png" scale=0.75 show_if=always x=0 y=-64 z_index=0
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Kijk, nu is het makkelijk want alle vliegtuigen vliegen nu dezelfde kant op.<br /><br />Het middelste vliegtuig vliegt naar deze kant [wijs aan], dus jij drukt op deze knop [wijs aan]." x=0 y=320 z_index=0

define sketchpad Instructie_5_2
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="example_congruent_left.png" scale=0.8 show_if=always x=0 y=0 z_index=0

define sketchpad Instructie_6
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="example_congruent_right.png" scale=0.75 show_if=always x=0 y=-64 z_index=0
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Nu vliegen alle vliegtuigen naar deze kant [wijs aan].<br /><br />De middelste ook, dus jij drukt op deze knop [wijs aan]." x=0 y=320 z_index=0

define sketchpad Instructie_6_1
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="example_congruent_right.png" scale=0.75 show_if=always x=0 y=-64 z_index=0
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Nu vliegen alle vliegtuigen naar rechts [wijs aan].<br /><br />De middelste ook, dus jij drukt op de rechterknop [wijs aan]." x=0 y=320 z_index=0

define sketchpad Instructie_6_2
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="example_congruent_right.png" scale=0.8 show_if=always x=0 y=0 z_index=0

define sketchpad Instructie_7
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=serif font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Let alleen op het middelste vliegtuig...<br /><br />Dus ook als de andere vliegtuigen de andere kant op wijzen!" x=0 y=32 z_index=0
	draw image center=1 file="pilot.png" scale=0.5 show_if=always x=0 y=-128 z_index=0
	draw image center=1 file="wheel.png" scale=0.8 show_if=always x=0 y=192 z_index=0

define sketchpad Instructie_7_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=serif font_italic=no font_size=24 html=yes show_if=always text=Instructie x=0 y=-256 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Let alleen op het middelste vliegtuig...<br /><br />Dus ook als de andere vliegtuigen de andere kant op vliegen!" x=0 y=224 z_index=0
	draw image center=1 file="airplanes.jpg" scale=0.5 show_if=always x=0 y=-32 z_index=0

define sketchpad Instructie_8
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="example_incongruent_left.png" scale=0.75 show_if=always x=0 y=-64 z_index=0
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Kijk, nu is het moeilijker, want niet<br /> alle vliegtuigen vliegen dezelfde kant op.<br /><br />De meeste vliegen naar deze kant [wijs aan], maar de middelste wijst naar deze kant [wijs aan].<br /><br />Daarom druk jij op deze knop [wijs aan], ook al vliegen de andere vliegtuigen de andere kant op.<br />Je let dus alleen op het middelste vliegtuig." x=0 y=288 z_index=0

define sketchpad Instructie_8_1
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="example_incongruent_left.png" scale=0.75 show_if=always x=0 y=-64 z_index=0
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Kijk, nu is het moeilijker, want niet<br /> alle vliegtuigen vliegen dezelfde kant op.<br /><br />De meeste vliegen naar deze rechts [wijs aan], maar de middelste wijst naar links [wijs aan].<br /><br />Daarom druk jij op de linkerknop [wijs aan], ook al vliegen de andere vliegtuigen de andere kant op.<br /><br />Je let dus alleen op het middelste vliegtuig." x=0 y=288 z_index=0

define sketchpad Instructie_8_2
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="example_incongruent_left.png" scale=0.8 show_if=always x=0 y=0 z_index=0

define sketchpad Instructie_9
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="example_incongruent_right.png" scale=0.75 show_if=always x=0 y=-64 z_index=0
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Nu is het precies andersom.<br />De meeste vliegtuigen vliegen naar deze kant [wijs aan],<br />maar de middelste wijst naar deze kant [wijs aan].<br /><br />Daarom druk jij op deze knop [wijs aan], ook al vliegen de andere vliegtuigen de andere kant op. <br />Je let dus weer alleen op het middelste vliegtuig." x=0 y=288 z_index=0

define sketchpad Instructie_9_1
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="example_incongruent_right.png" scale=0.75 show_if=always x=0 y=-64 z_index=0
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Nu is het precies andersom.<br />De meeste vliegtuigen vliegen naar links [wijs aan],<br />maar de middelste wijst naar rechts [wijs aan].<br /><br />Daarom druk jij op de rechterknop [wijs aan], ook al vliegen de andere vliegtuigen de andere kant op. <br />Je let dus weer alleen op het middelste vliegtuig." x=0 y=288 z_index=0

define sketchpad Instructie_9_2
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="example_incongruent_right.png" scale=0.8 show_if=always x=0 y=0 z_index=0

define loop Instructie_kinderen_ANT_blok1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 instruction_left 5
	setcycle 0 instruction_right 6
	run new_sequence_3

define loop Instructie_kinderen_ANT_blok2
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 instruction_left 5
	setcycle 0 instruction_right 6
	run new_sequence_3_2

define loop Instructie_kinderen_ANT_blok3
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 instruction_left 5
	setcycle 0 instruction_right 6
	run new_sequence_3_2_1

define loop Instructie_kinderen_ANT_blok4
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 instruction_left 5
	setcycle 0 instruction_right 6
	run new_sequence_3_2_1_2

define loop Instructie_volwassenen_ANT_blok1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 instruction_left 5
	setcycle 0 instruction_right 6
	run new_sequence_3_1

define loop Instructie_volwassenen_ANT_blok2
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 instruction_left 5
	setcycle 0 instruction_right 6
	run new_sequence_3_1_1

define loop Instructie_volwassenen_ANT_blok3
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 instruction_left 5
	setcycle 0 instruction_right 6
	run new_sequence_3_1_1_1

define loop Instructie_volwassenen_ANT_blok4
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 instruction_left 5
	setcycle 0 instruction_right 6
	run new_sequence_3_1_1_1_1

define loop Instructies_kinderen_ANT_oefen
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 instruction_left 5
	setcycle 0 instruction_right 6
	run new_sequence

define loop Instructies_kinderen_SRT_oefen
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 instruction_left 5
	setcycle 0 instruction_right 6
	run new_sequence_1

define loop Instructies_kinderen_SRT_oefen_1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 instruction_left 5
	setcycle 0 instruction_right 6
	run new_sequence_1_3

define loop Instructies_kinderen_SRT_test
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 instruction_left 5
	setcycle 0 instruction_right 6
	run new_sequence_1_2

define loop Instructies_kinderen_SRT_test_1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 instruction_left 5
	setcycle 0 instruction_right 6
	run new_sequence_1_2_3

define loop Instructies_volwassenen_ANT_oefen
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 instruction_left 5
	setcycle 0 instruction_right 6
	run new_sequence_2

define loop Instructies_volwassenen_ANT_oefen_1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 instruction_left 5
	setcycle 0 instruction_right 6
	run new_sequence_4

define loop Instructies_volwassenen_SRT_oefen
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 instruction_left 5
	setcycle 0 instruction_right 6
	run new_sequence_1_1

define loop Instructies_volwassenen_SRT_oefen_1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 instruction_left 5
	setcycle 0 instruction_right 6
	run new_sequence_1_1_1

define loop Instructies_volwassenen_SRT_test
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 instruction_left 5
	setcycle 0 instruction_right 6
	run new_sequence_1_2_1

define loop Instructies_volwassenen_SRT_test_1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 instruction_left 5
	setcycle 0 instruction_right 6
	run new_sequence_1_2_1_1

define inline_script Kleurenblind
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Bent u kleurenblind?", center=True)
	checkbox1 = widgets.checkbox(form, text='Ja',  group='kleurenblind', var='kleurenblind')
	checkbox2 = widgets.checkbox(form, text='Nee', group='kleurenblind', var='kleurenblind')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label, (0,1), colspan=4)
	form.set_widget(checkbox1, (0,2))
	form.set_widget(checkbox2, (0,3))
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('kleurenblind') == "no":
		items['Kleurenblind'].run()
	__end__
	set _prepare ""

define inline_script Leerstoornis
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	
	# Create a form
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Heeft u een diagnose voor een leerstoornis of dyslexie?", center=True)
	checkbox1 = widgets.checkbox(form, text='Ja', group='leerstoornis', var='leerstoornis')
	checkbox2 = widgets.checkbox(form, text='Nee', group='leerstoornis', var='leerstoornis')
	button = widgets.button(form, text='Volgende', frame=True, center=True)		
	
	# Set form
	form.set_widget(label, (0,1), colspan=4)
	form.set_widget(checkbox1, (0,2))
	form.set_widget(checkbox2, (0,3))
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
		
	if self.get('leerstoornis') == "no":
		items['Leerstoornis'].run()
	__end__
	set _prepare ""

define inline_script Medicijnen
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Gebruikt u medicijnen?", center=True)
	checkbox1 = widgets.checkbox(form, text='Ja ', group='medicijnen', var='medicijnen')
	checkbox2 = widgets.checkbox(form, text='Nee', group='medicijnen', var='medicijnen')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label, (0,1), colspan=4)
	form.set_widget(checkbox1, (0,2))
	form.set_widget(checkbox2, (0,3))
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('medicijnen') == "no":
		items['Medicijnen'].run()
	
	var.welke_medicijnen=" "
	__end__
	set _prepare ""

define inline_script Meer_slapen
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate slaapt u momenteel meer dan normaal?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate slaapt u meer dan normaal?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='meer_slapen')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('meer_slapen') == None:
		items['Meer_slapen'].run()
	__end__
	set _prepare ""

define inline_script Mentaal_act
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Worden uw klachten erger tijdens mentale activiteit? \n Do your symptoms worsen during mental activity?", center=True)
	checkbox1 = widgets.checkbox(form, text='Ja', group='erger_ment_act', var='erger_ment_act')
	checkbox2 = widgets.checkbox(form, text='Nee', group='erger_ment_act', var='erger_ment_act')
	button = widgets.button(form, text='Volgende', frame=True, center=True)		
	
	# Set form
	
	form.set_widget(label, (0,1), colspan=4)
	form.set_widget(checkbox1, (0,2))
	form.set_widget(checkbox2, (0,3))
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
		
	if self.get('erger_ment_act') == "no":
		items['Erger_ment_act'].run()
	__end__
	set _prepare ""

define inline_script Meting
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	image1 = widgets.image(form, path=pool['AMC.png'])
	label= widgets.label(form, text="Welke meting wilt u vandaag uitvoeren?", center=True)
	checkbox1 = widgets.checkbox(form, text='Baseline', group='meting', var='meting')
	checkbox2 = widgets.checkbox(form, text='Nameting', group='meting', var='meting')
	checkbox3 = widgets.checkbox(form, text='Monitoring', group='meting', var='meting')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(image1, (0,0))
	form.set_widget(label, (0,1), colspan=4)
	form.set_widget(checkbox1, (0,2))
	form.set_widget(checkbox2, (0,3))
	form.set_widget(checkbox3, (0,4))
	form.set_widget(button, (0,6), colspan=4)
	form._exec()
		
	if self.get('meting') == "no":
		items['Meting'].run()
	__end__
	set _prepare ""

define inline_script Migraine
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	
	# Create a form
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Heeft u een diagnose voor hoofdpijn of migraine?", center=True)
	checkbox1 = widgets.checkbox(form, text='Ja', group='migraine', var='migraine')
	checkbox2 = widgets.checkbox(form, text='Nee', group='migraine', var='migraine')
	button = widgets.button(form, text='Volgende', frame=True, center=True)		
	
	# Set form
	form.set_widget(label, (0,1), colspan=4)
	form.set_widget(checkbox1, (0,2))
	form.set_widget(checkbox2, (0,3))
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
		
	if self.get('migraine') == "no":
		items['Migraine'].run()
	__end__
	set _prepare ""

define inline_script Misselijkheid
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate heeft u normaal gesproken last van ... \n misselijkheid of overgeven (nausea or vomiting)?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate heeft u last van ... \n misselijkheid of overgeven (nausea or vomiting)?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='misselijkheid')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('misselijkheid') == None:
		items['Misselijkheid'].run()
	__end__
	set _prepare ""

define inline_script Naam
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Vul uw voor- en achternaam in. \n Druk daarna op ENTER")
	text_input = widgets.text_input(form, var='naam', return_accepts=True, stub="Typ hier")
	
	# Set form
	
	form.set_widget(label, (0,1))
	form.set_widget(text_input, (0,2))
	form._exec()
	
	if self.get('naam') == '':
		items['Naam'].run()
	__end__
	set _prepare ""

define inline_script Nekpijn
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate heeft u normaal gesproken last van ... \n nekpijn (neck pain)?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate heeft u last van ... \n nekpijn (neck pain)?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='nekpijn')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('nekpijn') == None:
		items['Nekpijn'].run()
	__end__
	set _prepare ""

define inline_script Nerveus_bang
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate heeft u normaal gesproken last van ... \n nerveus of bang zijn (nervous or anxious)?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate heeft u last van ... \n nerveus of bang zijn (nervous or anxious)?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='nerveus_bang')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('nerveus_bang') == None:
		items['Nerveus_bang'].run()
	__end__
	set _prepare ""

define inline_script Niet_goed_voelen
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate voelt u zich ... \n niet helemaal goed ('don't feel right')?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate voelt u zich ... \n niet helemaal goed ('don't feel right')?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='niet_goed_voelen')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('niet_goed_voelen') == None:
		items['Niet_goed_voelen'].run()
	__end__
	set _prepare ""

define sketchpad NoResp
	set duration 495
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="TE LAAT!<br />" x=0 y=0 z_index=0

define sketchpad NoResp_1
	set duration 495
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="TE LAAT!<br />" x=0 y=0 z_index=0

define inline_script Normaliteit
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Als u zich normaal 100% voelt, hoeveel procent voelt u zich nu dan?\n How much percent of normal do you feel? \n Vul alleen het getal in, only type the digits. Druk daarna op ENTER")
	text_input = widgets.text_input(form, var='normaliteit', return_accepts=True, stub="Typ hier alleen de getallen")
	
	# Set form
	
	form.set_widget(label, (0,1))
	form.set_widget(text_input, (0,2))
	form._exec()
	
	if self.get('normaliteit') == '':
		items['Normaliteit'].run()
	__end__
	set _prepare ""

define loop Oefenblok_ANT
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 24
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 cue_type cue
	setcycle 0 cue_pos 0
	setcycle 0 target_type neutral_right
	setcycle 0 target_pos -50
	setcycle 0 fixation_duration ""
	setcycle 0 cue_condition cue
	setcycle 0 target_condition neutral
	setcycle 0 correct_response 6
	setcycle 0 block 0
	setcycle 0 count_block 1
	setcycle 0 count_total ""
	setcycle 1 cue_type cue
	setcycle 1 cue_pos 0
	setcycle 1 target_type neutral_right
	setcycle 1 target_pos 50
	setcycle 1 fixation_duration ""
	setcycle 1 cue_condition cue
	setcycle 1 target_condition neutral
	setcycle 1 correct_response 6
	setcycle 1 block 0
	setcycle 1 count_block 2
	setcycle 1 count_total ""
	setcycle 2 cue_type cue
	setcycle 2 cue_pos 50
	setcycle 2 target_type congruent_right
	setcycle 2 target_pos 50
	setcycle 2 fixation_duration ""
	setcycle 2 cue_condition spatial
	setcycle 2 target_condition congruent
	setcycle 2 correct_response 6
	setcycle 2 block 0
	setcycle 2 count_block 3
	setcycle 2 count_total ""
	setcycle 3 cue_type fixation
	setcycle 3 cue_pos 0
	setcycle 3 target_type incongruent_left
	setcycle 3 target_pos 50
	setcycle 3 fixation_duration ""
	setcycle 3 cue_condition fixation
	setcycle 3 target_condition incongruent
	setcycle 3 correct_response 5
	setcycle 3 block 0
	setcycle 3 count_block 4
	setcycle 3 count_total ""
	setcycle 4 cue_type fixation
	setcycle 4 cue_pos 0
	setcycle 4 target_type neutral_left
	setcycle 4 target_pos -50
	setcycle 4 fixation_duration ""
	setcycle 4 cue_condition fixation
	setcycle 4 target_condition neutral
	setcycle 4 correct_response 5
	setcycle 4 block 0
	setcycle 4 count_block 5
	setcycle 4 count_total ""
	setcycle 5 cue_type fixation
	setcycle 5 cue_pos 0
	setcycle 5 target_type congruent_left
	setcycle 5 target_pos 50
	setcycle 5 fixation_duration ""
	setcycle 5 cue_condition fixation
	setcycle 5 target_condition congruent
	setcycle 5 correct_response 5
	setcycle 5 block 0
	setcycle 5 count_block 6
	setcycle 5 count_total ""
	setcycle 6 cue_type cue
	setcycle 6 cue_pos -50
	setcycle 6 target_type neutral_right
	setcycle 6 target_pos -50
	setcycle 6 fixation_duration ""
	setcycle 6 cue_condition spatial
	setcycle 6 target_condition neutral
	setcycle 6 correct_response 6
	setcycle 6 block 0
	setcycle 6 count_block 7
	setcycle 6 count_total ""
	setcycle 7 cue_type cue
	setcycle 7 cue_pos 0
	setcycle 7 target_type congruent_right
	setcycle 7 target_pos -50
	setcycle 7 fixation_duration ""
	setcycle 7 cue_condition cue
	setcycle 7 target_condition congruent
	setcycle 7 correct_response 6
	setcycle 7 block 0
	setcycle 7 count_block 8
	setcycle 7 count_total ""
	setcycle 8 cue_type cue
	setcycle 8 cue_pos -50
	setcycle 8 target_type congruent_right
	setcycle 8 target_pos -50
	setcycle 8 fixation_duration ""
	setcycle 8 cue_condition spatial
	setcycle 8 target_condition congruent
	setcycle 8 correct_response 6
	setcycle 8 block 0
	setcycle 8 count_block 9
	setcycle 8 count_total ""
	setcycle 9 cue_type fixation
	setcycle 9 cue_pos 0
	setcycle 9 target_type congruent_right
	setcycle 9 target_pos 50
	setcycle 9 fixation_duration ""
	setcycle 9 cue_condition fixation
	setcycle 9 target_condition congruent
	setcycle 9 correct_response 6
	setcycle 9 block 0
	setcycle 9 count_block 10
	setcycle 9 count_total ""
	setcycle 10 cue_type cue
	setcycle 10 cue_pos 0
	setcycle 10 target_type neutral_left
	setcycle 10 target_pos 50
	setcycle 10 fixation_duration ""
	setcycle 10 cue_condition cue
	setcycle 10 target_condition neutral
	setcycle 10 correct_response 5
	setcycle 10 block 0
	setcycle 10 count_block 11
	setcycle 10 count_total ""
	setcycle 11 cue_type fixation
	setcycle 11 cue_pos 0
	setcycle 11 target_type incongruent_right
	setcycle 11 target_pos 50
	setcycle 11 fixation_duration ""
	setcycle 11 cue_condition fixation
	setcycle 11 target_condition incongruent
	setcycle 11 correct_response 6
	setcycle 11 block 0
	setcycle 11 count_block 12
	setcycle 11 count_total ""
	setcycle 12 cue_type cue
	setcycle 12 cue_pos 0
	setcycle 12 target_type congruent_right
	setcycle 12 target_pos 50
	setcycle 12 fixation_duration ""
	setcycle 12 cue_condition cue
	setcycle 12 target_condition congruent
	setcycle 12 correct_response 6
	setcycle 12 block 0
	setcycle 12 count_block 13
	setcycle 12 count_total ""
	setcycle 13 cue_type fixation
	setcycle 13 cue_pos 0
	setcycle 13 target_type congruent_left
	setcycle 13 target_pos -50
	setcycle 13 fixation_duration ""
	setcycle 13 cue_condition fixation
	setcycle 13 target_condition congruent
	setcycle 13 correct_response 5
	setcycle 13 block 0
	setcycle 13 count_block 14
	setcycle 13 count_total ""
	setcycle 14 cue_type cue
	setcycle 14 cue_pos -50
	setcycle 14 target_type incongruent_right
	setcycle 14 target_pos -50
	setcycle 14 fixation_duration ""
	setcycle 14 cue_condition spatial
	setcycle 14 target_condition incongruent
	setcycle 14 correct_response 6
	setcycle 14 block 0
	setcycle 14 count_block 15
	setcycle 14 count_total ""
	setcycle 15 cue_type fixation
	setcycle 15 cue_pos 0
	setcycle 15 target_type neutral_left
	setcycle 15 target_pos 50
	setcycle 15 fixation_duration ""
	setcycle 15 cue_condition fixation
	setcycle 15 target_condition neutral
	setcycle 15 correct_response 5
	setcycle 15 block 0
	setcycle 15 count_block 16
	setcycle 15 count_total ""
	setcycle 16 cue_type cue
	setcycle 16 cue_pos -50
	setcycle 16 target_type incongruent_left
	setcycle 16 target_pos -50
	setcycle 16 fixation_duration ""
	setcycle 16 cue_condition spatial
	setcycle 16 target_condition incongruent
	setcycle 16 correct_response 5
	setcycle 16 block 0
	setcycle 16 count_block 17
	setcycle 16 count_total ""
	setcycle 17 cue_type cue
	setcycle 17 cue_pos 0
	setcycle 17 target_type neutral_left
	setcycle 17 target_pos -50
	setcycle 17 fixation_duration ""
	setcycle 17 cue_condition cue
	setcycle 17 target_condition neutral
	setcycle 17 correct_response 5
	setcycle 17 block 0
	setcycle 17 count_block 18
	setcycle 17 count_total ""
	setcycle 18 cue_type cue
	setcycle 18 cue_pos 0
	setcycle 18 target_type incongruent_right
	setcycle 18 target_pos -50
	setcycle 18 fixation_duration ""
	setcycle 18 cue_condition cue
	setcycle 18 target_condition incongruent
	setcycle 18 correct_response 6
	setcycle 18 block 0
	setcycle 18 count_block 19
	setcycle 18 count_total ""
	setcycle 19 cue_type fixation
	setcycle 19 cue_pos 0
	setcycle 19 target_type congruent_right
	setcycle 19 target_pos -50
	setcycle 19 fixation_duration ""
	setcycle 19 cue_condition fixation
	setcycle 19 target_condition congruent
	setcycle 19 correct_response 6
	setcycle 19 block 0
	setcycle 19 count_block 20
	setcycle 19 count_total ""
	setcycle 20 cue_type cue
	setcycle 20 cue_pos -50
	setcycle 20 target_type neutral_left
	setcycle 20 target_pos -50
	setcycle 20 fixation_duration ""
	setcycle 20 cue_condition spatial
	setcycle 20 target_condition neutral
	setcycle 20 correct_response 5
	setcycle 20 block 0
	setcycle 20 count_block 21
	setcycle 20 count_total ""
	setcycle 21 cue_type cue
	setcycle 21 cue_pos 0
	setcycle 21 target_type congruent_left
	setcycle 21 target_pos 50
	setcycle 21 fixation_duration ""
	setcycle 21 cue_condition cue
	setcycle 21 target_condition congruent
	setcycle 21 correct_response 5
	setcycle 21 block 0
	setcycle 21 count_block 22
	setcycle 21 count_total ""
	setcycle 22 cue_type cue
	setcycle 22 cue_pos 50
	setcycle 22 target_type congruent_left
	setcycle 22 target_pos 50
	setcycle 22 fixation_duration ""
	setcycle 22 cue_condition spatial
	setcycle 22 target_condition congruent
	setcycle 22 correct_response 5
	setcycle 22 block 0
	setcycle 22 count_block 23
	setcycle 22 count_total ""
	setcycle 23 cue_type cue
	setcycle 23 cue_pos 0
	setcycle 23 target_type incongruent_left
	setcycle 23 target_pos -50
	setcycle 23 fixation_duration ""
	setcycle 23 cue_condition cue
	setcycle 23 target_condition incongruent
	setcycle 23 correct_response 5
	setcycle 23 block 0
	setcycle 23 count_block 24
	setcycle 23 count_total ""
	run Flanker_1

define loop Oefenblok_SRT
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 cue_type fixation
	setcycle 0 cue_pos 0
	setcycle 0 target_type simple
	setcycle 0 target_pos 0
	setcycle 0 fixation_duration ""
	setcycle 0 cue_condition simple
	setcycle 0 target_condition simple
	setcycle 0 correct_response 6
	setcycle 0 block 0
	setcycle 0 count_block 1
	setcycle 0 count_total ""
	setcycle 1 cue_type fixation
	setcycle 1 cue_pos 0
	setcycle 1 target_type simple
	setcycle 1 target_pos 0
	setcycle 1 fixation_duration ""
	setcycle 1 cue_condition simple
	setcycle 1 target_condition simple
	setcycle 1 correct_response 6
	setcycle 1 block 0
	setcycle 1 count_block 2
	setcycle 1 count_total ""
	setcycle 2 cue_type fixation
	setcycle 2 cue_pos 0
	setcycle 2 target_type simple
	setcycle 2 target_pos 0
	setcycle 2 fixation_duration ""
	setcycle 2 cue_condition simple
	setcycle 2 target_condition simple
	setcycle 2 correct_response 6
	setcycle 2 block 0
	setcycle 2 count_block 3
	setcycle 2 count_total ""
	setcycle 3 cue_type fixation
	setcycle 3 cue_pos 0
	setcycle 3 target_type simple
	setcycle 3 target_pos 0
	setcycle 3 fixation_duration ""
	setcycle 3 cue_condition simple
	setcycle 3 target_condition simple
	setcycle 3 correct_response 6
	setcycle 3 block 0
	setcycle 3 count_block 4
	setcycle 3 count_total ""
	setcycle 4 cue_type fixation
	setcycle 4 cue_pos 0
	setcycle 4 target_type simple
	setcycle 4 target_pos 0
	setcycle 4 fixation_duration ""
	setcycle 4 cue_condition simple
	setcycle 4 target_condition simple
	setcycle 4 correct_response 6
	setcycle 4 block 0
	setcycle 4 count_block 5
	setcycle 4 count_total ""
	setcycle 5 cue_type fixation
	setcycle 5 cue_pos 0
	setcycle 5 target_type simple
	setcycle 5 target_pos 0
	setcycle 5 fixation_duration ""
	setcycle 5 cue_condition simple
	setcycle 5 target_condition simple
	setcycle 5 correct_response 6
	setcycle 5 block 0
	setcycle 5 count_block 6
	setcycle 5 count_total ""
	setcycle 6 cue_type fixation
	setcycle 6 cue_pos 0
	setcycle 6 target_type simple
	setcycle 6 target_pos 0
	setcycle 6 fixation_duration ""
	setcycle 6 cue_condition simple
	setcycle 6 target_condition simple
	setcycle 6 correct_response 6
	setcycle 6 block 0
	setcycle 6 count_block 7
	setcycle 6 count_total ""
	setcycle 7 cue_type fixation
	setcycle 7 cue_pos 0
	setcycle 7 target_type simple
	setcycle 7 target_pos 0
	setcycle 7 fixation_duration ""
	setcycle 7 cue_condition simple
	setcycle 7 target_condition simple
	setcycle 7 correct_response 6
	setcycle 7 block 0
	setcycle 7 count_block 8
	setcycle 7 count_total ""
	setcycle 8 cue_type fixation
	setcycle 8 cue_pos 0
	setcycle 8 target_type simple
	setcycle 8 target_pos 0
	setcycle 8 fixation_duration ""
	setcycle 8 cue_condition simple
	setcycle 8 target_condition simple
	setcycle 8 correct_response 6
	setcycle 8 block 0
	setcycle 8 count_block 9
	setcycle 8 count_total ""
	setcycle 9 cue_type fixation
	setcycle 9 cue_pos 0
	setcycle 9 target_type simple
	setcycle 9 target_pos 0
	setcycle 9 fixation_duration ""
	setcycle 9 cue_condition simple
	setcycle 9 target_condition simple
	setcycle 9 correct_response 6
	setcycle 9 block 0
	setcycle 9 count_block 10
	setcycle 9 count_total ""
	run SRT_Oefen

define loop Oefenblok_SRT_1
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 cue_type fixation
	setcycle 0 cue_pos 0
	setcycle 0 target_type simple
	setcycle 0 target_pos 0
	setcycle 0 fixation_duration ""
	setcycle 0 cue_condition simple
	setcycle 0 target_condition simple
	setcycle 0 correct_response 6
	setcycle 0 block 0
	setcycle 0 count_block 1
	setcycle 0 count_total ""
	setcycle 1 cue_type fixation
	setcycle 1 cue_pos 0
	setcycle 1 target_type simple
	setcycle 1 target_pos 0
	setcycle 1 fixation_duration ""
	setcycle 1 cue_condition simple
	setcycle 1 target_condition simple
	setcycle 1 correct_response 6
	setcycle 1 block 0
	setcycle 1 count_block 2
	setcycle 1 count_total ""
	setcycle 2 cue_type fixation
	setcycle 2 cue_pos 0
	setcycle 2 target_type simple
	setcycle 2 target_pos 0
	setcycle 2 fixation_duration ""
	setcycle 2 cue_condition simple
	setcycle 2 target_condition simple
	setcycle 2 correct_response 6
	setcycle 2 block 0
	setcycle 2 count_block 3
	setcycle 2 count_total ""
	setcycle 3 cue_type fixation
	setcycle 3 cue_pos 0
	setcycle 3 target_type simple
	setcycle 3 target_pos 0
	setcycle 3 fixation_duration ""
	setcycle 3 cue_condition simple
	setcycle 3 target_condition simple
	setcycle 3 correct_response 6
	setcycle 3 block 0
	setcycle 3 count_block 4
	setcycle 3 count_total ""
	setcycle 4 cue_type fixation
	setcycle 4 cue_pos 0
	setcycle 4 target_type simple
	setcycle 4 target_pos 0
	setcycle 4 fixation_duration ""
	setcycle 4 cue_condition simple
	setcycle 4 target_condition simple
	setcycle 4 correct_response 6
	setcycle 4 block 0
	setcycle 4 count_block 5
	setcycle 4 count_total ""
	setcycle 5 cue_type fixation
	setcycle 5 cue_pos 0
	setcycle 5 target_type simple
	setcycle 5 target_pos 0
	setcycle 5 fixation_duration ""
	setcycle 5 cue_condition simple
	setcycle 5 target_condition simple
	setcycle 5 correct_response 6
	setcycle 5 block 0
	setcycle 5 count_block 6
	setcycle 5 count_total ""
	setcycle 6 cue_type fixation
	setcycle 6 cue_pos 0
	setcycle 6 target_type simple
	setcycle 6 target_pos 0
	setcycle 6 fixation_duration ""
	setcycle 6 cue_condition simple
	setcycle 6 target_condition simple
	setcycle 6 correct_response 6
	setcycle 6 block 0
	setcycle 6 count_block 7
	setcycle 6 count_total ""
	setcycle 7 cue_type fixation
	setcycle 7 cue_pos 0
	setcycle 7 target_type simple
	setcycle 7 target_pos 0
	setcycle 7 fixation_duration ""
	setcycle 7 cue_condition simple
	setcycle 7 target_condition simple
	setcycle 7 correct_response 6
	setcycle 7 block 0
	setcycle 7 count_block 8
	setcycle 7 count_total ""
	setcycle 8 cue_type fixation
	setcycle 8 cue_pos 0
	setcycle 8 target_type simple
	setcycle 8 target_pos 0
	setcycle 8 fixation_duration ""
	setcycle 8 cue_condition simple
	setcycle 8 target_condition simple
	setcycle 8 correct_response 6
	setcycle 8 block 0
	setcycle 8 count_block 9
	setcycle 8 count_total ""
	setcycle 9 cue_type fixation
	setcycle 9 cue_pos 0
	setcycle 9 target_type simple
	setcycle 9 target_pos 0
	setcycle 9 fixation_duration ""
	setcycle 9 cue_condition simple
	setcycle 9 target_condition simple
	setcycle 9 correct_response 6
	setcycle 9 block 0
	setcycle 9 count_block 10
	setcycle 9 count_total ""
	run SRT_Oefen_1

define inline_script Onthouden
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate heeft u normaal gesproken moeite met ... \n onthouden (difficulty remembering)?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate heeft u moeite met ... \n onthouden (difficulty remembering)?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='onthouden')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('onthouden') == None:
		items['Onthouden'].run()
	__end__
	set _prepare ""

define inline_script Opleiding
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Wat is uw hoogste opleiding?", center=True)
	checkbox1 = widgets.checkbox(form, text='Basisonderwijs', group='opleiding', var='opleiding')
	checkbox2 = widgets.checkbox(form, text='MAVO', group='opleiding', var='opleiding')
	checkbox3 = widgets.checkbox(form, text='VMBO', group='opleiding', var='opleiding')
	checkbox4 = widgets.checkbox(form, text='HAVO', group='opleiding', var='opleiding')
	checkbox5 = widgets.checkbox(form, text='VWO', group='opleiding', var='opleiding')
	checkbox6 = widgets.checkbox(form, text='MBO', group='opleiding', var='opleiding')
	checkbox7 = widgets.checkbox(form, text='HBO', group='opleiding', var='opleiding')
	checkbox8 = widgets.checkbox(form, text='Universiteit', group='opleiding', var='opleiding')
	checkbox9 = widgets.checkbox(form, text='Anders: ', group='opleiding', var='opleiding')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label, (0,1), colspan=4)
	form.set_widget(checkbox1, (0,2), colspan=2)
	form.set_widget(checkbox2, (0,3), colspan=2)
	form.set_widget(checkbox3, (0,4), colspan=2)
	form.set_widget(checkbox4, (0,5), colspan=2)
	form.set_widget(checkbox5, (0,6), colspan=2)
	form.set_widget(checkbox6, (2,2), colspan=2)
	form.set_widget(checkbox7, (2,3), colspan=2)
	form.set_widget(checkbox8, (2,4), colspan=2)
	form.set_widget(checkbox9, (2,5), colspan=2)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('opleiding') == "no":
		items['Opleiding'].run()
	
	var.opleiding_anders=" "
	__end__
	set _prepare ""

define inline_script Opleiding_anders
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Wat is uw hoogste opleiding? \n Vul in en druk daarna op ENTER")
	text_input = widgets.text_input(form, var='opleiding_anders', return_accepts=True, stub="Typ hier")
	
	# Set form
	
	form.set_widget(label, (0,1))
	form.set_widget(text_input, (0,2))
	form._exec()
	
	if self.get('opleiding_anders') == '':
		items['Opleiding_anders'].run()
	__end__
	set _prepare ""

define loop Pauze_kinderen_SRT_test
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 instruction_left 5
	setcycle 0 instruction_right 6
	run new_sequence_1_2_2

define loop Pauze_kinderen_SRT_test_1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 instruction_left 5
	setcycle 0 instruction_right 6
	run new_sequence_1_2_2_2

define loop Pauze_volwassenen_SRT_test
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 instruction_left 5
	setcycle 0 instruction_right 6
	run new_sequence_1_2_2_1

define loop Pauze_volwassenen_SRT_test_1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 instruction_left 5
	setcycle 0 instruction_right 6
	run new_sequence_1_2_2_1_1

define inline_script Positie
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Op welke positie speelt u (het meest)?", center=True)
	checkbox1 = widgets.checkbox(form, text='Verdediging', group='positie', var='positie')
	checkbox2 = widgets.checkbox(form, text='Middenveld', group='positie', var='positie')
	checkbox3 = widgets.checkbox(form, text='Aanval', group='positie', var='positie')
	checkbox4 = widgets.checkbox(form, text='Keeper', group='positie', var='positie')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label, (0,1), colspan=4)
	form.set_widget(checkbox1, (0,2))
	form.set_widget(checkbox2, (0,3))
	form.set_widget(checkbox3, (0,4))
	form.set_widget(checkbox4, (0,5))
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('positie') == "no":
		items['Positie'].run()
	__end__
	set _prepare ""

define inline_script Psych
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	
	# Create a form
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Heeft u een diagnose voor depressie, angst of een andere psychiatrische aandoening?", center=True)
	checkbox1 = widgets.checkbox(form, text='Ja', group='psych', var='psych')
	checkbox2 = widgets.checkbox(form, text='Nee', group='psych', var='psych')
	button = widgets.button(form, text='Volgende', frame=True, center=True)		
	
	# Set form
	form.set_widget(label, (0,1), colspan=4)
	form.set_widget(checkbox1, (0,2))
	form.set_widget(checkbox2, (0,3))
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
		
	if self.get('psych') == "no":
		items['Psych'].run()
	__end__
	set _prepare ""

define inline_script Resetvariables
	set description "Executes Python code"
	set _run ""
	___prepare__
	
	#exp.set("response_time_new_mouse_response_1", 1695)
	var.response_time_new_srbox_1 = u'1695'
	
	var.response_new_srbox_1 = u'3'
	
	#exp.set("correct_new_mouse_response_1", 0)
	var.correct_new_srbox_1 = u'0'
	
	
	#Create per condition counter, correct_counter, response_counter and rt_sum
	#  to calculate avg_rt and acc later
	
	var.simple_counter = 0
	var.simple_correct_counter = 0
	var.simple_response_counter = 0
	var.simple_rt_sum = 0
	var.simple_MRT = 0
	var.simple_acc = 0
	
	var.fixation_counter = 0
	var.fixation_correct_counter = 0
	var.fixation_response_counter = 0
	var.fixation_rt_sum = 0
	var.nocue_MRT = 0
	var.nocue_acc = 0
	
	var.cue_counter = 0
	var.cue_correct_counter = 0
	var.cue_response_counter = 0
	var.cue_rt_sum = 0
	var.centralcue_MRT = 0
	var.centralcue_acc = 0
	
	var.spatial_counter = 0
	var.spatial_correct_counter = 0
	var.spatial_response_counter = 0
	var.spatial_rt_sum = 0
	var.spatialcue_MRT = 0
	var.spatialcue_acc = 0
	
	var.congruent_counter = 0
	var.congruent_correct_counter = 0
	var.congruent_response_counter = 0
	var.congruent_rt_sum = 0
	var.congruent_MRT = 0
	var.congruent_acc = 0
	
	var.incongruent_counter = 0
	var.incongruent_correct_counter = 0
	var.incongruent_response_counter = 0
	var.incongruent_rt_sum = 0
	var.incongruent_MRT = 0
	var.incongruent_acc = 0
	
	var.neutral_counter = 0
	var.neutral_correct_counter = 0
	var.neutral_response_counter = 0
	var.neutral_rt_sum = 0
	var.neutral_MRT = 0
	var.neutral_acc = 0
	
	var.alerting_MRT = 0 
	var.alerting_acc = 0
	var.orienting_MRT = 0
	var.orienting_acc = 0
	var.executive_MRT = 0
	var.executive_acc = 0
	
	var.count_block=0
	__end__

define inline_script Resetvariables_1
	set description "Executes Python code"
	set _run ""
	___prepare__
	#exp.set("response_time_new_mouse_response_2", 1695)
	#var.response_time_new_srbox_2 = u'1695'
	var.response_new_srbox_2e = u'3'
	#exp.set("correct_new_mouse_response_2", 0)
	#var.correct_new_srbox_2 = u'0'
	
	#exp.set("response_time_new_mouse_response_2", 1695)
	var.response_time_new_srbox_2 = u'1695'
	
	#exp.set("correct_new_mouse_response_2", 0)
	var.correct_new_srbox_2 = u'0'
	
	var.fixation_counter = 0
	var.fixation_correct_counter = 0
	var.fixation_response_counter = 0
	var.fixation_rt_sum = 0
	var.nocue_MRT = 0
	var.nocue_acc = 0
	
	var.cue_counter = 0
	var.cue_correct_counter = 0
	var.cue_response_counter = 0
	var.cue_rt_sum = 0
	var.centralcue_MRT = 0
	var.centralcue_acc = 0
	
	var.spatial_counter = 0
	var.spatial_correct_counter = 0
	var.spatial_response_counter = 0
	var.spatial_rt_sum = 0
	var.spatialcue_MRT = 0
	var.spatialcue_acc = 0
	
	var.congruent_counter = 0
	var.congruent_correct_counter = 0
	var.congruent_response_counter = 0
	var.congruent_rt_sum = 0
	var.congruent_MRT = 0
	var.congruent_acc = 0
	
	var.incongruent_counter = 0
	var.incongruent_correct_counter = 0
	var.incongruent_response_counter = 0
	var.incongruent_rt_sum = 0
	var.incongruent_MRT = 0
	var.incongruent_acc = 0
	
	var.neutral_counter = 0
	var.neutral_correct_counter = 0
	var.neutral_response_counter = 0
	var.neutral_rt_sum = 0
	var.neutral_MRT = 0
	var.neutral_acc = 0
	
	var.alerting_MRT = 0 
	var.alerting_acc = 0
	var.orienting_MRT = 0
	var.orienting_acc = 0
	var.executive_MRT = 0
	var.executive_acc = 0
	
	var.count_block = 0
	__end__

define inline_script Resetvariables_2
	set description "Executes Python code"
	set _run ""
	___prepare__
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	__end__

define inline_script Resetvariables_2_1
	set description "Executes Python code"
	set _run ""
	___prepare__
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	__end__

define sequence SRT
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_inline_script_2_2 always
	run trigger_trial_onset_1 always
	run fixation_2 always
	run trigger_cue_onset_1 always
	run cue_2 always
	run fixation_3 always
	run trigger_target_onset_1 always
	run target_2 always
	run new_srbox_2 always
	run trigger_response_offset_1 always
	run new_inline_script_2_3_2 always
	run new_feedback_1_3 "[count_block]=36"
	run new_logger always

define sequence SRT_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_inline_script_2_2_2 always
	run trigger_trial_onset_1_1 "[enable_EEG]==1"
	run fixation_2_1 always
	run trigger_cue_onset_1_1 "[enable_EEG]==1"
	run cue_2_1 always
	run fixation_3_1 always
	run trigger_target_onset_1_1 "[enable_EEG]==1"
	run target_2_1 always
	run new_srbox_2 always
	run trigger_response_offset_1_1 "[enable_EEG]==1"
	run new_inline_script_2_3_2_2 always
	run new_feedback_1_3_2 "[count_block]=36 and [center]!=\"Ajax\""
	run new_logger_2 always

define sequence SRT_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_inline_script_2_2_3 always
	run trigger_trial_onset_1_2 always
	run fixation_2_2 always
	run trigger_cue_onset_1_2 always
	run cue_2_2 always
	run fixation_3_2 always
	run trigger_target_onset_1_2 always
	run target_2_2 always
	run new_srbox_2 always
	run trigger_response_offset_1_2 always
	run new_inline_script_2_3_2_3 always
	run new_feedback_1_3_3 "[count_block]=36"
	run new_logger_3 always

define sequence SRT_Oefen
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_inline_script_2_2 always
	run Incorrect "[correct_new_srbox_1]=0 and [response_new_srbox_1]!=None and [count_block] > 1"
	run Correct "[correct_new_srbox_1]=1 and [count_block] > 1"
	run NoResp "[response_new_srbox_1]=None  and [count_block]>1"
	run fixation always
	run cue always
	run fixation_1 always
	run target always
	run new_srbox_1 always
	run new_inline_script_2_3_2_1 always
	run new_feedback_1_3 "[count_block]=10"
	run new_logger always

define sequence SRT_Oefen_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_inline_script_2_2_1 always
	run Incorrect_1 "[correct_new_srbox_1]=0 and [response_new_srbox_1]!=None and [count_block] > 1"
	run Correct_1 "[correct_new_srbox_1]=1 and [count_block] > 1"
	run NoResp_1 "[response_new_srbox_1]=None  and [count_block]>1"
	run fixation_4 always
	run cue_1 always
	run fixation_1_1 always
	run target_1 always
	run new_srbox_1 always
	run new_inline_script_2_3_2_1_1 always
	run new_feedback_1_3_1 "[count_block]=10 and [center]!=\"Ajax\""
	run new_logger_1 always

define inline_script SRT_check
	set description "Executes Python code"
	set _run ""
	set _prepare ""

define sketchpad SRT_check_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=serif font_italic=no font_size=12 html=yes show_if=always text="SRT overslaan? Druk 'o'" x=384 y=352 z_index=0

define form_text_display SYMPTOMENCHECKLIST_baseline
	set timeout infinite
	set spacing 10
	set rows "1;1;1;1;1;1;1;1"
	set only_render no
	set ok_text Begin
	set margins "50;50;50;50"
	set form_title "<span size=24>Symptomen checklist</span>"
	set form_text "Bij de volgende vragen kunt u aangeven in hoeverre u normaal gesproken last heeft van bepaalde symptomen. U kunt hierbij gebruik maken van de score 0 t/m 6, waarbij 0 staat voor helemaal geen klachten, en 6 staat voor zeer veel klachten. "
	set description "A simple text display form"
	set cols "1;1;1;1"
	set _theme gray
	widget 0 1 4 1 label text="[form_title]"
	widget 0 2 4 4 label center=no text="[form_text]"
	widget 0 7 4 1 button text="[ok_text]"


define form_text_display SYMPTOMENCHECKLIST_nameting
	set timeout infinite
	set spacing 10
	set rows "1;1;1;1;1;1;1;1"
	set only_render no
	set ok_text Begin
	set margins "50;50;50;50"
	set form_title "<span size=24>Symptomen checklist</span>"
	set form_text "Bij de volgende vragen kunt u aangeven in hoeverre u momenteel last heeft van de volgende symptomen. U kunt hierbij gebruik maken van de score 0 t/m 6, waarbij 0 staat voor helemaal geen klachten, en 6 staat voor zeer ernstige klachten. "
	set description "A simple text display form"
	set cols "1;1;1;1"
	set _theme gray
	widget 0 1 4 1 label text="[form_title]"
	widget 0 2 4 4 label center=no text="[form_text]"
	widget 0 7 4 1 button text="[ok_text]"


define inline_script Settings
	set description "Executes Python code"
	___run__
	var.enable_EEG=0
	
	import random
	from os.path import expanduser
	
	# Import system delay
	with open(exp.experiment_path + "/../../../emma_toolbox_data/Raw/system_delay.txt", 'r') as myfile:
			var.system_delay=myfile.read().replace('\n', '')
	 
	print(var.system_delay)
	__end__
	set _prepare ""

define inline_script Slaap
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Heeft u last of last gehad van slaapstoornissen?", center=True)
	checkbox1 = widgets.checkbox(form, text='Ja', group='slaap', var='slaap')
	checkbox2 = widgets.checkbox(form, text='Nee', group='slaap', var='slaap')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label, (0,1), colspan=4)
	form.set_widget(checkbox1, (0,2))
	form.set_widget(checkbox2, (0,3))
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('slaap') == "no":
		items['Slaap'].run()
	__end__
	set _prepare ""

define inline_script Slaapproblemen
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate heeft u normaal gesproken moeite om ... \n in slaap te vallen (trouble falling asleep)?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate heeft u moeite om ... \n in slaap te vallen (trouble falling asleep)?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='slaapproblemen')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('slaapproblemen') == None:
		items['Slaapproblemen'].run()
	__end__
	set _prepare ""

define inline_script Slaperigheid
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate heeft u normaal gesproken last van slaperigheid?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate heeft u last van slaperigheid?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='slaperigheid')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('slaperigheid') == None:
		items['Slaperigheid'].run()
	__end__
	set _prepare ""

define keyboard_response Start
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "k;v"

define sketchpad Start_
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="" x=416 y=320 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Kinderen kies 'k'" x=-352 y=352 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Volwassenen kies 'v'" x=371 y=355 z_index=0
	draw image center=1 file="child_pilot.png" scale=0.3 show_if=always x=-352 y=288 z_index=0
	draw image center=1 file="adult_pilot.jpg" scale=0.05 show_if=always x=352 y=288 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Academic Medical Center<br />Emma Children's Hospital<br />Pediatric Neuroscience Group<br />m.konigs@amc.nl<br /><br />Unauthorized use of the Emma Toolbox is not allowed." x=9 y=183 z_index=0
	draw image center=1 file="amc.png" scale=1 show_if=always x=0 y=320 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Emma Toolbox<br /><i> Attention </i>" x=5 y=-316 z_index=0
	draw image center=1 file="ET.png" scale=1 show_if=always x=0 y=-64 z_index=0

define inline_script Unshow_mouse
	set description "Executes Python code"
	___run__
	my_mouse = mouse()
	my_mouse.show_cursor(show=False)
	__end__
	set _prepare ""

define inline_script Unshow_mouse_1
	set description "Executes Python code"
	set _run ""
	set _prepare ""

define inline_script Vermoeidheid
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate heeft u normaal gesproken last van ... \n vermoeidheid of het hebben van weinig energie (fatigue or low energy)?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate heeft u last van ... \n vermoeidheid of het hebben van weinig energie (fatigue or low energy)?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='vermoeidheid')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('vermoeidheid') == None:
		items['Vermoeidheid'].run()
	__end__
	set _prepare ""

define inline_script Verward_voelen
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate voelt u zich normaal gesproken ... \n verward (confusion)?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate voelt u zich ... \n verward (confusion)?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='verward_voelen')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('verward_voelen') == None:
		items['Verward_voelen'].run()
	__end__
	set _prepare ""

define inline_script Wazig_voelen
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate voelt u zich normaal gesproken ... \n wazig (drowsiness)?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate voelt u zich ... \n wazig (drowsiness)?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='wazig_voelen')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('wazig_voelen') == None:
		items['Wazig_voelen'].run()
	__end__
	set _prepare ""

define inline_script Welke_medicijnen
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Welke medicijnen gebruikt u? \n In welke dosering? (bijv. paracetamol, 1x per dag) \n Vul in en druk daarna op ENTER")
	text_input = widgets.text_input(form, var='welke_medicijnen', return_accepts=True, stub="Typ hier")
	
	# Set form
	
	form.set_widget(label, (0,1))
	form.set_widget(text_input, (0,2))
	form._exec()
	
	if self.get('welke_medicijnen') == '':
		items['Welke_medicijnen'].run()
	__end__
	set _prepare ""

define inline_script Zicht
	set description "Executes Python code"
	___run__
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	label= widgets.label(form, text="Heeft u problemen met uw zicht?", center=True)
	checkbox1 = widgets.checkbox(form, text='Ja', group='zicht',var='zicht')
	checkbox2 = widgets.checkbox(form, text='Nee', group='zicht', var='zicht')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label, (0,1), colspan=4)
	form.set_widget(checkbox1, (0,2))
	form.set_widget(checkbox2, (0,3))
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('zicht') == "no":
		items['Zicht'].run()
	__end__
	set _prepare ""

define inline_script Zichtproblemen
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	form = widgets.form(exp)
	
	# Create a form   
	
	form = widgets.form(exp, cols=[1,1,1,1], rows=[1,1,1,1,1,1,1,1], margins=(50,50,50,50), spacing=10)	
	if self.get('meting') == 'Baseline':
		label1= widgets.label(form, text="In welke mate heeft u normaal gesproken last van ... \n wazig zien (blurred vision)?", center=True)
	else:
		label1= widgets.label(form, text="In welke mate heeft u last van ... \n wazig zien (blurred vision)?", center=True)
	label2= widgets.label(form, text="Geen                    ")
	label3= widgets.label(form, text="Middelmatig", center=True) 
	label4 =widgets.label(form, text="                    Veel")
	rating_scale= widgets.rating_scale(form, nodes=["0", "1", "2", "3", "4", "5", "6"], var='zichtproblemen')
	button = widgets.button(form, text='Volgende', frame=True, center=True)
	
	# Set form
	
	form.set_widget(label1, (0,1), colspan=4)
	form.set_widget(label2, (0,3))
	form.set_widget(label3, (1,3), colspan=2)
	form.set_widget(label4, (3,3))
	form.set_widget(rating_scale, (0,4), colspan=4)
	form.set_widget(button, (0,7), colspan=4)
	form._exec()
	
	if self.get('zichtproblemen') == None:
		items['Zichtproblemen'].run()
	__end__
	set _prepare ""

define inline_script create_backup
	set description "Executes Python code"
	___run__
	import shutil
	
	shutil.copyfile(var.logfile, var.logfile + str('_backup'))
	__end__
	set _prepare ""

define sketchpad cue
	set duration 145
	set description "Displays stimuli"
	draw image center=1 file="fixation.png" scale=0.14 show_if=always x=0 y=0 z_index=2
	draw image center=1 file="[cue_type].png" scale=0.14 show_if=always x=0 y="[cue_pos]" z_index=1

define sketchpad cue_1
	set duration 145
	set description "Displays stimuli"
	draw image center=1 file="fixation.png" scale=0.14 show_if=always x=0 y=0 z_index=0
	draw image center=1 file="[cue_type].png" scale=0.14 show_if=always x=0 y="[cue_pos]" z_index=0

define sketchpad cue_2
	set duration 145
	set description "Displays stimuli"
	draw image center=1 file="[cue_type].png" scale=0.14 show_if=always x=0 y="[cue_pos]" z_index=1
	draw image center=1 file="fixation.png" scale=0.14 show_if=always x=0 y=0 z_index=0

define sketchpad cue_2_1
	set duration 145
	set description "Displays stimuli"
	draw image center=1 file="fixation.png" scale=0.14 show_if=always x=0 y=0 z_index=0
	draw image center=1 file="[cue_type].png" scale=0.14 show_if=always x=0 y="[cue_pos]" z_index=0

define sketchpad cue_2_2
	set duration 145
	set description "Displays stimuli"
	draw image center=1 file="[cue_type].png" scale=0.14 show_if=always x=0 y="[cue_pos]" z_index=1
	draw image center=1 file="fixation.png" scale=0.14 show_if=always x=0 y=0 z_index=0

define sketchpad fixation
	set duration "[my_duration]"
	set description "Displays stimuli"
	draw image center=1 file="fixation.png" scale=0.14 show_if=always x=0 y=0 z_index=0

define sketchpad fixation_1
	set duration 445
	set description "Displays stimuli"
	draw image center=1 file="fixation.png" scale=0.14 show_if=always x=0 y=0 z_index=0

define sketchpad fixation_1_1
	set duration 445
	set description "Displays stimuli"
	draw image center=1 file="fixation.png" scale=0.14 show_if=always x=0 y=0 z_index=0

define sketchpad fixation_2
	set duration "[my_duration]"
	set description "Displays stimuli"
	draw image center=1 file="fixation.png" scale=0.14 show_if=always x=0 y=0 z_index=0

define sketchpad fixation_2_1
	set duration "[my_duration]"
	set description "Displays stimuli"
	draw image center=1 file="fixation.png" scale=0.14 show_if=always x=0 y=0 z_index=0

define sketchpad fixation_2_2
	set duration "[my_duration]"
	set description "Displays stimuli"
	draw image center=1 file="fixation.png" scale=0.14 show_if=always x=0 y=0 z_index=0

define sketchpad fixation_3
	set duration 445
	set description "Displays stimuli"
	draw image center=1 file="fixation.png" scale=0.14 show_if=always x=0 y=0 z_index=0

define sketchpad fixation_3_1
	set duration 445
	set description "Displays stimuli"
	draw image center=1 file="fixation.png" scale=0.14 show_if=always x=0 y=0 z_index=0

define sketchpad fixation_3_2
	set duration 445
	set description "Displays stimuli"
	draw image center=1 file="fixation.png" scale=0.14 show_if=always x=0 y=0 z_index=0

define sketchpad fixation_4
	set duration "[my_duration]"
	set description "Displays stimuli"
	draw image center=1 file="fixation.png" scale=0.14 show_if=always x=0 y=0 z_index=0

define inline_script init_EEG
	set description "Executes Python code"
	___run__
	import serial
	exp.trigger = serial.Serial('COM4')
	exp.cleanup_functions.append(exp.trigger.close)
	__end__
	set _prepare ""

define feedback new_feedback
	set reset_variables yes
	set duration 1000
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Draai de knoppen om!" x=32 y=288 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="" x=-704 y=-256 z_index=0
	draw image center=1 file="switch_buttons.png" scale=0.7 show_if=always x=32 y=-32 z_index=0

define feedback new_feedback_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="Dit is jouw prestatie in het afgelopen blok.<br /><br />Reactiesnelheid [avg_rt] ms<br />Accuratesse [accuracy] %<br /><br />neutral MRT [neutral_MRT] ms<br />neutral ACC [neutral_acc] %<br /><br />ALERTING<br />RT [alerting_MRT] ms<br />ACC [alerting_acc] %<br /><br />ORIENTING<br />RT [orienting_MRT] ms<br />ACC [orienting_acc] %<br /><br />EXECUTIVE<br />RT [executive_MRT] ms<br />ACC [executive_acc] %" x=32 y=32 z_index=0

define feedback new_feedback_1_3
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Dit is jouw prestatie in het afgelopen blok.<br /><br />Reactiesnelheid [simple_MRT] ms<br />Accuratesse [simple_acc] %<br />" x=32 y=32 z_index=0

define feedback new_feedback_1_3_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="Reactiesnelheid: [simple_MRT] ms<br />Accuratesse: [simple_acc] %<br />" x=32 y=32 z_index=0

define feedback new_feedback_1_3_2
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="Dit is jouw prestatie in het afgelopen blok.<br /><br />Reactiesnelheid [simple_MRT] ms<br />Accuratesse [simple_acc] %<br />" x=32 y=32 z_index=0

define feedback new_feedback_1_3_3
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Dit is jouw prestatie in het afgelopen blok.<br /><br />Reactiesnelheid [simple_MRT] ms<br />Accuratesse [simple_acc] %<br />" x=32 y=32 z_index=0

define feedback new_feedback_2
	set reset_variables yes
	set duration 1000
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=yes font_family=serif font_italic=no font_size=22 html=yes show_if=always text="Draai de knoppen om!" x=32 y=288 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="" x=-704 y=-256 z_index=0
	draw image center=1 file="switch_buttons.png" scale=0.7 show_if=always x=32 y=-32 z_index=0

define feedback new_feedback_2_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color="#000000" font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="Dit is jouw prestatie in het afgelopen deel.<br /><br />Reactiesnelheid [avg_rt] ms<br />Accuratesse [accuracy] %<br /><br />neutral MRT [neutral_MRT] ms<br />neutral ACC [neutral_acc] %<br /><br />ALERTING<br />RT [alerting_MRT] ms<br />ACC [alerting_acc] %<br /><br />ORIENTING<br />RT [orienting_MRT] ms<br />ACC [orienting_acc] %<br /><br />EXECUTIVE<br />RT [executive_MRT] ms<br />ACC [executive_acc] %" x=32 y=32 z_index=0

define feedback new_feedback_3
	set reset_variables yes
	set duration 1000
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=yes font_family=serif font_italic=no font_size=22 html=yes show_if=always text="Draai de knoppen om!" x=32 y=288 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="" x=-704 y=-256 z_index=0
	draw image center=1 file="switch_buttons.png" scale=0.7 show_if=always x=32 y=-32 z_index=0

define inline_script new_inline_script_1
	set description "Executes Python code"
	___run__
	
	# attention networks
	var.alerting_MRT = var.centralcue_MRT - var.nocue_MRT
	var.alerting_acc = var.centralcue_acc - var.nocue_acc
	var.orienting_MRT = var.spatialcue_MRT - var.centralcue_MRT
	var.orienting_acc = var.spatialcue_acc - var.centralcue_acc
	var.executive_MRT = var.incongruent_MRT - var.congruent_MRT
	var.executive_acc = var.incongruent_acc - var.congruent_acc
	__end__
	set _prepare ""

define inline_script new_inline_script_1_2
	set description "Executes Python code"
	set _run ""
	___prepare__
	max = 1695.
	
	var.fixation_duration=random.randint(250,750)
	
	#dur = max - self.get("response_time_new_mouse_response_1")
	dur = max - var.response_time_new_srbox_1
	
	#fix = dur + self.get("fixation_duration")
	fix = dur + var.fixation_duration
	
	#exp.set("my_duration", fix)
	var.my_duration = fix
	__end__

define inline_script new_inline_script_2
	set description "Executes Python code"
	___run__
	# -------------- no cue -----------------------
	
	var.response_time_new_srbox_2 -= var.system_delay
	
	if var.cue_condition == 'fixation':
		var.fixation_counter += 1
		if var.correct_new_srbox_2 == 1:
			var.fixation_correct_counter +=1
			var.fixation_rt_sum += var.response_time_new_srbox_2
		if var.response_new_srbox_2 != 'None':
			var.fixation_response_counter += 1
	
	
	if var.fixation_correct_counter != 0:
		var.nocue_MRT = str(var.fixation_rt_sum/var.fixation_correct_counter)
	
		
	if var.fixation_correct_counter != 0:
		var.nocue_acc = str(var.fixation_correct_counter/float(var.fixation_counter)*100)
	
		
	
	# -------------- central cue ------------------
	
	if var.cue_condition == 'cue':
		var.cue_counter += 1
		if var.correct_new_srbox_2 == 1:
			var.cue_correct_counter +=1
			var.cue_rt_sum += var.response_time_new_srbox_2
		if var.response_new_srbox_2 != 'None':
			var.cue_response_counter += 1
	
	if var.cue_correct_counter != 0:
		var.centralcue_MRT = str(var.cue_rt_sum/var.cue_correct_counter)
		
		
	if var.cue_correct_counter != 0:
		var.centralcue_acc = str(var.cue_correct_counter/float(var.cue_counter)*100)
		
		
	
	# -------------- spatial cue ------------------
	
	if var.cue_condition == 'spatial':
		var.spatial_counter += 1
		if var.correct_new_srbox_2 == 1:
			var.spatial_correct_counter +=1
			var.spatial_rt_sum += var.response_time_new_srbox_2
		if var.response_new_srbox_2 != 'None':
			var.spatial_response_counter += 1
	
	
	if var.spatial_correct_counter != 0:
		var.spatialcue_MRT = str(var.spatial_rt_sum/var.spatial_correct_counter)
		
		
	if var.spatial_correct_counter != 0:
		var.spatialcue_acc = str(var.spatial_correct_counter/float(var.spatial_counter)*100)
		
		
	
	# -------------- neutral target ------------------
	
	if var.target_condition == 'neutral':
		var.neutral_counter += 1
		if var.correct_new_srbox_2 == 1:
			var.neutral_correct_counter +=1
			var.neutral_rt_sum += var.response_time_new_srbox_2
		if var.response_new_srbox_2 != 'None':
			var.neutral_response_counter += 1
	
	
	if var.neutral_correct_counter != 0:
		var.neutral_MRT = str(var.neutral_rt_sum/var.neutral_correct_counter)
		
		
	if var.neutral_correct_counter != 0:
		var.neutral_acc = str(var.neutral_correct_counter/float(var.neutral_counter)*100)
		
		
	
	# -------------- congruent target ------------------
	
	if var.target_condition == 'congruent':
		var.congruent_counter += 1
		if var.correct_new_srbox_2 == 1:
			var.congruent_correct_counter +=1
			var.congruent_rt_sum += var.response_time_new_srbox_2
		if var.response_new_srbox_2 != 'None':
			var.congruent_response_counter += 1
	
	
	if var.congruent_correct_counter != 0:
		var.congruent_MRT = str(var.congruent_rt_sum/var.congruent_correct_counter)
	
		
	if var.congruent_correct_counter != 0:
		var.congruent_acc = str(var.congruent_correct_counter/float(var.congruent_counter)*100)
	
		
	
	# -------------- incongruent target ------------------
	
	if var.target_condition == 'incongruent':
		var.incongruent_counter += 1
		if var.correct_new_srbox_2 == 1:
			var.incongruent_correct_counter +=1
			var.incongruent_rt_sum += var.response_time_new_srbox_2
		if var.response_new_srbox_2 != 'None':
			var.incongruent_response_counter += 1
	
	
	if var.incongruent_correct_counter != 0:
		var.incongruent_MRT = str(var.incongruent_rt_sum/var.incongruent_correct_counter)
		
		
	if var.incongruent_correct_counter != 0:
		var.incongruent_acc = str(var.incongruent_correct_counter/float(var.incongruent_counter)*100)
	__end__
	set _prepare ""

define inline_script new_inline_script_2_2
	set description "Executes Python code"
	set _run ""
	___prepare__
	max = 1695.
	
	var.fixation_duration=random.randint(250,750)
	
	#dur = max - self.get("response_time_new_mouse_response_1")
	dur = max - var.response_time_new_srbox_2
	
	#fix = dur + self.get("fixation_duration")
	fix = dur + var.fixation_duration
	
	#exp.set("my_duration", fix)
	var.my_duration = fix
	__end__

define inline_script new_inline_script_2_2_1
	set description "Executes Python code"
	set _run ""
	___prepare__
	max = 1695.
	
	
	
	var.fixation_duration=random.randint(250,750)
	
	#dur = max - self.get("response_time_new_mouse_response_1")
	dur = max - var.response_time_new_srbox_2
	
	#fix = dur + self.get("fixation_duration")
	fix = dur + var.fixation_duration
	
	#exp.set("my_duration", fix)
	var.my_duration = fix
	__end__

define inline_script new_inline_script_2_2_2
	set description "Executes Python code"
	set _run ""
	___prepare__
	max = 1695.
	
	
	
	var.fixation_duration=random.randint(250,750)
	
	#dur = max - self.get("response_time_new_mouse_response_1")
	dur = max - var.response_time_new_srbox_2
	
	#fix = dur + self.get("fixation_duration")
	fix = dur + var.fixation_duration
	
	#exp.set("my_duration", fix)
	var.my_duration = fix
	__end__

define inline_script new_inline_script_2_2_3
	set description "Executes Python code"
	set _run ""
	___prepare__
	max = 1695.
	
	exp.trigger.write(chr(0))
	cue_value=0
	target_value=0
	trial_value=0
	
	var.fixation_duration=random.randint(250,750)
	
	#dur = max - self.get("response_time_new_mouse_response_1")
	dur = max - var.response_time_new_srbox_2
	
	#fix = dur + self.get("fixation_duration")
	fix = dur + var.fixation_duration
	
	#exp.set("my_duration", fix)
	var.my_duration = fix
	__end__

define inline_script new_inline_script_2_3
	set description "Executes Python code"
	___run__
	# -------------- no cue -----------------------
	
	var.response_time_new_srbox_1 -= var.system_delay
	
	if var.cue_condition == 'fixation':
		var.fixation_counter += 1
		if var.correct_new_srbox_1 == 1:
			var.fixation_correct_counter +=1
			var.fixation_rt_sum += var.response_time_new_srbox_1
		if var.response_new_srbox_1 != 'None':
			var.fixation_response_counter += 1
	
	
	if var.fixation_correct_counter != 0:
		var.nocue_MRT = str(var.fixation_rt_sum/var.fixation_correct_counter)
	
		
	if var.fixation_correct_counter != 0:
		var.nocue_acc = str(var.fixation_correct_counter/float(var.fixation_counter)*100)
	
		
	
	# -------------- central cue ------------------
	
	if var.cue_condition == 'cue':
		var.cue_counter += 1
		if var.correct_new_srbox_1 == 1:
			var.cue_correct_counter +=1
			var.cue_rt_sum += var.response_time_new_srbox_1
		if var.response_new_srbox_1 != 'None':
			var.cue_response_counter += 1
	
	if var.cue_correct_counter != 0:
		var.centralcue_MRT = str(var.cue_rt_sum/var.cue_correct_counter)
		
		
	if var.cue_correct_counter != 0:
		var.centralcue_acc = str(var.cue_correct_counter/float(var.cue_counter)*100)
		
		
	
	# -------------- spatial cue ------------------
	
	if var.cue_condition == 'spatial':
		var.spatial_counter += 1
		if var.correct_new_srbox_1 == 1:
			var.spatial_correct_counter +=1
			var.spatial_rt_sum += var.response_time_new_srbox_1
		if var.response_new_srbox_1 != 'None':
			var.spatial_response_counter += 1
	
	
	if var.spatial_correct_counter != 0:
		var.spatialcue_MRT = str(var.spatial_rt_sum/var.spatial_correct_counter)
		
		
	if var.spatial_correct_counter != 0:
		var.spatialcue_acc = str(var.spatial_correct_counter/float(var.spatial_counter)*100)
		
		
	
	# -------------- neutral target ------------------
	
	if var.target_condition == 'neutral':
		var.neutral_counter += 1
		if var.correct_new_srbox_1 == 1:
			var.neutral_correct_counter +=1
			var.neutral_rt_sum += var.response_time_new_srbox_1
		if var.response_new_srbox_1 != 'None':
			var.neutral_response_counter += 1
	
	
	if var.neutral_correct_counter != 0:
		var.neutral_MRT = str(var.neutral_rt_sum/var.neutral_correct_counter)
		
		
	if var.neutral_correct_counter != 0:
		var.neutral_acc = str(var.neutral_correct_counter/float(var.neutral_counter)*100)
		
		
	
	# -------------- congruent target ------------------
	
	if var.target_condition == 'congruent':
		var.congruent_counter += 1
		if var.correct_new_srbox_1 == 1:
			var.congruent_correct_counter +=1
			var.congruent_rt_sum += var.response_time_new_srbox_1
		if var.response_new_srbox_1 != 'None':
			var.congruent_response_counter += 1
	
	
	if var.congruent_correct_counter != 0:
		var.congruent_MRT = str(var.congruent_rt_sum/var.congruent_correct_counter)
	
		
	if var.congruent_correct_counter != 0:
		var.congruent_acc = str(var.congruent_correct_counter/float(var.congruent_counter)*100)
	
		
	
	# -------------- incongruent target ------------------
	
	if var.target_condition == 'incongruent':
		var.incongruent_counter += 1
		if var.correct_new_srbox_1 == 1:
			var.incongruent_correct_counter +=1
			var.incongruent_rt_sum += var.response_time_new_srbox_1
		if var.response_new_srbox_1 != 'None':
			var.incongruent_response_counter += 1
	
	
	if var.incongruent_correct_counter != 0:
		var.incongruent_MRT = str(var.incongruent_rt_sum/var.incongruent_correct_counter)
		
		
	if var.incongruent_correct_counter != 0:
		var.incongruent_acc = str(var.incongruent_correct_counter/float(var.incongruent_counter)*100)
	__end__
	set _prepare ""

define inline_script new_inline_script_2_3_2
	set description "Executes Python code"
	___run__
	# -------------- simple -----------------------
	
	if var.target_condition == 'simple':
		var.simple_counter += 1
		if var.correct_new_srbox_2 == 1:
			var.simple_correct_counter +=1
			var.simple_rt_sum += var.response_time_new_srbox_2
		if var.response_new_srbox_2 != 'None':
			var.simple_response_counter += 1
	
	
	if var.simple_correct_counter != 0:
		var.simple_MRT = str(var.simple_rt_sum/var.simple_correct_counter)
	
		
	if var.simple_correct_counter != 0:
		var.simple_acc = str(var.simple_correct_counter/float(var.simple_counter)*100)
	__end__
	set _prepare ""

define inline_script new_inline_script_2_3_2_1
	set description "Executes Python code"
	___run__
	# -------------- simple -----------------------
	
	if var.target_condition == 'simple':
		var.simple_counter += 1
		if var.correct_new_srbox_1 == 1:
			var.simple_correct_counter +=1
			var.simple_rt_sum += var.response_time_new_srbox_1
		if var.response_new_srbox_1 != 'None':
			var.simple_response_counter += 1
	
	
	if var.simple_correct_counter != 0:
		var.simple_MRT = str(var.simple_rt_sum/var.simple_correct_counter)
	
		
	if var.simple_correct_counter != 0:
		var.simple_acc = str(var.simple_correct_counter/float(var.simple_counter)*100)
	__end__
	set _prepare ""

define inline_script new_inline_script_2_3_2_1_1
	set description "Executes Python code"
	___run__
	# -------------- simple -----------------------
	var.response_time_new_srbox_1 -= var.system_delay
	
	if var.target_condition == 'simple':
		var.simple_counter += 1
		if var.correct_new_srbox_1 == 1:
			var.simple_correct_counter +=1
			var.simple_rt_sum += var.response_time_new_srbox_1
		if var.response_new_srbox_1 != 'None':
			var.simple_response_counter += 1
	
	
	if var.simple_correct_counter != 0:
		var.simple_MRT = str(var.simple_rt_sum/var.simple_correct_counter)
	
		
	if var.simple_correct_counter != 0:
		var.simple_acc = str(var.simple_correct_counter/float(var.simple_counter)*100)
	__end__
	set _prepare ""

define inline_script new_inline_script_2_3_2_2
	set description "Executes Python code"
	___run__
	# -------------- simple -----------------------
	
	var.response_time_new_srbox_2 -= var.system_delay
	
	if var.target_condition == 'simple':
		var.simple_counter += 1
		if var.correct_new_srbox_2 == 1:
			var.simple_correct_counter +=1
			var.simple_rt_sum += var.response_time_new_srbox_2
		if var.response_new_srbox_2 != 'None':
			var.simple_response_counter += 1
	
	
	if var.simple_correct_counter != 0:
		var.simple_MRT = str(var.simple_rt_sum/var.simple_correct_counter)
	
		
	if var.simple_correct_counter != 0:
		var.simple_acc = str(var.simple_correct_counter/float(var.simple_counter)*100)
	__end__
	set _prepare ""

define inline_script new_inline_script_2_3_2_3
	set description "Executes Python code"
	___run__
	# -------------- simple -----------------------
	
	if var.target_condition == 'simple':
		var.simple_counter += 1
		if var.correct_new_srbox_2 == 1:
			var.simple_correct_counter +=1
			var.simple_rt_sum += var.response_time_new_srbox_2
		if var.response_new_srbox_2 != 'None':
			var.simple_response_counter += 1
	
	
	if var.simple_correct_counter != 0:
		var.simple_MRT = str(var.simple_rt_sum/var.simple_correct_counter)
	
		
	if var.simple_correct_counter != 0:
		var.simple_acc = str(var.simple_correct_counter/float(var.simple_counter)*100)
	__end__
	set _prepare ""

define logger new_logger
	set description "Logs experimental data"
	set auto_log yes

define logger new_logger_1
	set description "Logs experimental data"
	set auto_log yes

define logger new_logger_2
	set description "Logs experimental data"
	set auto_log yes

define logger new_logger_3
	set description "Logs experimental data"
	set auto_log yes

define loop new_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 37
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	setcycle 1 empty_column ""
	setcycle 2 empty_column ""
	setcycle 3 empty_column ""
	setcycle 4 empty_column ""
	setcycle 5 empty_column ""
	setcycle 6 empty_column ""
	setcycle 7 empty_column ""
	setcycle 8 empty_column ""
	setcycle 9 empty_column ""
	setcycle 10 empty_column ""
	setcycle 11 empty_column ""
	setcycle 12 empty_column ""
	setcycle 13 empty_column ""
	setcycle 14 empty_column ""
	setcycle 15 empty_column ""
	setcycle 16 empty_column ""
	setcycle 17 empty_column ""
	setcycle 18 empty_column ""
	setcycle 19 empty_column ""
	setcycle 20 empty_column ""
	setcycle 21 empty_column ""
	setcycle 22 empty_column ""
	setcycle 23 empty_column ""
	setcycle 24 empty_column ""
	setcycle 25 empty_column ""
	setcycle 26 empty_column ""
	setcycle 27 empty_column ""
	setcycle 28 empty_column ""
	setcycle 29 empty_column ""
	setcycle 30 empty_column ""
	setcycle 31 empty_column ""
	setcycle 32 empty_column ""
	setcycle 33 empty_column ""
	setcycle 34 empty_column ""
	setcycle 35 empty_column ""
	setcycle 36 empty_column ""
	run ""

define loop new_loop_1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 37
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 cue_type fixation
	setcycle 0 cue_pos 0
	setcycle 0 target_type neutral_right
	setcycle 0 target_pos -50
	setcycle 0 fixation_duration ""
	setcycle 0 cue_condition fixation
	setcycle 0 target_condition neutral
	setcycle 0 correct_response 6
	setcycle 0 block ""
	setcycle 0 count_block 1
	setcycle 0 count_total 73
	setcycle 1 cue_type cue
	setcycle 1 cue_pos 50
	setcycle 1 target_type congruent_left
	setcycle 1 target_pos 50
	setcycle 1 fixation_duration ""
	setcycle 1 cue_condition spatial
	setcycle 1 target_condition congruent
	setcycle 1 correct_response 5
	setcycle 1 block ""
	setcycle 1 count_block 2
	setcycle 1 count_total 74
	setcycle 2 cue_type fixation
	setcycle 2 cue_pos 0
	setcycle 2 target_type incongruent_right
	setcycle 2 target_pos -50
	setcycle 2 fixation_duration ""
	setcycle 2 cue_condition fixation
	setcycle 2 target_condition incongruent
	setcycle 2 correct_response 6
	setcycle 2 block ""
	setcycle 2 count_block 3
	setcycle 2 count_total 75
	setcycle 3 cue_type cue
	setcycle 3 cue_pos -50
	setcycle 3 target_type incongruent_left
	setcycle 3 target_pos -50
	setcycle 3 fixation_duration ""
	setcycle 3 cue_condition spatial
	setcycle 3 target_condition incongruent
	setcycle 3 correct_response 5
	setcycle 3 block ""
	setcycle 3 count_block 4
	setcycle 3 count_total 76
	setcycle 4 cue_type cue
	setcycle 4 cue_pos 0
	setcycle 4 target_type incongruent_left
	setcycle 4 target_pos 50
	setcycle 4 fixation_duration ""
	setcycle 4 cue_condition cue
	setcycle 4 target_condition incongruent
	setcycle 4 correct_response 5
	setcycle 4 block ""
	setcycle 4 count_block 5
	setcycle 4 count_total 77
	setcycle 5 cue_type cue
	setcycle 5 cue_pos 0
	setcycle 5 target_type congruent_left
	setcycle 5 target_pos -50
	setcycle 5 fixation_duration ""
	setcycle 5 cue_condition cue
	setcycle 5 target_condition congruent
	setcycle 5 correct_response 5
	setcycle 5 block ""
	setcycle 5 count_block 6
	setcycle 5 count_total 78
	setcycle 6 cue_type fixation
	setcycle 6 cue_pos 0
	setcycle 6 target_type congruent_left
	setcycle 6 target_pos 50
	setcycle 6 fixation_duration ""
	setcycle 6 cue_condition fixation
	setcycle 6 target_condition congruent
	setcycle 6 correct_response 5
	setcycle 6 block ""
	setcycle 6 count_block 7
	setcycle 6 count_total 79
	setcycle 7 cue_type cue
	setcycle 7 cue_pos 0
	setcycle 7 target_type neutral_right
	setcycle 7 target_pos 50
	setcycle 7 fixation_duration ""
	setcycle 7 cue_condition cue
	setcycle 7 target_condition neutral
	setcycle 7 correct_response 6
	setcycle 7 block ""
	setcycle 7 count_block 8
	setcycle 7 count_total 80
	setcycle 8 cue_type cue
	setcycle 8 cue_pos 0
	setcycle 8 target_type incongruent_right
	setcycle 8 target_pos -50
	setcycle 8 fixation_duration ""
	setcycle 8 cue_condition cue
	setcycle 8 target_condition incongruent
	setcycle 8 correct_response 6
	setcycle 8 block ""
	setcycle 8 count_block 9
	setcycle 8 count_total 81
	setcycle 9 cue_type cue
	setcycle 9 cue_pos -50
	setcycle 9 target_type incongruent_right
	setcycle 9 target_pos -50
	setcycle 9 fixation_duration ""
	setcycle 9 cue_condition spatial
	setcycle 9 target_condition incongruent
	setcycle 9 correct_response 6
	setcycle 9 block ""
	setcycle 9 count_block 10
	setcycle 9 count_total 82
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	setcycle 11 cue_type fixation
	setcycle 11 cue_pos 0
	setcycle 11 target_type neutral_right
	setcycle 11 target_pos 50
	setcycle 11 fixation_duration ""
	setcycle 11 cue_condition fixation
	setcycle 11 target_condition neutral
	setcycle 11 correct_response 6
	setcycle 11 block ""
	setcycle 11 count_block 12
	setcycle 11 count_total 84
	setcycle 12 cue_type fixation
	setcycle 12 cue_pos 0
	setcycle 12 target_type neutral_left
	setcycle 12 target_pos -50
	setcycle 12 fixation_duration ""
	setcycle 12 cue_condition fixation
	setcycle 12 target_condition neutral
	setcycle 12 correct_response 5
	setcycle 12 block ""
	setcycle 12 count_block 13
	setcycle 12 count_total 85
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	setcycle 18 cue_type cue
	setcycle 18 cue_pos 50
	setcycle 18 target_type congruent_right
	setcycle 18 target_pos 50
	setcycle 18 fixation_duration ""
	setcycle 18 cue_condition spatial
	setcycle 18 target_condition congruent
	setcycle 18 correct_response 6
	setcycle 18 block ""
	setcycle 18 count_block 19
	setcycle 18 count_total 91
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	setcycle 36 cue_type ""
	setcycle 36 cue_pos ""
	setcycle 36 target_type ""
	setcycle 36 target_pos ""
	setcycle 36 fixation_duration ""
	setcycle 36 cue_condition ""
	setcycle 36 target_condition ""
	setcycle 36 correct_response ""
	setcycle 36 block ""
	setcycle 36 count_block ""
	setcycle 36 count_total ""
	run ""

define mouse_response new_mouse_response
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define reset_feedback new_reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define reset_feedback new_reset_feedback_1
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define sequence new_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructie_1_1_3_1 always
	run Instructie_2 always
	run Instructie_3 always
	run Instructie_1_4 always
	run Instructie_4 always
	run Instructie_5 always
	run Instructie_6 always
	run Instructie_8 always
	run Instructie_9 always
	run Instructie_10_4 always
	run Instructie_11 always
	run Instructie_12 always
	run Instructie_13 always
	run Instructie always

define sequence new_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructie_1_1 always
	run Instructie_2_1 always
	run Instructie_4_1 always
	run Instructie_10 always

define sequence new_sequence_1_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructie_1_1_1 always
	run Instructie_2_1_1 always
	run Instructie_4_1_1 always
	run Instructie_10 always

define sequence new_sequence_1_1_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructie_1_1_1_1 always
	run Instructie_2_1_1_1 always
	run Instructie_4_1_1_1 always
	run Instructie_10_2 always

define sequence new_sequence_1_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructie_1_1_2 always

define sequence new_sequence_1_2_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructie_1_1_2_1 always

define sequence new_sequence_1_2_1_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructie_1_1_2_1_1 always

define sequence new_sequence_1_2_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructie_1_1_2_2_1 always
	run Instructie_1_1_2_2 always

define sequence new_sequence_1_2_2_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructie_1_1_2_2_1_1 always
	run Instructie_1_1_2_2_2 always

define sequence new_sequence_1_2_2_1_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructie_1_1_2_2_1_1_1 always
	run Instructie_1_1_2_2_2_1 always

define sequence new_sequence_1_2_2_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructie_1_1_2_2_1_2 always
	run Instructie_1_1_2_2_3 always

define sequence new_sequence_1_2_3
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructie_1_1_2_3 always

define sequence new_sequence_1_3
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructie_1_1_3 always
	run Instructie_2_1_1_1 always
	run Instructie_4_1_2 always
	run Instructie_10_1 always

define sequence new_sequence_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructie_1_2 always
	run Instructie_2_2 always
	run Instructie_3_2 always
	run Instructie_4_2 always
	run Instructie_5_2 always
	run Instructie_6_2 always
	run Instructie_7_2 always
	run Instructie_8_2 always
	run Instructie_9_2 always
	run Instructie_10_4_2 always
	run Instructie_11_1 always
	run Instructie_12_1 always
	run Instructie_13_1 always
	run Instructie always

define sequence new_sequence_2_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Aandoening_anders "[aandoeningen]=\"Ja, andere aandoening: \""

define sequence new_sequence_3
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructie_1_3 always
	run Instructie_4_3 always

define sequence new_sequence_3_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructie_1_3_1 always
	run Instructie_4_3_1 always

define sequence new_sequence_3_1_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructie_1_3_1_1 always
	run Instructie_4_3_1_1 always

define sequence new_sequence_3_1_1_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructie_1_3_1_1_1 always
	run Instructie_4_3_1_1_1 always

define sequence new_sequence_3_1_1_1_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructie_1_3_1_1_1_1 always
	run Instructie_4_3_1_1_1_1 always

define sequence new_sequence_3_1_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Welke_medicijnen "[medicijnen]=\"Ja \""

define sequence new_sequence_3_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructie_1_3_2 always
	run Instructie_4_3_2 always

define sequence new_sequence_3_2_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructie_1_3_2_1 always
	run Instructie_4_3_2_1 always

define sequence new_sequence_3_2_1_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructie_1_3_2_1_2 always
	run Instructie_4_3_2_1_2 always

define sequence new_sequence_4
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructie_1_4_1 always
	run Instructie_2_3 always
	run Instructie_3_1 always
	run Instructie_4_4 always
	run Instructie_5_1 always
	run Instructie_6_1 always
	run Instructie_8_1 always
	run Instructie_9_1 always
	run Instructie_10_4_1 always
	run Instructie_11_2 always
	run Instructie_12_2 always
	run Instructie_13_2 always
	run Instructie always

define sequence new_sequence_4_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Opleiding_anders "[opleiding]=\"Anders: \""

define srbox new_srbox
	set timeout infinite
	set require_state_change yes
	set lights ""
	set dev autodetect
	set correct_response 6
	set _dummy no

define srbox new_srbox_1
	set timeout 1695
	set require_state_change yes
	set lights ""
	set dev autodetect
	set correct_response "[correct_response]"
	set _dummy no

define srbox new_srbox_1_1
	set timeout 1695
	set require_state_change yes
	set lights ""
	set dev autodetect
	set correct_response "[correct_response]"
	set _dummy no

define srbox new_srbox_2
	set timeout 1695
	set require_state_change yes
	set lights ""
	set dev autodetect
	set correct_response "[correct_response]"
	set _dummy no

define srbox new_srbox_2_1
	set timeout 1695
	set require_state_change yes
	set lights ""
	set dev autodetect
	set correct_response "[correct_response]"
	set _dummy no

define srbox new_srbox_2_2
	set timeout 1695
	set require_state_change yes
	set lights ""
	set dev autodetect
	set correct_response "[correct_response]"
	set _dummy no

define srbox new_srbox_3
	set timeout infinite
	set require_state_change yes
	set lights ""
	set dev autodetect
	set correct_response 6
	set _dummy no

define srbox new_srbox_4
	set timeout infinite
	set require_state_change yes
	set lights ""
	set dev autodetect
	set correct_response 6
	set _dummy no

define inline_script resest_trigger
	set description "Executes Python code"
	___run__
	exp.trigger.write(chr(0))
	cue_value=0
	target_value=0
	trial_value=0
	__end__
	set _prepare ""

define inline_script settings_1
	set description "Executes Python code"
	___run__
	# import packages
	import random
	from os.path import expanduser
	
	import os.path
	from os import path
	
	# set EEG
	var.enable_EEG=0
	
	# set default value for meting
	var.meting="Regulier"
	
	# Import system delay
	with open(exp.experiment_path + "/../../../emma_toolbox_data/Settings/system_delay.txt", 'r') as myfile:
			var.system_delay=myfile.read().replace('\n', '')
	
	# set default value for meting
	var.center="Regulier"
	
	# Import center
	
	if path.exists(exp.experiment_path + "/../../../emma_toolbox_data/Raw/center.txt"):
		with open(exp.experiment_path +"/../../../emma_toolbox_data/Raw/center.txt", 'r') as myfile:
			var.center=myfile.read().replace('\n', '')
			var.response_SRT_check_1="o"
	
	print(var.center)
	__end__
	set _prepare ""

define sketchpad target
	set timeout 1695
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="fixation.png" scale=0.14 show_if=always x=0 y=0 z_index=1
	draw image center=1 file="[target_type].png" scale=0.3 show_if=always x=0 y="[target_pos]" z_index=0

define sketchpad target_1
	set timeout 1695
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="fixation.png" scale=0.14 show_if=always x=0 y=0 z_index=1
	draw image center=1 file="[target_type].png" scale=0.3 show_if=always x=0 y="[target_pos]" z_index=0

define sketchpad target_2
	set timeout 1695
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="fixation.png" scale=0.14 show_if=always x=0 y=0 z_index=1
	draw image center=1 file="[target_type].png" scale=0.3 show_if=always x=0 y="[target_pos]" z_index=0

define sketchpad target_2_1
	set timeout 1695
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="fixation.png" scale=0.14 show_if=always x=0 y=0 z_index=1
	draw image center=1 file="[target_type].png" scale=0.3 show_if=always x=0 y="[target_pos]" z_index=0

define sketchpad target_2_2
	set timeout 1695
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="fixation.png" scale=0.14 show_if=always x=0 y=0 z_index=1
	draw image center=1 file="[target_type].png" scale=0.3 show_if=always x=0 y="[target_pos]" z_index=0

define notepad trigger_codes
	__note__
	
	4 = trial onset in simple trials
	5 = cue onset in simple trials
	6 = target onset in simple trials
	7 = correct response offset in simple trials
	8 = omisssion in simple trials
	
	9 = trial onset in ANT trials
	10 = cue onset in no cue trials
	20 = cue onset in central cue trials
	30 = cue onset in spatial cue trials
	
	1 = target onset in neutral target trials
	2 = target onset in congruent target trials
	3 = target onset in incongruent target trials
	
	11 = correct response offset in no cue & neutral trials
	12 = correct response offset in no cue & congruent trials
	13 = correct response offset in no cue & incongruent trials
	
	21 = correct response offset in central cue & neutral trials
	22 = correct response offset in central cue & congruent trials
	23 = correct response offset in central cue & incongruent trials
	
	31 = correct response offset in spatial cue & neutral trials
	32 = correct response offset in spatial cue & congruent trials
	33 = correct response offset in spatial cue & incongruent trials
	
	61 = incorrect response offset in no cue & neutral trials
	62 = incorrect response offset in no cue & congruent trials
	63 = incorrect response offset in no cue & incongruent trials
	
	71 = incorrect response offset in central cue & neutral trials
	72 = incorrect response offset in central cue & congruent trials
	73 = incorrect response offset in central cue & incongruent trials
	
	81 = incorrect response offset in spatial cue & neutral trials
	82 = incorrect response offset in spatial cue & congruent trials
	83 = incorrect response offset in spatial cue & incongruent trials
	
	99 = omission 
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define inline_script trigger_cue_onset
	set description "Executes Python code"
	___run__
	
	
	if var.cue_condition == 'fixation':
		cue_value = 10
	elif var.cue_condition == 'cue':
		cue_value = 20
	elif var.cue_condition == 'spatial':
		cue_value = 30
	
	exp.trigger.write(chr(cue_value))
	__end__
	set _prepare ""

define inline_script trigger_cue_onset_1
	set description "Executes Python code"
	___run__
	exp.trigger.write(chr(5))
	__end__
	set _prepare ""

define inline_script trigger_cue_onset_1_1
	set description "Executes Python code"
	___run__
	exp.trigger.write(chr(5))
	__end__
	set _prepare ""

define inline_script trigger_cue_onset_1_2
	set description "Executes Python code"
	___run__
	exp.trigger.write(chr(5))
	__end__
	set _prepare ""

define inline_script trigger_response_offset
	set description "Executes Python code"
	___run__
	trial_value=cue_value+target_value
	
	if var.correct_new_srbox_2 == 1:
		trial_value = trial_value + 0
	
	if (var.correct_new_srbox_2 == 0) and (var.response_new_srbox_2 != 'None'):
		trial_value = trial_value + 50
	
	if (var.correct_new_srbox_2 == 0) and (var.response_new_srbox_2 == 'None'):
		trial_value = 99
	
	var.trial_value=trial_value
	
	exp.trigger.write(chr(trial_value))
	__end__
	set _prepare ""

define inline_script trigger_response_offset_1
	set description "Executes Python code"
	___run__
	if var.correct_new_srbox_2 == 1:
		simple_value = 7
	if var.response_new_srbox_2 == 'None':
		simple_value = 8
	
	exp.trigger.write(chr(simple_value))
	__end__
	set _prepare ""

define inline_script trigger_response_offset_1_1
	set description "Executes Python code"
	___run__
	if var.correct_new_srbox_2 == 1:
		simple_value = 7
	if var.response_new_srbox_2 == 'None':
		simple_value = 8
	
	exp.trigger.write(chr(simple_value))
	__end__
	set _prepare ""

define inline_script trigger_response_offset_1_2
	set description "Executes Python code"
	___run__
	if var.correct_new_srbox_2 == 1:
		simple_value = 7
	if var.response_new_srbox_2 == 'None':
		simple_value = 8
	
	exp.trigger.write(chr(simple_value))
	__end__
	set _prepare ""

define inline_script trigger_target_onset
	set description "Executes Python code"
	___run__
	if var.target_condition == 'neutral':
		target_value = 1
	elif var.target_condition == 'congruent':
		target_value = 2
	elif var.target_condition == 'incongruent':
		target_value = 3
	
	exp.trigger.write(chr(target_value))
	__end__
	set _prepare ""

define inline_script trigger_target_onset_1
	set description "Executes Python code"
	set _run "exp.trigger.write(chr(6))"
	set _prepare ""

define inline_script trigger_target_onset_1_1
	set description "Executes Python code"
	set _run "exp.trigger.write(chr(6))"
	set _prepare ""

define inline_script trigger_target_onset_1_2
	set description "Executes Python code"
	set _run "exp.trigger.write(chr(6))"
	set _prepare ""

define inline_script trigger_trial_onset
	set description "Executes Python code"
	set _run "exp.trigger.write(chr(9))"
	set _prepare ""

define inline_script trigger_trial_onset_1
	set description "Executes Python code"
	set _run "exp.trigger.write(chr(4))"
	set _prepare ""

define inline_script trigger_trial_onset_1_1
	set description "Executes Python code"
	___run__
	exp.trigger.write(chr(0))
	cue_value=0
	target_value=0
	trial_value=0
	
	exp.trigger.write(chr(4))
	__end__
	set _prepare ""

define inline_script trigger_trial_onset_1_2
	set description "Executes Python code"
	set _run "exp.trigger.write(chr(4))"
	set _prepare ""

define notepad version_history
	__note__
	EMMA TOOLBOX
	Attention Network Test - EEG
	Marsh Konigs
	____________________________________________________________________________
	
	v 1.0 (May 2017)
	Merged the child and addult version of the ANT into one paradigm with a choice option at the start.
	Added a simple reaction time task to provide the possibility of ex-Gaussian analysis.
	
	v 1.1 (August 2017)
	Added serial port triggers for EEG experiments.
	
	v 1.2 (September 2017)
	Elaborated serial port triggers for EEG experiments for trial onset, cue onset, target onset, response offset and registration of correct responses, incorrect responses and omissions.
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

