---
API: 2
OpenSesame: 3.1.9
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set pygame_window_pos auto
set pygame_window_frame yes
set pygame_hwsurface yes
set pygame_doublebuf yes
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family serif
set font_bold no
set experiment_path "C:/Users/emmaneuroscience/Documents/emma_toolbox/Tests/Headache"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set bidi no
set background black

define sketchpad Start
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="ET.png" scale=1 show_if=always x=0 y=0 z_index=0
	draw textline center=1 color="#ffffff" font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Emma Toolbox<br /><i> Headache Localizer </i>" x=0 y=-288 z_index=0
	draw textline center=1 color="#ffffff" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Emma Children's Hospital<br />Academic Medical Center<br />m.konigs@amc.nl" x=0 y=224 z_index=0
	draw image center=1 file="amc.png" scale=1 show_if=always x=0 y=320 z_index=0

define sketchpad Start_1
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="ET.png" scale=1 show_if=always x=0 y=0 z_index=0
	draw textline center=1 color="#ffffff" font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Emma Toolbox<br /><i> Headache Localizer </i>" x=0 y=-288 z_index=0
	draw textline center=1 color="#ffffff" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Emma Children's Hospital<br />Academic Medical Center<br />m.konigs@amc.nl" x=0 y=224 z_index=0
	draw image center=1 file="amc.png" scale=1 show_if=always x=0 y=320 z_index=0

define inline_script create_backup
	set description "Executes Python code"
	___run__
	import shutil
	
	shutil.copyfile(var.logfile, var.logfile + str('_backup'))
	__end__
	set _prepare ""

define inline_script draw
	set description "Executes Python code"
	___run__
	from openexp.canvas import canvas
	from openexp.mouse import mouse
	from openexp.keyboard import keyboard
	from PIL import ImageGrab
	
	key = None
	my_keyboard = keyboard(exp, keylist=['space'])   
	my_mouse = mouse(exp, buttonlist = ([1]), visible = True)
	my_canvas = canvas(exp)
	
	f1=open(exp.experiment_path + "/../../../emma_toolbox_data/Raw/Headache/" + str(exp.get("subject_nr")) + "_" + str(var.condition) + ".txt", "w+")
	f1.write("position_xy" + " " + "width" + " " + "height" + "\n")
	
	dot = exp.pool[u'dot2.png']
	head  = exp.pool[u'head1.png']
	my_canvas.image(head, x=0, y=0,scale=.6)
	 
	my_canvas.show()
	
	
	 
	while my_mouse.get_pressed()!=(0,0,1):
		button, position, timestamp = my_mouse.get_click(timeout=10)
		x,y = position if button is not None else (None,None)
		if button is not None:
			(x0, y0) = (None,None)  
			while my_mouse.get_pressed()==(1,0,0):
				(x, y), timestamp = my_mouse.get_pos()
				f1.write(str(x) + "," + str(y) + " " + str(var.width) + " " + str(var.height) + "\n")
				if (x0,y0) != (None, None):
					my_canvas.image(dot, x=x0, y=y0, scale=0.2) 
					my_canvas.image(dot, x=x, y=y, scale=0.2)
					f1.write(str(x) + "," + str(y) + " " + str(var.width) + " " + str(var.height) + "\n")
				else:
					my_canvas.image(dot, x=x, y=y, scale=0.2 )
					f1.write(str(x) + "," + str(y) + " " + str(var.width) + " " + str(var.height) + "\n")
				(x0,y0) = (x,y)
				my_canvas.show()
	
	f1 .close()
	my_mouse = mouse(exp, buttonlist = ([1]), visible = False )
	ImageGrab.grab().save(exp.experiment_path + "/../../../emma_toolbox_data/Raw/Headache/maps/" + str(exp.get("subject_nr")) + "_" + str(var.condition), "PNG") 
	__end__
	set _prepare ""

define inline_script draw_1
	set description "Executes Python code"
	___run__
	from openexp.canvas import canvas
	from openexp.mouse import mouse
	from openexp.keyboard import keyboard
	from PIL import ImageGrab
	
	key = None
	my_keyboard = keyboard(exp, keylist=['space'])   
	my_mouse = mouse(exp, buttonlist = ([1]), visible = True)
	my_canvas = canvas(exp)
	
	f1=open(exp.experiment_path + "/data/" + str(exp.get("subject_nr")) + "_" + str(var.condition) + ".txt", "w+")
	f1.write("position_xy" + " " + "width" + " " + "height" + "\n")
	
	dot = exp.pool[u'dot2.png']
	head  = exp.pool[u'head1.png']
	my_canvas.image(head, x=0, y=0,scale=.6)
	 
	my_canvas.show()
	
	
	 
	while my_mouse.get_pressed()!=(0,0,1):
		button, position, timestamp = my_mouse.get_click(timeout=10)
		x,y = position if button is not None else (None,None)
		if button is not None:
			(x0, y0) = (None,None)  
			while my_mouse.get_pressed()==(1,0,0):
				(x, y), timestamp = my_mouse.get_pos()
				f1.write(str(x) + "," + str(y) + " " + str(var.width) + " " + str(var.height) + "\n")
				if (x0,y0) != (None, None):
					my_canvas.image(dot, x=x0, y=y0, scale=0.2) 
					my_canvas.image(dot, x=x, y=y, scale=0.2)
					f1.write(str(x) + "," + str(y) + " " + str(var.width) + " " + str(var.height) + "\n")
				else:
					my_canvas.image(dot, x=x, y=y, scale=0.2 )
					f1.write(str(x) + "," + str(y) + " " + str(var.width) + " " + str(var.height) + "\n")
				(x0,y0) = (x,y)
				my_canvas.show()
	
	f1 .close()
	my_mouse = mouse(exp, buttonlist = ([1]), visible = False )
	ImageGrab.grab().save(exp.experiment_path + "/maps/" + str(exp.get("subject_nr")) + "_" + str(var.condition), "PNG") 
	__end__
	set _prepare ""

define inline_script draw_2
	set description "Executes Python code"
	___run__
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	__end__
	set _prepare ""

define inline_script draw_3
	set description "Executes Python code"
	___run__
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	__end__
	set _prepare ""

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Start always
	run hit_concussion_1 always
	run hit_concussion always
	run inst_headache_direct always
	run headache_direct always
	run worst_headache always
	run headache_direct_1 always
	run now_headache always
	run headache_direct_1_1 always
	run create_backup always
	run Start_1 always

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define loop headache_direct
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 condition headache_direct
	run draw

define loop headache_direct_1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 condition headache_ifpresent
	run draw

define loop headache_direct_1_1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 condition headache_now
	run draw

define loop hit_concussion
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 condition hit_concussion
	run draw

define sketchpad hit_concussion_1
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie </u><br /><br /><i> Geef zo precies mogelijk aan: </i><br /><br /><br /><br /><b> Waar je bent geraakt op het moment van de hersenschudding. </b><br /><br /><br /><br /><i> Dit doe je door deze plek in te kleuren met de linkermuisknop in het plaatje op het volgende scherm.<br /><br />Druk op de rechtermuisknop als je klaar bent. </i><br /><br />" x=0 y=0 z_index=0

define sketchpad inst_headache_direct
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie </u><br /><br /><i> Geef zo precies mogelijk aan: </i><br /><br /><br /><br /><b> Waar je last had van hoofdpijn op de dag van de hersenschudding. </b><br /><br /><br /><br /><i> Dit doe je door deze plek in te kleuren met de linkermuisknop in het plaatje op het volgende scherm.<br /><br />Druk op de rechtermuisknop als je klaar bent. </i><br /><br />" x=0 y=0 z_index=0

define sequence location_concussion
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define inline_script new_inline_script_1
	set description "Executes Python code"
	___run__
	def save_as_file(canvas, filename, buffer='front'):
		""" Save the contents of the current screenbuffer to an image file.
	
		Parameters
		----------
		canvas : openexp.Canvas
			The canvas object to save the image from
	
		filename : string
			The location and filenam to save the image to. If an absolute path is 
			provided, the file will be saved there. If a relative path is provided, 
			the file will be saved to that folder relative to the location of the 
			experiment file
	
		buffer : string, default 'front'
			Only relevant when using the psychopy backend. Indicates whether the 
			front buffer or back buffer should be saved, so this value should be 
			'front' or 'back'
	
		Returns
		-------
		string : The full path to the file that has just been saved
	
		Raises
		------
		libopensesame.exceptions.osexception if an incorrect file format or buffer 
		value have been provided    
		"""
		import os
		from libopensesame.exceptions import osexception
	
		# Check if supplied filename has a valid image extension
		if not os.path.splitext(filename)[1] in ['.jpg', '.jpeg', '.png', '.bmp' or '.tga']:
			raise osexception("The filename does not have a valid image extension. Use .jpg, .jpeg, .png, .bmp or .tga")
	
		if not buffer in ['front','back']:
			raise osexception("Invalid buffer value; the only options are 'front' or 'back'.")
	
		# Check if image file path is absolute, if not, find relative path to current experiment file
		if not os.path.isabs(filename):
			filename = os.path.abspath(os.path.join(self.experiment.experiment_path, filename))
	
		# Create any subfolders if necessary
		file_dir = os.path.dirname(filename)
		if not os.path.isdir(file_dir):
			os.makedirs(file_dir)
	
		# Backend specific saving of canvas to image file
		if self.experiment.get("canvas_backend") == "legacy":
			import pygame
			pygame.image.save(canvas.surface, filename) 
		elif self.experiment.get("canvas_backend") == "xpyriment":  
			canvas._canvas.save(filename)
		elif self.experiment.get("canvas_backend") == "psycho":
			win.getMovieFrame(buffer)
			win.saveMovieFrames(filename)
	
		# Return the abspath of the saved file (to easily reference it later)
		return filename
	 
	self.sleep(1000)
	save_as_file(canvas, "images/test.jpeg")
	__end__
	set _prepare ""

define sequence new_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"

define sketchpad now_headache
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie </u><br /><br /><i> Geef zo precies mogelijk aan: </i><br /><br /><br /><br /><b> Waar je momenteel last hebt van hoofdpijn. </b><br /><br /><br /><br /><i> Dit doe je door deze plek in te kleuren met de linkermuisknop in het plaatje op het volgende scherm.<br /><br />Druk op de rechtermuisknop als je klaar bent. </i><br /><br />" x=0 y=0 z_index=0

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Emma Toolbox<br /><i>Hoofdpijn localizer</i>" x=0 y=0 z_index=0

define sketchpad worst_headache
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie </u><br /><br /><i> Geef zo precies mogelijk aan: </i><br /><br /><br /><br /><b> Waar je meestal last hebt van hoofdpijn, als je hoofdpijn hebt. </b><br /><br /><br /><br /><i> Dit doe je door deze plek in te kleuren met de linkermuisknop in het plaatje op het volgende scherm.<br /><br />Druk op de rechtermuisknop als je klaar bent. </i><br /><br />" x=0 y=0 z_index=0

