---
API: 2
OpenSesame: 3.1.9
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start LLT
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set pygame_window_pos auto
set pygame_doublebuf yes
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family serif
set font_bold no
set experiment_path "C:/Users/emmaneuroscience/Documents/emma_toolbox/Tests/VisualMemory"
set enable_escape no
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set bidi no
set background black

define loop Answer_test
	set source_file ""
	set source table
	set repeat 500
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[validate]=  1"
	setcycle 0 empty_column ""
	run new_sequence

define loop Answer_test_1
	set source_file ""
	set source table
	set repeat 99
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[validate]=  1"
	setcycle 0 empty_column ""
	run new_sequence_1

define loop Answer_test_2
	set source_file ""
	set source table
	set repeat 500
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[validate]=  1"
	setcycle 0 empty_column ""
	run new_sequence_2

define loop Answer_test_3
	set source_file ""
	set source table
	set repeat 99
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[validate]=  1"
	setcycle 0 Retrieval_trial 1
	run new_sequence_3

define loop Answer_test_3_1
	set source_file ""
	set source table
	set repeat 99
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[validate]==1"
	setcycle 0 Retrieval_trial 1
	run new_sequence_3_1

define inline_script Calc_distance
	set description "Executes Python code"
	___run__
	
	var.A_distance=math.sqrt(math.pow((var.A_x - A_true_x),2) + math.pow((var.A_y - A_true_y),2))
	var.B_distance=math.sqrt(math.pow((var.B_x - B_true_x),2) + math.pow((var.B_y - B_true_y),2))
	var.C_distance=math.sqrt(math.pow((var.C_x - C_true_x),2) + math.pow((var.C_y - C_true_y),2))
	var.D_distance=math.sqrt(math.pow((var.D_x - D_true_x),2) + math.pow((var.D_y - D_true_y),2))
	var.E_distance=math.sqrt(math.pow((var.E_x - E_true_x),2) + math.pow((var.E_y - E_true_y),2))
	var.F_distance=math.sqrt(math.pow((var.F_x - F_true_x),2) + math.pow((var.F_y - F_true_y),2))
	var.G_distance=math.sqrt(math.pow((var.G_x - G_true_x),2) + math.pow((var.G_y - G_true_y),2))
	var.H_distance=math.sqrt(math.pow((var.H_x - H_true_x),2) + math.pow((var.H_y - H_true_y),2))
	var.I_distance=math.sqrt(math.pow((var.I_x - I_true_x),2) + math.pow((var.I_y - I_true_y),2))
	var.J_distance=math.sqrt(math.pow((var.J_x - J_true_x),2) + math.pow((var.J_y - J_true_y),2))
	
	var.trial_distance = var.A_distance + var.B_distance + var.C_distance + var.D_distance + var.E_distance + var.F_distance + var.G_distance + var.H_distance + var.I_distance + var.J_distance
	var.trial_distance_rounded = round(var.trial_distance,1)
	
	var.encoding_distance = var.encoding_distance + var.trial_distance    
	var.encoding_distance_rounded = round(var.encoding_distance,1)
	
	
	ImageGrab.grab().save(exp.experiment_path + "/../../../emma_toolbox_data/Raw/VisualMemory/Snaps/" + str(var.subject_nr) + "_DirectRecall_" + str(trial) + ".png", "PNG") 
	
	trial=trial +1
	
	my_canvas.clear()
	__end__
	set _prepare ""

define sequence Delayed_Recall
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_sketchpad_1_3 always
	run new_inline_script_2_3 always
	run new_inline_script_8 always
	run Answer_test_3 always
	run new_inline_script_4_3 always
	run new_sketchpad_6 always
	run new_logger_3_3 always

define sequence Direct_Recall
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Inst_3 "[Encoding_trial]!=1 and [Encoding_trial]!=5"
	run Inst_volw_3 "[response_Start]=='v' and [Encoding_trial]>1 and [Encoding_trial]!=5"
	run Inst_kinderen_3 "[response_Start]=='k' and [Encoding_trial]>1 and [Encoding_trial]!=5"
	run Inst_3_1 "[Encoding_trial]==5"
	run Template_Test_v1 "[versie]=='Versie 1'"
	run Template_Test_v2 "[versie]=='Versie 2'"
	run Template_Test_v3 "[versie]=='Versie 3'"
	run Show_template always
	run Show_grid always
	run Answer_test always
	run Calc_distance always
	run new_feedback always
	run new_logger_3 always

define sequence Direct_Recall_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Inst_kinderen_1 "[response_Start]=='k'"
	run Inst_volw_1 "[response_Start]=='v'"
	run Template_Practice always
	run Show_template_1 always
	run Show_grid_1 always
	run Answer_test_2 always
	run new_inline_script_4_2 always
	run new_feedback_1 always
	run new_logger_3 always

define loop Encoding
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 5
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Encoding_trial 1
	setcycle 1 Encoding_trial 2
	setcycle 2 Encoding_trial 3
	setcycle 3 Encoding_trial 4
	setcycle 4 Encoding_trial 5
	run Direct_Recall

define loop Encoding_Practice
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 5
	set continuous no
	set break_if_on_first yes
	set break_if "[break_prac]==1"
	setcycle 0 Encoding_trial 1
	setcycle 1 Encoding_trial 2
	setcycle 2 Encoding_trial 3
	setcycle 3 Encoding_trial 4
	setcycle 4 Encoding_trial 5
	run Direct_Recall_1

define sketchpad Inst_3
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="<i> Dit gaan we nog een paar keer doen.<br />  </i>" x=0 y=-32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="Trial: [Encoding_trial]/5" x=-448 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="" x=448 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie - Testfase </u>" x=0 y=-288 z_index=0

define sketchpad Inst_3_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="<i> Nu komt de laatste keer. </i>" x=0 y=-32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="Trial: [Encoding_trial]/5" x=-448 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="" x=448 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie - Testfase </u>" x=0 y=-288 z_index=0

define sketchpad Inst_kinderen_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Je ziet zometeen een groot vierkant met daarin vakjes. In sommige vakjes staat een plaatje.<br /><br />Onthoud van elk plaatje goed in welk vakje dat staat. Het zijn er veel en het is best moeilijk. Het is dus logisch je niet alles kunt onthouden.<br /><br />Als de plaatjes uit het vierkant verdwijnen, moet jij ze weer in het goede vakje terugleggen. Als je niet zeker weet in welk vakje een plaatje hoort, leg hem dan waar je denkt dat het plaatje hoort. De volgorde is niet belangrijk.<br /><br />We gaan eerst oefenen met weinig plaatjes. Let goed op, hier komen ze." x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="Trial: [Encoding_trial]/5" x=-448 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="" x=448 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Directe herinnering - Oefenfase </u>" x=0 y=-320 z_index=0

define sketchpad Inst_kinderen_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Dat was het oefenen. Begrijp je hoe het werkt?<br /><br />We gaan nu beginnen met de taak, maar nu met meer afbeeldingen.<br /><br />Let goed op en probeer te onthouden in welk vakje elk plaatje hoort.<br /><br />Leg daarna de plaatjes terug in het goede vakje." x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="" x=448 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie - Oefenfase </u>" x=0 y=-320 z_index=0

define sketchpad Inst_kinderen_3
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="<i> <br />Leg elke keer de plaatjes weer terug in het goede vakje.<br /><br />Het is moeilijk dus het geeft niet als je niet alles zeker weet, <br />maar het zou goed zijn als het steeds makkelijker gaat.  </i>" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="Trial: [Encoding_trial]/5" x=-448 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="" x=448 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie - Testfase </u>" x=0 y=-288 z_index=0

define sketchpad Inst_volw_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Je ziet zometeen een groot vierkant met daarin vakjes. In sommige vakjes staat een afbeelding.<br /><br />Onthoud van elke afbeelding goed in welk vakje die afbeelding staat. Het zijn er veel en het is best moeilijk, het dus logisch dat je niet alles kunt onthouden.<br /><br />Als de afbeeldingen uit het vierkant verdwijnen, moet jij ze weer in het goede vakje terugleggen. Als je niet zeker weet in welk vakje een afbeelding hoort, leg hem dan waar je denkt dat de afbeelding hoort. De volgorde is niet belangrijk.<br /><br />We gaan eerst oefenen met weinig afbeeldingen. Let goed op, hier komen ze." x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="Trial: [Encoding_trial]/5" x=-448 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="" x=448 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Directe herinnering - Oefenfase </u>" x=0 y=-320 z_index=0

define sketchpad Inst_volw_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=yes font_size=20 html=yes show_if=always text="Dat was het oefenen. Is dat duidelijk?<br /><br />We gaan nu echt beginnen met de test, maar nu met meer afbeeldingen.<br /><br />Let goed op en probeer te onthouden in welk vakje elke afbeeldingen hoort.<br /><br />Leg daarna de afbeeldingen terug in het goede vakje." x=24 y=-53 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="" x=448 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie - Oefenfase </u>" x=0 y=-320 z_index=0

define sketchpad Inst_volw_3
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="<i><br />Leg elke keer de plaatjes weer terug in het goede vakje.<br /><br />Het is moeilijk dus het geeft niet als je niet alles zeker weet, <br />maar het zou goed zijn als het steeds makkelijker gaat. </i>" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="Trial: [Encoding_trial]/5" x=-448 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="" x=448 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<u> Instructie - Testfase </u>" x=0 y=-288 z_index=0

define sequence LLT
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_inline_script_6 always
	run Start_ always
	run Start always
	run Meting always
	run Versie always
	run Select_version always
	run Settings "[skip]=0"
	run Template_Practice always
	run Encoding_Practice always
	run Inst_kinderen_2 "[response_Start]=='k'"
	run Inst_volw_2 "[response_Start]=='v'"
	run Template_Test_v1 "[versie]=='Versie 1'"
	run Template_Test_v2 "[versie]=='Versie 2'"
	run Template_Test_v3 "[versie]=='Versie 3'"
	run Encoding always
	run Template_Test_v1 always
	run create_backup always
	run Start_1 always

define inline_script Meting
	set description "Executes Python code"
	___run__
	from libopensesame import widgets
	__end__
	set _prepare ""

define inline_script Place
	set description "Executes Python code"
	___run__
	
	if (var.cancel == 0 and var.cursor_x > -384 and var.cursor_x < -192 and var.cursor_y > -384 and var.cursor_y < -192):
		A1=target
		if A1 in target_list:
			attention=1
			A1=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 1)
			setattr(var, target_y, 1)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > -240 and var.cursor_x < -48 and var.cursor_y > -384 and var.cursor_y < -192):
		A2=target
		if A2 in target_list:
			attention=1
			A2=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 2)
			setattr(var, target_y, 1)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > -96 and var.cursor_x < 96 and var.cursor_y > -384 and var.cursor_y < -192):
		A3=target
		if A3 in target_list:
			attention=1
			A3=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 3)
			setattr(var, target_y, 1)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > 48 and var.cursor_x < 240 and var.cursor_y > -384 and var.cursor_y < -192):
		A4=target
		if A4 in target_list:
			attention=1
			A4=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 4)
			setattr(var, target_y, 1)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > 192 and var.cursor_x < 384 and var.cursor_y > -384 and var.cursor_y < -192):
		A5=target
		if A5 in target_list:
			attention=1
			A5=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 5)
			setattr(var, target_y, 1)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
			
			
	elif (var.cancel == 0 and var.cursor_x > -384 and var.cursor_x < -192 and var.cursor_y > -240 and var.cursor_y < -48):
		B1=target
		if B1 in target_list:
			attention=1
			B1=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 1)
			setattr(var, target_y, 2)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > -240 and var.cursor_x < -48 and var.cursor_y > -240 and var.cursor_y < -48):
		B2=target
		if B2 in target_list:
			attention=1
			B2=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 2)
			setattr(var, target_y, 2)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > -96 and var.cursor_x < 96 and var.cursor_y > -240 and var.cursor_y < -48):
		B3=target
		if B3 in target_list:
			attention=1
			B3=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 3)
			setattr(var, target_y, 2)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > 48 and var.cursor_x < 240 and var.cursor_y > -240 and var.cursor_y < -48):
		B4=target
		if B4 in target_list:
			attention=1
			B4=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 4)
			setattr(var, target_y, 2)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > 192 and var.cursor_x < 384 and var.cursor_y > -240 and var.cursor_y < -48):
		B5=target
		if B5 in target_list:
			attention=1
			B5=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 5)
			setattr(var, target_y, 2)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
			
	elif (var.cancel == 0 and var.cursor_x > -384 and var.cursor_x < -192 and var.cursor_y > -96 and var.cursor_y < 96):
		C1=target
		if C1 in target_list:
			attention=1
			C1=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 1)
			setattr(var, target_y, 3)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > -240 and var.cursor_x < -48 and var.cursor_y > -96 and var.cursor_y < 96):
		C2=target
		if C2 in target_list:
			attention=1
			C2=exp.pool[u'blank.png']
		else:	
			setattr(var, target_x, 2)
			setattr(var, target_y, 3)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > -96 and var.cursor_x < 96 and var.cursor_y > -96 and var.cursor_y < 96):
		C3=target
		if C3 in target_list:
			attention=1
			C3=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 3)
			setattr(var, target_y, 3)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > 48 and var.cursor_x < 240 and var.cursor_y > -96 and var.cursor_y < 96):
		C4=target
		if C4 in target_list:
			attention=1
			C4=exp.pool[u'blank.png']
		else:	
			setattr(var, target_x, 4)
			setattr(var, target_y, 3)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > 192 and var.cursor_x < 384 and var.cursor_y > -96 and var.cursor_y < 96):
		C5=target
		if C5 in target_list:
			attention=1
			C5=exp.pool[u'blank.png']
		else:	
			setattr(var, target_x, 5)
			setattr(var, target_y, 3)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
			
			
	elif (var.cancel == 0 and var.cursor_x > -384 and var.cursor_x < -192 and var.cursor_y > 48 and var.cursor_y < 240):
		D1=target
		if D1 in target_list:
			attention=1
			D1=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 1)
			setattr(var, target_y, 4)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > -240 and var.cursor_x < -48 and var.cursor_y > 48 and var.cursor_y < 240):
		D2=target
		if D2 in target_list:
			attention=1
			D2=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 2)
			setattr(var, target_y, 4)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > -96 and var.cursor_x < 96 and var.cursor_y > 48 and var.cursor_y < 240):
		D3=target
		if D3 in target_list:
			attention=1
			D3=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 3)
			setattr(var, target_y, 4)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > 48 and var.cursor_x < 240 and var.cursor_y > 48 and var.cursor_y < 240):
		D4=target
		if D4 in target_list:
			attention=1
			D4=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 4)
			setattr(var, target_y, 4)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > 192 and var.cursor_x < 384 and var.cursor_y > 48 and var.cursor_y < 240):
		D5=target
		if D5 in target_list:
			attention=1
			D5=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 5)
			setattr(var, target_y, 4)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
	
	elif (var.cancel == 0 and var.cursor_x > -384 and var.cursor_x < -192 and var.cursor_y >192 and var.cursor_y < 384):
		E1=target
		if E1 in target_list:
			attention=1
			E1=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 1)
			setattr(var, target_y, 5)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > -240 and var.cursor_x < -48 and var.cursor_y >192 and var.cursor_y < 384):
		E2=target
		if E2 in target_list:
			attention=1
			E2=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 2)
			setattr(var, target_y, 5)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > -96 and var.cursor_x < 96 and var.cursor_y > 192 and var.cursor_y < 384):
		E3=target
		if E3 in target_list:
			attention=1
			E3=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 3)
			setattr(var, target_y, 5)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > 48 and var.cursor_x < 240 and var.cursor_y > 192 and var.cursor_y < 384):
		E4=target
		if E4 in target_list:
			attention=1
			E4=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 4)
			setattr(var, target_y, 5)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > 192 and var.cursor_x < 384 and var.cursor_y > 192 and var.cursor_y < 384):
		E5=target
		if E5 in target_list:
			attention=1
			E5=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 5)
			setattr(var, target_y, 5)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')	
	elif (var.cancel == 1 and var.cursor_x > -384 and var.cursor_x < -192 and var.cursor_y > -384 and var.cursor_y < -192):
		if A1==exp.pool[u'A.png']:
			var.A_x='X'
			var.A_y='X'
		elif A1==exp.pool[u'B.png']:
			var.B_x='X'
			var.B_y='X'	
		elif A1==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'
		elif A1==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'
		elif A1==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif A1==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'
		elif A1==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif A1==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif A1==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif A1==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		A1=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > -240 and var.cursor_x < -48 and var.cursor_y > -384 and var.cursor_y < -192):
		if A2==exp.pool[u'A.png']:
			var.A_x='X'
			var.A_y='X'
		elif A2==exp.pool[u'B.png']:
			var.B_x='X'
			var.B_y='X'			
		elif A2==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif A2==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif A2==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif A2==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif A2==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif A2==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif A2==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif A2==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		A2=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > -96 and var.cursor_x < 96 and var.cursor_y > -384 and var.cursor_y < -192):
		if A3==exp.pool[u'A.png']:
			var.A_x='X'
			var.A_y='X'
		elif A3==exp.pool[u'B.png']:
			var.B_x='X'
			var.B_y='X'			
		elif A3==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif A3==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif A3==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif A3==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif A3==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif A3==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif A3==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif A3==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		A3=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > 48 and var.cursor_x < 240 and var.cursor_y > -384 and var.cursor_y < -192):
		if A4==exp.pool[u'A.png']:
			var.A_x='X'
			var.A_y='X'
		elif A4==exp.pool[u'B.png']:
			var.B_x='X'
			var.B_y='X'			
		elif A4==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif A4==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif A4==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif A4==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif A4==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif A4==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif A4==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif A4==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		A4=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > 192 and var.cursor_x < 384 and var.cursor_y > -384 and var.cursor_y < -192):
		if A5==exp.pool[u'A.png']:
			var.A_x='X'
			var.A_y='X'
		elif A5==exp.pool[u'B.png']:
			var.B_x='X'
			var.B_y='X'			
		elif A5==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif A5==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif A5==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif A5==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif A5==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif A5==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif A5==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif A5==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		A5=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	
	elif (var.cancel == 1 and var.cursor_x > -384 and var.cursor_x < -192 and var.cursor_y > -240 and var.cursor_y < -48):
		if B1==exp.pool[u'A.png']:
			var.A_x='X'
			var.A_y='X'
		elif B1==exp.pool[u'B.png']:
			var.B_x='X'
			var.B_y='X'			
		elif B1==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif B1==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif B1==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif B1==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif B1==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif B1==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif B1==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif B1==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		B1=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > -240 and var.cursor_x < -48 and var.cursor_y > -240 and var.cursor_y < -48):
		if B2==exp.pool[u'A.png']:
			var.A_x='X'
			var.A_y='X'
		elif B2==exp.pool[u'B.png']:
			var.B_x='X'
			var.B_y='X'			
		elif B2==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif B2==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif B2==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif B2==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif B2==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif B2==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif B2==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif B2==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		B2=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > -96 and var.cursor_x < 96 and var.cursor_y > -240 and var.cursor_y < -48):
		if B3==exp.pool[u'A.png']:
			var.A_x='X'
			var.A_y='X'
		elif B3==exp.pool[u'B.png']:
			var.B_x='X'
			var.B_y='X'			
		elif B3==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif B3==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif B3==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif B3==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif B3==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif B3==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif B3==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif B3==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		B3=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > 48 and var.cursor_x < 240 and var.cursor_y > -240 and var.cursor_y < -48):
		if B4==exp.pool[u'A.png']:
			var.A_x='X'
			var.A_y='X'
		elif B4==exp.pool[u'B.png']:
			var.B_x='X'
			var.B_y='X'			
		elif B4==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif B4==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif B4==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif B4==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif B4==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif B4==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif B4==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif B4==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		B4=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > 192 and var.cursor_x < 384 and var.cursor_y > -240 and var.cursor_y < -48):
		if B5==exp.pool[u'A.png']:
			var.A_x='X'
			var.A_y='X'
		elif B5==exp.pool[u'B.png']:
			var.B_x='X'
			var.B_y='X'			
		elif B5==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif B5==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif B5==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif B5==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif B5==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif B5==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif B5==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif B5==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		B5=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	
	
	elif (var.cancel == 1 and var.cursor_x > -384 and var.cursor_x < -192 and var.cursor_y > -96 and var.cursor_y < 96):
		if C1==exp.pool[u'A.png']:
			var.A_x='X'
			var.A_y='X'
		elif C1==exp.pool[u'B.png']:
			var.B_x='X'
			var.B_y='X'			
		elif C1==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif C1==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif C1==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif C1==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif C1==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif C1==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif C1==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif C1==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		C1=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > -240 and var.cursor_x < -48 and var.cursor_y > -96 and var.cursor_y < 96):
		if C2==exp.pool[u'A.png']:
			var.A_x='X'
			var.A_y='X'
		elif C2==exp.pool[u'B.png']:
			var.B_x='X'
			var.B_y='X'			
		elif C2==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif C2==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif C2==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif C2==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif C2==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif C2==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif C2==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif C2==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		C2=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > -96 and var.cursor_x < 96 and var.cursor_y > -96 and var.cursor_y < 96):
		if C3==exp.pool[u'A.png']:
			var.A_x='X'
			var.A_y='X'
		elif C3==exp.pool[u'B.png']:
			var.B_x='X'
			var.B_y='X'			
		elif C3==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif C3==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif C3==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif C3==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif C3==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif C3==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif C3==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif C3==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		C3=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > 48 and var.cursor_x < 240 and var.cursor_y > -96 and var.cursor_y < 96):
		if C4==exp.pool[u'A.png']:
			var.A_x='X'
			var.A_y='X'
		elif C4==exp.pool[u'B.png']:
			var.B_x='X'
			var.B_y='X'			
		elif C4==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif C4==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif C4==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif C4==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif C4==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif C4==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif C4==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif C4==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		C4=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > 192 and var.cursor_x < 384 and var.cursor_y > -96 and var.cursor_y < 96):
		if C5==exp.pool[u'A.png']:
			var.A_x='X'
			var.A_y='X'
		elif C5==exp.pool[u'B.png']:
			var.B_x='X'
			var.B_y='X'			
		elif C5==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif C5==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif C5==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif C5==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif C5==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif C5==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif C5==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif C5==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		C5=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
		
		
	elif (var.cancel == 1 and var.cursor_x > -384 and var.cursor_x < -192 and var.cursor_y > 48 and var.cursor_y < 240):
		if D1==exp.pool[u'A.png']:
			var.A_x='X'
			var.A_y='X'
		elif D1==exp.pool[u'B.png']:
			var.B_x='X'
			var.B_y='X'			
		elif D1==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif D1==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif D1==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif D1==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif D1==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif D1==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif D1==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif D1==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		D1=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > -240 and var.cursor_x < -48 and var.cursor_y > 48 and var.cursor_y < 240):
		if D2==exp.pool[u'A.png']:
			var.A_x='X'
			var.A_y='X'
		elif D2==exp.pool[u'B.png']:
			var.B_x='X'
			var.B_y='X'			
		elif D2==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif D2==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif D2==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif D2==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif D2==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif D2==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif D2==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif D2==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		D2=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > -96 and var.cursor_x < 96 and var.cursor_y > 48 and var.cursor_y < 240):
		if D3==exp.pool[u'A.png']:
			var.A_x='X'
			var.A_y='X'
		elif D3==exp.pool[u'B.png']:
			var.B_x='X'
			var.B_y='X'			
		elif D3==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif D3==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif D3==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif D3==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif D3==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif D3==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif D3==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif D3==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		D3=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > 48 and var.cursor_x < 240 and var.cursor_y > 48 and var.cursor_y < 240):
		if D4==exp.pool[u'A.png']:
			var.A_x='X'
			var.A_y='X'
		elif D4==exp.pool[u'B.png']:
			var.B_x='X'
			var.B_y='X'			
		elif D4==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif D4==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif D4==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif D4==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif D4==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif D4==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif D4==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif D4==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		D4=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > 192 and var.cursor_x < 384 and var.cursor_y > 48 and var.cursor_y < 240):
		if D5==exp.pool[u'A.png']:
			var.A_x='X'
			var.A_y='X'
		elif D5==exp.pool[u'B.png']:
			var.B_x='X'
			var.B_y='X'			
		elif D5==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif D5==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif D5==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif D5==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif D5==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif D5==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif D5==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif D5==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		D5=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	
	elif (var.cancel == 1 and var.cursor_x > -384 and var.cursor_x < -192 and var.cursor_y >192 and var.cursor_y < 384):
		if E1==exp.pool[u'A.png']:
			var.A_x='X'
			var.A_y='X'
		elif E1==exp.pool[u'B.png']:
			var.B_x='X'
			var.B_y='X'			
		elif E1==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif E1==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif E1==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif E1==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif E1==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif E1==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif E1==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif E1==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		E1=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > -240 and var.cursor_x < -48 and var.cursor_y >192 and var.cursor_y < 384):
		if E2==exp.pool[u'A.png']:
			var.A_x='X'
			var.A_y='X'
		elif E2==exp.pool[u'B.png']:
			var.B_x='X'
			var.B_y='X'			
		elif E2==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif E2==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif E2==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif E2==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif E2==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif E2==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif E2==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif E2==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		E2=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > -96 and var.cursor_x < 96 and var.cursor_y > 192 and var.cursor_y < 384):
		if E3==exp.pool[u'A.png']:
			var.A_x='X'
			var.A_y='X'
		elif E3==exp.pool[u'B.png']:
			var.B_x='X'
			var.B_y='X'			
		elif E3==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif E3==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif E3==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif E3==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif E3==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif E3==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif E3==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif E3==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		E3=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > 48 and var.cursor_x < 240 and var.cursor_y > 192 and var.cursor_y < 384):
		if E4==exp.pool[u'A.png']:
			var.A_x='X'
			var.A_y='X'
		elif E4==exp.pool[u'B.png']:
			var.B_x='X'
			var.B_y='X'			
		elif E4==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif E4==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif E4==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif E4==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif E4==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif E4==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif E4==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif E4==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		E4=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > 192 and var.cursor_x < 384 and var.cursor_y > 192 and var.cursor_y < 384):
		if E5==exp.pool[u'A.png']:
			var.A_x='X'
			var.A_y='X'
		elif E5==exp.pool[u'B.png']:
			var.B_x='X'
			var.B_y='X'			
		elif E5==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif E5==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif E5==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif E5==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif E5==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif E5==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif E5==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif E5==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		E5=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	else:
		target=exp.pool[u'blank.png']
		target_x='X_x'
		target_y='y_y'
		
	target_list = [A1, A2, A3, A4, A5, B1, B2, B3, B4, B5, C1, C2, C3, C4, C5, D1, D2, D3, D4, D5, E1, E2, E3, E4, E5]
	
	my_canvas.image(A1, x=-288, y=-288, scale=0.60)
	my_canvas.image(A2, x=-144, y=-288, scale=0.60)
	my_canvas.image(A3, x=0, y=-288, scale=0.60)
	my_canvas.image(A4, x=144, y=-288, scale=0.60)
	my_canvas.image(A5, x=288, y=-288, scale=0.60)
	
	my_canvas.image(B1, x=-288, y=-144, scale=0.60)
	my_canvas.image(B2, x=-144, y=-144, scale=0.60)
	my_canvas.image(B3, x=0, y=-144, scale=0.60)
	my_canvas.image(B4, x=144, y=-144, scale=0.60)
	my_canvas.image(B5, x=288, y=-144, scale=0.60)
	
	my_canvas.image(C1, x=-288, y=0, scale=0.60)
	my_canvas.image(C2, x=-144, y=0, scale=0.60)
	my_canvas.image(C3, x=0, y=0, scale=0.60)
	my_canvas.image(C4, x=144, y=0, scale=0.60)
	my_canvas.image(C5, x=288, y=-0, scale=0.60)
	
	my_canvas.image(D1, x=-288, y=144, scale=0.60)
	my_canvas.image(D2, x=-144, y=144, scale=0.60)
	my_canvas.image(D3, x=0, y=144, scale=0.60)
	my_canvas.image(D4, x=144, y=144, scale=0.60)
	my_canvas.image(D5, x=288, y=144, scale=0.60)
	
	my_canvas.image(E1, x=-288, y=288, scale=0.60)
	my_canvas.image(E2, x=-144, y=288, scale=0.60)
	my_canvas.image(E3, x=0, y=288, scale=0.60)
	my_canvas.image(E4, x=144, y=288, scale=0.60)
	my_canvas.image(E5, x=288, y=288, scale=0.60)
	
	my_canvas.image(CANC, x=-450, y=340, scale=0.2)
	
	if ((var.A_x != 'X') and (var.B_x != 'X') and (var.C_x != 'X') and (var.D_x != 'X') and (var.E_x != 'X') and (var.F_x != 'X') and (var.G_x != 'X') and (var.H_x != 'X') and (var.I_x != 'X') and (var.J_x != 'X')):
		my_canvas.image(VAL, x=450, y=340, scale=0.2)
	else: my_canvas.rect(425, 315, 50, 50, fill=True, penwidth=10, color='black')
	
	if (attention ==1):
		my_canvas.image(ATTENTION, x=450, y=340, scale=0.05)
	
	my_canvas.show()
	var.cancel=0       
	attention=0
	__end__
	set _prepare ""

define inline_script Place_1
	set description "Executes Python code"
	___run__
	
	if (var.cancel == 0 and var.cursor_x > -384 and var.cursor_x < -192 and var.cursor_y > -384 and var.cursor_y < -192):
		A1=target
		if A1 in target_list:
			attention=1
			A1=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 1)
			setattr(var, target_y, 1)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > -240 and var.cursor_x < -48 and var.cursor_y > -384 and var.cursor_y < -192):
		A2=target
		if A2 in target_list:
			attention=1
			A2=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 2)
			setattr(var, target_y, 1)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > -96 and var.cursor_x < 96 and var.cursor_y > -384 and var.cursor_y < -192):
		A3=target
		if A3 in target_list:
			attention=1
			A3=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 3)
			setattr(var, target_y, 1)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > 48 and var.cursor_x < 240 and var.cursor_y > -384 and var.cursor_y < -192):
		A4=target
		if A4 in target_list:
			attention=1
			A4=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 4)
			setattr(var, target_y, 1)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > 192 and var.cursor_x < 384 and var.cursor_y > -384 and var.cursor_y < -192):
		A5=target
		if A5 in target_list:
			attention=1
			A5=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 5)
			setattr(var, target_y, 1)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
			
			
	elif (var.cancel == 0 and var.cursor_x > -384 and var.cursor_x < -192 and var.cursor_y > -240 and var.cursor_y < -48):
		B1=target
		if B1 in target_list:
			attention=1
			B1=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 1)
			setattr(var, target_y, 2)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > -240 and var.cursor_x < -48 and var.cursor_y > -240 and var.cursor_y < -48):
		B2=target
		if B2 in target_list:
			attention=1
			B2=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 2)
			setattr(var, target_y, 2)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > -96 and var.cursor_x < 96 and var.cursor_y > -240 and var.cursor_y < -48):
		B3=target
		if B3 in target_list:
			attention=1
			B3=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 3)
			setattr(var, target_y, 2)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > 48 and var.cursor_x < 240 and var.cursor_y > -240 and var.cursor_y < -48):
		B4=target
		if B4 in target_list:
			attention=1
			B4=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 4)
			setattr(var, target_y, 2)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > 192 and var.cursor_x < 384 and var.cursor_y > -240 and var.cursor_y < -48):
		B5=target
		if B5 in target_list:
			attention=1
			B5=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 5)
			setattr(var, target_y, 2)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
			
	elif (var.cancel == 0 and var.cursor_x > -384 and var.cursor_x < -192 and var.cursor_y > -96 and var.cursor_y < 96):
		C1=target
		if C1 in target_list:
			attention=1
			C1=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 1)
			setattr(var, target_y, 3)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > -240 and var.cursor_x < -48 and var.cursor_y > -96 and var.cursor_y < 96):
		C2=target
		if C2 in target_list:
			attention=1
			C2=exp.pool[u'blank.png']
		else:	
			setattr(var, target_x, 2)
			setattr(var, target_y, 3)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > -96 and var.cursor_x < 96 and var.cursor_y > -96 and var.cursor_y < 96):
		C3=target
		if C3 in target_list:
			attention=1
			C3=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 3)
			setattr(var, target_y, 3)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > 48 and var.cursor_x < 240 and var.cursor_y > -96 and var.cursor_y < 96):
		C4=target
		if C4 in target_list:
			attention=1
			C4=exp.pool[u'blank.png']
		else:	
			setattr(var, target_x, 4)
			setattr(var, target_y, 3)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > 192 and var.cursor_x < 384 and var.cursor_y > -96 and var.cursor_y < 96):
		C5=target
		if C5 in target_list:
			attention=1
			C5=exp.pool[u'blank.png']
		else:	
			setattr(var, target_x, 5)
			setattr(var, target_y, 3)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
			
			
	elif (var.cancel == 0 and var.cursor_x > -384 and var.cursor_x < -192 and var.cursor_y > 48 and var.cursor_y < 240):
		D1=target
		if D1 in target_list:
			attention=1
			D1=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 1)
			setattr(var, target_y, 4)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > -240 and var.cursor_x < -48 and var.cursor_y > 48 and var.cursor_y < 240):
		D2=target
		if D2 in target_list:
			attention=1
			D2=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 2)
			setattr(var, target_y, 4)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > -96 and var.cursor_x < 96 and var.cursor_y > 48 and var.cursor_y < 240):
		D3=target
		if D3 in target_list:
			attention=1
			D3=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 3)
			setattr(var, target_y, 4)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > 48 and var.cursor_x < 240 and var.cursor_y > 48 and var.cursor_y < 240):
		D4=target
		if D4 in target_list:
			attention=1
			D4=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 4)
			setattr(var, target_y, 4)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > 192 and var.cursor_x < 384 and var.cursor_y > 48 and var.cursor_y < 240):
		D5=target
		if D5 in target_list:
			attention=1
			D5=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 5)
			setattr(var, target_y, 4)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
	
	elif (var.cancel == 0 and var.cursor_x > -384 and var.cursor_x < -192 and var.cursor_y >192 and var.cursor_y < 384):
		E1=target
		if E1 in target_list:
			attention=1
			E1=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 1)
			setattr(var, target_y, 5)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > -240 and var.cursor_x < -48 and var.cursor_y >192 and var.cursor_y < 384):
		E2=target
		if E2 in target_list:
			attention=1
			E2=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 2)
			setattr(var, target_y, 5)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > -96 and var.cursor_x < 96 and var.cursor_y > 192 and var.cursor_y < 384):
		E3=target
		if E3 in target_list:
			attention=1
			E3=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 3)
			setattr(var, target_y, 5)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > 48 and var.cursor_x < 240 and var.cursor_y > 192 and var.cursor_y < 384):
		E4=target
		if E4 in target_list:
			attention=1
			E4=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 4)
			setattr(var, target_y, 5)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > 192 and var.cursor_x < 384 and var.cursor_y > 192 and var.cursor_y < 384):
		E5=target
		if E5 in target_list:
			attention=1
			E5=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 5)
			setattr(var, target_y, 5)
			my_canvas.rect(400, 290, 100, 100, fill=True, penwidth=10, color='black')	
	
	elif (var.cancel == 1 and var.cursor_x > -384 and var.cursor_x < -192 and var.cursor_y > -384 and var.cursor_y < -192):
		if A1==exp.pool[u'A_prac.png']:
			var.A_prac_x='X'
			var.A_prac_y='X'
		elif A1==exp.pool[u'B_prac.png']:
			var.B_prac_x='X'
			var.B_prac_y='X'	
		elif A1==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'
		elif A1==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'
		elif A1==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif A1==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'
		elif A1==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif A1==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif A1==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif A1==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		A1=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > -240 and var.cursor_x < -48 and var.cursor_y > -384 and var.cursor_y < -192):
		if A2==exp.pool[u'A_prac.png']:
			var.A_prac_x='X'
			var.A_prac_y='X'
		elif A2==exp.pool[u'B_prac.png']:
			var.B_prac_x='X'
			var.B_prac_y='X'			
		elif A2==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif A2==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif A2==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif A2==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif A2==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif A2==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif A2==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif A2==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		A2=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > -96 and var.cursor_x < 96 and var.cursor_y > -384 and var.cursor_y < -192):
		if A3==exp.pool[u'A_prac.png']:
			var.A_prac_x='X'
			var.A_prac_y='X'
		elif A3==exp.pool[u'B_prac.png']:
			var.B_prac_x='X'
			var.B_prac_y='X'			
		elif A3==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif A3==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif A3==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif A3==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif A3==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif A3==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif A3==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif A3==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		A3=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > 48 and var.cursor_x < 240 and var.cursor_y > -384 and var.cursor_y < -192):
		if A4==exp.pool[u'A_prac.png']:
			var.A_prac_x='X'
			var.A_prac_y='X'
		elif A4==exp.pool[u'B_prac.png']:
			var.B_prac_x='X'
			var.B_prac_y='X'			
		elif A4==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif A4==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif A4==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif A4==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif A4==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif A4==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif A4==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif A4==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		A4=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > 192 and var.cursor_x < 384 and var.cursor_y > -384 and var.cursor_y < -192):
		if A5==exp.pool[u'A_prac.png']:
			var.A_prac_x='X'
			var.A_prac_y='X'
		elif A5==exp.pool[u'B_prac.png']:
			var.B_prac_x='X'
			var.B_prac_y='X'			
		elif A5==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif A5==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif A5==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif A5==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif A5==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif A5==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif A5==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif A5==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		A5=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	
	elif (var.cancel == 1 and var.cursor_x > -384 and var.cursor_x < -192 and var.cursor_y > -240 and var.cursor_y < -48):
		if B1==exp.pool[u'A_prac.png']:
			var.A_prac_x='X'
			var.A_prac_y='X'
		elif B1==exp.pool[u'B_prac.png']:
			var.B_prac_x='X'
			var.B_prac_y='X'			
		elif B1==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif B1==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif B1==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif B1==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif B1==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif B1==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif B1==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif B1==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		B1=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > -240 and var.cursor_x < -48 and var.cursor_y > -240 and var.cursor_y < -48):
		if B2==exp.pool[u'A_prac.png']:
			var.A_prac_x='X'
			var.A_prac_y='X'
		elif B2==exp.pool[u'B_prac.png']:
			var.B_prac_x='X'
			var.B_prac_y='X'			
		elif B2==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif B2==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif B2==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif B2==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif B2==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif B2==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif B2==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif B2==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		B2=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > -96 and var.cursor_x < 96 and var.cursor_y > -240 and var.cursor_y < -48):
		if B3==exp.pool[u'A_prac.png']:
			var.A_prac_x='X'
			var.A_prac_y='X'
		elif B3==exp.pool[u'B_prac.png']:
			var.B_prac_x='X'
			var.B_prac_y='X'			
		elif B3==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif B3==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif B3==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif B3==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif B3==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif B3==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif B3==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif B3==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		B3=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > 48 and var.cursor_x < 240 and var.cursor_y > -240 and var.cursor_y < -48):
		if B4==exp.pool[u'A_prac.png']:
			var.A_prac_x='X'
			var.A_prac_y='X'
		elif B4==exp.pool[u'B_prac.png']:
			var.B_prac_x='X'
			var.B_prac_y='X'			
		elif B4==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif B4==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif B4==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif B4==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif B4==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif B4==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif B4==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif B4==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		B4=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > 192 and var.cursor_x < 384 and var.cursor_y > -240 and var.cursor_y < -48):
		if B5==exp.pool[u'A_prac.png']:
			var.A_prac_x='X'
			var.A_prac_y='X'
		elif B5==exp.pool[u'B_prac.png']:
			var.B_prac_x='X'
			var.B_prac_y='X'			
		elif B5==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif B5==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif B5==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif B5==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif B5==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif B5==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif B5==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif B5==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		B5=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	
	
	elif (var.cancel == 1 and var.cursor_x > -384 and var.cursor_x < -192 and var.cursor_y > -96 and var.cursor_y < 96):
		if C1==exp.pool[u'A_prac.png']:
			var.A_prac_x='X'
			var.A_prac_y='X'
		elif C1==exp.pool[u'B_prac.png']:
			var.B_prac_x='X'
			var.B_prac_y='X'			
		elif C1==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif C1==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif C1==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif C1==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif C1==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif C1==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif C1==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif C1==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		C1=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > -240 and var.cursor_x < -48 and var.cursor_y > -96 and var.cursor_y < 96):
		if C2==exp.pool[u'A_prac.png']:
			var.A_prac_x='X'
			var.A_prac_y='X'
		elif C2==exp.pool[u'B_prac.png']:
			var.B_prac_x='X'
			var.B_prac_y='X'			
		elif C2==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif C2==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif C2==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif C2==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif C2==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif C2==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif C2==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif C2==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		C2=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > -96 and var.cursor_x < 96 and var.cursor_y > -96 and var.cursor_y < 96):
		if C3==exp.pool[u'A_prac.png']:
			var.A_prac_x='X'
			var.A_prac_y='X'
		elif C3==exp.pool[u'B_prac.png']:
			var.B_prac_x='X'
			var.B_prac_y='X'			
		elif C3==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif C3==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif C3==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif C3==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif C3==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif C3==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif C3==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif C3==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		C3=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > 48 and var.cursor_x < 240 and var.cursor_y > -96 and var.cursor_y < 96):
		if C4==exp.pool[u'A_prac.png']:
			var.A_prac_x='X'
			var.A_prac_y='X'
		elif C4==exp.pool[u'B_prac.png']:
			var.B_prac_x='X'
			var.B_prac_y='X'			
		elif C4==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif C4==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif C4==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif C4==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif C4==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif C4==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif C4==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif C4==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		C4=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > 192 and var.cursor_x < 384 and var.cursor_y > -96 and var.cursor_y < 96):
		if C5==exp.pool[u'A_prac.png']:
			var.A_prac_x='X'
			var.A_prac_y='X'
		elif C5==exp.pool[u'B_prac.png']:
			var.B_prac_x='X'
			var.B_prac_y='X'			
		elif C5==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif C5==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif C5==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif C5==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif C5==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif C5==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif C5==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif C5==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		C5=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
		
		
	elif (var.cancel == 1 and var.cursor_x > -384 and var.cursor_x < -192 and var.cursor_y > 48 and var.cursor_y < 240):
		if D1==exp.pool[u'A_prac.png']:
			var.A_prac_x='X'
			var.A_prac_y='X'
		elif D1==exp.pool[u'B_prac.png']:
			var.B_prac_x='X'
			var.B_prac_y='X'			
		elif D1==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif D1==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif D1==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif D1==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif D1==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif D1==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif D1==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif D1==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		D1=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > -240 and var.cursor_x < -48 and var.cursor_y > 48 and var.cursor_y < 240):
		if D2==exp.pool[u'A_prac.png']:
			var.A_prac_x='X'
			var.A_prac_y='X'
		elif D2==exp.pool[u'B_prac.png']:
			var.B_prac_x='X'
			var.B_prac_y='X'			
		elif D2==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif D2==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif D2==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif D2==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif D2==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif D2==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif D2==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif D2==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		D2=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > -96 and var.cursor_x < 96 and var.cursor_y > 48 and var.cursor_y < 240):
		if D3==exp.pool[u'A_prac.png']:
			var.A_prac_x='X'
			var.A_prac_y='X'
		elif D3==exp.pool[u'B_prac.png']:
			var.B_prac_x='X'
			var.B_prac_y='X'			
		elif D3==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif D3==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif D3==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif D3==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif D3==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif D3==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif D3==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif D3==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		D3=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > 48 and var.cursor_x < 240 and var.cursor_y > 48 and var.cursor_y < 240):
		if D4==exp.pool[u'A_prac.png']:
			var.A_prac_x='X'
			var.A_prac_y='X'
		elif D4==exp.pool[u'B_prac.png']:
			var.B_prac_x='X'
			var.B_prac_y='X'			
		elif D4==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif D4==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif D4==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif D4==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif D4==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif D4==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif D4==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif D4==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		D4=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > 192 and var.cursor_x < 384 and var.cursor_y > 48 and var.cursor_y < 240):
		if D5==exp.pool[u'A_prac.png']:
			var.A_prac_x='X'
			var.A_prac_y='X'
		elif D5==exp.pool[u'B_prac.png']:
			var.B_prac_x='X'
			var.B_prac_y='X'			
		elif D5==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif D5==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif D5==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif D5==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif D5==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif D5==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif D5==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif D5==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		D5=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	
	elif (var.cancel == 1 and var.cursor_x > -384 and var.cursor_x < -192 and var.cursor_y >192 and var.cursor_y < 384):
		if E1==exp.pool[u'A_prac.png']:
			var.A_prac_x='X'
			var.A_prac_y='X'
		elif E1==exp.pool[u'B_prac.png']:
			var.B_prac_x='X'
			var.B_prac_y='X'			
		elif E1==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif E1==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif E1==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif E1==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif E1==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif E1==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif E1==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif E1==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		E1=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > -240 and var.cursor_x < -48 and var.cursor_y >192 and var.cursor_y < 384):
		if E2==exp.pool[u'A_prac.png']:
			var.A_prac_x='X'
			var.A_prac_y='X'
		elif E2==exp.pool[u'B_prac.png']:
			var.B_prac_x='X'
			var.B_prac_y='X'			
		elif E2==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif E2==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif E2==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif E2==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif E2==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif E2==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif E2==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif E2==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		E2=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > -96 and var.cursor_x < 96 and var.cursor_y > 192 and var.cursor_y < 384):
		if E3==exp.pool[u'A_prac.png']:
			var.A_prac_x='X'
			var.A_prac_y='X'
		elif E3==exp.pool[u'B_prac.png']:
			var.B_prac_x='X'
			var.B_prac_y='X'			
		elif E3==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif E3==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif E3==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif E3==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif E3==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif E3==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif E3==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif E3==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		E3=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > 48 and var.cursor_x < 240 and var.cursor_y > 192 and var.cursor_y < 384):
		if E4==exp.pool[u'A_prac.png']:
			var.A_prac_x='X'
			var.A_prac_y='X'
		elif E4==exp.pool[u'B_prac.png']:
			var.B_prac_x='X'
			var.B_prac_y='X'			
		elif E4==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif E4==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif E4==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif E4==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif E4==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif E4==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif E4==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif E4==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		E4=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > 192 and var.cursor_x < 384 and var.cursor_y > 192 and var.cursor_y < 384):
		if E5==exp.pool[u'A_prac.png']:
			var.A_prac_x='X'
			var.A_prac_y='X'
		elif E5==exp.pool[u'B_prac.png']:
			var.B_prac_x='X'
			var.B_prac_y='X'			
		elif E5==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif E5==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif E5==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif E5==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif E5==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif E5==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		elif E5==exp.pool[u'I.png']:
			var.I_x='X'
			var.I_y='X'
		elif E5==exp.pool[u'J.png']:
			var.J_x='X'
			var.J_y='X'
		E5=exp.pool[u'blank.png']
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='black')
	else:
		target=exp.pool[u'blank.png']
		target_x='X_x'
		target_y='y_y'
	
	target_list = [A1, A2, A3, A4, A5, B1, B2, B3, B4, B5, C1, C2, C3, C4, C5, D1, D2, D3, D4, D5, E1, E2, E3, E4, E5]
	
	my_canvas.image(A1, x=-288, y=-288, scale=0.60)
	my_canvas.image(A2, x=-144, y=-288, scale=0.60)
	my_canvas.image(A3, x=0, y=-288, scale=0.60)
	my_canvas.image(A4, x=144, y=-288, scale=0.60)
	my_canvas.image(A5, x=288, y=-288, scale=0.60)
	
	my_canvas.image(B1, x=-288, y=-144, scale=0.60)
	my_canvas.image(B2, x=-144, y=-144, scale=0.60)
	my_canvas.image(B3, x=0, y=-144, scale=0.60)
	my_canvas.image(B4, x=144, y=-144, scale=0.60)
	my_canvas.image(B5, x=288, y=-144, scale=0.60)
	
	my_canvas.image(C1, x=-288, y=0, scale=0.60)
	my_canvas.image(C2, x=-144, y=0, scale=0.60)
	my_canvas.image(C3, x=0, y=0, scale=0.60)
	my_canvas.image(C4, x=144, y=0, scale=0.60)
	my_canvas.image(C5, x=288, y=-0, scale=0.60)
	
	my_canvas.image(D1, x=-288, y=144, scale=0.60)
	my_canvas.image(D2, x=-144, y=144, scale=0.60)
	my_canvas.image(D3, x=0, y=144, scale=0.60)
	my_canvas.image(D4, x=144, y=144, scale=0.60)
	my_canvas.image(D5, x=288, y=144, scale=0.60)
	
	my_canvas.image(E1, x=-288, y=288, scale=0.60)
	my_canvas.image(E2, x=-144, y=288, scale=0.60)
	my_canvas.image(E3, x=0, y=288, scale=0.60)
	my_canvas.image(E4, x=144, y=288, scale=0.60)
	my_canvas.image(E5, x=288, y=288, scale=0.60)
	
	my_canvas.image(CANC, x=-450, y=340, scale=0.2)
	
	if ((var.A_prac_x != 'X') and (var.B_prac_x != 'X')):
		my_canvas.image(VAL, x=450, y=340, scale=0.2)
	else: my_canvas.rect(425, 315, 50, 50, fill=True, penwidth=10, color='black')
	
	if (attention ==1):
		my_canvas.image(ATTENTION, x=450, y=340, scale=0.05)
	
	my_canvas.show()
	var.cancel=0       
	attention=0
	__end__
	set _prepare ""

define loop Prac
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 3
	set continuous no
	set break_if_on_first yes
	set break_if "[skip_to_test]=1"
	setcycle 0 Practice_trial 1
	setcycle 1 Practice_trial 2
	setcycle 2 Practice_trial 3
	run Practice

define sequence Practice
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_sketchpad_2 always
	run new_inline_script_2_1 always
	run new_sketchpad_2_1 always
	run new_inline_script_5 always
	run Answer_test_1 always
	run new_inline_script_4_1 always
	run new_sketchpad "[trial_distance]>0"
	run new_logger_3_1 always

define loop Recognition
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 16
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Recognition_trial 1
	setcycle 1 Recognition_trial 2
	setcycle 2 Recognition_trial 3
	setcycle 3 Recognition_trial 4
	setcycle 4 Recognition_trial 5
	setcycle 5 Recognition_trial 6
	setcycle 6 Recognition_trial 7
	setcycle 7 Recognition_trial 8
	setcycle 8 Recognition_trial 9
	setcycle 9 Recognition_trial 10
	setcycle 10 Recognition_trial 11
	setcycle 11 Recognition_trial 12
	setcycle 12 Recognition_trial 13
	setcycle 13 Recognition_trial 14
	setcycle 14 Recognition_trial 15
	setcycle 15 Recognition_trial 16
	run Recognition_1

define sequence Recognition_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_sketchpad_1_2 "[Recognition_trial]==1"
	run new_inline_script_2_2 always
	run new_inline_script_7 always
	run Answer_test_3_1 always
	run new_inline_script_10 always
	run new_sketchpad_7 always
	run new_sketchpad_5 "[Recognition_trial]==16"
	run new_logger_3_2 always

define loop Retrieval
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Retrieval_trial 1
	run Delayed_Recall

define inline_script Select
	set description "Executes Python code"
	___run__
	
	if (var.cursor_x > -498 and var.cursor_x < -402 and var.cursor_y > -328 and var.cursor_y < -232):
		my_canvas.rect(-498, -328, 96, 96, fill=False, penwidth=10, color='orange')
		target=exp.pool[u'%s.png' % (path1)]
		target_x = '%s_x' % (path1)
		target_y = '%s_y' % (path1)
	elif (var.cursor_x > -498 and var.cursor_x < -402 and var.cursor_y > -200 and var.cursor_y < -104):
		my_canvas.rect(-498, -200, 96, 96, fill=False, penwidth=10, color='orange')
		target=exp.pool[u'%s.png' % (path2)]
		target_x = '%s_x' % (path2)
		target_y = '%s_y' % (path2)
	elif (var.cursor_x > -498 and var.cursor_x < -402 and var.cursor_y > -72 and var.cursor_y < 24):
		my_canvas.rect(-498, -72, 96, 96, fill=False, penwidth=10, color='orange')
		target=exp.pool[u'%s.png' % (path3)]
		target_x = '%s_x' % (path3)
		target_y = '%s_y' % (path3)
	elif (var.cursor_x > -498 and var.cursor_x < -402 and var.cursor_y > 56 and var.cursor_y < 152):
		my_canvas.rect(-498, 56, 96, 96, fill=False, penwidth=10, color='orange')
		target=exp.pool[u'%s.png' % (path4)]
		target_x = '%s_x' % (path4)
		target_y = '%s_y' % (path4)
	elif (var.cursor_x > -498 and var.cursor_x < -402 and var.cursor_y > 184 and var.cursor_y < 280):
		my_canvas.rect(-498, 184, 96, 96, fill=False, penwidth=10, color='orange')
		target=exp.pool[u'%s.png' % (path5)]
		target_x = '%s_x' % (path5)
		target_y = '%s_y' % (path5)
		
		
	elif (var.cursor_x < 498 and var.cursor_x > 402 and var.cursor_y > -328 and var.cursor_y < -232):
		my_canvas.rect(402, -328, 96, 96, fill=False, penwidth=10, color='orange')
		target=exp.pool[u'%s.png' % (path6)]
		target_x = '%s_x' % (path6)
		target_y = '%s_y' % (path6)
	elif (var.cursor_x < 498 and var.cursor_x > 402 and var.cursor_y > -200 and var.cursor_y < -104):
		my_canvas.rect(402, -200, 96, 96, fill=False, penwidth=10, color='orange')
		target=exp.pool[u'%s.png' % (path7)]
		target_x = '%s_x' % (path7)
		target_y = '%s_y' % (path7)
	elif (var.cursor_x < 498 and var.cursor_x > 402 and var.cursor_y > -72 and var.cursor_y < 24):
		my_canvas.rect(402, -72, 96, 96, fill=False, penwidth=10, color='orange')
		target=exp.pool[u'%s.png' % (path8)]
		target_x = '%s_x' % (path8)
		target_y = '%s_y' % (path8)
	elif (var.cursor_x < 498 and var.cursor_x > 402 and var.cursor_y > 56 and var.cursor_y < 152):
		my_canvas.rect(402, 56, 96, 96, fill=False, penwidth=10, color='orange')
		target=exp.pool[u'%s.png' % (path9)]
		target_x = '%s_x' % (path9)
		target_y = '%s_y' % (path9)
	elif (var.cursor_x < 498 and var.cursor_x > 402 and var.cursor_y > 184 and var.cursor_y < 280):
		my_canvas.rect(402, 184, 96, 96, fill=False, penwidth=10, color='orange')
		target=exp.pool[u'%s.png' % (path10)]
		target_x = '%s_x' % (path10)
		target_y = '%s_y' % (path10)
	elif (var.cursor_x > -474 and var.cursor_x < -426 and var.cursor_y > 316 and var.cursor_y < 364):
		my_canvas.rect(-474, 316, 48, 48, fill=False, penwidth=10, color='red')
		var.cancel=1
	elif (var.cursor_x > 426 and var.cursor_x < 474 and var.cursor_y > 316 and var.cursor_y < 364) and ((var.A_x != 'X') and (var.B_x != 'X') and (var.C_x != 'X') and (var.D_x != 'X') and (var.E_x != 'X') and (var.F_x != 'X') and (var.G_x != 'X') and (var.H_x != 'X') and (var.I_x != 'X') and (var.J_x != 'X')):
			my_canvas.rect(426, 316, 48, 48, fill=False, penwidth=10, color='green')
			var.validate = 1
	else:
		target=exp.pool[u'blank.png']
		target_x='X_x'
		target_y='y_y'
	
	my_canvas.show()
	__end__
	set _prepare ""

define inline_script Select_1
	set description "Executes Python code"
	___run__
	
	if (var.cursor_x > -498 and var.cursor_x < -402 and var.cursor_y > -328 and var.cursor_y < -232):
		my_canvas.rect(-498, -328, 96, 96, fill=False, penwidth=10, color='orange')
		target=exp.pool[u'%s.png' % (path1)]
		target_x = '%s_x' % (path1)
		target_y = '%s_y' % (path1)
	elif (var.cursor_x < 498 and var.cursor_x > 402 and var.cursor_y > -328 and var.cursor_y < -232):
		my_canvas.rect(402, -328, 96, 96, fill=False, penwidth=10, color='orange')
		target=exp.pool[u'%s.png' % (path6)]
		target_x = '%s_x' % (path6)
		target_y = '%s_y' % (path6)
	elif (var.cursor_x > 426 and var.cursor_x < 474 and var.cursor_y > 316 and var.cursor_y < 364) and ((var.A_x != 'X') and (var.B_x != 'X')):
			my_canvas.rect(426, 316, 48, 48, fill=False, penwidth=10, color='green')
			var.validate = 1
	else:
		target=exp.pool[u'blank.png']
		target_x='X_x'
		target_y='y_y'
	
	my_canvas.show()
	
	print(target)
	__end__
	set _prepare ""

define inline_script Select_version
	set description "Executes Python code"
	___run__
		#delete previous selected images
	if u'A.png' in pool:
		del pool[u'A.png']
	if u'B.png' in pool:
		del pool[u'B.png']
	if u'C.png' in pool:
		del pool[u'C.png']
	if u'D.png' in pool:	
		del pool[u'D.png']
	if u'E.png' in pool:
		del pool[u'E.png']
	if u'F.png' in pool:
		del pool[u'F.png']
	if u'G.png' in pool:
		del pool[u'G.png']
	if u'H.png' in pool:
		del pool[u'H.png']
	if u'I.png' in pool:
		del pool[u'I.png']
	if u'J.png' in pool:
		del pool[u'J.png']
	
	
	if var.versie=='Versie 1':
			
		# set picture library
		pool.add(pool[u'A_1.png'], new_name=u'A.png')
		pool.add(pool[u'B_1.png'], new_name=u'B.png')
		pool.add(pool[u'C_1.png'], new_name=u'C.png')
		pool.add(pool[u'D_1.png'], new_name=u'D.png')
		pool.add(pool[u'E_1.png'], new_name=u'E.png')
		pool.add(pool[u'F_1.png'], new_name=u'F.png')
		pool.add(pool[u'G_1.png'], new_name=u'G.png')
		pool.add(pool[u'H_1.png'], new_name=u'H.png')
		pool.add(pool[u'J_1.png'], new_name=u'J.png')
		pool.add(pool[u'I_1.png'], new_name=u'I.png')
		
	if var.versie=='Versie 2':
		pool.add(pool[u'A_2.png'], new_name=u'A.png')
		pool.add(pool[u'B_2.png'], new_name=u'B.png')
		pool.add(pool[u'C_2.png'], new_name=u'C.png')
		pool.add(pool[u'D_2.png'], new_name=u'D.png')
		pool.add(pool[u'E_2.png'], new_name=u'E.png')
		pool.add(pool[u'F_2.png'], new_name=u'F.png')
		pool.add(pool[u'G_2.png'], new_name=u'G.png')
		pool.add(pool[u'H_2.png'], new_name=u'H.png')
		pool.add(pool[u'J_2.png'], new_name=u'J.png')
		pool.add(pool[u'I_2.png'], new_name=u'I.png')
		
	if var.versie=='Versie 3':
		pool.add(pool[u'A_3.png'], new_name=u'A.png')
		pool.add(pool[u'B_3.png'], new_name=u'B.png')
		pool.add(pool[u'C_3.png'], new_name=u'C.png')
		pool.add(pool[u'D_3.png'], new_name=u'D.png')
		pool.add(pool[u'E_3.png'], new_name=u'E.png')
		pool.add(pool[u'F_3.png'], new_name=u'F.png')
		pool.add(pool[u'G_3.png'], new_name=u'G.png')
		pool.add(pool[u'H_3.png'], new_name=u'H.png')
		pool.add(pool[u'J_3.png'], new_name=u'J.png')
		pool.add(pool[u'I_3.png'], new_name=u'I.png')
	
	f2=open(exp.experiment_path + "/selected_version.txt","w+")
	f2.write(var.versie)
	f2.close()
	__end__
	set _prepare ""

define inline_script Settings
	set description "Executes Python code"
	___run__
	import random
	from random import randint 
	from random import shuffle
	from PIL import ImageGrab
	import math
	     
	var.subject_nr = self.get("subject_nr")
	
	
	my_canvas = canvas()
	
	trial=0     
	var.trial_distance=0
	var.trial_distance_rounded=0
	
	var.encoding_distance=0
	var.encoding_distance_rounded=0
	
	var.retrieval_distance=0
	var.retrieval_distance_rounded=0
	
	var.recognition_correct = 0
	var.recognition_incorrect = 0
	var.recognition_fp = 0
	var.recognition_fn = 0
	
	var.validate=0
	var.cancel=0
	var.skip_to_test=0
	attention=0
	
	r=range(1,5)
	
	target=exp.pool[u'blank.png']
	
	var.A_prac_x=0
	var.B_prac_x=0
	var.A_x=0
	var.B_x=0
	var.C_x=0
	var.D_x=0
	var.E_x=0
	var.F_x=0
	var.G_x=0
	var.H_x=0
	var.I_x=0
	var.J_x=0
	
	CANC= exp.pool[u'cancel.png']
	VAL= exp.pool[u'validate.png']
	ATTENTION = exp.pool[u'attention.png']
	
	var.break_prac=0
	__end__
	set _prepare ""

define inline_script Settings_1
	set description "Executes Python code"
	___run__
	import random
	from random import randint 
	from random import shuffle
	from PIL import ImageGrab
	import math
	     
	var.subject_nr = self.get("subject_nr")
	
	my_canvas = canvas()
	
	trial=0     
	var.trial_distance=0
	var.trial_distance_rounded=0
	
	var.encoding_distance=0
	var.encoding_distance_rounded=0
	
	var.retrieval_distance=0
	var.retrieval_distance_rounded=0
	
	var.recognition_correct = 0
	var.recognition_incorrect = 0
	var.recognition_fp = 0
	var.recognition_fn = 0
	
	
	
	var.validate=0
	var.cancel=0
	var.skip_to_test=0
	
	r=range(1,5)
	
	var.A_x=0
	var.B_x=0
	var.C_x=0
	var.D_x=0
	var.E_x=0
	var.F_x=0
	var.G_x=0
	var.H_x=0
	__end__
	set _prepare ""

define inline_script Show_grid
	set description "Executes Python code"
	___run__
	my_canvas.clear()
	
	my_canvas.image(A1, x=-288, y=-288, scale=0.6)
	my_canvas.image(A2, x=-144, y=-288, scale=0.6)
	my_canvas.image(A3, x=0, y=-288, scale=0.6)
	my_canvas.image(A4, x=144, y=-288, scale=0.6)
	my_canvas.image(A5, x=288, y=-288, scale=0.6)
	
	my_canvas.image(B1, x=-288, y=-144, scale=0.6)
	my_canvas.image(B2, x=-144, y=-144, scale=0.6)
	my_canvas.image(B3, x=0, y=-144, scale=0.6)
	my_canvas.image(B4, x=144, y=-144, scale=0.6)
	my_canvas.image(B5, x=288, y=-144, scale=0.6)
	
	my_canvas.image(C1, x=-288, y=0, scale=0.6)
	my_canvas.image(C2, x=-144, y=0, scale=0.6)
	my_canvas.image(C3, x=0, y=0, scale=0.6)
	my_canvas.image(C4, x=144, y=0, scale=0.6)
	my_canvas.image(C5, x=288, y=-0, scale=0.6)
	
	my_canvas.image(D1, x=-288, y=144, scale=0.6)
	my_canvas.image(D2, x=-144, y=144, scale=0.6)
	my_canvas.image(D3, x=0, y=144, scale=0.6)
	my_canvas.image(D4, x=144, y=144, scale=0.6)
	my_canvas.image(D5, x=288, y=144, scale=0.6)
	
	my_canvas.image(E1, x=-288, y=288, scale=0.6)
	my_canvas.image(E2, x=-144, y=288, scale=0.6)
	my_canvas.image(E3, x=0, y=288, scale=0.6)
	my_canvas.image(E4, x=144, y=288, scale=0.6)
	my_canvas.image(E5, x=288, y=288, scale=0.6)
	
	my_canvas.image(CANC, x=-450, y=340, scale=0.2)
	#my_canvas.image(VAL, x=0, y=-300, scale=0.2)
	
	targets = ['A', 'B', 'C', 'D', 'E', 'F', 'G', 'H', 'I', 'J']
	shuffle(targets)
	
	
	path1 = targets[0]
	my_canvas.image(exp.pool[u'%s.png' % (path1)], x=-450, y=-280, scale=0.39)
	path2 = targets[1]
	my_canvas.image(exp.pool[u'%s.png' % (path2)], x=-450, y=-152, scale=0.39)
	path3 = targets[2]
	my_canvas.image(exp.pool[u'%s.png' % (path3)], x=-450, y=-24, scale=0.39)
	path4 = targets[3]
	my_canvas.image(exp.pool[u'%s.png' % (path4)], x=-450, y=104, scale=0.39)
	path5 = targets[4]
	my_canvas.image(exp.pool[u'%s.png' % (path5)], x=-450, y=232, scale=0.39)
	
	path6 = targets[5]
	my_canvas.image(exp.pool[u'%s.png' % (path6)], x=450, y=-280, scale=0.39)
	path7 = targets[6]
	my_canvas.image(exp.pool[u'%s.png' % (path7)], x=450, y=-152, scale=0.39)
	path8 = targets[7]
	my_canvas.image(exp.pool[u'%s.png' % (path8)], x=450, y=-24, scale=0.39)
	path9 = targets[8]
	my_canvas.image(exp.pool[u'%s.png' % (path9)], x=450, y=104, scale=0.39)
	path10 = targets[9]
	my_canvas.image(exp.pool[u'%s.png' % (path10)], x=450, y=232, scale=0.39)
	
	my_canvas.show()
	
	var.cancel = 0
	var.validate = 0
	__end__
	set _prepare ""

define inline_script Show_grid_1
	set description "Executes Python code"
	___run__
	my_canvas.clear()
	
	my_canvas.image(A1, x=-288, y=-288, scale=0.6)
	my_canvas.image(A2, x=-144, y=-288, scale=0.6)
	my_canvas.image(A3, x=0, y=-288, scale=0.6)
	my_canvas.image(A4, x=144, y=-288, scale=0.6)
	my_canvas.image(A5, x=288, y=-288, scale=0.6)
	
	my_canvas.image(B1, x=-288, y=-144, scale=0.6)
	my_canvas.image(B2, x=-144, y=-144, scale=0.6)
	my_canvas.image(B3, x=0, y=-144, scale=0.6)
	my_canvas.image(B4, x=144, y=-144, scale=0.6)
	my_canvas.image(B5, x=288, y=-144, scale=0.6)
	
	my_canvas.image(C1, x=-288, y=0, scale=0.6)
	my_canvas.image(C2, x=-144, y=0, scale=0.6)
	my_canvas.image(C3, x=0, y=0, scale=0.6)
	my_canvas.image(C4, x=144, y=0, scale=0.6)
	my_canvas.image(C5, x=288, y=-0, scale=0.6)
	
	my_canvas.image(D1, x=-288, y=144, scale=0.6)
	my_canvas.image(D2, x=-144, y=144, scale=0.6)
	my_canvas.image(D3, x=0, y=144, scale=0.6)
	my_canvas.image(D4, x=144, y=144, scale=0.6)
	my_canvas.image(D5, x=288, y=144, scale=0.6)
	
	my_canvas.image(E1, x=-288, y=288, scale=0.6)
	my_canvas.image(E2, x=-144, y=288, scale=0.6)
	my_canvas.image(E3, x=0, y=288, scale=0.6)
	my_canvas.image(E4, x=144, y=288, scale=0.6)
	my_canvas.image(E5, x=288, y=288, scale=0.6)
	
	my_canvas.image(CANC, x=-450, y=340, scale=0.2)
	#my_canvas.image(VAL, x=0, y=-300, scale=0.2)
	
	targets = ['A_prac', 'B_prac']
	shuffle(targets)
	
	
	path1 = targets[0]
	my_canvas.image(exp.pool[u'%s.png' % (path1)], x=-450, y=-280, scale=0.39)
	
	path6 = targets[1]
	my_canvas.image(exp.pool[u'%s.png' % (path6)], x=450, y=-280, scale=0.39)
	
	
	my_canvas.show()
	
	var.cancel = 0
	var.validate = 0
	__end__
	set _prepare ""

define inline_script Show_template
	set description "Executes Python code"
	___run__
	
	
	my_canvas.clear()
	
	my_canvas.image(A1, x=-288, y=-288, scale=0.60)
	my_canvas.image(A2, x=-144, y=-288, scale=0.60)
	my_canvas.image(A3, x=0, y=-288, scale=0.60)
	my_canvas.image(A4, x=144, y=-288, scale=0.60)
	my_canvas.image(A5, x=288, y=-288, scale=0.60)
	
	my_canvas.image(B1, x=-288, y=-144, scale=0.60)
	my_canvas.image(B2, x=-144, y=-144, scale=0.60)
	my_canvas.image(B3, x=0, y=-144, scale=0.60)
	my_canvas.image(B4, x=144, y=-144, scale=0.60)
	my_canvas.image(B5, x=288, y=-144, scale=0.60)
	
	my_canvas.image(C1, x=-288, y=0, scale=0.60)
	my_canvas.image(C2, x=-144, y=0, scale=0.60)
	my_canvas.image(C3, x=0, y=0, scale=0.60)
	my_canvas.image(C4, x=144, y=0, scale=0.60)
	my_canvas.image(C5, x=288, y=-0, scale=0.60)
	
	my_canvas.image(D1, x=-288, y=144, scale=0.60)
	my_canvas.image(D2, x=-144, y=144, scale=0.60)
	my_canvas.image(D3, x=0, y=144, scale=0.60)
	my_canvas.image(D4, x=144, y=144, scale=0.60)
	my_canvas.image(D5, x=288, y=144, scale=0.60)
	
	my_canvas.image(E1, x=-288, y=288, scale=0.60)
	my_canvas.image(E2, x=-144, y=288, scale=0.60)
	my_canvas.image(E3, x=0, y=288, scale=0.60)
	my_canvas.image(E4, x=144, y=288, scale=0.60)
	my_canvas.image(E5, x=288, y=288, scale=0.60)
	
	my_canvas.show() 
	
	self.sleep(15000)
	ImageGrab.grab().save(exp.experiment_path + "/../../../emma_toolbox_data/Raw/VisualMemory/Snaps/" + str(var.subject_nr) + "_Template.png", "PNG") 
	
	A1 = exp.pool[u'blank.png']
	A2 = exp.pool[u'blank.png']
	A3 = exp.pool[u'blank.png']
	A4 = exp.pool[u'blank.png']
	A5 = exp.pool[u'blank.png']
	
	B1 = exp.pool[u'blank.png']
	B2 = exp.pool[u'blank.png']
	B3 = exp.pool[u'blank.png']
	B4 = exp.pool[u'blank.png']
	B5 = exp.pool[u'blank.png']
	
	C1 = exp.pool[u'blank.png']
	C2 = exp.pool[u'blank.png']
	C3 = exp.pool[u'blank.png']
	C4 = exp.pool[u'blank.png']
	C5 = exp.pool[u'blank.png']
	
	D1 = exp.pool[u'blank.png']
	D2 = exp.pool[u'blank.png']
	D3 = exp.pool[u'blank.png']
	D4 = exp.pool[u'blank.png']
	D5 = exp.pool[u'blank.png']
	
	E1 = exp.pool[u'blank.png']
	E2 = exp.pool[u'blank.png']
	E3 = exp.pool[u'blank.png']
	E4 = exp.pool[u'blank.png']
	E5 = exp.pool[u'blank.png']
	
	target_list = [A1, A2, A3, A4, A5, B1, B2, B3, B4, B5, C1, C2, C3, C4, C5, D1, D2, D3, D4, D5, E1, E2, E3, E4, E5]
	
	var.A_x='X'
	var.B_x='X'
	var.C_x='X'
	var.D_x='X'
	var.E_x='X'
	var.F_x='X'
	var.G_x='X'
	var.H_x='X'
	var.I_x='X'
	var.J_x='X'
	__end__
	set _prepare ""

define inline_script Show_template_1
	set description "Executes Python code"
	___run__
	
	
	my_canvas.clear()
	
	my_canvas.image(A1, x=-288, y=-288, scale=0.60)
	my_canvas.image(A2, x=-144, y=-288, scale=0.60)
	my_canvas.image(A3, x=0, y=-288, scale=0.60)
	my_canvas.image(A4, x=144, y=-288, scale=0.60)
	my_canvas.image(A5, x=288, y=-288, scale=0.60)
	
	my_canvas.image(B1, x=-288, y=-144, scale=0.60)
	my_canvas.image(B2, x=-144, y=-144, scale=0.60)
	my_canvas.image(B3, x=0, y=-144, scale=0.60)
	my_canvas.image(B4, x=144, y=-144, scale=0.60)
	my_canvas.image(B5, x=288, y=-144, scale=0.60)
	
	my_canvas.image(C1, x=-288, y=0, scale=0.60)
	my_canvas.image(C2, x=-144, y=0, scale=0.60)
	my_canvas.image(C3, x=0, y=0, scale=0.60)
	my_canvas.image(C4, x=144, y=0, scale=0.60)
	my_canvas.image(C5, x=288, y=-0, scale=0.60)
	
	my_canvas.image(D1, x=-288, y=144, scale=0.60)
	my_canvas.image(D2, x=-144, y=144, scale=0.60)
	my_canvas.image(D3, x=0, y=144, scale=0.60)
	my_canvas.image(D4, x=144, y=144, scale=0.60)
	my_canvas.image(D5, x=288, y=144, scale=0.60)
	
	my_canvas.image(E1, x=-288, y=288, scale=0.60)
	my_canvas.image(E2, x=-144, y=288, scale=0.60)
	my_canvas.image(E3, x=0, y=288, scale=0.60)
	my_canvas.image(E4, x=144, y=288, scale=0.60)
	my_canvas.image(E5, x=288, y=288, scale=0.60)
	
	my_canvas.show() 
	
	self.sleep(15000)
	ImageGrab.grab().save(exp.experiment_path + "/../../../emma_toolbox_data/Raw/VisualMemory/Snaps/" + str(var.subject_nr) + "_Template.png", "PNG") 
	
	A1 = exp.pool[u'blank.png']
	A2 = exp.pool[u'blank.png']
	A3 = exp.pool[u'blank.png']
	A4 = exp.pool[u'blank.png']
	A5 = exp.pool[u'blank.png']
	
	B1 = exp.pool[u'blank.png']
	B2 = exp.pool[u'blank.png']
	B3 = exp.pool[u'blank.png']
	B4 = exp.pool[u'blank.png']
	B5 = exp.pool[u'blank.png']
	
	C1 = exp.pool[u'blank.png']
	C2 = exp.pool[u'blank.png']
	C3 = exp.pool[u'blank.png']
	C4 = exp.pool[u'blank.png']
	C5 = exp.pool[u'blank.png']
	
	D1 = exp.pool[u'blank.png']
	D2 = exp.pool[u'blank.png']
	D3 = exp.pool[u'blank.png']
	D4 = exp.pool[u'blank.png']
	D5 = exp.pool[u'blank.png']
	
	E1 = exp.pool[u'blank.png']
	E2 = exp.pool[u'blank.png']
	E3 = exp.pool[u'blank.png']
	E4 = exp.pool[u'blank.png']
	
	target_list = [A1, A2, A3, A4, A5, B1, B2, B3, B4, B5, C1, C2, C3, C4, C5, D1, D2, D3, D4, D5, E1, E2, E3, E4, E5]
	
	var.A_prac_x='X'
	var.B_prac_x='X'
	__end__
	set _prepare ""

define keyboard_response Start
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "k;v"

define sketchpad Start_
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="" x=416 y=320 z_index=0
	draw textline center=1 color="#ffffff" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Kinderen kies 'k'" x=-352 y=352 z_index=0
	draw textline center=1 color="#ffffff" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Volwassenen kies 'v'" x=339 y=355 z_index=0
	draw textline center=1 color="#ffffff" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Academic Medical Center<br />Emma Children's Hospital<br />Pediatric Neuroscience Group<br />m.konigs@amc.nl<br /><br />Unauthorized use of the Emma Toolbox is not allowed." x=9 y=183 z_index=0
	draw image center=1 file="amc.png" scale=1 show_if=always x=0 y=320 z_index=0
	draw textline center=1 color="#ffffff" font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Emma Toolbox<br /><i> Visual Memory </i>" x=5 y=-316 z_index=0
	draw image center=1 file="ET.png" scale=1 show_if=always x=0 y=-64 z_index=0

define sketchpad Start_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="" x=416 y=320 z_index=0
	draw textline center=1 color="#ffffff" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Academic Medical Center<br />Emma Children's Hospital<br />Pediatric Neuroscience Group<br />m.konigs@amc.nl<br /><br />Unauthorized use of the Emma Toolbox is not allowed." x=9 y=183 z_index=0
	draw image center=1 file="amc.png" scale=1 show_if=always x=0 y=320 z_index=0
	draw textline center=1 color="#ffffff" font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Emma Toolbox<br /><i> Visual Memory </i>" x=5 y=-316 z_index=0
	draw image center=1 file="ET.png" scale=1 show_if=always x=0 y=-64 z_index=0

define inline_script Template_Practice
	set description "Executes Python code"
	___run__
	A1 = exp.pool[u'blank.png']
	A2 = exp.pool[u'blank.png']
	A3 = exp.pool[u'blank.png']
	A4 = exp.pool[u'blank.png']
	A5 = exp.pool[u'A_prac.png']
	A_true_x = 5
	A_true_y = 1
	
	B1 = exp.pool[u'blank.png']
	B2 = exp.pool[u'blank.png']
	B3 = exp.pool[u'blank.png']
	B4 = exp.pool[u'blank.png']
	B5 =exp.pool[u'blank.png']
	
	C1 = exp.pool[u'blank.png']
	C2 = exp.pool[u'blank.png']
	C3 = exp.pool[u'blank.png']
	C4 = exp.pool[u'blank.png']
	C5 = exp.pool[u'blank.png']
	
	D1 = exp.pool[u'blank.png']
	D2 = exp.pool[u'blank.png']
	D3 = exp.pool[u'blank.png']
	D4 = exp.pool[u'blank.png']
	D5 = exp.pool[u'blank.png']
	
	E1 = exp.pool[u'blank.png']
	E2 = exp.pool[u'blank.png']
	E3 = exp.pool[u'blank.png']
	E4 = exp.pool[u'B_prac.png']
	B_true_x = 4
	B_true_y = 5
	E5 = exp.pool[u'blank.png']
	__end__
	set _prepare ""

define inline_script Template_Test_1
	set description "Executes Python code"
	___run__
	A1 = exp.pool[u'blank.png']
	A2 = exp.pool[u'A.png']
	A_true_x = 2
	A_true_y = 1
	A3 = exp.pool[u'blank.png']
	A4 = exp.pool[u'H.png']
	H_true_x = 4
	H_true_y = 1
	A5 = exp.pool[u'blank.png']
	
	B1 = exp.pool[u'E.png']
	E_true_x = 1
	E_true_y = 2
	B2 = exp.pool[u'blank.png']
	B3 = exp.pool[u'D.png']
	D_true_x = 3
	D_true_y = 2
	B4 = exp.pool[u'blank.png']
	B5 =exp.pool[u'blank.png']
	
	C1 = exp.pool[u'blank.png']
	C2 = exp.pool[u'F.png']
	F_true_x = 2
	F_true_y = 3
	C3 = exp.pool[u'blank.png']
	C4 = exp.pool[u'B.png']
	C5 = exp.pool[u'blank.png']
	B_true_x = 4
	B_true_y = 3
	
	D1 = exp.pool[u'G.png']
	G_true_x = 1
	G_true_y = 4
	D2 = exp.pool[u'blank.png']
	D3 = exp.pool[u'blank.png']
	D4 = exp.pool[u'C.png']
	C_true_x = 4
	C_true_y = 4
	D5 = exp.pool[u'blank.png']
	
	E1 = exp.pool[u'blank.png']
	E2 = exp.pool[u'I.png']
	I_true_x = 2
	I_true_y = 5
	E3 = exp.pool[u'blank.png']
	E4 = exp.pool[u'blank.png']
	E5 = exp.pool[u'J.png']
	J_true_x = 5
	J_true_y = 5
	__end__
	set _prepare ""

define inline_script Template_Test_v1
	set description "Executes Python code"
	___run__
	A1 = exp.pool[u'blank.png']
	A2 = exp.pool[u'A.png']
	A_true_x = 2
	A_true_y = 1
	A3 = exp.pool[u'blank.png']
	A4 = exp.pool[u'H.png']
	H_true_x = 4
	H_true_y = 1
	A5 = exp.pool[u'blank.png']
	
	B1 = exp.pool[u'E.png']
	E_true_x = 1
	E_true_y = 2
	B2 = exp.pool[u'blank.png']
	B3 = exp.pool[u'D.png']
	D_true_x = 3
	D_true_y = 2
	B4 = exp.pool[u'blank.png']
	B5 =exp.pool[u'blank.png']
	
	C1 = exp.pool[u'blank.png']
	C2 = exp.pool[u'F.png']
	F_true_x = 2
	F_true_y = 3
	C3 = exp.pool[u'blank.png']
	C4 = exp.pool[u'B.png']
	B_true_x = 4
	B_true_y = 3
	C5 = exp.pool[u'blank.png']
	
	D1 = exp.pool[u'G.png']
	G_true_x = 1
	G_true_y = 4
	D2 = exp.pool[u'blank.png']
	D3 = exp.pool[u'blank.png']
	D4 = exp.pool[u'C.png']
	C_true_x = 4
	C_true_y = 4
	D5 = exp.pool[u'blank.png']
	
	E1 = exp.pool[u'blank.png']
	E2 = exp.pool[u'I.png']
	I_true_x = 2
	I_true_y = 5
	E3 = exp.pool[u'blank.png']
	E4 = exp.pool[u'blank.png']
	E5 = exp.pool[u'J.png']
	J_true_x = 5
	J_true_y = 5
	__end__
	set _prepare ""

define inline_script Template_Test_v2
	set description "Executes Python code"
	___run__
	A1 = exp.pool[u'blank.png']
	A2 = exp.pool[u'G.png']
	G_true_x = 2
	G_true_y = 1
	A3 = exp.pool[u'blank.png']
	A4 = exp.pool[u'E.png']
	E_true_x = 4
	E_true_y = 1
	A5 = exp.pool[u'blank.png']
	
	B1 = exp.pool[u'I.png']
	I_true_x = 1
	I_true_y = 2
	B2 = exp.pool[u'blank.png']
	B3 = exp.pool[u'F.png']
	F_true_x = 3
	F_true_y = 2
	B4 = exp.pool[u'blank.png']
	B5 = exp.pool[u'A.png']
	A_true_x = 5
	A_true_y = 2
	
	C1 = exp.pool[u'blank.png']
	C2 = exp.pool[u'blank.png']
	C3 = exp.pool[u'blank.png']
	C4 = exp.pool[u'D.png']
	D_true_x = 4
	D_true_y = 3
	C5 = exp.pool[u'blank.png']
	
	D1 = exp.pool[u'blank.png']
	D2 = exp.pool[u'C.png']
	C_true_x = 2
	C_true_y = 4
	D3 = exp.pool[u'B.png']
	B_true_x = 3
	B_true_y = 4
	D4 = exp.pool[u'blank.png']
	D5 = exp.pool[u'H.png']
	H_true_x = 5
	H_true_y = 4
	
	E1 = exp.pool[u'J.png']
	J_true_x = 1
	J_true_y = 5
	E2 = exp.pool[u'blank.png']
	E3 = exp.pool[u'blank.png']
	E4 = exp.pool[u'blank.png']
	E5 = exp.pool[u'blank.png']
	__end__
	set _prepare ""

define inline_script Template_Test_v3
	set description "Executes Python code"
	___run__
	A1 = exp.pool[u'blank.png']
	A2 = exp.pool[u'blank.png']
	A3 = exp.pool[u'blank.png']
	A4 = exp.pool[u'blank.png']
	A5 = exp.pool[u'J.png']
	J_true_x = 5
	J_true_y = 1
	
	B1 = exp.pool[u'H.png']
	H_true_x = 1
	H_true_y = 2
	B2 = exp.pool[u'blank.png']
	B3 = exp.pool[u'B.png']
	B_true_x = 3
	B_true_y = 2
	B4 = exp.pool[u'C.png']
	C_true_x = 4
	C_true_y = 2
	B5 =exp.pool[u'blank.png']
	
	C1 = exp.pool[u'blank.png']
	C2 = exp.pool[u'D.png']
	D_true_x = 2
	D_true_y = 3
	C3 = exp.pool[u'blank.png']
	C4 = exp.pool[u'blank.png']
	C5 = exp.pool[u'blank.png']
	
	D1 = exp.pool[u'A.png']
	A_true_x = 1
	A_true_y = 4
	D2 = exp.pool[u'blank.png']
	D3 = exp.pool[u'F.png']
	F_true_x = 3
	F_true_y = 4
	D4 = exp.pool[u'blank.png']
	D5 = exp.pool[u'I.png']
	I_true_x = 5
	I_true_y = 4
	
	E1 = exp.pool[u'blank.png']
	E2 = exp.pool[u'E.png']
	E_true_x = 2
	E_true_y = 5
	E3 = exp.pool[u'blank.png']
	E4 = exp.pool[u'G.png']
	G_true_x = 4
	G_true_y = 5
	E5 = exp.pool[u'blank.png']
	__end__
	set _prepare ""

define form_multiple_choice Versie
	set timeout infinite
	set spacing 10
	set question "Welke versie wilt u uitvoeren?"
	__options__
	Versie 1
	Versie 2
	Versie 3
	__end__
	set margins "50;50;50;50"
	set form_var versie
	set form_title "Selecteer versie"
	set description "A simple multiple choice item"
	set button_text Volgende
	set allow_multiple no
	set advance_immediately no
	set _theme gray

define sketchpad Welcome
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Emma Toolbox<br /><i>Plaatjes</i>" x=0 y=0 z_index=0

define inline_script create_backup
	set description "Executes Python code"
	___run__
	import shutil
	
	shutil.copyfile(var.logfile, var.logfile + str('_backup'))
	__end__
	set _prepare ""

define inline_script mouse
	set description "Executes Python code"
	___run__
	my_mouse=mouse()
	my_mouse.show_cursor(show=True)
	
	while True:
		button, position, timestamp =my_mouse.get_click(timeout=100)
		if button is not None:
			break
		(var.cursor_x, var.cursor_y), time = my_mouse.get_pos()
	__end__
	set _prepare ""

define feedback new_feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="Trial: [trial_distance_rounded]<br />Total: [encoding_distance_rounded]" x=448 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="Trial: [Encoding_trial]/5" x=-384 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="<i>Druk op een knop om door te gaan</i>" x=0 y=0 z_index=0

define feedback new_feedback_1
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="Trial: [trial_distance_rounded]<br />Total: [encoding_distance_rounded]" x=448 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="Trial: [Encoding_trial]/5" x=-384 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="<i>Druk op een knop om door te gaan</i>" x=0 y=0 z_index=0

define inline_script new_inline_script_10
	set description "Executes Python code"
	___run__
	
	if var.answer==var.true_answer:
		var.recognition_correct=var.recognition_correct + 1
	elif var.answer!=var.true_answer:
		var.recognition_incorrect = var.recognition_incorrect +1
		if var.answer == 'correct' and var.true_answer == 'incorrect':
			var.recognition_fp = var.recognition_fp + 1
		elif var.answer == 'incorrect' and var.true_answer == 'correct':
			var.recognition_fn = var.recognition_fn +1
			
	var.validate=0
	
	my_mouse=mouse()
	my_mouse.set_pos(pos=(0,300))
	__end__
	set _prepare ""

define inline_script new_inline_script_1_1
	set description "Executes Python code"
	___run__
	
	if (var.cursor_x > -480 and var.cursor_x < -384 and var.cursor_y > -256 and var.cursor_y < -160):
		my_canvas.rect(-480, -256, 96, 96, fill=False, penwidth=10, color='grey')
		target=exp.pool[u'A_prac.png']
		target_x = 'A_x'  
		target_y = 'A_y'
	elif (var.cursor_x > -480 and var.cursor_x < -384 and var.cursor_y > -128 and var.cursor_y < 32):
		my_canvas.rect(-480, -128, 96, 96, fill=False, penwidth=10, color='grey')
		target=exp.pool[u'B_prac.png']
		target_x = 'B_x'
		target_y = 'B_y'
	elif (var.cursor_x > -24 and var.cursor_x < 24 and var.cursor_y > 276 and var.cursor_y < 324):
		my_canvas.rect(-24, 276, 48, 48, fill=False, penwidth=10, color='red')
		var.cancel=1
	elif (var.cursor_x > -24 and var.cursor_x < 24 and var.cursor_y > -324 and var.cursor_y < -276) and ((var.A_x in r) and (var.B_x in r)):
		my_canvas.rect(-24, -324, 48, 48, fill=False, penwidth=10, color='green')
		var.validate = 1
	else:
		target_x='X_x'
		target_y='y_y'
	
	my_canvas.show()
	
	print(target)
	__end__
	set _prepare ""

define inline_script new_inline_script_1_3
	set description "Executes Python code"
	___run__
	
	if (var.cursor_x > -480 and var.cursor_x < -384 and var.cursor_y > -256 and var.cursor_y < -160):
		my_canvas.rect(-480, -256, 96, 96, fill=False, penwidth=10, color='grey')
		target=exp.pool[u'A.png']
		target_x = 'A_x'
		target_y = 'A_y'
	elif (var.cursor_x > -480 and var.cursor_x < -384 and var.cursor_y > -128 and var.cursor_y < 32):
		my_canvas.rect(-480, -128, 96, 96, fill=False, penwidth=10, color='grey')
		target=exp.pool[u'B.png']
		target_x = 'B_x'
		target_y = 'B_y'
	elif (var.cursor_x > -480 and var.cursor_x < -384 and var.cursor_y > 0 and var.cursor_y < 96):
		my_canvas.rect(-480, 0, 96, 96, fill=False, penwidth=10, color='grey')
		target=exp.pool[u'C.png']
		target_x = 'C_x'
		target_y = 'C_y'
	elif (var.cursor_x > -480 and var.cursor_x < -384 and var.cursor_y > 128 and var.cursor_y < 224):
		my_canvas.rect(-480, 128, 96, 96, fill=False, penwidth=10, color='grey')
		target=exp.pool[u'D.png']
		target_x = 'D_x'
		target_y = 'D_y'
	elif (var.cursor_x < 480 and var.cursor_x > 384 and var.cursor_y > -256 and var.cursor_y < -160):
		my_canvas.rect(384, -256, 96, 96, fill=False, penwidth=10, color='grey')
		target=exp.pool[u'E.png']
		target_x = 'E_x'
		target_y = 'E_y'
	elif (var.cursor_x < 480 and var.cursor_x > 384 and var.cursor_y > -128 and var.cursor_y < 32):
		my_canvas.rect(384, -128, 96, 96, fill=False, penwidth=10, color='grey')
		target=exp.pool[u'F.png']
		target_x = 'F_x'
		target_y = 'F_y'
	elif (var.cursor_x < 480 and var.cursor_x > 384 and var.cursor_y > 0 and var.cursor_y < 96):
		my_canvas.rect(384, 0, 96, 96, fill=False, penwidth=10, color='grey')
		target=exp.pool[u'G.png']
		target_x = 'G_x'
		target_y = 'G_y'
	elif (var.cursor_x < 480 and var.cursor_x > 384 and var.cursor_y > 128 and var.cursor_y < 224):
		my_canvas.rect(384, 128, 96, 96, fill=False, penwidth=10, color='grey')
		target=exp.pool[u'H.png']
		target_x = 'H_x'
		target_y = 'H_y'
	elif (var.cursor_x > -24 and var.cursor_x < 24 and var.cursor_y > 276 and var.cursor_y < 324):
		my_canvas.rect(-24, 276, 48, 48, fill=False, penwidth=10, color='red')
		var.cancel=1
	elif (var.cursor_x > -24 and var.cursor_x < 24 and var.cursor_y > -324 and var.cursor_y < -276) and ((var.A_x in r) and (var.B_x in r) and (var.C_x in r) and (var.D_x in r) and (var.E_x in r) and (var.F_x in r) and (var.G_x in r) and (var.H_x in r)):
			my_canvas.rect(-24, -324, 48, 48, fill=False, penwidth=10, color='green')
			var.validate = 1
	else:
		target_x='X_x'
		target_y='y_y'
	
	my_canvas.show()
	
	print(target)
	__end__
	set _prepare ""

define inline_script new_inline_script_1_3_1
	set description "Executes Python code"
	___run__
	if (var.cursor_x > -100 and var.cursor_x < -50 and var.cursor_y > 276 and var.cursor_y < 324):
		my_canvas.rect(-100, 276, 48, 48, fill=False, penwidth=10, color='red')
		my_canvas.show()
		var.answer='incorrect'
		var.validate=1
	elif (var.cursor_x > -50 and var.cursor_x < 100 and var.cursor_y > 276 and var.cursor_y < 324):
		my_canvas.rect(50, 276, 48, 48, fill=False, penwidth=10, color='green')
		my_canvas.show()
		var.answer= 'correct'
		var.validate=1
		
	self.sleep(100)
	my_canvas.clear()
	__end__
	set _prepare ""

define inline_script new_inline_script_2_1
	set description "Executes Python code"
	___run__
	
	my_canvas.clear()
	
	target=exp.pool[u'blank.png']
	
	var.trial_distance=0
	
	A1 = exp.pool[u'A_prac.png']
	A_true_x = 1
	A_true_y = 1
	A2 = exp.pool[u'blank.png']
	A3 = exp.pool[u'blank.png']
	A4 = exp.pool[u'blank.png']
	
	B1 = exp.pool[u'blank.png']
	B2 = exp.pool[u'blank.png']
	B3 = exp.pool[u'blank.png']
	B4 = exp.pool[u'blank.png']
	
	C1 = exp.pool[u'blank.png']
	C2 = exp.pool[u'blank.png']
	C3 = exp.pool[u'blank.png']
	C4 = exp.pool[u'blank.png']
	
	D1 = exp.pool[u'blank.png']
	D2 = exp.pool[u'blank.png']
	D3 = exp.pool[u'blank.png']
	D4 = exp.pool[u'B_prac.png']
	B_true_x = 4
	B_true_y = 4     
	
	CANC= exp.pool[u'cancel.png']
	VAL= exp.pool[u'validate.png']
	ATTENTION = exp.pool[u'attention.png']
	
	my_canvas.image(A1, x=-144, y=-144, scale=0.4)
	my_canvas.image(A2, x=-48, y=-144, scale=0.4)
	my_canvas.image(A3, x=48, y=-144, scale=0.4)
	my_canvas.image(A4, x=144, y=-144, scale=0.4)
	
	my_canvas.image(B1, x=-144, y=-48, scale=0.4)
	my_canvas.image(B2, x=-48, y=-48, scale=0.4)
	my_canvas.image(B3, x=48, y=-48, scale=0.4)
	my_canvas.image(B4, x=144, y=-48, scale=0.4)
	
	my_canvas.image(C1, x=-144, y=48, scale=0.4)
	my_canvas.image(C2, x=-48, y=48, scale=0.4)
	my_canvas.image(C3, x=48, y=48, scale=0.4)
	my_canvas.image(C4, x=144, y=48, scale=0.4)
	
	my_canvas.image(D1, x=-144, y=144, scale=0.4)
	my_canvas.image(D2, x=-48, y=144, scale=0.4)
	my_canvas.image(D3, x=48, y=144, scale=0.4)
	my_canvas.image(D4, x=144, y=144, scale=0.4)
	
	my_canvas.show() 
	
	self.sleep(5000)
	
	A1 = exp.pool[u'blank.png']
	A2 = exp.pool[u'blank.png']
	A3 = exp.pool[u'blank.png']
	A4 = exp.pool[u'blank.png']
	B1 = exp.pool[u'blank.png']
	B2 = exp.pool[u'blank.png']
	B3 = exp.pool[u'blank.png']
	B4 = exp.pool[u'blank.png']
	C1 = exp.pool[u'blank.png']
	C2 = exp.pool[u'blank.png']
	C3 = exp.pool[u'blank.png']
	C4 = exp.pool[u'blank.png']
	D1 = exp.pool[u'blank.png']
	D2 = exp.pool[u'blank.png']
	D3 = exp.pool[u'blank.png']
	D4 = exp.pool[u'blank.png']
	
	target_list = [A1, A2, A3, A4, B1, B2, B3, B4, C1, C2, C3, C4, D1, D2, D3, D4]
	
	var.A_x='X'
	var.B_x='X'
	var.C_x='X'
	var.D_x='X'
	var.E_x='X'
	var.F_x='X'
	var.G_x='X'
	var.H_x='X'
	__end__
	set _prepare ""

define inline_script new_inline_script_2_2
	set description "Executes Python code"
	___run__
	
	
	my_canvas.clear()
	CANC= exp.pool[u'cancel.png']
	VAL= exp.pool[u'validate.png']
	target=exp.pool[u'blank.png']
	
	A1 = exp.pool[u'blank.png']
	A2 = exp.pool[u'blank.png']
	A3 = exp.pool[u'blank.png']
	A4 = exp.pool[u'blank.png']
	B1 = exp.pool[u'blank.png']
	B2 = exp.pool[u'blank.png']
	B3 = exp.pool[u'blank.png']
	B4 = exp.pool[u'blank.png']
	C1 = exp.pool[u'blank.png']
	C2 = exp.pool[u'blank.png']
	C3 = exp.pool[u'blank.png']
	C4 = exp.pool[u'blank.png']
	D1 = exp.pool[u'blank.png']
	D2 = exp.pool[u'blank.png']
	D3 = exp.pool[u'blank.png']
	D4 = exp.pool[u'blank.png']
	
	target_list = [A1, A2, A3, A4, B1, B2, B3, B4, C1, C2, C3, C4, D1, D2, D3, D4]
	
	var.A_x='X'
	var.B_x='X'
	var.C_x='X'
	var.D_x='X'
	var.E_x='X'
	var.F_x='X'
	var.G_x='X'
	var.H_x='X'
	__end__
	set _prepare ""

define inline_script new_inline_script_2_3
	set description "Executes Python code"
	___run__
	
	my_canvas.clear()
	CANC= exp.pool[u'cancel.png']
	VAL= exp.pool[u'validate.png']
	
	target=exp.pool[u'blank.png']
	
	
	A1 = exp.pool[u'blank.png']
	A2 = exp.pool[u'blank.png']
	A3 = exp.pool[u'blank.png']
	A4 = exp.pool[u'blank.png']
	B1 = exp.pool[u'blank.png']
	B2 = exp.pool[u'blank.png']
	B3 = exp.pool[u'blank.png']
	B4 = exp.pool[u'blank.png']
	C1 = exp.pool[u'blank.png']
	C2 = exp.pool[u'blank.png']
	C3 = exp.pool[u'blank.png']
	C4 = exp.pool[u'blank.png']
	D1 = exp.pool[u'blank.png']
	D2 = exp.pool[u'blank.png']
	D3 = exp.pool[u'blank.png']
	D4 = exp.pool[u'blank.png']
	
	target_list = [A1, A2, A3, A4, B1, B2, B3, B4, C1, C2, C3, C4, D1, D2, D3, D4]
	
	var.A_x='X'
	var.B_x='X'
	var.C_x='X'
	var.D_x='X'
	var.E_x='X'
	var.F_x='X'
	var.G_x='X'
	var.H_x='X'
	__end__
	set _prepare ""

define inline_script new_inline_script_3_1
	set description "Executes Python code"
	___run__
	
	if (var.cancel == 0 and var.cursor_x > -192 and var.cursor_x < -96 and var.cursor_y > -192 and var.cursor_y < -96):
		A1=target
		if A1 in target_list:
			my_canvas.image(ATTENTION, x=0, y=-250, scale=0.05)
			A1=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 1)
			setattr(var, target_y, 1)
			my_canvas.rect(-50, -300, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > -96 and var.cursor_x < 0 and var.cursor_y > -192 and var.cursor_y < -96):
		A2=target
		if A2 in target_list:
			my_canvas.image(ATTENTION, x=0, y=-250, scale=0.05)
			A2=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 2)
			setattr(var, target_y, 1)
			my_canvas.rect(-50, -300, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > 0 and var.cursor_x < 96 and var.cursor_y > -192 and var.cursor_y < -96):
		A3=target
		if A3 in target_list:
			my_canvas.image(ATTENTION, x=0, y=-250, scale=0.05)
			A3=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 3)
			setattr(var, target_y, 1)
			my_canvas.rect(-50, -300, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > 96 and var.cursor_x < 192 and var.cursor_y > -192 and var.cursor_y < -96):
		A4=target
		if A4 in target_list:
			my_canvas.image(ATTENTION, x=0, y=-250, scale=0.05)
			A4=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 4)
			setattr(var, target_y, 1)
			my_canvas.rect(-50, -300, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > -192 and var.cursor_x < -96 and var.cursor_y > -96 and var.cursor_y < 0):
		B1=target
		if B1 in target_list:
			my_canvas.image(ATTENTION, x=0, y=-250, scale=0.05)
			B1=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 1)
			setattr(var, target_y, 2)
			my_canvas.rect(-50, -300, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > -96 and var.cursor_x < 0 and var.cursor_y > -96 and var.cursor_y < 0):
		B2=target
		if B2 in target_list:
			my_canvas.image(ATTENTION, x=0, y=-250, scale=0.05)
			B2=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 2)
			setattr(var, target_y, 2)
			my_canvas.rect(-50, -300, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > 0 and var.cursor_x < 96 and var.cursor_y > -96 and var.cursor_y < 0):
		B3=target
		if B3 in target_list:
			my_canvas.image(ATTENTION, x=0, y=-250, scale=0.05)
			B3=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 3)
			setattr(var, target_y, 2)
			my_canvas.rect(-50, -300, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > 96 and var.cursor_x < 192 and var.cursor_y > -96 and var.cursor_y < 0):
		B4=target
		if B4 in target_list:
			my_canvas.image(ATTENTION, x=0, y=-250, scale=0.05)
			B4=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 4)
			setattr(var, target_y, 2)
			my_canvas.rect(-50, -300, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > -192 and var.cursor_x < -96 and var.cursor_y > 0 and var.cursor_y < 96):
		C1=target
		if C1 in target_list:
			my_canvas.image(ATTENTION, x=0, y=-250, scale=0.05)
			C1=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 1)
			setattr(var, target_y, 3)
			my_canvas.rect(-50, -300, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > -96 and var.cursor_x < 0 and var.cursor_y > 0 and var.cursor_y < 96):
		C2=target
		if C2 in target_list:
			my_canvas.image(ATTENTION, x=0, y=-250, scale=0.05)
			C2=exp.pool[u'blank.png']
		else:	
			setattr(var, target_x, 2)
			setattr(var, target_y, 3)
			my_canvas.rect(-50, -300, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > 0 and var.cursor_x < 96 and var.cursor_y > 0 and var.cursor_y < 96):
		C3=target
		if C3 in target_list:
			my_canvas.image(ATTENTION, x=0, y=-250, scale=0.05)
			C3=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 3)
			setattr(var, target_y, 3)
			my_canvas.rect(-50, -300, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > 96 and var.cursor_x < 192 and var.cursor_y > 0 and var.cursor_y < 96):
		C4=target
		if C4 in target_list:
			my_canvas.image(ATTENTION, x=0, y=-250, scale=0.05)
			C4=exp.pool[u'blank.png']
		else:	
			setattr(var, target_x, 4)
			setattr(var, target_y, 3)
			my_canvas.rect(-50, -300, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > -192 and var.cursor_x < -96 and var.cursor_y > 96 and var.cursor_y < 192):
		D1=target
		if D1 in target_list:
			my_canvas.image(ATTENTION, x=0, y=-250, scale=0.05)
			D1=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 1)
			setattr(var, target_y, 4)
			my_canvas.rect(-50, -300, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > -96 and var.cursor_x < 0 and var.cursor_y > 96 and var.cursor_y < 192):
		D2=target
		if D2 in target_list:
			my_canvas.image(ATTENTION, x=0, y=-250, scale=0.05)
			D2=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 2)
			setattr(var, target_y, 4)
			my_canvas.rect(-50, -300, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > 0 and var.cursor_x < 96 and var.cursor_y > 96 and var.cursor_y < 192):
		D3=target
		if D3 in target_list:
			my_canvas.image(ATTENTION, x=0, y=-250, scale=0.05)
			D3=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 3)
			setattr(var, target_y, 4)
			my_canvas.rect(-50, -300, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > 96 and var.cursor_x < 192 and var.cursor_y > 96 and var.cursor_y < 192):
		D4=target
		if D4 in target_list:
			my_canvas.image(ATTENTION, x=0, y=-250, scale=0.05)
			D4=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 4)
			setattr(var, target_y, 4)
			my_canvas.rect(-50, -300, 100, 100, fill=True, penwidth=10, color='black')
	
	if (var.cancel == 1 and var.cursor_x > -192 and var.cursor_x < -96 and var.cursor_y > -192 and var.cursor_y < -96):
		if A1==exp.pool[u'A.png']:
			var.A_x='X'
			var.A_y='X'
		elif A1==exp.pool[u'B.png']:
			var.B_x='X'
			var.B_y='X'	
		elif A1==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'
		elif A1==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'
		elif A1==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif A1==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'
		elif A1==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif A1==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		A1=exp.pool[u'blank.png']
		my_canvas.rect(-24, 276, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > -96 and var.cursor_x < 0 and var.cursor_y > -192 and var.cursor_y < -96):
		if A2==exp.pool[u'A_prac.png']:
			var.A_x='X'
			var.A_y='X'
		elif A2==exp.pool[u'B_prac.png']:
			var.B_x='X'
			var.B_y='X'			
		A2=exp.pool[u'blank.png']
		my_canvas.rect(-24, 276, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > 0 and var.cursor_x < 96 and var.cursor_y > -192 and var.cursor_y < -96):
		if A3==exp.pool[u'A_prac.png']:
			var.A_x='X'
			var.A_y='X'
		elif A3==exp.pool[u'B_prac.png']:
			var.B_x='X'
			var.B_y='X'			
		A3=exp.pool[u'blank.png']
		my_canvas.rect(-24, 276, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > 96 and var.cursor_x < 192 and var.cursor_y > -192 and var.cursor_y < -96):
		if A4==exp.pool[u'A_prac.png']:
			var.A_x='X'
			var.A_y='X'
		elif A4==exp.pool[u'B_prac.png']:
			var.B_x='X'
			var.B_y='X'			
		A4=exp.pool[u'blank.png']
		my_canvas.rect(-24, 276, 48, 48, fill=False, penwidth=10, color='black')
	
	elif (var.cancel == 1 and var.cursor_x > -192 and var.cursor_x < -96 and var.cursor_y > -96 and var.cursor_y < 0):
		if B1==exp.pool[u'A_prac.png']:
			var.A_x='X'
			var.A_y='X'
		elif B1==exp.pool[u'B_prac.png']:
			var.B_x='X'
			var.B_y='X'			
		B1=exp.pool[u'blank.png']
		my_canvas.rect(-24, 276, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > -96 and var.cursor_x < 0 and var.cursor_y > -96 and var.cursor_y < 0):
		if B2==exp.pool[u'A_prac.png']:
			var.A_x='X'
			var.A_y='X'
		elif B2==exp.pool[u'B_prac.png']:
			var.B_x='X'
			var.B_y='X'			
		B2=exp.pool[u'blank.png']
		my_canvas.rect(-24, 276, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > 0 and var.cursor_x < 96 and var.cursor_y > -96 and var.cursor_y < 0):
		if B3==exp.pool[u'A_prac.png']:
			var.A_x='X'
			var.A_y='X'
		elif B3==exp.pool[u'B_prac.png']:
			var.B_x='X'
			var.B_y='X'			
		B3=exp.pool[u'blank.png']
		my_canvas.rect(-24, 276, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > 96 and var.cursor_x < 192 and var.cursor_y > -96 and var.cursor_y < 0):
		if B4==exp.pool[u'A_prac.png']:
			var.A_x='X'
			var.A_y='X'
		elif B4==exp.pool[u'B_prac.png']:
			var.B_x='X'
			var.B_y='X'			
		B4=exp.pool[u'blank.png']
		my_canvas.rect(-24, 276, 48, 48, fill=False, penwidth=10, color='black')
	
	elif (var.cancel == 1 and var.cursor_x > -192 and var.cursor_x < -96 and var.cursor_y > 0 and var.cursor_y < 96):
		if C1==exp.pool[u'A_prac.png']:
			var.A_x='X'
			var.A_y='X'
		elif C1==exp.pool[u'B_prac.png']:
			var.B_x='X'
			var.B_y='X'			
	
		C1=exp.pool[u'blank.png']
		my_canvas.rect(-24, 276, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > -96 and var.cursor_x < 0 and var.cursor_y > 0 and var.cursor_y < 96):
		if C2==exp.pool[u'A_prac.png']:
			var.A_x='X'
			var.A_y='X'
		elif C2==exp.pool[u'B_prac.png']:
			var.B_x='X'
			var.B_y='X'			
		C2=exp.pool[u'blank.png']
		my_canvas.rect(-24, 276, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > 0 and var.cursor_x < 96 and var.cursor_y > 0 and var.cursor_y < 96):
		if C3==exp.pool[u'A_prac.png']:
			var.A_x='X'
			var.A_y='X'
		elif C3==exp.pool[u'B_prac.png']:
			var.B_x='X'
			var.B_y='X'			
		C3=exp.pool[u'blank.png']
		my_canvas.rect(-24, 276, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > 96 and var.cursor_x < 192 and var.cursor_y > 0 and var.cursor_y < 96):
		if C4==exp.pool[u'A_prac.png']:
			var.A_x='X'
			var.A_y='X'
		elif C4==exp.pool[u'B_prac.png']:
			var.B_x='X'
			var.B_y='X'			
		C4=exp.pool[u'blank.png']
		my_canvas.rect(-24, 276, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > -192 and var.cursor_x < -96 and var.cursor_y > 96 and var.cursor_y < 192):
		if D1==exp.pool[u'A_prac.png']:
			var.A_x='X'
			var.A_y='X'
		elif D1==exp.pool[u'B_prac.png']:
			var.B_x='X'
			var.B_y='X'			
		D1=exp.pool[u'blank.png']
		my_canvas.rect(-24, 276, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > -96 and var.cursor_x < 0 and var.cursor_y > 96 and var.cursor_y < 192):
		if D2==exp.pool[u'A_prac.png']:
			var.A_x='X'
			var.A_y='X'
		elif D2==exp.pool[u'B_prac.png']:
			var.B_x='X'
			var.B_y='X'			
		D2=exp.pool[u'blank.png']
		my_canvas.rect(-24, 276, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > 0 and var.cursor_x < 96 and var.cursor_y > 96 and var.cursor_y < 192):
		if D3==exp.pool[u'A_prac.png']:
			var.A_x='X'
			var.A_y='X'
		elif D3==exp.pool[u'B_prac.png']:
			var.B_x='X'
			var.B_y='X'			
		D3=exp.pool[u'blank.png']
		my_canvas.rect(-24, 276, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > 96 and var.cursor_x < 192 and var.cursor_y > 96 and var.cursor_y < 192):
		if D4==exp.pool[u'A_prac.png']:
			var.A_x='X'
			var.A_y='X'
		elif D4==exp.pool[u'B_prac.png']:
			var.B_x='X'
			var.B_y='X'			
		D4=exp.pool[u'blank.png']
		my_canvas.rect(-24, 276, 48, 48, fill=False, penwidth=10, color='black')
	
	target_list = [A1, A2, A3, A4, B1, B2, B3, B4, C1, C2, C3, C4, D1, D2, D3, D4]
	
	print(A1)
	
	my_canvas.image(A1, x=-144, y=-144, scale=0.39)
	my_canvas.image(A2, x=-48, y=-144, scale=0.39)
	my_canvas.image(A3, x=48, y=-144, scale=0.39)
	my_canvas.image(A4, x=144, y=-144, scale=0.39)
	
	my_canvas.image(B1, x=-144, y=-48, scale=0.39)
	my_canvas.image(B2, x=-48, y=-48, scale=0.39)
	my_canvas.image(B3, x=48, y=-48, scale=0.39)
	my_canvas.image(B4, x=144, y=-48, scale=0.39)
	
	my_canvas.image(C1, x=-144, y=48, scale=0.39)
	my_canvas.image(C2, x=-48, y=48, scale=0.39)
	my_canvas.image(C3, x=48, y=48, scale=0.39)
	my_canvas.image(C4, x=144, y=48, scale=0.39)
	
	my_canvas.image(D1, x=-144, y=144, scale=0.39)
	my_canvas.image(D2, x=-48, y=144, scale=0.39)
	my_canvas.image(D3, x=48, y=144, scale=0.39)
	my_canvas.image(D4, x=144, y=144, scale=0.39)
	
	if ((var.A_x in r) and (var.B_x in r)):
		my_canvas.image(VAL, x=0, y=-300, scale=0.2)
	else: my_canvas.rect(-25, -325, 50, 50, fill=True, penwidth=10, color='black')
	
	my_canvas.show()
	var.cancel=0       
	__end__
	set _prepare ""

define inline_script new_inline_script_3_3
	set description "Executes Python code"
	___run__
		
	if (var.cancel == 0 and var.cursor_x > -192 and var.cursor_x < -96 and var.cursor_y > -192 and var.cursor_y < -96):
		A1=target
		if A1 in target_list:
			my_canvas.image(ATTENTION, x=0, y=-250, scale=0.05)
			A1=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 1)
			setattr(var, target_y, 1)
			my_canvas.rect(-50, -300, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > -96 and var.cursor_x < 0 and var.cursor_y > -192 and var.cursor_y < -96):
		A2=target
		if A2 in target_list:
			my_canvas.image(ATTENTION, x=0, y=-250, scale=0.05)
			A2=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 2)
			setattr(var, target_y, 1)
			my_canvas.rect(-50, -300, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > 0 and var.cursor_x < 96 and var.cursor_y > -192 and var.cursor_y < -96):
		A3=target
		if A3 in target_list:
			my_canvas.image(ATTENTION, x=0, y=-250, scale=0.05)
			A3=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 3)
			setattr(var, target_y, 1)
			my_canvas.rect(-50, -300, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > 96 and var.cursor_x < 192 and var.cursor_y > -192 and var.cursor_y < -96):
		A4=target
		if A4 in target_list:
			my_canvas.image(ATTENTION, x=0, y=-250, scale=0.05)
			A4=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 4)
			setattr(var, target_y, 1)
			my_canvas.rect(-50, -300, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > -192 and var.cursor_x < -96 and var.cursor_y > -96 and var.cursor_y < 0):
		B1=target
		if B1 in target_list:
			my_canvas.image(ATTENTION, x=0, y=-250, scale=0.05)
			B1=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 1)
			setattr(var, target_y, 2)
			my_canvas.rect(-50, -300, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > -96 and var.cursor_x < 0 and var.cursor_y > -96 and var.cursor_y < 0):
		B2=target
		if B2 in target_list:
			my_canvas.image(ATTENTION, x=0, y=-250, scale=0.05)
			B2=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 2)
			setattr(var, target_y, 2)
			my_canvas.rect(-50, -300, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > 0 and var.cursor_x < 96 and var.cursor_y > -96 and var.cursor_y < 0):
		B3=target
		if B3 in target_list:
			my_canvas.image(ATTENTION, x=0, y=-250, scale=0.05)
			B3=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 3)
			setattr(var, target_y, 2)
			my_canvas.rect(-50, -300, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > 96 and var.cursor_x < 192 and var.cursor_y > -96 and var.cursor_y < 0):
		B4=target
		if B4 in target_list:
			my_canvas.image(ATTENTION, x=0, y=-250, scale=0.05)
			B4=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 4)
			setattr(var, target_y, 2)
			my_canvas.rect(-50, -300, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > -192 and var.cursor_x < -96 and var.cursor_y > 0 and var.cursor_y < 96):
		C1=target
		if C1 in target_list:
			my_canvas.image(ATTENTION, x=0, y=-250, scale=0.05)
			C1=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 1)
			setattr(var, target_y, 3)
			my_canvas.rect(-50, -300, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > -96 and var.cursor_x < 0 and var.cursor_y > 0 and var.cursor_y < 96):
		C2=target
		if C2 in target_list:
			my_canvas.image(ATTENTION, x=0, y=-250, scale=0.05)
			C2=exp.pool[u'blank.png']
		else:	
			setattr(var, target_x, 2)
			setattr(var, target_y, 3)
			my_canvas.rect(-50, -300, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > 0 and var.cursor_x < 96 and var.cursor_y > 0 and var.cursor_y < 96):
		C3=target
		if C3 in target_list:
			my_canvas.image(ATTENTION, x=0, y=-250, scale=0.05)
			C3=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 3)
			setattr(var, target_y, 3)
			my_canvas.rect(-50, -300, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > 96 and var.cursor_x < 192 and var.cursor_y > 0 and var.cursor_y < 96):
		C4=target
		if C4 in target_list:
			my_canvas.image(ATTENTION, x=0, y=-250, scale=0.05)
			C4=exp.pool[u'blank.png']
		else:	
			setattr(var, target_x, 4)
			setattr(var, target_y, 3)
			my_canvas.rect(-50, -300, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > -192 and var.cursor_x < -96 and var.cursor_y > 96 and var.cursor_y < 192):
		D1=target
		if D1 in target_list:
			my_canvas.image(ATTENTION, x=0, y=-250, scale=0.05)
			D1=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 1)
			setattr(var, target_y, 4)
			my_canvas.rect(-50, -300, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > -96 and var.cursor_x < 0 and var.cursor_y > 96 and var.cursor_y < 192):
		D2=target
		if D2 in target_list:
			my_canvas.image(ATTENTION, x=0, y=-250, scale=0.05)
			D2=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 2)
			setattr(var, target_y, 4)
			my_canvas.rect(-50, -300, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > 0 and var.cursor_x < 96 and var.cursor_y > 96 and var.cursor_y < 192):
		D3=target
		if D3 in target_list:
			my_canvas.image(ATTENTION, x=0, y=-250, scale=0.05)
			D3=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 3)
			setattr(var, target_y, 4)
			my_canvas.rect(-50, -300, 100, 100, fill=True, penwidth=10, color='black')
	elif (var.cancel == 0 and var.cursor_x > 96 and var.cursor_x < 192 and var.cursor_y > 96 and var.cursor_y < 192):
		D4=target
		if D4 in target_list:
			my_canvas.image(ATTENTION, x=0, y=-250, scale=0.05)
			D4=exp.pool[u'blank.png']
		else:
			setattr(var, target_x, 4)
			setattr(var, target_y, 4)
			my_canvas.rect(-50, -300, 100, 100, fill=True, penwidth=10, color='black')
	
	if (var.cancel == 1 and var.cursor_x > -192 and var.cursor_x < -96 and var.cursor_y > -192 and var.cursor_y < -96):
		if A1==exp.pool[u'A.png']:
			var.A_x='X'
			var.A_y='X'
		elif A1==exp.pool[u'B.png']:
			var.B_x='X'
			var.B_y='X'	
		elif A1==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'
		elif A1==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'
		elif A1==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif A1==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'
		elif A1==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif A1==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		A1=exp.pool[u'blank.png']
		my_canvas.rect(-24, 276, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > -96 and var.cursor_x < 0 and var.cursor_y > -192 and var.cursor_y < -96):
		if A2==exp.pool[u'A.png']:
			var.A_x='X'
			var.A_y='X'
		elif A2==exp.pool[u'B.png']:
			var.B_x='X'
			var.B_y='X'			
		elif A2==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif A2==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif A2==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif A2==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif A2==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif A2==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		A2=exp.pool[u'blank.png']
		my_canvas.rect(-24, 276, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > 0 and var.cursor_x < 96 and var.cursor_y > -192 and var.cursor_y < -96):
		if A3==exp.pool[u'A.png']:
			var.A_x='X'
			var.A_y='X'
		elif A3==exp.pool[u'B.png']:
			var.B_x='X'
			var.B_y='X'			
		elif A3==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif A3==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif A3==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif A3==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif A3==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif A3==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		A3=exp.pool[u'blank.png']
		my_canvas.rect(-24, 276, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > 96 and var.cursor_x < 192 and var.cursor_y > -192 and var.cursor_y < -96):
		if A4==exp.pool[u'A.png']:
			var.A_x='X'
			var.A_y='X'
		elif A4==exp.pool[u'B.png']:
			var.B_x='X'
			var.B_y='X'			
		elif A4==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif A4==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif A4==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif A4==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif A4==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif A4==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		A4=exp.pool[u'blank.png']
		my_canvas.rect(-24, 276, 48, 48, fill=False, penwidth=10, color='black')
	
	elif (var.cancel == 1 and var.cursor_x > -192 and var.cursor_x < -96 and var.cursor_y > -96 and var.cursor_y < 0):
		if B1==exp.pool[u'A.png']:
			var.A_x='X'
			var.A_y='X'
		elif B1==exp.pool[u'B.png']:
			var.B_x='X'
			var.B_y='X'			
		elif B1==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif B1==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif B1==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif B1==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif B1==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif B1==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		B1=exp.pool[u'blank.png']
		my_canvas.rect(-24, 276, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > -96 and var.cursor_x < 0 and var.cursor_y > -96 and var.cursor_y < 0):
		if B2==exp.pool[u'A.png']:
			var.A_x='X'
			var.A_y='X'
		elif B2==exp.pool[u'B.png']:
			var.B_x='X'
			var.B_y='X'			
		elif B2==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif B2==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif B2==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif B2==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif B2==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif B2==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		B2=exp.pool[u'blank.png']
		my_canvas.rect(-24, 276, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > 0 and var.cursor_x < 96 and var.cursor_y > -96 and var.cursor_y < 0):
		if B3==exp.pool[u'A.png']:
			var.A_x='X'
			var.A_y='X'
		elif B3==exp.pool[u'B.png']:
			var.B_x='X'
			var.B_y='X'			
		elif B3==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif B3==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif B3==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif B3==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif B3==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif B3==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		B3=exp.pool[u'blank.png']
		my_canvas.rect(-24, 276, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > 96 and var.cursor_x < 192 and var.cursor_y > -96 and var.cursor_y < 0):
		if B4==exp.pool[u'A.png']:
			var.A_x='X'
			var.A_y='X'
		elif B4==exp.pool[u'B.png']:
			var.B_x='X'
			var.B_y='X'			
		elif B4==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif B4==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif B4==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif B4==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif B4==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif B4==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		B4=exp.pool[u'blank.png']
		my_canvas.rect(-24, 276, 48, 48, fill=False, penwidth=10, color='black')
	
	elif (var.cancel == 1 and var.cursor_x > -192 and var.cursor_x < -96 and var.cursor_y > 0 and var.cursor_y < 96):
		if C1==exp.pool[u'A.png']:
			var.A_x='X'
			var.A_y='X'
		elif C1==exp.pool[u'B.png']:
			var.B_x='X'
			var.B_y='X'			
		elif C1==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif C1==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif C1==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif C1==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif C1==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif C1==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		C1=exp.pool[u'blank.png']
		my_canvas.rect(-24, 276, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > -96 and var.cursor_x < 0 and var.cursor_y > 0 and var.cursor_y < 96):
		if C2==exp.pool[u'A.png']:
			var.A_x='X'
			var.A_y='X'
		elif C2==exp.pool[u'B.png']:
			var.B_x='X'
			var.B_y='X'			
		elif C2==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif C2==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif C2==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif C2==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif C2==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif C2==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		C2=exp.pool[u'blank.png']
		my_canvas.rect(-24, 276, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > 0 and var.cursor_x < 96 and var.cursor_y > 0 and var.cursor_y < 96):
		if C3==exp.pool[u'A.png']:
			var.A_x='X'
			var.A_y='X'
		elif C3==exp.pool[u'B.png']:
			var.B_x='X'
			var.B_y='X'			
		elif C3==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif C3==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif C3==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif C3==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif C3==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif C3==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		C3=exp.pool[u'blank.png']
		my_canvas.rect(-24, 276, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > 96 and var.cursor_x < 192 and var.cursor_y > 0 and var.cursor_y < 96):
		if C4==exp.pool[u'A.png']:
			var.A_x='X'
			var.A_y='X'
		elif C4==exp.pool[u'B.png']:
			var.B_x='X'
			var.B_y='X'			
		elif C4==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif C4==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif C4==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif C4==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif C4==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif C4==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		C4=exp.pool[u'blank.png']
		my_canvas.rect(-24, 276, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > -192 and var.cursor_x < -96 and var.cursor_y > 96 and var.cursor_y < 192):
		if D1==exp.pool[u'A.png']:
			var.A_x='X'
			var.A_y='X'
		elif D1==exp.pool[u'B.png']:
			var.B_x='X'
			var.B_y='X'			
		elif D1==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif D1==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif D1==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif D1==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif D1==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif D1==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		D1=exp.pool[u'blank.png']
		my_canvas.rect(-24, 276, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > -96 and var.cursor_x < 0 and var.cursor_y > 96 and var.cursor_y < 192):
		if D2==exp.pool[u'A.png']:
			var.A_x='X'
			var.A_y='X'
		elif D2==exp.pool[u'B.png']:
			var.B_x='X'
			var.B_y='X'			
		elif D2==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif D2==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif D2==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif D2==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif D2==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif D2==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		D2=exp.pool[u'blank.png']
		my_canvas.rect(-24, 276, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > 0 and var.cursor_x < 96 and var.cursor_y > 96 and var.cursor_y < 192):
		if D3==exp.pool[u'A.png']:
			var.A_x='X'
			var.A_y='X'
		elif D3==exp.pool[u'B.png']:
			var.B_x='X'
			var.B_y='X'			
		elif D3==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif D3==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif D3==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif D3==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif D3==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif D3==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		D3=exp.pool[u'blank.png']
		my_canvas.rect(-24, 276, 48, 48, fill=False, penwidth=10, color='black')
	elif (var.cancel == 1 and var.cursor_x > 96 and var.cursor_x < 192 and var.cursor_y > 96 and var.cursor_y < 192):
		if D4==exp.pool[u'A.png']:
			var.A_x='X'
			var.A_y='X'
		elif D4==exp.pool[u'B.png']:
			var.B_x='X'
			var.B_y='X'			
		elif D4==exp.pool[u'C.png']:
			var.C_x='X'
			var.C_y='X'			
		elif D4==exp.pool[u'D.png']:
			var.D_x='X'
			var.D_y='X'	
		elif D4==exp.pool[u'E.png']:
			var.E_x='X'
			var.E_y='X'
		elif D4==exp.pool[u'F.png']:
			var.F_x='X'
			var.F_y='X'	
		elif D4==exp.pool[u'G.png']:
			var.G_x='X'
			var.G_y='X'
		elif D4==exp.pool[u'H.png']:
			var.H_x='X'
			var.H_y='X'
		D4=exp.pool[u'blank.png']
		my_canvas.rect(-24, 276, 48, 48, fill=False, penwidth=10, color='black')
	
	target_list = [A1, A2, A3, A4, B1, B2, B3, B4, C1, C2, C3, C4, D1, D2, D3, D4]
	
	print(A1)
	
	my_canvas.image(A1, x=-144, y=-144, scale=0.39)
	my_canvas.image(A2, x=-48, y=-144, scale=0.39)
	my_canvas.image(A3, x=48, y=-144, scale=0.39)
	my_canvas.image(A4, x=144, y=-144, scale=0.39)
	
	my_canvas.image(B1, x=-144, y=-48, scale=0.39)
	my_canvas.image(B2, x=-48, y=-48, scale=0.39)
	my_canvas.image(B3, x=48, y=-48, scale=0.39)
	my_canvas.image(B4, x=144, y=-48, scale=0.39)
	
	my_canvas.image(C1, x=-144, y=48, scale=0.39)
	my_canvas.image(C2, x=-48, y=48, scale=0.39)
	my_canvas.image(C3, x=48, y=48, scale=0.39)
	my_canvas.image(C4, x=144, y=48, scale=0.39)
	
	my_canvas.image(D1, x=-144, y=144, scale=0.39)
	my_canvas.image(D2, x=-48, y=144, scale=0.39)
	my_canvas.image(D3, x=48, y=144, scale=0.39)
	my_canvas.image(D4, x=144, y=144, scale=0.39)
	
	if ((var.A_x in r) and (var.B_x in r) and (var.C_x in r) and (var.D_x in r) and (var.E_x in r) and (var.F_x in r) and (var.G_x in r) and (var.H_x in r)):
		my_canvas.image(VAL, x=0, y=-300, scale=0.2)
	else: my_canvas.rect(-25, -325, 50, 50, fill=True, penwidth=10, color='black')
	
	my_canvas.show()
	var.cancel=0       
	__end__
	set _prepare ""

define inline_script new_inline_script_4_1
	set description "Executes Python code"
	___run__
	
	var.A_distance=math.sqrt(math.pow((var.A_x - A_true_x),2) + math.pow((var.A_y - A_true_y),2))
	var.B_distance=math.sqrt(math.pow((var.B_x - B_true_x),2) + math.pow((var.B_y - B_true_y),2))
	
	var.trial_distance = var.A_distance + var.B_distance
	var.trial_distance_rounded = round(var.trial_distance,1)
	
	if var.trial_distance==0:
		var.skip_to_test=1
	
	my_canvas.clear()
	 
	__end__
	set _prepare ""

define inline_script new_inline_script_4_2
	set description "Executes Python code"
	___run__
	
	var.A_distance=math.sqrt(math.pow((var.A_prac_x - A_true_x),2) + math.pow((var.A_prac_y - A_true_y),2))
	var.B_distance=math.sqrt(math.pow((var.B_prac_x - B_true_x),2) + math.pow((var.B_prac_y - B_true_y),2))
	
	
	var.trial_distance = var.A_distance + var.B_distance
	var.trial_distance_rounded = round(var.trial_distance,1)
	
	var.encoding_distance = var.encoding_distance + var.trial_distance    
	var.encoding_distance_rounded = round(var.encoding_distance,1)
	
	trial=trial +1
	
	ImageGrab.grab().save(exp.experiment_path + "/../../../emma_toolbox_data/Raw/VisualMemory/Snaps/" + str(var.subject_nr) + "_DirectRecall_Practice" + str(trial) + ".png", "PNG") 
	
	my_canvas.clear()
	
	if (var.trial_distance == 0):
		var.break_prac=1
	__end__
	set _prepare ""

define inline_script new_inline_script_4_3
	set description "Executes Python code"
	___run__
	
	var.A_distance=math.sqrt(math.pow((var.A_x - A_true_x),2) + math.pow((var.A_y - A_true_y),2))
	var.B_distance=math.sqrt(math.pow((var.B_x - B_true_x),2) + math.pow((var.B_y - B_true_y),2))
	var.C_distance=math.sqrt(math.pow((var.C_x - C_true_x),2) + math.pow((var.C_y - C_true_y),2))
	var.D_distance=math.sqrt(math.pow((var.D_x - D_true_x),2) + math.pow((var.D_y - D_true_y),2))
	var.E_distance=math.sqrt(math.pow((var.E_x - E_true_x),2) + math.pow((var.E_y - E_true_y),2))
	var.F_distance=math.sqrt(math.pow((var.F_x - F_true_x),2) + math.pow((var.F_y - F_true_y),2))
	var.G_distance=math.sqrt(math.pow((var.G_x - G_true_x),2) + math.pow((var.G_y - G_true_y),2))
	var.H_distance=math.sqrt(math.pow((var.H_x - H_true_x),2) + math.pow((var.H_y - H_true_y),2))
	
	
	var.retrieval_distance = var.A_distance + var.B_distance + var.C_distance + var.D_distance + var.E_distance + var.F_distance + var.G_distance + var.H_distance
	var.retrieval_distance_rounded = round(var.retrieval_distance,1)
	
	ImageGrab.grab().save(exp.experiment_path + "/snaps/" + str(var.subject_nr) + "_DelayedRecall" + ".png", "PNG") 
	
	my_canvas.clear()
	__end__
	set _prepare ""

define inline_script new_inline_script_5
	set description "Executes Python code"
	___run__
	my_canvas.clear()
	
	my_canvas.image(A1, x=-144, y=-144, scale=0.4)
	my_canvas.image(A2, x=-48, y=-144, scale=0.4)
	my_canvas.image(A3, x=48, y=-144, scale=0.4)
	my_canvas.image(A4, x=144, y=-144, scale=0.4)
	
	my_canvas.image(B1, x=-144, y=-48, scale=0.4)
	my_canvas.image(B2, x=-48, y=-48, scale=0.4)
	my_canvas.image(B3, x=48, y=-48, scale=0.4)
	my_canvas.image(B4, x=144, y=-48, scale=0.4)
	
	my_canvas.image(C1, x=-144, y=48, scale=0.4)
	my_canvas.image(C2, x=-48, y=48, scale=0.4)
	my_canvas.image(C3, x=48, y=48, scale=0.4)
	my_canvas.image(C4, x=144, y=48, scale=0.4)
	
	my_canvas.image(D1, x=-144, y=144, scale=0.4)
	my_canvas.image(D2, x=-48, y=144, scale=0.4)
	my_canvas.image(D3, x=48, y=144, scale=0.4)
	my_canvas.image(D4, x=144, y=144, scale=0.4)
	
	my_canvas.image(CANC, x=0, y=300, scale=0.2)
	
	path1 = exp.pool[u'A_prac.png']
	my_canvas.image(path1, x=-432, y=-208, scale=0.39)
	path2 = exp.pool[u'B_prac.png']
	my_canvas.image(path2, x=-432, y=-80, scale=0.39)
	
	my_canvas.show()
	
	var.cancel = 0
	var.validate = 0
	__end__
	set _prepare ""

define inline_script new_inline_script_6
	set description "Executes Python code"
	___run__
	var.skip=0
	__end__
	set _prepare ""

define inline_script new_inline_script_7
	set description "Executes Python code"
	___run__
	my_canvas.clear() 
	
	
	if var.Recognition_trial == 1:
		C2 = exp.pool[u'D.png']
		var.true_answer = 'incorrect'
	elif var.Recognition_trial == 2:
		A4 = exp.pool[u'H.png']
		var.true_answer = 'correct'
	elif var.Recognition_trial == 3:
		B3 = exp.pool[u'D.png']
		var.true_answer = 'correct'
	elif var.Recognition_trial == 4:
		B1 = exp.pool[u'B.png']
		var.true_answer='incorrect'
	elif var.Recognition_trial == 5:
		D4 = exp.pool[u'C.png']
		var.true_answer = 'correct'
	elif var.Recognition_trial == 6:
		C4 = exp.pool[u'E.png']
		var.true_answer='incorrect'
	elif var.Recognition_trial == 7:
		C4 = exp.pool[u'B.png']
		var.true_answer = 'correct'
	elif var.Recognition_trial == 8:
		D3 = exp.pool[u'A.png']
		var.true_answer='incorrect'
	elif var.Recognition_trial == 9:
		A1 = exp.pool[u'C.png']
		var.true_answer='incorrect'
	elif var.Recognition_trial == 10:
		C2 = exp.pool[u'F.png']
		var.true_answer = 'correct'
	elif var.Recognition_trial == 11:
		A2 = exp.pool[u'A.png']
		var.true_answer = 'correct'
	elif var.Recognition_trial == 12:
		B1 = exp.pool[u'E.png']
		var.true_answer = 'correct'
	elif var.Recognition_trial == 13:
		A4 = exp.pool[u'G.png']
		var.true_answer='incorrect'
	elif var.Recognition_trial == 14:
		B3 = exp.pool[u'F.png']
		var.true_answer='incorrect'
	elif var.Recognition_trial == 15:
		D1 = exp.pool[u'H.png']
		var.true_answer='incorrect'
	elif var.Recognition_trial == 16:
		D1 = exp.pool[u'G.png']
		var.true_answer = 'correct'
	
	my_canvas.image(A1, x=-144, y=-144, scale=0.4)
	my_canvas.image(A2, x=-48, y=-144, scale=0.4)
	my_canvas.image(A3, x=48, y=-144, scale=0.4)
	my_canvas.image(A4, x=144, y=-144, scale=0.4)
	
	my_canvas.image(B1, x=-144, y=-48, scale=0.4)
	my_canvas.image(B2, x=-48, y=-48, scale=0.4)
	my_canvas.image(B3, x=48, y=-48, scale=0.4)
	my_canvas.image(B4, x=144, y=-48, scale=0.4)
	
	my_canvas.image(C1, x=-144, y=48, scale=0.4)
	my_canvas.image(C2, x=-48, y=48, scale=0.4)
	my_canvas.image(C3, x=48, y=48, scale=0.4)
	my_canvas.image(C4, x=144, y=48, scale=0.4)
	
	my_canvas.image(D1, x=-144, y=144, scale=0.4)
	my_canvas.image(D2, x=-48, y=144, scale=0.4)
	my_canvas.image(D3, x=48, y=144, scale=0.4)
	my_canvas.image(D4, x=144, y=144, scale=0.4)
	
	my_canvas.image(CANC, x=-75, y=300, scale=0.2)
	my_canvas.image(VAL, x=75 , y=300, scale=0.2)
	
	my_canvas.show()
	__end__
	set _prepare ""

define inline_script new_inline_script_8
	set description "Executes Python code"
	___run__
	my_canvas.clear()
	
	my_canvas.image(A1, x=-144, y=-144, scale=0.4)
	my_canvas.image(A2, x=-48, y=-144, scale=0.4)
	my_canvas.image(A3, x=48, y=-144, scale=0.4)
	my_canvas.image(A4, x=144, y=-144, scale=0.4)
	
	my_canvas.image(B1, x=-144, y=-48, scale=0.4)
	my_canvas.image(B2, x=-48, y=-48, scale=0.4)
	my_canvas.image(B3, x=48, y=-48, scale=0.4)
	my_canvas.image(B4, x=144, y=-48, scale=0.4)
	
	my_canvas.image(C1, x=-144, y=48, scale=0.4)
	my_canvas.image(C2, x=-48, y=48, scale=0.4)
	my_canvas.image(C3, x=48, y=48, scale=0.4)
	my_canvas.image(C4, x=144, y=48, scale=0.4)
	
	my_canvas.image(D1, x=-144, y=144, scale=0.4)
	my_canvas.image(D2, x=-48, y=144, scale=0.4)
	my_canvas.image(D3, x=48, y=144, scale=0.4)
	my_canvas.image(D4, x=144, y=144, scale=0.4)
	
	my_canvas.image(CANC, x=0, y=300, scale=0.2)
	my_canvas.image(VAL, x=0, y=-300, scale=0.2)
	
	path1 = exp.pool[u'A.png']
	my_canvas.image(path1, x=-432, y=-208, scale=0.39)
	path2 = exp.pool[u'B.png']
	my_canvas.image(path2, x=-432, y=-80, scale=0.39)
	path3 = exp.pool[u'C.png']
	my_canvas.image(path3, x=-432, y=48, scale=0.39)
	path4 = exp.pool[u'D.png']
	my_canvas.image(path4, x=-432, y=176, scale=0.39)
	
	path5 = exp.pool[u'E.png']
	my_canvas.image(path5, x=432, y=-208, scale=0.39)
	path6 = exp.pool[u'F.png']
	my_canvas.image(path6, x=432, y=-80, scale=0.39)
	path7 = exp.pool[u'G.png']
	my_canvas.image(path7, x=432, y=48, scale=0.39)
	path8 = exp.pool[u'H.png']
	my_canvas.image(path8, x=432, y=176, scale=0.39)
	
	my_canvas.show()
	
	var.cancel = 0
	var.validate = 0
	__end__
	set _prepare ""

define inline_script new_inline_script_9
	set description "Executes Python code"
	___run__
	my_mouse=mouse()
	mouse.show_cursor(show=True)
	__end__
	set _prepare ""

define logger new_logger_3
	set description "Logs experimental data"
	set auto_log yes

define logger new_logger_3_1
	set description "Logs experimental data"
	set auto_log yes

define logger new_logger_3_2
	set description "Logs experimental data"
	set auto_log yes

define logger new_logger_3_3
	set description "Logs experimental data"
	set auto_log yes

define logger new_logger_3_4
	set description "Logs experimental data"
	set auto_log yes

define mouse_response new_mouse_response
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define mouse_response new_mouse_response_1
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush no
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define mouse_response new_mouse_response_1_1
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define mouse_response new_mouse_response_1_2
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush no
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define mouse_response new_mouse_response_1_3
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define mouse_response new_mouse_response_1_4
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush no
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define mouse_response new_mouse_response_3
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define mouse_response new_mouse_response_5
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define mouse_response new_mouse_response_5_1
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"

define sequence new_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_mouse_response_1 always
	run Select "[validate]=0"
	run new_mouse_response_1 "[validate]=0"
	run Place "[validate]=0"

define sequence new_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_mouse_response_3 "[validate]=0"
	run new_inline_script_1_1 "[validate]=0"
	run new_mouse_response_1_1 "[validate]=0"
	run new_inline_script_3_1 "[validate]=0"

define sequence new_sequence_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_mouse_response_1_2 always
	run Select_1 "[validate]=0"
	run new_mouse_response_1_2 "[validate]=0"
	run Place_1 "[validate]=0"

define sequence new_sequence_3
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_mouse_response_5 "[validate]=0"
	run new_inline_script_1_3 "[validate]=0"
	run new_mouse_response_1_3 "[validate]=0"
	run new_inline_script_3_3 "[validate]=0"

define sequence new_sequence_3_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_mouse_response_5_1 "[validate]=0"
	run new_inline_script_1_3_1 "[validate]=0"

define sketchpad new_sketchpad
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="<u>Testinstructie Oefen - Opnieuw</u><br /><br /><i>Dat ging nog niet helemaal goed, we gaan het nog een keer proberen.</i>" x=0 y=-32 z_index=0

define sketchpad new_sketchpad_1_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="<u> Instructie Testfase </u><br /><br /><i>Dat was misschien best moeilijk. Daarom gaan we het wat makkelijker maken.<br /><br />Nu zie je steeds een plaatje tegelijk. Jij moet aangeven of het plaatje in het goede vakje staat of niet.<br /><br />Ben je er klaar voor? </i>" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text=Recognition x=-448 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="" x=448 y=-352 z_index=0

define sketchpad new_sketchpad_1_3
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="<u> Instructie Testfase </u><br /><br /><i> Je hebt een tijdje geleden steeds plaatjes teruggelegd in het vakje waarin ze horen.<br /><br />Weet je nog waar ze lagen?<br /><br />Leg ze zo goed mogelijk terug. </i>" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text=Retrieval x=-384 y=-352 z_index=0

define sketchpad new_sketchpad_2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="<u> Instructie oefenfase </u><br /><br /><i>Zometeen zie je twee plaatjes in een bord met vlakjes. <br /><br />Onthoud goed welk plaatje in welk vakje ligt.<br /></i>" x=0 y=0 z_index=0

define sketchpad new_sketchpad_2_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="<u> Instructie oefenfase </u><br /><br /><i>Heb je ze goed onthouden? Leg je plaatjes nu terug in de goede vakjes.<br /><br />1. Klik eerst op het plaatje dat je wilt terugleggen<br />2. Klik dan op het vakje waar je het plaatje wilt neerleggen<br /><br />Heb je een foutje gemaakt? <br />3. Klik dan eerst op het rode kruis en daarna op het plaatje dat verkeerd ligt.<br /><br />Ben je klaar?<br />4. Klik dan op het groene vinkje." x=0 y=0 z_index=0

define sketchpad new_sketchpad_4
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="<u> Testinstructie Testfase </u><br /><br /><i> Goed gedaan! Dat was de oefening.<br /><br />We gaan nu verder en dan wordt het iets moeilijker! </i>" x=0 y=0 z_index=0

define sketchpad new_sketchpad_5
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="<i>We zijn nu klaar met dit onderdeel!</i>" x=0 y=0 z_index=0
	draw textline center=0 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="Correct: [recognition_correct]<br />Incorrect: [recognition_incorrect]<br />     FP: [recognition_fp]<br />     FN: [recognition_fn]" x=352 y=-384 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text=Recognition x=-416 y=-352 z_index=0

define sketchpad new_sketchpad_6
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="Druk op een knop om door te gaan." x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="Retrieval: [retrieval_distance_rounded]<br />" x=352 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text=Retrieval x=-448 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="" x=416 y=-352 z_index=0

define sketchpad new_sketchpad_6_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="" x=416 y=-352 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="Druk op een knop om door te gaan." x=0 y=0 z_index=0

define sketchpad new_sketchpad_7
	set duration 1000
	set description "Displays stimuli"

