---
API: 2
OpenSesame: 3.1.9
Platform: nt
---
set width 1360
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family serif
set font_bold no
set experiment_path "C:\\Users\\emmaneuroscience\\Documents\\emma_toolbox\\Tests\\VisuoMotor"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set bidi no
set background "#000000"

define sketchpad End
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="Emma Toolbox<br /><i> Visuomotor Tracking </i>" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="" x=-64 y=32 z_index=0

define sequence Procedure
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run inst_fix_oef_child "[response_Welcome_2]=='k'"
	run inst_fix_oef_adult "[response_Welcome_2]=='v'"
	run rups_fixed always
	run feedback always
	run inst_rand_child "[response_Welcome_2]=='k'"
	run inst_rand_adult "[response_Welcome_2]=='v'"
	run rups_random always
	run feedback_ always
	run new_logger always

define sequence Procedure_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run inst_fix_oef_child_1 "[response_Welcome_2]=='k'"
	run inst_fix_oef_adult_1 "[response_Welcome_2]=='v'"
	run rups_fixed always
	run feedback__3_1 always
	run inst_rand_child_1 "[response_Welcome_2]=='k'"
	run inst_rand_adult_1 "[response_Welcome_2]=='v'"
	run rups_random always
	run feedback__3 always
	run new_logger always

define sketchpad Ronde1_adult
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<b> Testfase - Snelheid 1 </b><br /><br /><i> Genoeg geoefend, we gaan beginnen!<br /><br />We gaan dit een paar keer achter elkaar doen.<br />Het gaat steeds een beetje sneller.<br /><br />De eerste is nog een beetje sloom.. </i><br /><br />" x=7 y=252 z_index=0
	draw image center=1 file="head_adult.png" scale=0.5 show_if=always x=-448 y=-32 z_index=0
	draw textline center=1 color=white font_bold=yes font_family=serif font_italic=no font_size=150 html=yes show_if=always text="RONDE 1" x=17 y=-22 z_index=0
	draw image center=1 file="head_adult.png" scale=0.5 show_if=always x=512 y=-32 z_index=0

define sketchpad Ronde1_child
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=21 html=yes show_if=always text="<b> Testfase - Snelheid 1 </b><br /><br /><i> Genoeg geoefend, we gaan beginnen!<br /><br />We gaan dit een paar keer achter elkaar doen.<br />Het gaat steeds een beetje sneller.<br /><br />De eerste is nog een beetje sloom.. </i><br /><br /><br />" x=-4 y=248 z_index=0
	draw image center=1 file="head_child.png" scale=0.5 show_if=always x=-452 y=-25 z_index=0
	draw textline center=1 color=white font_bold=yes font_family=serif font_italic=no font_size=150 html=yes show_if=always text="RONDE 1" x=28 y=-14 z_index=0
	draw image center=1 file="head_child.png" scale=0.5 show_if=always x=512 y=-32 z_index=0

define sketchpad Ronde2_adult
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<b> Testfase - Snelheid 2 </b><br /><br /><i>Nu gaan we sneller..<br /><br />" x=0 y=224 z_index=0
	draw image center=1 file="head_adult.png" scale=0.5 show_if=always x=-448 y=-32 z_index=0
	draw textline center=1 color=white font_bold=yes font_family=serif font_italic=no font_size=150 html=yes show_if=always text="RONDE 2" x=32 y=-32 z_index=0
	draw image center=1 file="head_adult.png" scale=0.5 show_if=always x=512 y=-32 z_index=0

define sketchpad Ronde2_child
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="<b> Testfase - Snelheid 2 </b><br /><br /><i>Nu gaan we sneller..<br /><br />" x=0 y=224 z_index=0
	draw image center=1 file="head_child.png" scale=0.5 show_if=always x=-448 y=-32 z_index=0
	draw textline center=1 color=white font_bold=yes font_family=serif font_italic=no font_size=150 html=yes show_if=always text="RONDE 2" x=3 y=-24 z_index=0
	draw image center=1 file="head_child.png" scale=0.5 show_if=always x=480 y=-32 z_index=0

define sketchpad Ronde3_adult
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=24 html=yes show_if=always text="<b> Testfase - Snelheid 3 </b><br /><br /><i>En nog sneller..!<br /><br /><br />" x=0 y=224 z_index=0
	draw image center=1 file="head_adult.png" scale=0.5 show_if=always x=-448 y=-32 z_index=0
	draw textline center=1 color=white font_bold=yes font_family=serif font_italic=no font_size=150 html=yes show_if=always text="RONDE 3" x=32 y=0 z_index=0
	draw image center=1 file="head_adult.png" scale=0.5 show_if=always x=512 y=-32 z_index=0

define sketchpad Ronde3_child
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=24 html=yes show_if=always text="<b> Testfase - Snelheid 3 </b><br /><br /><i>En nog sneller..!<br />" x=0 y=224 z_index=0
	draw image center=1 file="head_child.png" scale=0.5 show_if=always x=-448 y=-32 z_index=0
	draw textline center=1 color=white font_bold=yes font_family=serif font_italic=no font_size=150 html=yes show_if=always text="RONDE 3" x=32 y=0 z_index=0
	draw image center=1 file="head_child.png" scale=0.5 show_if=always x=512 y=-32 z_index=0

define sketchpad Ronde4_adult
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=24 html=yes show_if=always text="<b> Testfase - Snelheid 4 </b><br /><br /><i>TURBO!!<br /><br />" x=0 y=224 z_index=0
	draw image center=1 file="head_adult.png" scale=0.5 show_if=always x=-448 y=-32 z_index=0
	draw textline center=1 color=white font_bold=yes font_family=serif font_italic=no font_size=150 html=yes show_if=always text="RONDE 4" x=32 y=0 z_index=0
	draw image center=1 file="head_adult.png" scale=0.5 show_if=always x=512 y=-32 z_index=0

define sketchpad Ronde4_child
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=24 html=yes show_if=always text="<b> Testfase - Snelheid 4 </b><br /><br /><i>TURBO!!<br /><br />" x=0 y=224 z_index=0
	draw image center=1 file="head_child.png" scale=0.5 show_if=always x=-416 y=-32 z_index=0
	draw textline center=1 color=white font_bold=yes font_family=serif font_italic=no font_size=150 html=yes show_if=always text="RONDE 4" x=32 y=0 z_index=0
	draw image center=1 file="head_child.png" scale=0.5 show_if=always x=480 y=-32 z_index=0

define sketchpad Welcome
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="" x=416 y=320 z_index=0
	draw textline center=1 color="#ffffff" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Kinderen kies 'k'" x=-352 y=352 z_index=0
	draw textline center=1 color="#ffffff" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Volwassenen kies 'v'" x=339 y=355 z_index=0
	draw textline center=1 color="#ffffff" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Academic Medical Center<br />Emma Children's Hospital<br />Pediatric Research Group<br />m.konigs@amc.nl<br /><br />Unauthorized use of the Emma Toolbox is not allowed." x=9 y=183 z_index=0
	draw image center=1 file="amc.png" scale=1 show_if=always x=0 y=320 z_index=0
	draw textline center=1 color="#ffffff" font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Emma Toolbox<br /><i> Visuomotor Tracking </i>" x=5 y=-316 z_index=0
	draw image center=1 file="ET.png" scale=1 show_if=always x=0 y=-64 z_index=0

define sketchpad Welcome_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=20 html=yes show_if=always text="" x=416 y=320 z_index=0
	draw textline center=1 color="#ffffff" font_bold=no font_family=serif font_italic=no font_size=20 html=yes show_if=always text="Academic Medical Center<br />Emma Children's Hospital<br />Pediatric Research Group<br />m.konigs@amc.nl<br /><br />Unauthorized use of the Emma Toolbox is not allowed." x=9 y=183 z_index=0
	draw image center=1 file="amc.png" scale=1 show_if=always x=0 y=320 z_index=0
	draw textline center=1 color="#ffffff" font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Emma Toolbox<br /><i> Visuomotor Tracking </i>" x=5 y=-316 z_index=0
	draw image center=1 file="ET.png" scale=1 show_if=always x=0 y=-64 z_index=0

define keyboard_response Welcome_2
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "k;v"

define inline_script create_backup
	set description "Executes Python code"
	___run__
	import shutil
	
	shutil.copyfile(var.logfile, var.logfile + str('_backup'))
	__end__
	set _prepare ""

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Welcome always
	run Welcome_2 always
	run spd_oefen always
	run oefen_child "[response_Welcome_2]=='k'"
	run oefen_adult "[response_Welcome_2]=='v'"
	run presettings always
	run Procedure_1 always
	run herhaal_oef always
	run presettings "[response_herhaal_oef]=='o'"
	run Procedure_1 "[response_herhaal_oef]=='o'"
	run Ronde1_child "[response_Welcome_2]=='k'"
	run Ronde1_adult "[response_Welcome_2]=='v'"
	run spd_test_1 always
	run settings always
	run Procedure always
	run Ronde2_child "[response_Welcome_2]=='k'"
	run Ronde2_adult "[response_Welcome_2]=='v'"
	run spd_test_2 always
	run settings always
	run Procedure always
	run Ronde3_child "[response_Welcome_2]=='k'"
	run Ronde3_adult "[response_Welcome_2]=='v'"
	run spd_test_3 always
	run settings always
	run Procedure always
	run Ronde4_child "[response_Welcome_2]=='k'"
	run Ronde4_adult "[response_Welcome_2]=='v'"
	run spd_test_3_1 always
	run settings always
	run Procedure always
	run create_backup always
	run Welcome_1 always

define inline_script feedback
	set description "Executes Python code"
	___run__
	while True:
		# ... until space is pressed
		key, timestamp = my_keyboard.get_key()
		if key == 'space':
			break
	
		my_canvas.clear()
		my_canvas.image(symbol_fixed, center=True, x=-600, y=-300, scale=0.3)
		my_canvas.text(var.phase,x=-550,y=-300)
		my_canvas.text("M",x=-500,y=-300)	
		my_canvas.text(round(var.mean_target_dist,0),x=-400,y=-300)
		my_canvas.text("Hz",x=400,y=-300)	
		my_canvas.text(round(var.resolution_fixed,0),x=500,y=-300)
		my_canvas.image(head, center=True, x=0, y=0, scale=0.5)
		my_canvas.show()
	__end__
	set _prepare ""

define inline_script feedback_
	set description "Executes Python code"
	___run__
	while True:
		# ... until space is pressed
		key, timestamp = my_keyboard.get_key()
		if key == 'space':
			break
	
		my_canvas.clear()
		my_canvas.image(symbol_random, center=True, x=-600, y=-300, scale=0.3)
		my_canvas.text(var.phase,x=-550,y=-300)
		my_canvas.text("M",x=-500,y=-300)	
		my_canvas.text(round(var.mean_target_dist,0),x=-400,y=-300)
		my_canvas.text("Hz",x=400,y=-300)	
		my_canvas.text(round(var.resolution_random,0),x=500,y=-300)
		my_canvas.image(head, center=True, x=0, y=0, scale=0.5)
		my_canvas.show()
	__end__
	set _prepare ""

define inline_script feedback__3
	set description "Executes Python code"
	___run__
	while True:
		# ... until space is pressed
		key, timestamp = my_keyboard.get_key()
		if key == 'space':
			break
	
		my_canvas.clear()
		my_canvas.image(symbol_random, center=True, x=-600, y=-300, scale=0.3)
		my_canvas.text(var.phase,x=-550,y=-300)
		my_canvas.text("M",x=-500,y=-300)	
		my_canvas.text(round(var.mean_target_dist,0),x=-400,y=-300)
		my_canvas.text("Hz",x=400,y=-300)	
		my_canvas.text(round(var.resolution_random,0),x=500,y=-300)
		my_canvas.image(head, center=True, x=0, y=0, scale=0.5)
		my_canvas.text("<i>Dat was het oefenen. Is alles duidelijk?</i>",x=0,y=150)
		my_canvas.show()
	__end__
	set _prepare ""

define inline_script feedback__3_1
	set description "Executes Python code"
	___run__
	while True:
		# ... until space is pressed
		key, timestamp = my_keyboard.get_key()
		if key == 'space':
			break
	
		my_canvas.clear()
		my_canvas.image(symbol_fixed, center=True, x=-600, y=-300, scale=0.3)
		my_canvas.text(var.phase,x=-550,y=-300)
		my_canvas.text("M",x=-500,y=-300)	
		my_canvas.text(round(var.mean_target_dist,0),x=-400,y=-300)
		my_canvas.text("Hz",x=400,y=-300)	
		my_canvas.text(round(var.resolution_fixed,0),x=500,y=-300)
		my_canvas.image(head, center=True, x=0, y=0, scale=0.5)
		my_canvas.text("<i>Dat was het oefenen. Is alles duidelijk?.</i>",x=0,y=150)
		my_canvas.text("<i>Nu gaan we het weer iets moeilijker maken.</i>",x=0,y=200)
		my_canvas.show()
	__end__
	set _prepare ""

define sketchpad herhaal_oef
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=18 html=yes show_if=always text="Oefening herhalen? Druk 'o'." x=0 y=320 z_index=0

define inline_script inst_fix_oef_adult
	set description "Executes Python code"
	___run__
	#reset settings
	
	my_canvas.clear()
	
	var.posx=float(var.path_r * math.cos(var.t))
	var.posy=float(var.path_r * math.sin(var.t))
	
	var.radstep1=float(var.t-(1*var.radstep))
	var.radstep2=float(var.t-(2*var.radstep))
	var.radstep3=float(var.t-(3*var.radstep))
	var.radstep4=float(var.t-(4*var.radstep))
	var.radstep5=float(var.t-(5*var.radstep))
	var.radstep6=float(var.t-(6*var.radstep))
	var.radstep7=float(var.t-(7*var.radstep))
	var.radstep8=float(var.t-(8*var.radstep))
	var.radstep9=float(var.t-(9*var.radstep))
	var.radstep10=float(var.t-(10*var.radstep))
	var.radstep11=float(var.t-(11*var.radstep))
	var.radstep12=float(var.t-(12*var.radstep))
	var.radstep13=float(var.t-(13*var.radstep))
	var.radstep14=float(var.t-(14*var.radstep))
	var.radstep15=float(var.t-(15*var.radstep))
	var.radstep16=float(var.t-(16*var.radstep))
	var.radstep17=float(var.t-(17*var.radstep))
	var.radstep18=float(var.t-(18*var.radstep))
	var.radstep19=float(var.t-(19*var.radstep))
	
	
	var.posx1=float(var.path_r * math.cos(var.radstep1))
	var.posy1=float(var.path_r * math.sin(var.radstep1))
	
	var.posx2=float(var.path_r * math.cos(var.radstep2))
	var.posy2=float(var.path_r * math.sin(var.radstep2))
	
	var.posx3=float(var.path_r * math.cos(var.radstep3))
	var.posy3=float(var.path_r * math.sin(var.radstep3))
	
	var.posx4=float(var.path_r * math.cos(var.radstep4))
	var.posy4=float(var.path_r * math.sin(var.radstep4))
	
	var.posx5=float(var.path_r * math.cos(var.radstep5))
	var.posy5=float(var.path_r * math.sin(var.radstep5))
	
	var.posx6=float(var.path_r * math.cos(var.radstep6))
	var.posy6=float(var.path_r * math.sin(var.radstep6))       
	
	var.posx7=float(var.path_r * math.cos(var.radstep7))
	var.posy7=float(var.path_r * math.sin(var.radstep7))
	
	var.posx8=float(var.path_r * math.cos(var.radstep8))
	var.posy8=float(var.path_r * math.sin(var.radstep8))
	
	var.posx9=float(var.path_r * math.cos(var.radstep9))
	var.posy9=float(var.path_r * math.sin(var.radstep9))
	
	var.posx10=float(var.path_r * math.cos(var.radstep10))
	var.posy10=float(var.path_r * math.sin(var.radstep10))
	
	var.posx11=float(var.path_r * math.cos(var.radstep11))
	var.posy11=float(var.path_r * math.sin(var.radstep11))
	
	var.posx12=float(var.path_r * math.cos(var.radstep12))
	var.posy12=float(var.path_r * math.sin(var.radstep12))
	
	var.posx13=float(var.path_r * math.cos(var.radstep13))
	var.posy13=float(var.path_r * math.sin(var.radstep13))
	
	var.posx14=float(var.path_r * math.cos(var.radstep14))
	var.posy14=float(var.path_r * math.sin(var.radstep14))
	
	var.posx15=float(var.path_r * math.cos(var.radstep15))
	var.posy15=float(var.path_r * math.sin(var.radstep15))
	
	var.posx16=float(var.path_r * math.cos(var.radstep16))
	var.posy16=float(var.path_r * math.sin(var.radstep16))
	
	var.posx17=float(var.path_r * math.cos(var.radstep17))
	var.posy17=float(var.path_r * math.sin(var.radstep17))
	
	var.posx18=float(var.path_r * math.cos(var.radstep18))
	var.posy18=float(var.path_r * math.sin(var.radstep18))
	
	var.posx19=float(var.path_r * math.cos(var.radstep19))
	var.posy19=float(var.path_r * math.sin(var.radstep19))
	
	
	var.counter=0
	var.count_new_sequence=0
	var.sum_target_dist=0
	var.variance_target_dist=0  
	var.count_log=0
	
	while True:
		# ... until space is pressed
		key, timestamp = my_keyboard.get_key()
		if key == 'space':
			break
		my_canvas.image(tail, center=True, x=var.posx19, y=var.posy19, scale=0.3)
		my_canvas.image(body, center=True, x=var.posx15, y=var.posy15, scale=0.3)
		my_canvas.image(body1, center=True, x=var.posx11, y=var.posy11, scale=0.3)
		my_canvas.image(body2, center=True, x=var.posx7, y=var.posy7, scale=0.3)
		my_canvas.image(body3, center=True, x=var.posx3, y=var.posy3, scale=0.3)
		my_canvas.image(head, center=True, x=var.posx, y=var.posy, scale=0.3)
	
		my_canvas.text('<u>Instructie</u>',x=0,y=150)
		my_canvas.text('<i>Deze schietschijf op pootjes gaat straks rondjes lopen.</i>',x=0,y=200)
		my_canvas.text('<i>Jij moet de schietschijf volgen met de muis.</i>',x=0,y=250)
		my_canvas.text('<i>Houd steeds het pijltje zo goed mogelijk op het midden van de rode stip</i>',x=0,y=300)
	
		my_canvas.image(symbol_fixed, center=True, x=-600, y=-300, scale=0.3)
		my_canvas.text(var.phase,x=-550,y=-300)
	
		my_canvas.prepare()
		my_canvas.show()
		
	my_canvas.clear()
	__end__
	set _prepare ""

define inline_script inst_fix_oef_adult_1
	set description "Executes Python code"
	___run__
	#reset settings
	
	my_canvas.clear()
	
	var.posx=float(var.path_r * math.cos(var.t))
	var.posy=float(var.path_r * math.sin(var.t))
	
	var.radstep1=float(var.t-(1*var.radstep))
	var.radstep2=float(var.t-(2*var.radstep))
	var.radstep3=float(var.t-(3*var.radstep))
	var.radstep4=float(var.t-(4*var.radstep))
	var.radstep5=float(var.t-(5*var.radstep))
	var.radstep6=float(var.t-(6*var.radstep))
	var.radstep7=float(var.t-(7*var.radstep))
	var.radstep8=float(var.t-(8*var.radstep))
	var.radstep9=float(var.t-(9*var.radstep))
	var.radstep10=float(var.t-(10*var.radstep))
	var.radstep11=float(var.t-(11*var.radstep))
	var.radstep12=float(var.t-(12*var.radstep))
	var.radstep13=float(var.t-(13*var.radstep))
	var.radstep14=float(var.t-(14*var.radstep))
	var.radstep15=float(var.t-(15*var.radstep))
	var.radstep16=float(var.t-(16*var.radstep))
	var.radstep17=float(var.t-(17*var.radstep))
	var.radstep18=float(var.t-(18*var.radstep))
	var.radstep19=float(var.t-(19*var.radstep))
	
	
	var.posx1=float(var.path_r * math.cos(var.radstep1))
	var.posy1=float(var.path_r * math.sin(var.radstep1))
	
	var.posx2=float(var.path_r * math.cos(var.radstep2))
	var.posy2=float(var.path_r * math.sin(var.radstep2))
	
	var.posx3=float(var.path_r * math.cos(var.radstep3))
	var.posy3=float(var.path_r * math.sin(var.radstep3))
	
	var.posx4=float(var.path_r * math.cos(var.radstep4))
	var.posy4=float(var.path_r * math.sin(var.radstep4))
	
	var.posx5=float(var.path_r * math.cos(var.radstep5))
	var.posy5=float(var.path_r * math.sin(var.radstep5))
	
	var.posx6=float(var.path_r * math.cos(var.radstep6))
	var.posy6=float(var.path_r * math.sin(var.radstep6))       
	
	var.posx7=float(var.path_r * math.cos(var.radstep7))
	var.posy7=float(var.path_r * math.sin(var.radstep7))
	
	var.posx8=float(var.path_r * math.cos(var.radstep8))
	var.posy8=float(var.path_r * math.sin(var.radstep8))
	
	var.posx9=float(var.path_r * math.cos(var.radstep9))
	var.posy9=float(var.path_r * math.sin(var.radstep9))
	
	var.posx10=float(var.path_r * math.cos(var.radstep10))
	var.posy10=float(var.path_r * math.sin(var.radstep10))
	
	var.posx11=float(var.path_r * math.cos(var.radstep11))
	var.posy11=float(var.path_r * math.sin(var.radstep11))
	
	var.posx12=float(var.path_r * math.cos(var.radstep12))
	var.posy12=float(var.path_r * math.sin(var.radstep12))
	
	var.posx13=float(var.path_r * math.cos(var.radstep13))
	var.posy13=float(var.path_r * math.sin(var.radstep13))
	
	var.posx14=float(var.path_r * math.cos(var.radstep14))
	var.posy14=float(var.path_r * math.sin(var.radstep14))
	
	var.posx15=float(var.path_r * math.cos(var.radstep15))
	var.posy15=float(var.path_r * math.sin(var.radstep15))
	
	var.posx16=float(var.path_r * math.cos(var.radstep16))
	var.posy16=float(var.path_r * math.sin(var.radstep16))
	
	var.posx17=float(var.path_r * math.cos(var.radstep17))
	var.posy17=float(var.path_r * math.sin(var.radstep17))
	
	var.posx18=float(var.path_r * math.cos(var.radstep18))
	var.posy18=float(var.path_r * math.sin(var.radstep18))
	
	var.posx19=float(var.path_r * math.cos(var.radstep19))
	var.posy19=float(var.path_r * math.sin(var.radstep19))
	
	
	var.counter=0
	var.count_new_sequence=0
	var.sum_target_dist=0
	var.variance_target_dist=0  
	var.count_log=0
	
	while True:
		# ... until space is pressed
		key, timestamp = my_keyboard.get_key()
		if key == 'space':
			break
		my_canvas.image(tail, center=True, x=var.posx19, y=var.posy19, scale=0.3)
		my_canvas.image(body, center=True, x=var.posx15, y=var.posy15, scale=0.3)
		my_canvas.image(body1, center=True, x=var.posx11, y=var.posy11, scale=0.3)
		my_canvas.image(body2, center=True, x=var.posx7, y=var.posy7, scale=0.3)
		my_canvas.image(body3, center=True, x=var.posx3, y=var.posy3, scale=0.3)
		my_canvas.image(head, center=True, x=var.posx, y=var.posy, scale=0.3)
	
		my_canvas.text('<u>Instructie</u>',x=0,y=150)
		my_canvas.text('<i>Deze schietschijf op pootjes gaat straks rondjes lopen.</i>',x=0,y=200)
		my_canvas.text('<i>Jij moet de schietschijf volgen met de muis.</i>',x=0,y=250)
		my_canvas.text('<i>Houd steeds het pijltje zo goed mogelijk op het midden van de rode stip.</i>',x=0,y=300)
	
		my_canvas.image(symbol_fixed, center=True, x=-600, y=-300, scale=0.3)
		my_canvas.text(var.phase,x=-550,y=-300)
	
		my_canvas.prepare()
		my_canvas.show()
		
	my_canvas.clear()
	__end__
	set _prepare ""

define inline_script inst_fix_oef_child
	set description "Executes Python code"
	___run__
	#reset settings
	
	my_canvas.clear()
	
	var.posx=float(var.path_r * math.cos(var.t))
	var.posy=float(var.path_r * math.sin(var.t))
	
	var.radstep1=float(var.t-(1*var.radstep))
	var.radstep2=float(var.t-(2*var.radstep))
	var.radstep3=float(var.t-(3*var.radstep))
	var.radstep4=float(var.t-(4*var.radstep))
	var.radstep5=float(var.t-(5*var.radstep))
	var.radstep6=float(var.t-(6*var.radstep))
	var.radstep7=float(var.t-(7*var.radstep))
	var.radstep8=float(var.t-(8*var.radstep))
	var.radstep9=float(var.t-(9*var.radstep))
	var.radstep10=float(var.t-(10*var.radstep))
	var.radstep11=float(var.t-(11*var.radstep))
	var.radstep12=float(var.t-(12*var.radstep))
	var.radstep13=float(var.t-(13*var.radstep))
	var.radstep14=float(var.t-(14*var.radstep))
	var.radstep15=float(var.t-(15*var.radstep))
	var.radstep16=float(var.t-(16*var.radstep))
	var.radstep17=float(var.t-(17*var.radstep))
	var.radstep18=float(var.t-(18*var.radstep))
	var.radstep19=float(var.t-(19*var.radstep))
	
	
	var.posx1=float(var.path_r * math.cos(var.radstep1))
	var.posy1=float(var.path_r * math.sin(var.radstep1))
	
	var.posx2=float(var.path_r * math.cos(var.radstep2))
	var.posy2=float(var.path_r * math.sin(var.radstep2))
	
	var.posx3=float(var.path_r * math.cos(var.radstep3))
	var.posy3=float(var.path_r * math.sin(var.radstep3))
	
	var.posx4=float(var.path_r * math.cos(var.radstep4))
	var.posy4=float(var.path_r * math.sin(var.radstep4))
	
	var.posx5=float(var.path_r * math.cos(var.radstep5))
	var.posy5=float(var.path_r * math.sin(var.radstep5))
	
	var.posx6=float(var.path_r * math.cos(var.radstep6))
	var.posy6=float(var.path_r * math.sin(var.radstep6))       
	
	var.posx7=float(var.path_r * math.cos(var.radstep7))
	var.posy7=float(var.path_r * math.sin(var.radstep7))
	
	var.posx8=float(var.path_r * math.cos(var.radstep8))
	var.posy8=float(var.path_r * math.sin(var.radstep8))
	
	var.posx9=float(var.path_r * math.cos(var.radstep9))
	var.posy9=float(var.path_r * math.sin(var.radstep9))
	
	var.posx10=float(var.path_r * math.cos(var.radstep10))
	var.posy10=float(var.path_r * math.sin(var.radstep10))
	
	var.posx11=float(var.path_r * math.cos(var.radstep11))
	var.posy11=float(var.path_r * math.sin(var.radstep11))
	
	var.posx12=float(var.path_r * math.cos(var.radstep12))
	var.posy12=float(var.path_r * math.sin(var.radstep12))
	
	var.posx13=float(var.path_r * math.cos(var.radstep13))
	var.posy13=float(var.path_r * math.sin(var.radstep13))
	
	var.posx14=float(var.path_r * math.cos(var.radstep14))
	var.posy14=float(var.path_r * math.sin(var.radstep14))
	
	var.posx15=float(var.path_r * math.cos(var.radstep15))
	var.posy15=float(var.path_r * math.sin(var.radstep15))
	
	var.posx16=float(var.path_r * math.cos(var.radstep16))
	var.posy16=float(var.path_r * math.sin(var.radstep16))
	
	var.posx17=float(var.path_r * math.cos(var.radstep17))
	var.posy17=float(var.path_r * math.sin(var.radstep17))
	
	var.posx18=float(var.path_r * math.cos(var.radstep18))
	var.posy18=float(var.path_r * math.sin(var.radstep18))
	
	var.posx19=float(var.path_r * math.cos(var.radstep19))
	var.posy19=float(var.path_r * math.sin(var.radstep19))
	
	
	var.counter=0
	var.count_new_sequence=0
	var.sum_target_dist=0
	var.variance_target_dist=0  
	var.count_log=0
	
	while True:
		# ... until space is pressed
		key, timestamp = my_keyboard.get_key()
		if key == 'space':
			break
		my_canvas.image(tail, center=True, x=var.posx19, y=var.posy19, scale=0.3)
		my_canvas.image(body, center=True, x=var.posx15, y=var.posy15, scale=0.3)
		my_canvas.image(body1, center=True, x=var.posx11, y=var.posy11, scale=0.3)
		my_canvas.image(body2, center=True, x=var.posx7, y=var.posy7, scale=0.3)
		my_canvas.image(body3, center=True, x=var.posx3, y=var.posy3, scale=0.3)
		my_canvas.image(head, center=True, x=var.posx, y=var.posy, scale=0.3)
	
		my_canvas.text('<u>Instructie</u>',x=0,y=150)
		my_canvas.text('<i>Deze rups gaat straks rondjes lopen</i>',x=0,y=200)
		my_canvas.text('<i>Jij moet de rups volgen met de muis</i>',x=0,y=250)
		my_canvas.text('<i>Houd steeds het pijltje op het midden van de rode neus van de rups</i>',x=0,y=300)
	
		my_canvas.image(symbol_fixed, center=True, x=-600, y=-300, scale=0.3)
		my_canvas.text(var.phase,x=-550,y=-300)
	
		my_canvas.prepare()
		my_canvas.show()
		
	my_canvas.clear()
	__end__
	set _prepare ""

define inline_script inst_fix_oef_child_1
	set description "Executes Python code"
	___run__
	#reset settings
	
	my_canvas.clear()
	
	var.posx=float(var.path_r * math.cos(var.t))
	var.posy=float(var.path_r * math.sin(var.t))
	
	var.radstep1=float(var.t-(1*var.radstep))
	var.radstep2=float(var.t-(2*var.radstep))
	var.radstep3=float(var.t-(3*var.radstep))
	var.radstep4=float(var.t-(4*var.radstep))
	var.radstep5=float(var.t-(5*var.radstep))
	var.radstep6=float(var.t-(6*var.radstep))
	var.radstep7=float(var.t-(7*var.radstep))
	var.radstep8=float(var.t-(8*var.radstep))
	var.radstep9=float(var.t-(9*var.radstep))
	var.radstep10=float(var.t-(10*var.radstep))
	var.radstep11=float(var.t-(11*var.radstep))
	var.radstep12=float(var.t-(12*var.radstep))
	var.radstep13=float(var.t-(13*var.radstep))
	var.radstep14=float(var.t-(14*var.radstep))
	var.radstep15=float(var.t-(15*var.radstep))
	var.radstep16=float(var.t-(16*var.radstep))
	var.radstep17=float(var.t-(17*var.radstep))
	var.radstep18=float(var.t-(18*var.radstep))
	var.radstep19=float(var.t-(19*var.radstep))
	
	
	var.posx1=float(var.path_r * math.cos(var.radstep1))
	var.posy1=float(var.path_r * math.sin(var.radstep1))
	
	var.posx2=float(var.path_r * math.cos(var.radstep2))
	var.posy2=float(var.path_r * math.sin(var.radstep2))
	
	var.posx3=float(var.path_r * math.cos(var.radstep3))
	var.posy3=float(var.path_r * math.sin(var.radstep3))
	
	var.posx4=float(var.path_r * math.cos(var.radstep4))
	var.posy4=float(var.path_r * math.sin(var.radstep4))
	
	var.posx5=float(var.path_r * math.cos(var.radstep5))
	var.posy5=float(var.path_r * math.sin(var.radstep5))
	
	var.posx6=float(var.path_r * math.cos(var.radstep6))
	var.posy6=float(var.path_r * math.sin(var.radstep6))       
	
	var.posx7=float(var.path_r * math.cos(var.radstep7))
	var.posy7=float(var.path_r * math.sin(var.radstep7))
	
	var.posx8=float(var.path_r * math.cos(var.radstep8))
	var.posy8=float(var.path_r * math.sin(var.radstep8))
	
	var.posx9=float(var.path_r * math.cos(var.radstep9))
	var.posy9=float(var.path_r * math.sin(var.radstep9))
	
	var.posx10=float(var.path_r * math.cos(var.radstep10))
	var.posy10=float(var.path_r * math.sin(var.radstep10))
	
	var.posx11=float(var.path_r * math.cos(var.radstep11))
	var.posy11=float(var.path_r * math.sin(var.radstep11))
	
	var.posx12=float(var.path_r * math.cos(var.radstep12))
	var.posy12=float(var.path_r * math.sin(var.radstep12))
	
	var.posx13=float(var.path_r * math.cos(var.radstep13))
	var.posy13=float(var.path_r * math.sin(var.radstep13))
	
	var.posx14=float(var.path_r * math.cos(var.radstep14))
	var.posy14=float(var.path_r * math.sin(var.radstep14))
	
	var.posx15=float(var.path_r * math.cos(var.radstep15))
	var.posy15=float(var.path_r * math.sin(var.radstep15))
	
	var.posx16=float(var.path_r * math.cos(var.radstep16))
	var.posy16=float(var.path_r * math.sin(var.radstep16))
	
	var.posx17=float(var.path_r * math.cos(var.radstep17))
	var.posy17=float(var.path_r * math.sin(var.radstep17))
	
	var.posx18=float(var.path_r * math.cos(var.radstep18))
	var.posy18=float(var.path_r * math.sin(var.radstep18))
	
	var.posx19=float(var.path_r * math.cos(var.radstep19))
	var.posy19=float(var.path_r * math.sin(var.radstep19))
	
	
	var.counter=0
	var.count_new_sequence=0
	var.sum_target_dist=0
	var.variance_target_dist=0  
	var.count_log=0
	
	while True:
		# ... until space is pressed
		key, timestamp = my_keyboard.get_key()
		if key == 'space':
			break
		my_canvas.image(tail, center=True, x=var.posx19, y=var.posy19, scale=0.3)
		my_canvas.image(body, center=True, x=var.posx15, y=var.posy15, scale=0.3)
		my_canvas.image(body1, center=True, x=var.posx11, y=var.posy11, scale=0.3)
		my_canvas.image(body2, center=True, x=var.posx7, y=var.posy7, scale=0.3)
		my_canvas.image(body3, center=True, x=var.posx3, y=var.posy3, scale=0.3)
		my_canvas.image(head, center=True, x=var.posx, y=var.posy, scale=0.3)
	
		my_canvas.text('<u>Instructie</u>',x=0,y=150)
		my_canvas.text('<i>Deze rups gaat straks rondjes lopen.</i>',x=0,y=200)
		my_canvas.text('<i>Jij moet de rups volgen met de muis.</i>',x=0,y=250)
		my_canvas.text('<i>Houd steeds het pijltje op het midden van de rode neus van de rups.</i>',x=0,y=300)
	
		my_canvas.image(symbol_fixed, center=True, x=-600, y=-300, scale=0.3)
		my_canvas.text(var.phase,x=-550,y=-300)
	
		my_canvas.prepare()
		my_canvas.show()
		
	my_canvas.clear()
	__end__
	set _prepare ""

define inline_script inst_rand_adult
	set description "Executes Python code"
	___run__
	#reset settings
	var.t=0
	var.posx=float(var.path_r * math.cos(var.t))
	var.posy=float(var.path_r * math.sin(var.t))
	#reset settings random
	my_canvas.clear()
	
	var.radstep1=float(var.t-(1*var.radstep))
	var.radstep2=float(var.t-(2*var.radstep))
	var.radstep3=float(var.t-(3*var.radstep))
	var.radstep4=float(var.t-(4*var.radstep))
	var.radstep5=float(var.t-(5*var.radstep))
	var.radstep6=float(var.t-(6*var.radstep))
	var.radstep7=float(var.t-(7*var.radstep))
	var.radstep8=float(var.t-(8*var.radstep))
	var.radstep9=float(var.t-(9*var.radstep))
	var.radstep10=float(var.t-(10*var.radstep))
	var.radstep11=float(var.t-(11*var.radstep))
	var.radstep12=float(var.t-(12*var.radstep))
	var.radstep13=float(var.t-(13*var.radstep))
	var.radstep14=float(var.t-(14*var.radstep))
	var.radstep15=float(var.t-(15*var.radstep))
	var.radstep16=float(var.t-(16*var.radstep))
	var.radstep17=float(var.t-(17*var.radstep))
	var.radstep18=float(var.t-(18*var.radstep))
	var.radstep19=float(var.t-(19*var.radstep))
	
	
	var.posx1=float(var.path_r * math.cos(var.radstep1))
	var.posy1=float(var.path_r * math.sin(var.radstep1))
	
	var.posx2=float(var.path_r * math.cos(var.radstep2))
	var.posy2=float(var.path_r * math.sin(var.radstep2))
	
	var.posx3=float(var.path_r * math.cos(var.radstep3))
	var.posy3=float(var.path_r * math.sin(var.radstep3))
	
	var.posx4=float(var.path_r * math.cos(var.radstep4))
	var.posy4=float(var.path_r * math.sin(var.radstep4))
	
	var.posx5=float(var.path_r * math.cos(var.radstep5))
	var.posy5=float(var.path_r * math.sin(var.radstep5))
	
	var.posx6=float(var.path_r * math.cos(var.radstep6))
	var.posy6=float(var.path_r * math.sin(var.radstep6))       
	
	var.posx7=float(var.path_r * math.cos(var.radstep7))
	var.posy7=float(var.path_r * math.sin(var.radstep7))
	
	var.posx8=float(var.path_r * math.cos(var.radstep8))
	var.posy8=float(var.path_r * math.sin(var.radstep8))
	
	var.posx9=float(var.path_r * math.cos(var.radstep9))
	var.posy9=float(var.path_r * math.sin(var.radstep9))
	
	var.posx10=float(var.path_r * math.cos(var.radstep10))
	var.posy10=float(var.path_r * math.sin(var.radstep10))
	
	var.posx11=float(var.path_r * math.cos(var.radstep11))
	var.posy11=float(var.path_r * math.sin(var.radstep11))
	
	var.posx12=float(var.path_r * math.cos(var.radstep12))
	var.posy12=float(var.path_r * math.sin(var.radstep12))
	
	var.posx13=float(var.path_r * math.cos(var.radstep13))
	var.posy13=float(var.path_r * math.sin(var.radstep13))
	
	var.posx14=float(var.path_r * math.cos(var.radstep14))
	var.posy14=float(var.path_r * math.sin(var.radstep14))
	
	var.posx15=float(var.path_r * math.cos(var.radstep15))
	var.posy15=float(var.path_r * math.sin(var.radstep15))
	
	var.posx16=float(var.path_r * math.cos(var.radstep16))
	var.posy16=float(var.path_r * math.sin(var.radstep16))
	
	var.posx17=float(var.path_r * math.cos(var.radstep17))
	var.posy17=float(var.path_r * math.sin(var.radstep17))
	
	var.posx18=float(var.path_r * math.cos(var.radstep18))
	var.posy18=float(var.path_r * math.sin(var.radstep18))
	
	var.posx19=float(var.path_r * math.cos(var.radstep19))
	var.posy19=float(var.path_r * math.sin(var.radstep19))
	
	
	var.counter=0
	var.count_new_sequence=0
	var.sum_target_dist=0
	var.variance_target_dist=0  
	var.count_log=0
	
	my_canvas.prepare()
	my_canvas.show()
	
	while True:
		# ... until space is pressed
		key, timestamp = my_keyboard.get_key()
		if key == 'space':
			break
		my_canvas.image(tail, center=True, x=var.posx19, y=var.posy19, scale=0.3)
		my_canvas.image(body3, center=True, x=var.posx15, y=var.posy15, scale=0.3)
		my_canvas.image(body2, center=True, x=var.posx11, y=var.posy11, scale=0.3)
		my_canvas.image(body1, center=True, x=var.posx7, y=var.posy7, scale=0.3)
		my_canvas.image(body1, center=True, x=var.posx3, y=var.posy3, scale=0.3)
		my_canvas.image(head, center=True, x=var.posx, y=var.posy, scale=0.3)
		
		my_canvas.text('<i>Nu gaat de schietschijf kriskras alle kanten op.</i>',x=0,y=250)
		my_canvas.text('<i>Houd het pijltje de hele tijd zo goed mogelijk op het midden van de rode stip.</i>',x=0,y=300)
	
		my_canvas.image(symbol_random, center=True, x=-600, y=-300, scale=0.3)
		my_canvas.text(var.phase,x=-550,y=-300)
	
		my_canvas.prepare()
		my_canvas.show()
		       
	my_canvas.clear()
	     
	__end__
	set _prepare ""

define inline_script inst_rand_adult_1
	set description "Executes Python code"
	___run__
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	__end__
	set _prepare ""

define inline_script inst_rand_child
	set description "Executes Python code"
	___run__
	#reset settings
	var.t=0
	var.posx=float(var.path_r * math.cos(var.t))
	var.posy=float(var.path_r * math.sin(var.t))
	#reset settings random
	my_canvas.clear()
	
	var.radstep1=float(var.t-(1*var.radstep))
	var.radstep2=float(var.t-(2*var.radstep))
	var.radstep3=float(var.t-(3*var.radstep))
	var.radstep4=float(var.t-(4*var.radstep))
	var.radstep5=float(var.t-(5*var.radstep))
	var.radstep6=float(var.t-(6*var.radstep))
	var.radstep7=float(var.t-(7*var.radstep))
	var.radstep8=float(var.t-(8*var.radstep))
	var.radstep9=float(var.t-(9*var.radstep))
	var.radstep10=float(var.t-(10*var.radstep))
	var.radstep11=float(var.t-(11*var.radstep))
	var.radstep12=float(var.t-(12*var.radstep))
	var.radstep13=float(var.t-(13*var.radstep))
	var.radstep14=float(var.t-(14*var.radstep))
	var.radstep15=float(var.t-(15*var.radstep))
	var.radstep16=float(var.t-(16*var.radstep))
	var.radstep17=float(var.t-(17*var.radstep))
	var.radstep18=float(var.t-(18*var.radstep))
	var.radstep19=float(var.t-(19*var.radstep))
	
	
	var.posx1=float(var.path_r * math.cos(var.radstep1))
	var.posy1=float(var.path_r * math.sin(var.radstep1))
	
	var.posx2=float(var.path_r * math.cos(var.radstep2))
	var.posy2=float(var.path_r * math.sin(var.radstep2))
	
	var.posx3=float(var.path_r * math.cos(var.radstep3))
	var.posy3=float(var.path_r * math.sin(var.radstep3))
	
	var.posx4=float(var.path_r * math.cos(var.radstep4))
	var.posy4=float(var.path_r * math.sin(var.radstep4))
	
	var.posx5=float(var.path_r * math.cos(var.radstep5))
	var.posy5=float(var.path_r * math.sin(var.radstep5))
	
	var.posx6=float(var.path_r * math.cos(var.radstep6))
	var.posy6=float(var.path_r * math.sin(var.radstep6))       
	
	var.posx7=float(var.path_r * math.cos(var.radstep7))
	var.posy7=float(var.path_r * math.sin(var.radstep7))
	
	var.posx8=float(var.path_r * math.cos(var.radstep8))
	var.posy8=float(var.path_r * math.sin(var.radstep8))
	
	var.posx9=float(var.path_r * math.cos(var.radstep9))
	var.posy9=float(var.path_r * math.sin(var.radstep9))
	
	var.posx10=float(var.path_r * math.cos(var.radstep10))
	var.posy10=float(var.path_r * math.sin(var.radstep10))
	
	var.posx11=float(var.path_r * math.cos(var.radstep11))
	var.posy11=float(var.path_r * math.sin(var.radstep11))
	
	var.posx12=float(var.path_r * math.cos(var.radstep12))
	var.posy12=float(var.path_r * math.sin(var.radstep12))
	
	var.posx13=float(var.path_r * math.cos(var.radstep13))
	var.posy13=float(var.path_r * math.sin(var.radstep13))
	
	var.posx14=float(var.path_r * math.cos(var.radstep14))
	var.posy14=float(var.path_r * math.sin(var.radstep14))
	
	var.posx15=float(var.path_r * math.cos(var.radstep15))
	var.posy15=float(var.path_r * math.sin(var.radstep15))
	
	var.posx16=float(var.path_r * math.cos(var.radstep16))
	var.posy16=float(var.path_r * math.sin(var.radstep16))
	
	var.posx17=float(var.path_r * math.cos(var.radstep17))
	var.posy17=float(var.path_r * math.sin(var.radstep17))
	
	var.posx18=float(var.path_r * math.cos(var.radstep18))
	var.posy18=float(var.path_r * math.sin(var.radstep18))
	
	var.posx19=float(var.path_r * math.cos(var.radstep19))
	var.posy19=float(var.path_r * math.sin(var.radstep19))
	
	
	var.counter=0
	var.count_new_sequence=0
	var.sum_target_dist=0
	var.variance_target_dist=0  
	var.count_log=0
	
	my_canvas.prepare()
	my_canvas.show()
	
	while True:
		# ... until space is pressed
		key, timestamp = my_keyboard.get_key()
		if key == 'space':
			break
		my_canvas.image(tail, center=True, x=var.posx19, y=var.posy19, scale=0.3)
		my_canvas.image(body3, center=True, x=var.posx15, y=var.posy15, scale=0.3)
		my_canvas.image(body2, center=True, x=var.posx11, y=var.posy11, scale=0.3)
		my_canvas.image(body1, center=True, x=var.posx7, y=var.posy7, scale=0.3)
		my_canvas.image(body1, center=True, x=var.posx3, y=var.posy3, scale=0.3)
		my_canvas.image(head, center=True, x=var.posx, y=var.posy, scale=0.3)
		
		my_canvas.text('<i>Nu gaat de rups kriskras alle kanten op</i>',x=0,y=250)
		my_canvas.text('<i>Houd het pijltje de hele tijd zo goed mogelijk op de rode neus van de rups.</i>',x=0,y=300)
	
		my_canvas.image(symbol_random, center=True, x=-600, y=-300, scale=0.3)
		my_canvas.text(var.phase,x=-550,y=-300)
	
		my_canvas.prepare()
		my_canvas.show()
		       
	my_canvas.clear()
	     
	__end__
	set _prepare ""

define inline_script inst_rand_child_1
	set description "Executes Python code"
	___run__
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	__end__
	set _prepare ""

define logger new_logger
	set description "Logs experimental data"
	set auto_log yes

define inline_script oefen_adult
	set description "Executes Python code"
	___run__
	head=pool[u'head_adult.png']
	body=pool[u'body2.png']
	body1=pool[u'body2.png']
	body2=pool[u'body2.png']
	body3=pool[u'body2.png']
	tail=pool[u'tail2.png']
	__end__
	set _prepare ""

define inline_script oefen_child
	set description "Executes Python code"
	___run__
	head=pool[u'head_child.png']
	body=pool[u'body2.png']
	body1=pool[u'body2.png']
	body2=pool[u'body2.png']
	body3=pool[u'body2.png']
	tail=pool[u'tail2.png']
	__end__
	set _prepare ""

define inline_script presettings
	set description "Executes Python code"
	___run__
	from __future__ import division
	
	# settings
	
	# max resolution
	var.max_res=80
	var.iter_max=1000/80 
	
	var.iter=2000
	var.radius_head=45
	var.startposx=0
	var.startposy=0
	var.path_r=300
	var.bodypart_dist=20
	
	
	stop_off=pool[u'stop_off.png']
	stop_red=pool[u'stop_red.png']
	stop_orange=pool[u'stop_orange.png']
	stop_green=pool[u'stop_green.png']
	symbol_fixed=pool[u'symbol_fixed.png']
	symbol_random=pool[u'symbol_random.png']
	
	# import relevant packages
	import time
	import random
	from random import randint   
	
	import math
	from openexp.mouse import mouse
	
	# settings fixed  
	      
	var.distance=float(var.step*var.iter)
	
	var.rad=float(var.distance/(2*math.pi*var.path_r))
	var.totrad=float(var.rad*2*math.pi)
	var.radstep=float(var.totrad/var.iter)
	
	var.t=0
	
	
	
	my_keyboard = keyboard(timeout=0) 
	
	
	# settings random
	
	
	
	var.chmin=80
	var.chmax=120
	var.chdir=randint(var.chmin,var.chmax) 
	
	var.step_tilt=math.sqrt(float((var.step*var.step)/2))
	var.margin=var.radius_head*2
	
	
	#Boundaries
	var.height=self.get('height')
	var.width=self.get('width')
	var.bound_N=float((var.height/-2)+var.margin)
	var.bound_Z=float((var.height/2)-var.margin)
	var.bound_O=float((var.width/2)-var.margin)
	var.bound_W=float((var.width/-2)+var.margin)
	
	#Zones
	var.zone_N=float((var.height/-5)+var.margin)
	var.zone_Z=float((var.height/5)-var.margin)
	var.zone_O=float((var.height/5)-var.margin)
	var.zone_W=float((var.width/-5)+var.margin)                                
	
	dirs = ['N', 'NO', 'O', 'ZO', 'Z', 'ZW', 'W', 'NW']
	end_dirs_N = ['ZO', 'Z', 'ZW']
	end_dirs_O = ['ZW', 'W', 'NW']
	end_dirs_Z = ['N', 'NO', 'NW']
	end_dirs_W = ['NO', 'O', 'ZO']
	
	var.randir = random.choice(dirs)  
	
	from openexp.mouse import mouse
	from openexp.canvas import canvas
	
	my_mouse=mouse(exp)
	my_canvas=canvas(exp, auto_prepare=False)
	
	my_mouse.show_cursor(show=True)
	
	var.curposx = 300
	var.curposy = 0
	                               
	f1=open(exp.experiment_path + "/../../../emma_toolbox_data/Raw/Visuomotor/" + str(exp.get("experiment_file")) + "_subj" + str(exp.get("subject_nr")) + "_fixed_step_" + str(var.step) + ".txt", "w+")
	f1.write("time" + " " + "deviation_pix" + " " + "rups_x" + " " + "rups_y" + " " + "mouse_x" + " " + "mouse_y" + " " + "dir_change" + " " + "direction" + " " + "trial_nr" + "\n")
	
	f2=open(exp.experiment_path + "/../../../emma_toolbox_data/Raw/Visuomotor/" + str(exp.get("experiment_file")) + "_subj" + str(exp.get("subject_nr")) + "_random_step_" + str(var.step) + ".txt", "w+")
	f2.write("time" + " " + "deviation_pix" + " " + "rups_x" + " " + "rups_y" + " " + "mouse_x" + " " + "mouse_y" + " " + "dir_change" + " " + "direction" + " " + "trial_nr" + "\n")
	
	#set settings
	var.posx=float(var.path_r * math.cos(var.t))
	var.posy=float(var.path_r * math.sin(var.t))
	
	
	var.radstep1=float(var.t-(1*var.radstep))
	var.radstep2=float(var.t-(2*var.radstep))
	var.radstep3=float(var.t-(3*var.radstep))
	var.radstep4=float(var.t-(4*var.radstep))
	var.radstep5=float(var.t-(5*var.radstep))
	var.radstep6=float(var.t-(6*var.radstep))
	var.radstep7=float(var.t-(7*var.radstep))
	var.radstep8=float(var.t-(8*var.radstep))
	var.radstep9=float(var.t-(9*var.radstep))
	var.radstep10=float(var.t-(10*var.radstep))
	var.radstep11=float(var.t-(11*var.radstep))
	var.radstep12=float(var.t-(12*var.radstep))
	var.radstep13=float(var.t-(13*var.radstep))
	var.radstep14=float(var.t-(14*var.radstep))
	var.radstep15=float(var.t-(15*var.radstep))
	var.radstep16=float(var.t-(16*var.radstep))
	var.radstep17=float(var.t-(17*var.radstep))
	var.radstep18=float(var.t-(18*var.radstep))
	var.radstep19=float(var.t-(19*var.radstep))
	
	
	var.posx1=float(var.path_r * math.cos(var.radstep1))
	var.posy1=float(var.path_r * math.sin(var.radstep1))
	
	var.posx2=float(var.path_r * math.cos(var.radstep2))
	var.posy2=float(var.path_r * math.sin(var.radstep2))
	
	var.posx3=float(var.path_r * math.cos(var.radstep3))
	var.posy3=float(var.path_r * math.sin(var.radstep3))
	
	var.posx4=float(var.path_r * math.cos(var.radstep4))
	var.posy4=float(var.path_r * math.sin(var.radstep4))
	
	var.posx5=float(var.path_r * math.cos(var.radstep5))
	var.posy5=float(var.path_r * math.sin(var.radstep5))
	
	var.posx6=float(var.path_r * math.cos(var.radstep6))
	var.posy6=float(var.path_r * math.sin(var.radstep6))       
	
	var.posx7=float(var.path_r * math.cos(var.radstep7))
	var.posy7=float(var.path_r * math.sin(var.radstep7))
	
	var.posx8=float(var.path_r * math.cos(var.radstep8))
	var.posy8=float(var.path_r * math.sin(var.radstep8))
	
	var.posx9=float(var.path_r * math.cos(var.radstep9))
	var.posy9=float(var.path_r * math.sin(var.radstep9))
	
	var.posx10=float(var.path_r * math.cos(var.radstep10))
	var.posy10=float(var.path_r * math.sin(var.radstep10))
	
	var.posx11=float(var.path_r * math.cos(var.radstep11))
	var.posy11=float(var.path_r * math.sin(var.radstep11))
	
	var.posx12=float(var.path_r * math.cos(var.radstep12))
	var.posy12=float(var.path_r * math.sin(var.radstep12))
	
	var.posx13=float(var.path_r * math.cos(var.radstep13))
	var.posy13=float(var.path_r * math.sin(var.radstep13))
	
	var.posx14=float(var.path_r * math.cos(var.radstep14))
	var.posy14=float(var.path_r * math.sin(var.radstep14))
	
	var.posx15=float(var.path_r * math.cos(var.radstep15))
	var.posy15=float(var.path_r * math.sin(var.radstep15))
	
	var.posx16=float(var.path_r * math.cos(var.radstep16))
	var.posy16=float(var.path_r * math.sin(var.radstep16))
	
	var.posx17=float(var.path_r * math.cos(var.radstep17))
	var.posy17=float(var.path_r * math.sin(var.radstep17))
	
	var.posx18=float(var.path_r * math.cos(var.radstep18))
	var.posy18=float(var.path_r * math.sin(var.radstep18))
	
	var.posx19=float(var.path_r * math.cos(var.radstep19))
	var.posy19=float(var.path_r * math.sin(var.radstep19))
	__end__
	set _prepare ""

define inline_script rups_fixed
	set description "Executes Python code"
	___run__
	var.dirchange=0
	var.randir='X'
	var.condition='fixed'
	
	#traffic light start
	
	while True:
		# ... until space is pressed
		key, timestamp = my_keyboard.get_key()
		if key == 'space':
			break
			
		var.pre_time=clock.time()
		my_canvas.image(tail, center=True, x=var.posx19, y=var.posy19, scale=0.3)
		my_canvas.image(body3, center=True, x=var.posx15, y=var.posy15, scale=0.3)
		my_canvas.image(body2, center=True, x=var.posx11, y=var.posy11, scale=0.3)
		my_canvas.image(body1, center=True, x=var.posx7, y=var.posy7, scale=0.3)
		my_canvas.image(body1, center=True, x=var.posx3, y=var.posy3, scale=0.3)
		my_canvas.image(head, center=True, x=var.posx, y=var.posy, scale=0.3)
	
		my_canvas.text('<i>Klaar voor de start?</i>',x=0,y=200)
		my_canvas.text('<i>Als het stoplicht groen is dan starten we!</i>',x=0,y=250)
	
		my_canvas.image(stop_off, center=True, x=0, y=-250, scale=0.5 )
	
		
		my_canvas.prepare()
		my_canvas.show()
	 
	my_canvas.clear()
	
	my_canvas.image(stop_off, center=True, x=0, y=-250, scale=0.5 )
	
	my_canvas.image(tail, center=True, x=var.posx19, y=var.posy19, scale=0.3)
	my_canvas.image(body3, center=True, x=var.posx15, y=var.posy15, scale=0.3)
	my_canvas.image(body2, center=True, x=var.posx11, y=var.posy11, scale=0.3)
	my_canvas.image(body1, center=True, x=var.posx7, y=var.posy7, scale=0.3)
	my_canvas.image(body1, center=True, x=var.posx3, y=var.posy3, scale=0.3)
	my_canvas.image(head, center=True, x=var.posx, y=var.posy, scale=0.3)
	
	my_canvas.prepare()
	my_canvas.show()        
	
	my_canvas.image(stop_red, center=True, x=0, y=-250, scale=0.5)
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(500)
	
	my_canvas.image(stop_orange, center=True, x=0, y=-250, scale=0.5)
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(500)
	
	my_canvas.image(stop_green, center=True, x=0, y=-250, scale=0.5)
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(500)
	
	my_canvas.clear()
	
	# iterations for movin
	var.pre_time=clock.time()
	for var.i in range(var.iter):
		
		# start the clock to measure iteration time
		var.iter_t_pre=clock.time()
	
		(var.cursor_x,var.cursor_y),var.cursor_time = my_mouse.get_pos()
		var.target_dist=math.sqrt(math.pow((var.cursor_x - var.posx),2) + math.pow((var.cursor_y - var.posy),2))
		var.sum_target_dist=var.sum_target_dist+var.target_dist
		var.mean_target_dist=float(var.sum_target_dist/(1+var.i))
		var.variance_target_dist=var.variance_target_dist+math.pow(var.mean_target_dist - var.target_dist,2)
	
		f1.write(str(clock.time()) + " " + str(var.target_dist) + " " + str(var.posx) + " " + str(var.posy) + " " + str(var.cursor_x) + " " + str(var.cursor_y) + " " + str(var.dirchange) + " " + var.randir + " " + str(var.i) +    "\n")
	
		my_canvas.image(tail, center=True, x=var.posx19, y=var.posy19, scale=0.3)
		my_canvas.image(body, center=True, x=var.posx15, y=var.posy15, scale=0.3)
		my_canvas.image(body1, center=True, x=var.posx11, y=var.posy11, scale=0.3)
		my_canvas.image(body2, center=True, x=var.posx7, y=var.posy7, scale=0.3)
		my_canvas.image(body3, center=True, x=var.posx3, y=var.posy3, scale=0.3)
		my_canvas.image(head, center=True, x=var.posx, y=var.posy, scale=0.3)
	
		my_canvas.prepare()
		my_canvas.show()
	
		var.posx19=var.posx18
		var.posy19=var.posy18
		
		var.posx18=var.posx17
		var.posy18=var.posy17
		
		var.posx17=var.posx16
		var.posy17=var.posy16
		
		var.posx16=var.posx15
		var.posy16=var.posy15
		
		var.posx15=var.posx14
		var.posy15=var.posy14
		
		var.posx14=var.posx13
		var.posy14=var.posy13
		
		var.posx13=var.posx12
		var.posy13=var.posy12
		
		var.posx12=var.posx11
		var.posy12=var.posy11	
		
		var.posx11=var.posx10
		var.posy11=var.posy10
		
		var.posx10=var.posx9
		var.posy10=var.posy9
		
		var.posx9=var.posx8
		var.posy9=var.posy8
		
		var.posx8=var.posx7
		var.posy8=var.posy7
		
		var.posx7=var.posx6
		var.posy7=var.posy6
		
		var.posx6=var.posx5
		var.posy6=var.posy5
		
		var.posx5=var.posx4
		var.posy5=var.posy4
		
		var.posx4=var.posx3
		var.posy4=var.posy3
		
		var.posx3=var.posx2
		var.posy3=var.posy2
		
		var.posx2=var.posx1
		var.posy2=var.posy1
		
		var.posx1=var.posx
		var.posy1=var.posy
	
		var.t=var.t + var.radstep
	
		var.posx=var.path_r * math.cos(var.t)
		var.posy=var.path_r * math.sin(var.t)
		
		my_canvas.clear()
		
		# measure the time lapsed per iteration
		var.iter_t_post=clock.time()
		var.iter_t_tot = var.iter_t_post - var.iter_t_pre
		
		# delay the iteration to max the speed of the stimulus 
		var.iter_delay = var.iter_max -var.iter_t_tot
		if var.iter_delay > 0:
			clock.sleep(var.iter_delay)
			
	var.post_time=clock.time()
	
	f1.close()
	var.t=0
	
	var.iterdelay_fixed= (var.post_time - var.pre_time)/var.iter
	var.resolution_fixed= 1000/var.iterdelay_fixed
	__end__
	set _prepare ""

define inline_script rups_fixed_1
	set description "Executes Python code"
	___run__
	var.dirchange=0
	var.randir='X'
	var.condition='fixed'
	
	#traffic light start
	
	while True:
		# ... until space is pressed
		key, timestamp = my_keyboard.get_key()
		if key == 'space':
			break
		my_canvas.image(tail, center=True, x=var.posx19, y=var.posy19, scale=0.3)
		my_canvas.image(body3, center=True, x=var.posx15, y=var.posy15, scale=0.3)
		my_canvas.image(body2, center=True, x=var.posx11, y=var.posy11, scale=0.3)
		my_canvas.image(body1, center=True, x=var.posx7, y=var.posy7, scale=0.3)
		my_canvas.image(body1, center=True, x=var.posx3, y=var.posy3, scale=0.3)
		my_canvas.image(head, center=True, x=var.posx, y=var.posy, scale=0.3)
	
		my_canvas.text('<i>Klaar voor de start?</i>',x=0,y=200)
		my_canvas.text('<i>Als het stoplicht groen is dan starten we!</i>',x=0,y=250)
	
		my_canvas.image(stop_off, center=True, x=0, y=-250, scale=0.5 )
	
		
		my_canvas.prepare()
		my_canvas.show()
	 
	my_canvas.clear()
	
	my_canvas.image(stop_off, center=True, x=0, y=-250, scale=0.5 )
	
	my_canvas.image(tail, center=True, x=var.posx19, y=var.posy19, scale=0.3)
	my_canvas.image(body3, center=True, x=var.posx15, y=var.posy15, scale=0.3)
	my_canvas.image(body2, center=True, x=var.posx11, y=var.posy11, scale=0.3)
	my_canvas.image(body1, center=True, x=var.posx7, y=var.posy7, scale=0.3)
	my_canvas.image(body1, center=True, x=var.posx3, y=var.posy3, scale=0.3)
	my_canvas.image(head, center=True, x=var.posx, y=var.posy, scale=0.3)
	
	my_canvas.prepare()
	my_canvas.show()        
	
	my_canvas.image(stop_red, center=True, x=0, y=-250, scale=0.5)
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(500)
	
	my_canvas.image(stop_orange, center=True, x=0, y=-250, scale=0.5)
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(500)
	
	my_canvas.image(stop_green, center=True, x=0, y=-250, scale=0.5)
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(500)
	
	# iterations for moving rups
	var.pre_time=clock.time()
	for var.i in range(var.iter):
	
		my_canvas.clear()
	
		(var.cursor_x,var.cursor_y),var.cursor_time = my_mouse.get_pos()
		var.target_dist=math.sqrt(math.pow((var.cursor_x - var.posx),2) + math.pow((var.cursor_y - var.posy),2))
		var.sum_target_dist=var.sum_target_dist+var.target_dist
		var.mean_target_dist=float(var.sum_target_dist)/(1+var.i)
		var.variance_target_dist=var.variance_target_dist+math.pow(var.mean_target_dist - var.target_dist,2)
	
		f1.write(str(clock.time()) + " " + str(var.target_dist) + " " + str(var.posx) + " " + str(var.posy) + " " + str(var.cursor_x) + " " + str(var.cursor_y) + " " + str(var.dirchange) + " " + var.randir + " " + str(var.i) +    "\n")
	
		my_canvas.image(tail, center=True, x=var.posx19, y=var.posy19, scale=0.3)
		my_canvas.image(body, center=True, x=var.posx15, y=var.posy15, scale=0.3)
		my_canvas.image(body1, center=True, x=var.posx11, y=var.posy11, scale=0.3)
		my_canvas.image(body2, center=True, x=var.posx7, y=var.posy7, scale=0.3)
		my_canvas.image(body3, center=True, x=var.posx3, y=var.posy3, scale=0.3)
		my_canvas.image(head, center=True, x=var.posx, y=var.posy, scale=0.3)
	
		my_canvas.prepare()
		my_canvas.show()
	
		var.posx19=var.posx18
		var.posy19=var.posy18
		
		var.posx18=var.posx17
		var.posy18=var.posy17
		
		var.posx17=var.posx16
		var.posy17=var.posy16
		
		var.posx16=var.posx15
		var.posy16=var.posy15
		
		var.posx15=var.posx14
		var.posy15=var.posy14
		
		var.posx14=var.posx13
		var.posy14=var.posy13
		
		var.posx13=var.posx12
		var.posy13=var.posy12
		
		var.posx12=var.posx11
		var.posy12=var.posy11	
		
		var.posx11=var.posx10
		var.posy11=var.posy10
		
		var.posx10=var.posx9
		var.posy10=var.posy9
		
		var.posx9=var.posx8
		var.posy9=var.posy8
		
		var.posx8=var.posx7
		var.posy8=var.posy7
		
		var.posx7=var.posx6
		var.posy7=var.posy6
		
		var.posx6=var.posx5
		var.posy6=var.posy5
		
		var.posx5=var.posx4
		var.posy5=var.posy4
		
		var.posx4=var.posx3
		var.posy4=var.posy3
		
		var.posx3=var.posx2
		var.posy3=var.posy2
		
		var.posx2=var.posx1
		var.posy2=var.posy1
		
		var.posx1=var.posx
		var.posy1=var.posy
	
		var.t=var.t + var.radstep
	
		var.posx=var.path_r * math.cos(var.t)
		var.posy=var.path_r * math.sin(var.t)
	
		# hier ieder lijfonderdeel opnieuw berekenen
	
	var.post_time=clock.time()
	
	f1.close()
	var.t=0
	
	var.iterdelay_fixed= (var.post_time - var.pre_time)/var.iter
	var.resolution_fixed= 1000/var.iterdelay_fixed
	__end__
	set _prepare ""

define inline_script rups_random
	set description "Executes Python code"
	___run__
	var.dirchange=0
	var.randir='X'
	var.condition='random'
	var.randir = random.choice(dirs)
	
	# traffic light start
	
	while True:
		# ... until space is pressed
		key, timestamp = my_keyboard.get_key()
		if key == 'space':
			break
		my_canvas.image(tail, center=True, x=var.posx19, y=var.posy19, scale=0.3)
		my_canvas.image(body3, center=True, x=var.posx15, y=var.posy15, scale=0.3)
		my_canvas.image(body2, center=True, x=var.posx11, y=var.posy11, scale=0.3)
		my_canvas.image(body1, center=True, x=var.posx7, y=var.posy7, scale=0.3)
		my_canvas.image(body1, center=True, x=var.posx3, y=var.posy3, scale=0.3)
		my_canvas.image(head, center=True, x=var.posx, y=var.posy, scale=0.3)
	
		my_canvas.text('Klaar voor de start?',x=0,y=200)
		my_canvas.text('Als het stoplicht groen is dan starten we!',x=0,y=250)
	
		my_canvas.image(stop_off, center=True, x=0, y=-250, scale=0.5 )
	
		my_canvas.prepare()
		my_canvas.show()
	 
	my_canvas.clear()
	
	my_canvas.image(stop_off, center=True, x=0, y=-250, scale=0.5 )
	
	my_canvas.image(tail, center=True, x=var.posx19, y=var.posy19, scale=0.3)
	my_canvas.image(body3, center=True, x=var.posx15, y=var.posy15, scale=0.3)
	my_canvas.image(body2, center=True, x=var.posx11, y=var.posy11, scale=0.3)
	my_canvas.image(body1, center=True, x=var.posx7, y=var.posy7, scale=0.3)
	my_canvas.image(body1, center=True, x=var.posx3, y=var.posy3, scale=0.3)
	my_canvas.image(head, center=True, x=var.posx, y=var.posy, scale=0.3)
	
	my_canvas.prepare()
	my_canvas.show()                                     
	
	my_canvas.image(stop_red, center=True, x=0, y=-250, scale=0.5)
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(500)
	
	my_canvas.image(stop_orange, center=True, x=0, y=-250, scale=0.5)
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(500)
	
	my_canvas.image(stop_green   , center=True, x=0, y=-250, scale=0.5)
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(500)
	
	# iterations for moving rups       
	var.pre_time=clock.time()
	for var.i in range(var.iter):
	   
	   	# start the clock to measure iteration time
		var.iter_t_pre=clock.time()
	
		(var.cursor_x,var.cursor_y),var.cursor_time = my_mouse.get_pos()
		var.target_dist=math.sqrt(math.pow((var.cursor_x - var.posx),2) + math.pow((var.cursor_y - var.posy),2))
		var.sum_target_dist=var.sum_target_dist+var.target_dist
		var.mean_target_dist=float(var.sum_target_dist/(1   +var.i))
		var.variance_target_dist=var.variance_target_dist+math.pow(var.mean_target_dist - var.target_dist,2)
		
		f2.write(str(clock.time()) + " " + str(var.target_dist) + " " + str(var.posx) + " " + str(var.posy) + " " + str(var.cursor_x) + " " + str(var.cursor_y) + " " + str(var.dirchange) + " " + var.randir + " " + str(var.i) + "\n")   
	   
		my_canvas.image(tail, center=True, x=var.posx19, y=var.posy19, scale=0.3)
		my_canvas.image(body3, center=True, x=var.posx15, y=var.posy15, scale=0.3)
		my_canvas.image(body2, center=True, x=var.posx11, y=var.posy11, scale=0.3)
		my_canvas.image(body1, center=True, x=var.posx7, y=var.posy7, scale=0.3)
		my_canvas.image(body1, center=True, x=var.posx3, y=var.posy3, scale=0.3)
		my_canvas.image(head, center=True, x=var.posx, y=var.posy, scale=0.3)
		
		my_canvas.prepare()
		my_canvas.show()   
	
		var.posx19=var.posx18
		var.posy19=var.posy18
		
		var.posx18=var.posx17
		var.posy18=var.posy17
		
		var.posx17=var.posx16
		var.posy17=var.posy16
		
		var.posx16=var.posx15
		var.posy16=var.posy15
		
		var.posx15=var.posx14
		var.posy15=var.posy14
		
		var.posx14=var.posx13
		var.posy14=var.posy13
		
		var.posx13=var.posx12
		var.posy13=var.posy12
		
		var.posx12=var.posx11
		var.posy12=var.posy11	
		
		var.posx11=var.posx10
		var.posy11=var.posy10
		
		var.posx10=var.posx9
		var.posy10=var.posy9
		
		var.posx9=var.posx8
		var.posy9=var.posy8
		
		var.posx8=var.posx7
		var.posy8=var.posy7
		
		var.posx7=var.posx6
		var.posy7=var.posy6
		
		var.posx6=var.posx5
		var.posy6=var.posy5
		
		var.posx5=var.posx4
		var.posy5=var.posy4
		
		var.posx4=var.posx3
		var.posy4=var.posy3
		
		var.posx3=var.posx2
		var.posy3=var.posy2
		
		var.posx2=var.posx1
		var.posy2=var.posy1
		
		var.posx1=var.posx
		var.posy1=var.posy
	
		var.counter = var.counter+1
	
		if var.counter != var.chdir:
			var.dirchange=0	   
	
		if var.posy <= var.bound_N:
			var.randir = random.choice(end_dirs_N)
			if var.counter>=var.chmin:
				var.counter=var.counter-50
			var.dirchange=1
			if var.posx <= var.zone_W:
				var.randir = 'ZO'
			elif var.posx >= var.zone_O:
				var.randir = 'ZW'
		elif var.posy >= var.bound_Z:
			var.randir = random.choice(end_dirs_Z)
			if var.counter>=var.chmin:
				var.counter=var.counter-50
			var.dirchange=1
			if var.posx <= var.zone_W:
				var.randir = 'NO'
			elif var.posx >= var.zone_O:
				var.randir = 'NW'
		elif var.posx >= var.bound_O:
			var.randir = random.choice(end_dirs_O)
			if var.counter>=var.chmin:
				var.counter=var.counter-50
			var.dirchange=1
			if var.posy <= var.zone_N:
				var.randir = 'ZW'
			elif var.posy >= var.bound_Z:
				var.randir = 'NW'
		elif var.posx <= var.bound_W:
			var.randir = random.choice(end_dirs_W)
			if var.counter>=var.chmin:
				var.counter=var.counter-50
			var.dirchange=1
			if var.posy <= var.zone_N:
				var.randir = 'ZO'
			elif var.posy >= var.bound_Z:
				var.randir = 'NO'      
	
		if var.counter == var.chdir:
			var.counter=0
			var.randir = random.choice(dirs)
			var.chdir=randint(var.chmin,var.chmax) 
			var.dirchange=2
	
		if var.randir == 'N':
			var.posy=var.posy-var.step_random
		elif var.randir == 'NO':
			var.posx=var.posx+var.step_tilt
			var.posy=var.posy-var.step_tilt
		elif var.randir == 'O':
			var.posy=var.posy+var.step_random
		elif var.randir == 'ZO':
			var.posx=var.posx+var.step_tilt
			var.posy=var.posy+var.step_tilt
		elif var.randir == 'Z':
			var.posy=var.posy+var.step_random
		elif var.randir == 'ZW':
			var.posx=var.posx-var.step_tilt
			var.posy=var.posy+var.step_tilt
		elif var.randir == 'W':
			var.posx=var.posx-var.step_random
		elif var.randir == 'NW':
			var.posx=var.posx-var.step_tilt
			var.posy=var.posy-var.step_tilt
		
		my_canvas.clear()
		
		# measure the time lapsed per iteration
		var.iter_t_post=clock.time()
		var.iter_t_tot = var.iter_t_post - var.iter_t_pre
		
		# delay the iteration to max the speed of the stimulus 
		var.iter_delay = var.iter_max -var.iter_t_tot
		if var.iter_delay > 0:
			clock.sleep(var.iter_delay)
			
	var.post_time=clock.time()
	
		
	f1.close()  
	var.t=0        
	
	var.iterdelay_random= (var.post_time - var.pre_time)/var.iter
	var.resolution_random= 1000/var.iterdelay_random    
	__end__
	set _prepare ""

define inline_script rups_random_1
	set description "Executes Python code"
	___run__
	var.dirchange=0
	var.randir='X'
	var.condition='random'
	var.randir = random.choice(dirs)
	
	# traffic light start
	
	while True:
		# ... until space is pressed
		key, timestamp = my_keyboard.get_key()
		if key == 'space':
			break
		my_canvas.image(tail, center=True, x=var.posx19, y=var.posy19, scale=0.3)
		my_canvas.image(body3, center=True, x=var.posx15, y=var.posy15, scale=0.3)
		my_canvas.image(body2, center=True, x=var.posx11, y=var.posy11, scale=0.3)
		my_canvas.image(body1, center=True, x=var.posx7, y=var.posy7, scale=0.3)
		my_canvas.image(body1, center=True, x=var.posx3, y=var.posy3, scale=0.3)
		my_canvas.image(head, center=True, x=var.posx, y=var.posy, scale=0.3)
	
		my_canvas.text('Klaar voor de start?',x=0,y=200)
		my_canvas.text('Als het stoplicht groen is dan starten we!',x=0,y=250)
	
		my_canvas.image(stop_off, center=True, x=0, y=-250, scale=0.5 )
	
		my_canvas.prepare()
		my_canvas.show()
	 
	my_canvas.clear()
	
	my_canvas.image(stop_off, center=True, x=0, y=-250, scale=0.5 )
	
	my_canvas.image(tail, center=True, x=var.posx19, y=var.posy19, scale=0.3)
	my_canvas.image(body3, center=True, x=var.posx15, y=var.posy15, scale=0.3)
	my_canvas.image(body2, center=True, x=var.posx11, y=var.posy11, scale=0.3)
	my_canvas.image(body1, center=True, x=var.posx7, y=var.posy7, scale=0.3)
	my_canvas.image(body1, center=True, x=var.posx3, y=var.posy3, scale=0.3)
	my_canvas.image(head, center=True, x=var.posx, y=var.posy, scale=0.3)
	
	my_canvas.prepare()
	my_canvas.show()                                     
	
	my_canvas.image(stop_red, center=True, x=0, y=-250, scale=0.5)
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(500)
	
	my_canvas.image(stop_orange, center=True, x=0, y=-250, scale=0.5)
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(500)
	
	my_canvas.image(stop_green   , center=True, x=0, y=-250, scale=0.5)
	my_canvas.prepare()
	my_canvas.show()
	clock.sleep(500)
	
	
	# iterations for moving rups       
	var.pre_time=clock.time()
	
	for var.i in range(var.iter):
	   
		my_canvas.clear()   
	
		(var.cursor_x,var.cursor_y),var.cursor_time = my_mouse.get_pos()
		var.target_dist=math.sqrt(math.pow((var.cursor_x - var.posx),2) + math.pow((var.cursor_y - var.posy),2))
		var.sum_target_dist=var.sum_target_dist+var.target_dist
		var.mean_target_dist=float(var.sum_target_dist)/(1   +var.i)
		var.variance_target_dist=var.variance_target_dist+math.pow(var.mean_target_dist - var.target_dist,2)
		
		f2.write(str(clock.time()) + " " + str(var.target_dist) + " " + str(var.posx) + " " + str(var.posy) + " " + str(var.cursor_x) + " " + str(var.cursor_y) + " " + str(var.dirchange) + " " + var.randir + " " + str(var.i) + "\n")   
	   
		my_canvas.image(tail, center=True, x=var.posx19, y=var.posy19, scale=0.3)
		my_canvas.image(body3, center=True, x=var.posx15, y=var.posy15, scale=0.3)
		my_canvas.image(body2, center=True, x=var.posx11, y=var.posy11, scale=0.3)
		my_canvas.image(body1, center=True, x=var.posx7, y=var.posy7, scale=0.3)
		my_canvas.image(body1, center=True, x=var.posx3, y=var.posy3, scale=0.3)
		my_canvas.image(head, center=True, x=var.posx, y=var.posy, scale=0.3)
		
		my_canvas.prepare()
		my_canvas.show()   
	
		var.posx19=var.posx18
		var.posy19=var.posy18
		
		var.posx18=var.posx17
		var.posy18=var.posy17
		
		var.posx17=var.posx16
		var.posy17=var.posy16
		
		var.posx16=var.posx15
		var.posy16=var.posy15
		
		var.posx15=var.posx14
		var.posy15=var.posy14
		
		var.posx14=var.posx13
		var.posy14=var.posy13
		
		var.posx13=var.posx12
		var.posy13=var.posy12
		
		var.posx12=var.posx11
		var.posy12=var.posy11	
		
		var.posx11=var.posx10
		var.posy11=var.posy10
		
		var.posx10=var.posx9
		var.posy10=var.posy9
		
		var.posx9=var.posx8
		var.posy9=var.posy8
		
		var.posx8=var.posx7
		var.posy8=var.posy7
		
		var.posx7=var.posx6
		var.posy7=var.posy6
		
		var.posx6=var.posx5
		var.posy6=var.posy5
		
		var.posx5=var.posx4
		var.posy5=var.posy4
		
		var.posx4=var.posx3
		var.posy4=var.posy3
		
		var.posx3=var.posx2
		var.posy3=var.posy2
		
		var.posx2=var.posx1
		var.posy2=var.posy1
		
		var.posx1=var.posx
		var.posy1=var.posy
	
		var.counter = var.counter+1
	
		if var.counter != var.chdir:
			var.dirchange=0	   
	
		if var.posy <= var.bound_N:
			var.randir = random.choice(end_dirs_N)
			if var.counter>=var.chmin:
				var.counter=var.counter-50
			var.dirchange=1
			if var.posx <= var.zone_W:
				var.randir = 'ZO'
			elif var.posx >= var.zone_O:
				var.randir = 'ZW'
		elif var.posy >= var.bound_Z:
			var.randir = random.choice(end_dirs_Z)
			if var.counter>=var.chmin:
				var.counter=var.counter-50
			var.dirchange=1
			if var.posx <= var.zone_W:
				var.randir = 'NO'
			elif var.posx >= var.zone_O:
				var.randir = 'NW'
		elif var.posx >= var.bound_O:
			var.randir = random.choice(end_dirs_O)
			if var.counter>=var.chmin:
				var.counter=var.counter-50
			var.dirchange=1
			if var.posy <= var.zone_N:
				var.randir = 'ZW'
			elif var.posy >= var.bound_Z:
				var.randir = 'NW'
		elif var.posx <= var.bound_W:
			var.randir = random.choice(end_dirs_W)
			if var.counter>=var.chmin:
				var.counter=var.counter-50
			var.dirchange=1
			if var.posy <= var.zone_N:
				var.randir = 'ZO'
			elif var.posy >= var.bound_Z:
				var.randir = 'NO'      
	
		if var.counter == var.chdir:
			var.counter=0
			var.randir = random.choice(dirs)
			var.chdir=randint(var.chmin,var.chmax) 
			var.dirchange=2
	
		if var.randir == 'N':
			var.posy=var.posy-var.step
		elif var.randir == 'NO':
			var.posx=var.posx+var.step_tilt
			var.posy=var.posy-var.step_tilt
		elif var.randir == 'O':
			var.posy=var.posy+var.step
		elif var.randir == 'ZO':
			var.posx=var.posx+var.step_tilt
			var.posy=var.posy+var.step_tilt
		elif var.randir == 'Z':
			var.posy=var.posy+var.step
		elif var.randir == 'ZW':
			var.posx=var.posx-var.step_tilt
			var.posy=var.posy+var.step_tilt
		elif var.randir == 'W':
			var.posx=var.posx-var.step
		elif var.randir == 'NW':
			var.posx=var.posx-var.step_tilt
			var.posy=var.posy-var.step_tilt
	
	var.post_time=clock.time()
	
		
	f1.close()  
	var.t=0        
	
	var.iterdelay_random= (var.post_time - var.pre_time)/var.iter
	var.resolution_random= 1000/var.iterdelay_random
	__end__
	set _prepare ""

define inline_script settings
	set description "Executes Python code"
	___run__
	from __future__ import division
	
	var.iter=2000
	var.radius_head=45
	var.startposx=0
	var.startposy=0
	var.path_r=300
	var.bodypart_dist=20
	
	
	stop_off=pool[u'stop_off.png']
	stop_red=pool[u'stop_red.png']
	stop_orange=pool[u'stop_orange.png']
	stop_green=pool[u'stop_green.png']
	symbol_fixed=pool[u'symbol_fixed.png']
	symbol_random=pool[u'symbol_random.png']
	
	# import relevant packages
	import time
	import random
	from random import randint   
	
	import math
	from openexp.mouse import mouse
	
	# settings fixed  
	      
	var.distance=float(var.step_fixed*var.iter)
	
	var.rad=float(var.distance/(2*math.pi*var.path_r))
	var.totrad=float(var.rad*2*math.pi)
	var.radstep=float(var.totrad/var.iter)
	
	var.t=0
	
	
	
	my_keyboard = keyboard(timeout=0) 
	
	
	# settings random
	
	
	
	var.chmin=80
	var.chmax=120
	var.chdir=randint(var.chmin,var.chmax) 
	
	var.step_tilt=math.sqrt(float((var.step_random*var.step_random)/2))
	var.margin=var.radius_head*2
	
	
	#Boundaries
	var.height=self.get('height')
	var.width=self.get('width')
	var.bound_N=float((var.height/-2)+var.margin)
	var.bound_Z=float((var.height/2)-var.margin)
	var.bound_O=float((var.width/2)-var.margin)
	var.bound_W=float((var.width/-2)+var.margin)
	
	#Zones
	var.zone_N=float((var.height/-5)+var.margin)
	var.zone_Z=float((var.height/5)-var.margin)
	var.zone_O=float((var.height/5)-var.margin)
	var.zone_W=float((var.width/-5)+var.margin)                                
	
	dirs = ['N', 'NO', 'O', 'ZO', 'Z', 'ZW', 'W', 'NW']
	end_dirs_N = ['ZO', 'Z', 'ZW']
	end_dirs_O = ['ZW', 'W', 'NW']
	end_dirs_Z = ['N', 'NO', 'NW']
	end_dirs_W = ['NO', 'O', 'ZO']
	
	var.randir = random.choice(dirs)  
	
	from openexp.mouse import mouse
	from openexp.canvas import canvas
	
	my_mouse=mouse(exp)
	my_canvas=canvas(exp, auto_prepare=False)
	
	my_mouse.show_cursor(show=True)
	
	var.curposx = 300
	var.curposy = 0
	                               
	f1=open(exp.experiment_path + "/../../../emma_toolbox_data/Raw/Visuomotor/" + str(exp.get("experiment_file")) + "_subj" + str(exp.get("subject_nr")) + "_fixed_step_" + str(var.step) + ".txt", "w+")
	f1.write("time" + " " + "deviation_pix" + " " + "rups_x" + " " + "rups_y" + " " + "mouse_x" + " " + "mouse_y" + " " + "dir_change" + " " + "direction" + " " + "trial_nr" + "\n")
	
	f2=open(exp.experiment_path + "/../../../emma_toolbox_data/Raw/Visuomotor/" + str(exp.get("experiment_file")) + "_subj" + str(exp.get("subject_nr")) + "_random_step_" + str(var.step) + ".txt", "w+")
	f2.write("time" + " " + "deviation_pix" + " " + "rups_x" + " " + "rups_y" + " " + "mouse_x" + " " + "mouse_y" + " " + "dir_change" + " " + "direction" + " " + "trial_nr" + "\n")
	
	#set settings
	var.posx=float(var.path_r) * math.cos(var.t)
	var.posy=float(var.path_r) * math.sin(var.t)
	
	
	var.radstep1=float(var.t)-(1*var.radstep)
	var.radstep2=float(var.t)-(2*var.radstep)
	var.radstep3=float(var.t)-(3*var.radstep)
	var.radstep4=float(var.t)-(4*var.radstep)
	var.radstep5=float(var.t)-(5*var.radstep)
	var.radstep6=float(var.t)-(6*var.radstep)
	var.radstep7=float(var.t)-(7*var.radstep)
	var.radstep8=float(var.t)-(8*var.radstep)
	var.radstep9=float(var.t)-(9*var.radstep)
	var.radstep10=float(var.t)-(10*var.radstep)
	var.radstep11=float(var.t)-(11*var.radstep)
	var.radstep12=float(var.t)-(12*var.radstep)
	var.radstep13=float(var.t)-(13*var.radstep)
	var.radstep14=float(var.t)-(14*var.radstep)
	var.radstep15=float(var.t)-(15*var.radstep)
	var.radstep16=float(var.t)-(16*var.radstep)
	var.radstep17=float(var.t)-(17*var.radstep)
	var.radstep18=float(var.t)-(18*var.radstep)
	var.radstep19=float(var.t)-(19*var.radstep)
	
	
	var.posx1=float(var.path_r) * math.cos(var.radstep1)
	var.posy1=float(var.path_r) * math.sin(var.radstep1)
	
	var.posx2=float(var.path_r) * math.cos(var.radstep2)
	var.posy2=float(var.path_r) * math.sin(var.radstep2)
	
	var.posx3=float(var.path_r) * math.cos(var.radstep3)
	var.posy3=float(var.path_r) * math.sin(var.radstep3)
	
	var.posx4=float(var.path_r) * math.cos(var.radstep4)
	var.posy4=float(var.path_r) * math.sin(var.radstep4)
	
	var.posx5=float(var.path_r) * math.cos(var.radstep5)
	var.posy5=float(var.path_r) * math.sin(var.radstep5)
	
	var.posx6=float(var.path_r) * math.cos(var.radstep6)
	var.posy6=float(var.path_r) * math.sin(var.radstep6)    
	
	var.posx7=float(var.path_r) * math.cos(var.radstep7)
	var.posy7=float(var.path_r) * math.sin(var.radstep7)
	
	var.posx8=float(var.path_r) * math.cos(var.radstep8)
	var.posy8=float(var.path_r) * math.sin(var.radstep8)
	
	var.posx9=float(var.path_r) * math.cos(var.radstep9)
	var.posy9=float(var.path_r) * math.sin(var.radstep9)
	
	var.posx10=float(var.path_r) * math.cos(var.radstep10)
	var.posy10=float(var.path_r) * math.sin(var.radstep10)
	
	var.posx11=float(var.path_r) * math.cos(var.radstep11)
	var.posy11=float(var.path_r) * math.sin(var.radstep11)
	
	var.posx12=float(var.path_r) * math.cos(var.radstep12)
	var.posy12=float(var.path_r) * math.sin(var.radstep12)
	
	var.posx13=float(var.path_r) * math.cos(var.radstep13)
	var.posy13=float(var.path_r) * math.sin(var.radstep13)
	
	var.posx14=float(var.path_r) * math.cos(var.radstep14)
	var.posy14=float(var.path_r) * math.sin(var.radstep14)
	
	var.posx15=float(var.path_r) * math.cos(var.radstep15)
	var.posy15=float(var.path_r) * math.sin(var.radstep15)
	
	var.posx16=float(var.path_r) * math.cos(var.radstep16)
	var.posy16=float(var.path_r) * math.sin(var.radstep16)
	
	var.posx17=float(var.path_r) * math.cos(var.radstep17)
	var.posy17=float(var.path_r) * math.sin(var.radstep17)
	
	var.posx18=float(var.path_r) * math.cos(var.radstep18)
	var.posy18=float(var.path_r) * math.sin(var.radstep18)
	
	var.posx19=float(var.path_r) * math.cos(var.radstep19)
	var.posy19=float(var.path_r) * math.sin(var.radstep19)
	__end__
	set _prepare ""

define inline_script spd_oefen
	set description "Executes Python code"
	___run__
	var.step=2
	var.step_fixed=2
	var.step_random=2
	var.phase=str('Oefen')
	__end__
	set _prepare ""

define inline_script spd_test_1
	set description "Executes Python code"
	___run__
	
	var.step=2
	var.phase=str('1/4')
	
	var.resolution_corr_fixed=float(100)/var.resolution_fixed
	var.resolution_corr_random=float(100)/var.resolution_random
	
	var.step_fixed=round(float(var.resolution_corr_fixed)*var.step,2)
	var.step_random=round(float(var.resolution_corr_random)*var.step,2)
	__end__
	set _prepare ""

define inline_script spd_test_2
	set description "Executes Python code"
	___run__
	var.step=4
	var.phase=str('2/4')
	
	
	var.step_fixed=round(float(var.resolution_corr_fixed)*var.step,2)
	var.step_random=round(float(var.resolution_corr_random)*var.step,2)
	__end__
	set _prepare ""

define inline_script spd_test_3
	set description "Executes Python code"
	___run__
	var.step=6
	var.phase=str('3/4')
	
	
	var.step_fixed=round(float(var.resolution_corr_fixed)*var.step,2)
	var.step_random=round(float(var.resolution_corr_random)*var.step,2)
	__end__
	set _prepare ""

define inline_script spd_test_3_1
	set description "Executes Python code"
	___run__
	var.step=8
	var.phase=str('4/4')
	
	var.step_fixed=round(float(var.resolution_corr_fixed)*var.step,2)
	var.step_random=round(float(var.resolution_corr_random)*var.step,2)
	__end__
	set _prepare ""

